def model SLCT1_BG_ss as
  def import using "../units_BG.cellml" for
    unit per_sec9_fmol11 using unit per_sec9_fmol11;
    unit fmol using unit fmol;
    unit per_fmol using unit per_fmol;
    unit per_sec9_fmol8 using unit per_sec9_fmol8;
    unit fmol_per_sec using unit fmol_per_sec;
    unit per_sec9_fmol6 using unit per_sec9_fmol6;
    unit per_sec9_fmol9 using unit per_sec9_fmol9;
    unit J_per_K_per_mol using unit J_per_K_per_mol;
    unit per_sec9_fmol12 using unit per_sec9_fmol12;
    unit C_per_mol using unit C_per_mol;
    unit per_sec10_fmol9 using unit per_sec10_fmol9;
    unit per_sec9_fmol5 using unit per_sec9_fmol5;
  enddef;

  def comp SLCT1_BG_ss as
    var P_0: per_sec10_fmol9 {interface: public};
    var P_1: per_sec10_fmol9 {interface: public};
    var P_2: per_sec9_fmol5 {interface: public};
    var P_3: per_sec9_fmol8 {interface: public};
    var P_4: per_sec9_fmol8 {interface: public};
    var P_5: per_sec9_fmol8 {interface: public};
    var P_6: per_sec9_fmol11 {interface: public};
    var P_7: per_sec9_fmol8 {interface: public};
    var P_8: per_sec9_fmol8 {interface: public};
    var P_9: per_sec9_fmol11 {interface: public};
    var P_10: per_sec9_fmol8 {interface: public};
    var P_11: per_sec9_fmol8 {interface: public};
    var P_12: per_sec9_fmol11 {interface: public};
    var P_13: per_sec9_fmol8 {interface: public};
    var P_14: per_sec9_fmol8 {interface: public};
    var P_15: per_sec9_fmol11 {interface: public};
    var P_16: per_sec9_fmol5 {interface: public};
    var P_17: per_sec9_fmol8 {interface: public};
    var P_18: per_sec9_fmol6 {interface: public};
    var P_19: per_sec9_fmol9 {interface: public};
    var P_20: per_sec9_fmol9 {interface: public};
    var P_21: per_sec9_fmol12 {interface: public};
    var E: fmol {interface: public};
    var K_Ao: per_fmol {interface: public};
    var K_Ai: per_fmol {interface: public};
    var K_Ho: per_fmol {interface: public};
    var K_Hi: per_fmol {interface: public};
    var K_Nai: per_fmol {interface: public};
    var K_Nao: per_fmol {interface: public};
    var K_Ki: per_fmol {interface: public};
    var K_Ko: per_fmol {interface: public};
    var K_9: per_fmol {interface: public};
    var q_9_init: fmol {interface: public};
    var K_10: per_fmol {interface: public};
    var q_10_init: fmol {interface: public};
    var K_11: per_fmol {interface: public};
    var q_11_init: fmol {interface: public};
    var K_12: per_fmol {interface: public};
    var q_12_init: fmol {interface: public};
    var K_13: per_fmol {interface: public};
    var q_13_init: fmol {interface: public};
    var K_14: per_fmol {interface: public};
    var q_14_init: fmol {interface: public};
    var K_15: per_fmol {interface: public};
    var q_15_init: fmol {interface: public};
    var K_16: per_fmol {interface: public};
    var q_16_init: fmol {interface: public};
    var K_17: per_fmol {interface: public};
    var q_17_init: fmol {interface: public};
    var K_18: per_fmol {interface: public};
    var q_18_init: fmol {interface: public};
    var kappa_re1: fmol_per_sec {interface: public};
    var kappa_re2: fmol_per_sec {interface: public};
    var kappa_re3: fmol_per_sec {interface: public};
    var kappa_re4: fmol_per_sec {interface: public};
    var kappa_re5: fmol_per_sec {interface: public};
    var kappa_re6: fmol_per_sec {interface: public};
    var kappa_re7: fmol_per_sec {interface: public};
    var kappa_re8: fmol_per_sec {interface: public};
    var kappa_re9: fmol_per_sec {interface: public};
    var kappa_re10: fmol_per_sec {interface: public};
    var F: C_per_mol {interface: public};
    var R: J_per_K_per_mol {interface: public};
    var T: kelvin {interface: public};
    P_0 = K_10*K_11*K_12*K_13*K_14*K_15*K_16*K_17*K_18*K_9*K_Ai*K_Ao*K_Hi*K_Ho*K_Ki*pow(K_Nao, 3{dimensionless})*kappa_re1*kappa_re10*kappa_re2*kappa_re3*kappa_re4*kappa_re5*kappa_re6*kappa_re7*kappa_re8*kappa_re9;
    P_1 = K_10*K_11*K_12*K_13*K_14*K_15*K_16*K_17*K_18*K_9*K_Ai*K_Ao*K_Hi*K_Ho*K_Ko*pow(K_Nai, 3{dimensionless})*kappa_re1*kappa_re10*kappa_re2*kappa_re3*kappa_re4*kappa_re5*kappa_re6*kappa_re7*kappa_re8*kappa_re9;
    P_2 = K_10*K_11*K_12*K_13*K_14*K_15*K_16*K_17*K_18*K_Ai*K_Ao*K_Hi*K_Ho*K_Ki*kappa_re1*kappa_re10*kappa_re2*kappa_re3*kappa_re4*kappa_re5*kappa_re6*kappa_re7*kappa_re8+K_10*K_11*K_12*K_13*K_14*K_15*K_16*K_17*K_18*K_Ai*K_Ao*K_Hi*K_Ho*K_Ki*kappa_re1*kappa_re10*kappa_re2*kappa_re3*kappa_re4*kappa_re5*kappa_re7*kappa_re8*kappa_re9+K_10*K_11*K_12*K_13*K_14*K_15*K_16*K_17*K_18*K_Ai*K_Ao*K_Hi*K_Ho*K_Ki*kappa_re1*kappa_re10*kappa_re2*kappa_re3*kappa_re4*kappa_re6*kappa_re7*kappa_re8*kappa_re9+K_10*K_11*K_12*K_13*K_14*K_15*K_16*K_17*K_18*K_Ai*K_Ao*K_Hi*K_Ho*K_Ki*kappa_re1*kappa_re10*kappa_re2*kappa_re3*kappa_re5*kappa_re6*kappa_re7*kappa_re8*kappa_re9+K_10*K_11*K_12*K_13*K_14*K_15*K_16*K_17*K_18*K_Ai*K_Ao*K_Hi*K_Ho*K_Ki*kappa_re1*kappa_re10*kappa_re2*kappa_re4*kappa_re5*kappa_re6*kappa_re7*kappa_re8*kappa_re9+K_10*K_11*K_12*K_13*K_14*K_15*K_16*K_17*K_18*K_Ai*K_Ao*K_Hi*K_Ho*K_Ki*kappa_re1*kappa_re10*kappa_re3*kappa_re4*kappa_re5*kappa_re6*kappa_re7*kappa_re8*kappa_re9+K_10*K_11*K_12*K_13*K_14*K_15*K_16*K_17*K_18*K_Ai*K_Ao*K_Hi*K_Ho*K_Ki*kappa_re10*kappa_re2*kappa_re3*kappa_re4*kappa_re5*kappa_re6*kappa_re7*kappa_re8*kappa_re9;
    P_3 = K_10*K_11*K_12*K_13*K_14*K_15*K_16*K_17*K_18*K_Ai*K_Ao*K_Hi*K_Ho*pow(K_Nai, 3{dimensionless})*kappa_re1*kappa_re10*kappa_re2*kappa_re3*kappa_re4*kappa_re5*kappa_re6*kappa_re7*kappa_re9+K_10*K_11*K_12*K_13*K_14*K_15*K_16*K_17*K_18*K_Ai*K_Ao*K_Hi*K_Ho*pow(K_Nai, 3{dimensionless})*kappa_re1*kappa_re10*kappa_re2*kappa_re3*kappa_re4*kappa_re5*kappa_re6*kappa_re8*kappa_re9+K_10*K_11*K_12*K_13*K_14*K_15*K_16*K_17*K_18*K_Ai*K_Ao*K_Hi*K_Ho*pow(K_Nai, 3{dimensionless})*kappa_re1*kappa_re2*kappa_re3*kappa_re4*kappa_re5*kappa_re6*kappa_re7*kappa_re8*kappa_re9;
    P_4 = K_10*K_11*K_12*K_13*K_15*K_16*K_17*K_18*K_9*K_Ao*K_Hi*K_Ho*K_Ki*pow(K_Nao, 3{dimensionless})*kappa_re1*kappa_re10*kappa_re2*kappa_re3*kappa_re5*kappa_re6*kappa_re7*kappa_re8*kappa_re9+K_10*K_11*K_12*K_13*K_15*K_16*K_17*K_18*K_9*K_Ao*K_Hi*K_Ho*K_Ki*pow(K_Nao, 3{dimensionless})*kappa_re1*kappa_re10*kappa_re3*kappa_re4*kappa_re5*kappa_re6*kappa_re7*kappa_re8*kappa_re9;
    P_5 = K_10*K_11*K_12*K_13*K_15*K_16*K_17*K_18*K_9*K_Ao*K_Hi*K_Ho*K_Ko*pow(K_Nai, 3{dimensionless})*kappa_re1*kappa_re10*kappa_re2*kappa_re3*kappa_re4*kappa_re5*kappa_re6*kappa_re7*kappa_re8+K_10*K_11*K_12*K_13*K_15*K_16*K_17*K_18*K_9*K_Ao*K_Hi*K_Ho*K_Ko*pow(K_Nai, 3{dimensionless})*kappa_re1*kappa_re10*kappa_re2*kappa_re3*kappa_re4*kappa_re5*kappa_re7*kappa_re8*kappa_re9+K_10*K_11*K_12*K_13*K_15*K_16*K_17*K_18*K_9*K_Ao*K_Hi*K_Ho*K_Ko*pow(K_Nai, 3{dimensionless})*kappa_re1*kappa_re10*kappa_re2*kappa_re3*kappa_re4*kappa_re6*kappa_re7*kappa_re8*kappa_re9+K_10*K_11*K_12*K_13*K_15*K_16*K_17*K_18*K_9*K_Ao*K_Hi*K_Ho*K_Ko*pow(K_Nai, 3{dimensionless})*kappa_re1*kappa_re10*kappa_re2*kappa_re4*kappa_re5*kappa_re6*kappa_re7*kappa_re8*kappa_re9+K_10*K_11*K_12*K_13*K_15*K_16*K_17*K_18*K_9*K_Ao*K_Hi*K_Ho*K_Ko*pow(K_Nai, 3{dimensionless})*kappa_re10*kappa_re2*kappa_re3*kappa_re4*kappa_re5*kappa_re6*kappa_re7*kappa_re8*kappa_re9;
    P_6 = K_10*K_11*K_12*K_13*K_15*K_16*K_17*K_18*K_9*K_Ao*K_Hi*K_Ho*pow(K_Nai, 3{dimensionless})*pow(K_Nao, 3{dimensionless})*kappa_re1*kappa_re10*kappa_re2*kappa_re3*kappa_re4*kappa_re5*kappa_re6*kappa_re7*kappa_re9+K_10*K_11*K_12*K_13*K_15*K_16*K_17*K_18*K_9*K_Ao*K_Hi*K_Ho*pow(K_Nai, 3{dimensionless})*pow(K_Nao, 3{dimensionless})*kappa_re1*kappa_re10*kappa_re2*kappa_re3*kappa_re4*kappa_re5*kappa_re6*kappa_re8*kappa_re9+K_10*K_11*K_12*K_13*K_15*K_16*K_17*K_18*K_9*K_Ao*K_Hi*K_Ho*pow(K_Nai, 3{dimensionless})*pow(K_Nao, 3{dimensionless})*kappa_re1*kappa_re2*kappa_re3*kappa_re4*kappa_re5*kappa_re6*kappa_re7*kappa_re8*kappa_re9;
    P_7 = K_10*K_11*K_12*K_14*K_15*K_16*K_17*K_18*K_9*K_Ai*K_Hi*K_Ho*K_Ki*pow(K_Nao, 3{dimensionless})*kappa_re1*kappa_re10*kappa_re2*kappa_re3*kappa_re4*kappa_re5*kappa_re6*kappa_re7*kappa_re8+K_10*K_11*K_12*K_14*K_15*K_16*K_17*K_18*K_9*K_Ai*K_Hi*K_Ho*K_Ki*pow(K_Nao, 3{dimensionless})*kappa_re1*kappa_re10*kappa_re2*kappa_re3*kappa_re4*kappa_re5*kappa_re7*kappa_re8*kappa_re9+K_10*K_11*K_12*K_14*K_15*K_16*K_17*K_18*K_9*K_Ai*K_Hi*K_Ho*K_Ki*pow(K_Nao, 3{dimensionless})*kappa_re1*kappa_re10*kappa_re2*kappa_re3*kappa_re4*kappa_re6*kappa_re7*kappa_re8*kappa_re9+K_10*K_11*K_12*K_14*K_15*K_16*K_17*K_18*K_9*K_Ai*K_Hi*K_Ho*K_Ki*pow(K_Nao, 3{dimensionless})*kappa_re1*kappa_re10*kappa_re2*kappa_re3*kappa_re5*kappa_re6*kappa_re7*kappa_re8*kappa_re9+K_10*K_11*K_12*K_14*K_15*K_16*K_17*K_18*K_9*K_Ai*K_Hi*K_Ho*K_Ki*pow(K_Nao, 3{dimensionless})*kappa_re1*kappa_re10*kappa_re3*kappa_re4*kappa_re5*kappa_re6*kappa_re7*kappa_re8*kappa_re9;
    P_8 = K_10*K_11*K_12*K_14*K_15*K_16*K_17*K_18*K_9*K_Ai*K_Hi*K_Ho*K_Ko*pow(K_Nai, 3{dimensionless})*kappa_re1*kappa_re10*kappa_re2*kappa_re4*kappa_re5*kappa_re6*kappa_re7*kappa_re8*kappa_re9+K_10*K_11*K_12*K_14*K_15*K_16*K_17*K_18*K_9*K_Ai*K_Hi*K_Ho*K_Ko*pow(K_Nai, 3{dimensionless})*kappa_re10*kappa_re2*kappa_re3*kappa_re4*kappa_re5*kappa_re6*kappa_re7*kappa_re8*kappa_re9;
    P_9 = K_10*K_11*K_12*K_14*K_15*K_16*K_17*K_18*K_9*K_Ai*K_Hi*K_Ho*pow(K_Nai, 3{dimensionless})*pow(K_Nao, 3{dimensionless})*kappa_re1*kappa_re10*kappa_re2*kappa_re3*kappa_re4*kappa_re5*kappa_re6*kappa_re7*kappa_re9+K_10*K_11*K_12*K_14*K_15*K_16*K_17*K_18*K_9*K_Ai*K_Hi*K_Ho*pow(K_Nai, 3{dimensionless})*pow(K_Nao, 3{dimensionless})*kappa_re1*kappa_re10*kappa_re2*kappa_re3*kappa_re4*kappa_re5*kappa_re6*kappa_re8*kappa_re9+K_10*K_11*K_12*K_14*K_15*K_16*K_17*K_18*K_9*K_Ai*K_Hi*K_Ho*pow(K_Nai, 3{dimensionless})*pow(K_Nao, 3{dimensionless})*kappa_re1*kappa_re2*kappa_re3*kappa_re4*kappa_re5*kappa_re6*kappa_re7*kappa_re8*kappa_re9;
    P_10 = K_10*K_11*K_13*K_14*K_15*K_16*K_17*K_18*K_9*K_Ai*K_Ao*K_Ho*K_Ki*pow(K_Nao, 3{dimensionless})*kappa_re1*kappa_re10*kappa_re3*kappa_re4*kappa_re5*kappa_re6*kappa_re7*kappa_re8*kappa_re9;
    P_11 = K_10*K_11*K_13*K_14*K_15*K_16*K_17*K_18*K_9*K_Ai*K_Ao*K_Ho*K_Ko*pow(K_Nai, 3{dimensionless})*kappa_re1*kappa_re10*kappa_re2*kappa_re3*kappa_re4*kappa_re5*kappa_re6*kappa_re7*kappa_re8+K_10*K_11*K_13*K_14*K_15*K_16*K_17*K_18*K_9*K_Ai*K_Ao*K_Ho*K_Ko*pow(K_Nai, 3{dimensionless})*kappa_re1*kappa_re10*kappa_re2*kappa_re3*kappa_re4*kappa_re5*kappa_re7*kappa_re8*kappa_re9+K_10*K_11*K_13*K_14*K_15*K_16*K_17*K_18*K_9*K_Ai*K_Ao*K_Ho*K_Ko*pow(K_Nai, 3{dimensionless})*kappa_re1*kappa_re10*kappa_re2*kappa_re3*kappa_re4*kappa_re6*kappa_re7*kappa_re8*kappa_re9+K_10*K_11*K_13*K_14*K_15*K_16*K_17*K_18*K_9*K_Ai*K_Ao*K_Ho*K_Ko*pow(K_Nai, 3{dimensionless})*kappa_re1*kappa_re10*kappa_re2*kappa_re3*kappa_re5*kappa_re6*kappa_re7*kappa_re8*kappa_re9+K_10*K_11*K_13*K_14*K_15*K_16*K_17*K_18*K_9*K_Ai*K_Ao*K_Ho*K_Ko*pow(K_Nai, 3{dimensionless})*kappa_re1*kappa_re10*kappa_re2*kappa_re4*kappa_re5*kappa_re6*kappa_re7*kappa_re8*kappa_re9+K_10*K_11*K_13*K_14*K_15*K_16*K_17*K_18*K_9*K_Ai*K_Ao*K_Ho*K_Ko*pow(K_Nai, 3{dimensionless})*kappa_re10*kappa_re2*kappa_re3*kappa_re4*kappa_re5*kappa_re6*kappa_re7*kappa_re8*kappa_re9;
    P_12 = K_10*K_11*K_13*K_14*K_15*K_16*K_17*K_18*K_9*K_Ai*K_Ao*K_Ho*pow(K_Nai, 3{dimensionless})*pow(K_Nao, 3{dimensionless})*kappa_re1*kappa_re10*kappa_re2*kappa_re3*kappa_re4*kappa_re5*kappa_re6*kappa_re7*kappa_re9+K_10*K_11*K_13*K_14*K_15*K_16*K_17*K_18*K_9*K_Ai*K_Ao*K_Ho*pow(K_Nai, 3{dimensionless})*pow(K_Nao, 3{dimensionless})*kappa_re1*kappa_re10*kappa_re2*kappa_re3*kappa_re4*kappa_re5*kappa_re6*kappa_re8*kappa_re9+K_10*K_11*K_13*K_14*K_15*K_16*K_17*K_18*K_9*K_Ai*K_Ao*K_Ho*pow(K_Nai, 3{dimensionless})*pow(K_Nao, 3{dimensionless})*kappa_re1*kappa_re2*kappa_re3*kappa_re4*kappa_re5*kappa_re6*kappa_re7*kappa_re8*kappa_re9;
    P_13 = K_10*K_12*K_13*K_14*K_15*K_16*K_17*K_18*K_9*K_Ai*K_Ao*K_Hi*K_Ki*pow(K_Nao, 3{dimensionless})*kappa_re1*kappa_re10*kappa_re2*kappa_re3*kappa_re4*kappa_re5*kappa_re6*kappa_re7*kappa_re8+K_10*K_12*K_13*K_14*K_15*K_16*K_17*K_18*K_9*K_Ai*K_Ao*K_Hi*K_Ki*pow(K_Nao, 3{dimensionless})*kappa_re1*kappa_re10*kappa_re2*kappa_re3*kappa_re4*kappa_re5*kappa_re7*kappa_re8*kappa_re9+K_10*K_12*K_13*K_14*K_15*K_16*K_17*K_18*K_9*K_Ai*K_Ao*K_Hi*K_Ki*pow(K_Nao, 3{dimensionless})*kappa_re1*kappa_re10*kappa_re2*kappa_re3*kappa_re4*kappa_re6*kappa_re7*kappa_re8*kappa_re9+K_10*K_12*K_13*K_14*K_15*K_16*K_17*K_18*K_9*K_Ai*K_Ao*K_Hi*K_Ki*pow(K_Nao, 3{dimensionless})*kappa_re1*kappa_re10*kappa_re2*kappa_re3*kappa_re5*kappa_re6*kappa_re7*kappa_re8*kappa_re9+K_10*K_12*K_13*K_14*K_15*K_16*K_17*K_18*K_9*K_Ai*K_Ao*K_Hi*K_Ki*pow(K_Nao, 3{dimensionless})*kappa_re1*kappa_re10*kappa_re2*kappa_re4*kappa_re5*kappa_re6*kappa_re7*kappa_re8*kappa_re9+K_10*K_12*K_13*K_14*K_15*K_16*K_17*K_18*K_9*K_Ai*K_Ao*K_Hi*K_Ki*pow(K_Nao, 3{dimensionless})*kappa_re1*kappa_re10*kappa_re3*kappa_re4*kappa_re5*kappa_re6*kappa_re7*kappa_re8*kappa_re9;
    P_14 = K_10*K_12*K_13*K_14*K_15*K_16*K_17*K_18*K_9*K_Ai*K_Ao*K_Hi*K_Ko*pow(K_Nai, 3{dimensionless})*kappa_re10*kappa_re2*kappa_re3*kappa_re4*kappa_re5*kappa_re6*kappa_re7*kappa_re8*kappa_re9;
    P_15 = K_10*K_12*K_13*K_14*K_15*K_16*K_17*K_18*K_9*K_Ai*K_Ao*K_Hi*pow(K_Nai, 3{dimensionless})*pow(K_Nao, 3{dimensionless})*kappa_re1*kappa_re10*kappa_re2*kappa_re3*kappa_re4*kappa_re5*kappa_re6*kappa_re7*kappa_re9+K_10*K_12*K_13*K_14*K_15*K_16*K_17*K_18*K_9*K_Ai*K_Ao*K_Hi*pow(K_Nai, 3{dimensionless})*pow(K_Nao, 3{dimensionless})*kappa_re1*kappa_re10*kappa_re2*kappa_re3*kappa_re4*kappa_re5*kappa_re6*kappa_re8*kappa_re9+K_10*K_12*K_13*K_14*K_15*K_16*K_17*K_18*K_9*K_Ai*K_Ao*K_Hi*pow(K_Nai, 3{dimensionless})*pow(K_Nao, 3{dimensionless})*kappa_re1*kappa_re2*kappa_re3*kappa_re4*kappa_re5*kappa_re6*kappa_re7*kappa_re8*kappa_re9;
    P_16 = K_11*K_12*K_13*K_14*K_15*K_16*K_17*K_18*K_9*K_Ai*K_Ao*K_Hi*K_Ho*K_Ko*kappa_re1*kappa_re10*kappa_re2*kappa_re3*kappa_re4*kappa_re5*kappa_re6*kappa_re7*kappa_re8+K_11*K_12*K_13*K_14*K_15*K_16*K_17*K_18*K_9*K_Ai*K_Ao*K_Hi*K_Ho*K_Ko*kappa_re1*kappa_re10*kappa_re2*kappa_re3*kappa_re4*kappa_re5*kappa_re7*kappa_re8*kappa_re9+K_11*K_12*K_13*K_14*K_15*K_16*K_17*K_18*K_9*K_Ai*K_Ao*K_Hi*K_Ho*K_Ko*kappa_re1*kappa_re10*kappa_re2*kappa_re3*kappa_re4*kappa_re6*kappa_re7*kappa_re8*kappa_re9+K_11*K_12*K_13*K_14*K_15*K_16*K_17*K_18*K_9*K_Ai*K_Ao*K_Hi*K_Ho*K_Ko*kappa_re1*kappa_re10*kappa_re2*kappa_re3*kappa_re5*kappa_re6*kappa_re7*kappa_re8*kappa_re9+K_11*K_12*K_13*K_14*K_15*K_16*K_17*K_18*K_9*K_Ai*K_Ao*K_Hi*K_Ho*K_Ko*kappa_re1*kappa_re10*kappa_re2*kappa_re4*kappa_re5*kappa_re6*kappa_re7*kappa_re8*kappa_re9+K_11*K_12*K_13*K_14*K_15*K_16*K_17*K_18*K_9*K_Ai*K_Ao*K_Hi*K_Ho*K_Ko*kappa_re1*kappa_re10*kappa_re3*kappa_re4*kappa_re5*kappa_re6*kappa_re7*kappa_re8*kappa_re9+K_11*K_12*K_13*K_14*K_15*K_16*K_17*K_18*K_9*K_Ai*K_Ao*K_Hi*K_Ho*K_Ko*kappa_re10*kappa_re2*kappa_re3*kappa_re4*kappa_re5*kappa_re6*kappa_re7*kappa_re8*kappa_re9;
    P_17 = K_11*K_12*K_13*K_14*K_15*K_16*K_17*K_18*K_9*K_Ai*K_Ao*K_Hi*K_Ho*pow(K_Nao, 3{dimensionless})*kappa_re1*kappa_re10*kappa_re2*kappa_re3*kappa_re4*kappa_re5*kappa_re6*kappa_re7*kappa_re9+K_11*K_12*K_13*K_14*K_15*K_16*K_17*K_18*K_9*K_Ai*K_Ao*K_Hi*K_Ho*pow(K_Nao, 3{dimensionless})*kappa_re1*kappa_re10*kappa_re2*kappa_re3*kappa_re4*kappa_re5*kappa_re6*kappa_re8*kappa_re9+K_11*K_12*K_13*K_14*K_15*K_16*K_17*K_18*K_9*K_Ai*K_Ao*K_Hi*K_Ho*pow(K_Nao, 3{dimensionless})*kappa_re1*kappa_re2*kappa_re3*kappa_re4*kappa_re5*kappa_re6*kappa_re7*kappa_re8*kappa_re9;
    P_18 = K_10*K_11*K_12*K_13*K_14*K_15*K_16*K_17*K_9*K_Ai*K_Ao*K_Hi*K_Ho*K_Ki*K_Ko*kappa_re1*kappa_re10*kappa_re2*kappa_re3*kappa_re4*kappa_re5*kappa_re6*kappa_re7*kappa_re8+K_10*K_11*K_12*K_13*K_14*K_15*K_16*K_17*K_9*K_Ai*K_Ao*K_Hi*K_Ho*K_Ki*K_Ko*kappa_re1*kappa_re10*kappa_re2*kappa_re3*kappa_re4*kappa_re5*kappa_re7*kappa_re8*kappa_re9+K_10*K_11*K_12*K_13*K_14*K_15*K_16*K_17*K_9*K_Ai*K_Ao*K_Hi*K_Ho*K_Ki*K_Ko*kappa_re1*kappa_re10*kappa_re2*kappa_re3*kappa_re4*kappa_re6*kappa_re7*kappa_re8*kappa_re9+K_10*K_11*K_12*K_13*K_14*K_15*K_16*K_17*K_9*K_Ai*K_Ao*K_Hi*K_Ho*K_Ki*K_Ko*kappa_re1*kappa_re10*kappa_re2*kappa_re3*kappa_re5*kappa_re6*kappa_re7*kappa_re8*kappa_re9+K_10*K_11*K_12*K_13*K_14*K_15*K_16*K_17*K_9*K_Ai*K_Ao*K_Hi*K_Ho*K_Ki*K_Ko*kappa_re1*kappa_re10*kappa_re2*kappa_re4*kappa_re5*kappa_re6*kappa_re7*kappa_re8*kappa_re9+K_10*K_11*K_12*K_13*K_14*K_15*K_16*K_17*K_9*K_Ai*K_Ao*K_Hi*K_Ho*K_Ki*K_Ko*kappa_re1*kappa_re10*kappa_re3*kappa_re4*kappa_re5*kappa_re6*kappa_re7*kappa_re8*kappa_re9+K_10*K_11*K_12*K_13*K_14*K_15*K_16*K_17*K_9*K_Ai*K_Ao*K_Hi*K_Ho*K_Ki*K_Ko*kappa_re10*kappa_re2*kappa_re3*kappa_re4*kappa_re5*kappa_re6*kappa_re7*kappa_re8*kappa_re9+K_10*K_11*K_12*K_13*K_14*K_15*K_16*K_18*K_9*K_Ai*K_Ao*K_Hi*K_Ho*K_Ki*K_Ko*kappa_re1*kappa_re10*kappa_re2*kappa_re3*kappa_re4*kappa_re5*kappa_re6*kappa_re7*kappa_re8+K_10*K_11*K_12*K_13*K_14*K_15*K_16*K_18*K_9*K_Ai*K_Ao*K_Hi*K_Ho*K_Ki*K_Ko*kappa_re1*kappa_re10*kappa_re2*kappa_re3*kappa_re4*kappa_re5*kappa_re7*kappa_re8*kappa_re9+K_10*K_11*K_12*K_13*K_14*K_15*K_16*K_18*K_9*K_Ai*K_Ao*K_Hi*K_Ho*K_Ki*K_Ko*kappa_re1*kappa_re10*kappa_re2*kappa_re3*kappa_re4*kappa_re6*kappa_re7*kappa_re8*kappa_re9+K_10*K_11*K_12*K_13*K_14*K_15*K_16*K_18*K_9*K_Ai*K_Ao*K_Hi*K_Ho*K_Ki*K_Ko*kappa_re1*kappa_re10*kappa_re2*kappa_re3*kappa_re5*kappa_re6*kappa_re7*kappa_re8*kappa_re9+K_10*K_11*K_12*K_13*K_14*K_15*K_16*K_18*K_9*K_Ai*K_Ao*K_Hi*K_Ho*K_Ki*K_Ko*kappa_re1*kappa_re10*kappa_re2*kappa_re4*kappa_re5*kappa_re6*kappa_re7*kappa_re8*kappa_re9+K_10*K_11*K_12*K_13*K_14*K_15*K_16*K_18*K_9*K_Ai*K_Ao*K_Hi*K_Ho*K_Ki*K_Ko*kappa_re1*kappa_re10*kappa_re3*kappa_re4*kappa_re5*kappa_re6*kappa_re7*kappa_re8*kappa_re9+K_10*K_11*K_12*K_13*K_14*K_15*K_16*K_18*K_9*K_Ai*K_Ao*K_Hi*K_Ho*K_Ki*K_Ko*kappa_re10*kappa_re2*kappa_re3*kappa_re4*kappa_re5*kappa_re6*kappa_re7*kappa_re8*kappa_re9;
    P_19 = K_10*K_11*K_12*K_13*K_14*K_15*K_16*K_17*K_9*K_Ai*K_Ao*K_Hi*K_Ho*K_Ki*pow(K_Nao, 3{dimensionless})*kappa_re1*kappa_re10*kappa_re2*kappa_re3*kappa_re4*kappa_re5*kappa_re6*kappa_re8*kappa_re9+K_10*K_11*K_12*K_13*K_14*K_15*K_16*K_17*K_9*K_Ai*K_Ao*K_Hi*K_Ho*K_Ki*pow(K_Nao, 3{dimensionless})*kappa_re1*kappa_re2*kappa_re3*kappa_re4*kappa_re5*kappa_re6*kappa_re7*kappa_re8*kappa_re9+K_10*K_11*K_12*K_13*K_14*K_15*K_16*K_18*K_9*K_Ai*K_Ao*K_Hi*K_Ho*K_Ki*pow(K_Nao, 3{dimensionless})*kappa_re1*kappa_re10*kappa_re2*kappa_re3*kappa_re4*kappa_re5*kappa_re6*kappa_re8*kappa_re9+K_10*K_11*K_12*K_13*K_14*K_15*K_17*K_18*K_9*K_Ai*K_Ao*K_Hi*K_Ho*K_Ki*pow(K_Nao, 3{dimensionless})*kappa_re1*kappa_re10*kappa_re2*kappa_re3*kappa_re4*kappa_re5*kappa_re7*kappa_re8*kappa_re9+K_10*K_11*K_12*K_13*K_14*K_15*K_17*K_18*K_9*K_Ai*K_Ao*K_Hi*K_Ho*K_Ki*pow(K_Nao, 3{dimensionless})*kappa_re1*kappa_re10*kappa_re2*kappa_re3*kappa_re5*kappa_re6*kappa_re7*kappa_re8*kappa_re9+K_10*K_11*K_12*K_13*K_14*K_15*K_17*K_18*K_9*K_Ai*K_Ao*K_Hi*K_Ho*K_Ki*pow(K_Nao, 3{dimensionless})*kappa_re1*kappa_re10*kappa_re3*kappa_re4*kappa_re5*kappa_re6*kappa_re7*kappa_re8*kappa_re9+K_10*K_11*K_12*K_13*K_14*K_16*K_17*K_18*K_9*K_Ai*K_Ao*K_Hi*K_Ho*K_Ki*pow(K_Nao, 3{dimensionless})*kappa_re1*kappa_re10*kappa_re2*kappa_re3*kappa_re4*kappa_re5*kappa_re6*kappa_re7*kappa_re8+K_10*K_11*K_12*K_13*K_14*K_16*K_17*K_18*K_9*K_Ai*K_Ao*K_Hi*K_Ho*K_Ki*pow(K_Nao, 3{dimensionless})*kappa_re1*kappa_re10*kappa_re2*kappa_re3*kappa_re4*kappa_re5*kappa_re7*kappa_re8*kappa_re9+K_10*K_11*K_12*K_13*K_14*K_16*K_17*K_18*K_9*K_Ai*K_Ao*K_Hi*K_Ho*K_Ki*pow(K_Nao, 3{dimensionless})*kappa_re1*kappa_re10*kappa_re2*kappa_re3*kappa_re5*kappa_re6*kappa_re7*kappa_re8*kappa_re9+K_10*K_11*K_12*K_13*K_14*K_16*K_17*K_18*K_9*K_Ai*K_Ao*K_Hi*K_Ho*K_Ki*pow(K_Nao, 3{dimensionless})*kappa_re1*kappa_re10*kappa_re3*kappa_re4*kappa_re5*kappa_re6*kappa_re7*kappa_re8*kappa_re9;
    P_20 = K_10*K_11*K_12*K_13*K_14*K_15*K_16*K_17*K_9*K_Ai*K_Ao*K_Hi*K_Ho*K_Ko*pow(K_Nai, 3{dimensionless})*kappa_re1*kappa_re10*kappa_re2*kappa_re3*kappa_re4*kappa_re5*kappa_re6*kappa_re7*kappa_re9+K_10*K_11*K_12*K_13*K_14*K_15*K_16*K_18*K_9*K_Ai*K_Ao*K_Hi*K_Ho*K_Ko*pow(K_Nai, 3{dimensionless})*kappa_re1*kappa_re10*kappa_re2*kappa_re3*kappa_re4*kappa_re5*kappa_re6*kappa_re7*kappa_re9+K_10*K_11*K_12*K_13*K_14*K_15*K_16*K_18*K_9*K_Ai*K_Ao*K_Hi*K_Ho*K_Ko*pow(K_Nai, 3{dimensionless})*kappa_re1*kappa_re2*kappa_re3*kappa_re4*kappa_re5*kappa_re6*kappa_re7*kappa_re8*kappa_re9+K_10*K_11*K_12*K_13*K_14*K_15*K_17*K_18*K_9*K_Ai*K_Ao*K_Hi*K_Ho*K_Ko*pow(K_Nai, 3{dimensionless})*kappa_re1*kappa_re10*kappa_re2*kappa_re3*kappa_re4*kappa_re5*kappa_re6*kappa_re7*kappa_re8+K_10*K_11*K_12*K_13*K_14*K_15*K_17*K_18*K_9*K_Ai*K_Ao*K_Hi*K_Ho*K_Ko*pow(K_Nai, 3{dimensionless})*kappa_re1*kappa_re10*kappa_re2*kappa_re3*kappa_re4*kappa_re6*kappa_re7*kappa_re8*kappa_re9+K_10*K_11*K_12*K_13*K_14*K_15*K_17*K_18*K_9*K_Ai*K_Ao*K_Hi*K_Ho*K_Ko*pow(K_Nai, 3{dimensionless})*kappa_re1*kappa_re10*kappa_re2*kappa_re4*kappa_re5*kappa_re6*kappa_re7*kappa_re8*kappa_re9+K_10*K_11*K_12*K_13*K_14*K_15*K_17*K_18*K_9*K_Ai*K_Ao*K_Hi*K_Ho*K_Ko*pow(K_Nai, 3{dimensionless})*kappa_re10*kappa_re2*kappa_re3*kappa_re4*kappa_re5*kappa_re6*kappa_re7*kappa_re8*kappa_re9+K_10*K_11*K_12*K_13*K_14*K_16*K_17*K_18*K_9*K_Ai*K_Ao*K_Hi*K_Ho*K_Ko*pow(K_Nai, 3{dimensionless})*kappa_re1*kappa_re10*kappa_re2*kappa_re3*kappa_re4*kappa_re6*kappa_re7*kappa_re8*kappa_re9+K_10*K_11*K_12*K_13*K_14*K_16*K_17*K_18*K_9*K_Ai*K_Ao*K_Hi*K_Ho*K_Ko*pow(K_Nai, 3{dimensionless})*kappa_re1*kappa_re10*kappa_re2*kappa_re4*kappa_re5*kappa_re6*kappa_re7*kappa_re8*kappa_re9+K_10*K_11*K_12*K_13*K_14*K_16*K_17*K_18*K_9*K_Ai*K_Ao*K_Hi*K_Ho*K_Ko*pow(K_Nai, 3{dimensionless})*kappa_re10*kappa_re2*kappa_re3*kappa_re4*kappa_re5*kappa_re6*kappa_re7*kappa_re8*kappa_re9;
    P_21 = K_10*K_11*K_12*K_13*K_14*K_15*K_17*K_18*K_9*K_Ai*K_Ao*K_Hi*K_Ho*pow(K_Nai, 3{dimensionless})*pow(K_Nao, 3{dimensionless})*kappa_re1*kappa_re10*kappa_re2*kappa_re3*kappa_re4*kappa_re5*kappa_re6*kappa_re7*kappa_re9+K_10*K_11*K_12*K_13*K_14*K_15*K_17*K_18*K_9*K_Ai*K_Ao*K_Hi*K_Ho*pow(K_Nai, 3{dimensionless})*pow(K_Nao, 3{dimensionless})*kappa_re1*kappa_re10*kappa_re2*kappa_re3*kappa_re4*kappa_re5*kappa_re6*kappa_re8*kappa_re9+K_10*K_11*K_12*K_13*K_14*K_15*K_17*K_18*K_9*K_Ai*K_Ao*K_Hi*K_Ho*pow(K_Nai, 3{dimensionless})*pow(K_Nao, 3{dimensionless})*kappa_re1*kappa_re2*kappa_re3*kappa_re4*kappa_re5*kappa_re6*kappa_re7*kappa_re8*kappa_re9+K_10*K_11*K_12*K_13*K_14*K_16*K_17*K_18*K_9*K_Ai*K_Ao*K_Hi*K_Ho*pow(K_Nai, 3{dimensionless})*pow(K_Nao, 3{dimensionless})*kappa_re1*kappa_re10*kappa_re2*kappa_re3*kappa_re4*kappa_re5*kappa_re6*kappa_re7*kappa_re9+K_10*K_11*K_12*K_13*K_14*K_16*K_17*K_18*K_9*K_Ai*K_Ao*K_Hi*K_Ho*pow(K_Nai, 3{dimensionless})*pow(K_Nao, 3{dimensionless})*kappa_re1*kappa_re10*kappa_re2*kappa_re3*kappa_re4*kappa_re5*kappa_re6*kappa_re8*kappa_re9+K_10*K_11*K_12*K_13*K_14*K_16*K_17*K_18*K_9*K_Ai*K_Ao*K_Hi*K_Ho*pow(K_Nai, 3{dimensionless})*pow(K_Nao, 3{dimensionless})*kappa_re1*kappa_re2*kappa_re3*kappa_re4*kappa_re5*kappa_re6*kappa_re7*kappa_re8*kappa_re9;
    E = q_10_init+q_11_init+q_12_init+q_13_init+q_14_init+q_15_init+q_16_init+q_17_init+q_18_init+q_9_init;
  enddef;
enddef;
