<?xml version="1.0" encoding="UTF-8"?>
<model xmlns="http://www.cellml.org/cellml/2.0#" name="SLCT1_BG_test" id="b4da55">
  <import xmlns:xlink="http://www.w3.org/1999/xlink" xlink:href="../units_BG.cellml" id="b4da56">
    <units units_ref="per_fmol" name="per_fmol" id="b4da57"/>
    <units units_ref="J_per_K_per_mol" name="J_per_K_per_mol" id="b4da58"/>
    <units units_ref="fmol" name="fmol" id="b4da59"/>
    <units units_ref="fmol_per_sec" name="fmol_per_sec" id="b4da5a"/>
    <units units_ref="C_per_mol" name="C_per_mol" id="b4da5b"/>
    <units units_ref="J_per_mol" name="J_per_mol" id="b4da5c"/>
  </import>
  <component name="SLCT1_BG_test" id="b4da5d">
    <variable name="v_Ao" units="fmol_per_sec" interface="private" id="b4da5f"/>
    <variable name="q_Ao" units="fmol" interface="public_and_private" id="b4da60"/>
    <variable name="v_Ai" units="fmol_per_sec" interface="private" id="b4da61"/>
    <variable name="q_Ai" units="fmol" interface="public_and_private" id="b4da62"/>
    <variable name="v_Ho" units="fmol_per_sec" interface="private" id="b4da63"/>
    <variable name="q_Ho" units="fmol" interface="public_and_private" id="b4da64"/>
    <variable name="v_Hi" units="fmol_per_sec" interface="private" id="b4da65"/>
    <variable name="q_Hi" units="fmol" interface="public_and_private" id="b4da66"/>
    <variable name="v_Nai" units="fmol_per_sec" interface="private" id="b4da67"/>
    <variable name="q_Nai" units="fmol" interface="public_and_private" id="b4da68"/>
    <variable name="v_Nao" units="fmol_per_sec" interface="private" id="b4da69"/>
    <variable name="q_Nao" units="fmol" interface="public_and_private" id="b4da6a"/>
    <variable name="v_Ki" units="fmol_per_sec" interface="private" id="b4da6b"/>
    <variable name="q_Ki" units="fmol" interface="public_and_private" id="b4da6c"/>
    <variable name="v_Ko" units="fmol_per_sec" interface="private" id="b4da6d"/>
    <variable name="q_Ko" units="fmol" interface="public_and_private" id="b4da6e"/>
  </component>
  <component name="SLCT1_BG" id="b4da89">
    <variable name="t" units="second" id="b4da8b"/>
    <variable name="K_Ao" units="per_fmol" interface="public" id="b4da8c"/>
    <variable name="v_Ao" units="fmol_per_sec" interface="public" id="b4da8d"/>
    <variable name="q_Ao" units="fmol" interface="public" id="b4da8e"/>
    <variable name="mu_Ao" units="J_per_mol" interface="public" id="b4da8f"/>
    <variable name="K_Ai" units="per_fmol" interface="public" id="b4da90"/>
    <variable name="v_Ai" units="fmol_per_sec" interface="public" id="b4da91"/>
    <variable name="q_Ai" units="fmol" interface="public" id="b4da92"/>
    <variable name="mu_Ai" units="J_per_mol" interface="public" id="b4da93"/>
    <variable name="K_Ho" units="per_fmol" interface="public" id="b4da94"/>
    <variable name="v_Ho" units="fmol_per_sec" interface="public" id="b4da95"/>
    <variable name="q_Ho" units="fmol" interface="public" id="b4da96"/>
    <variable name="mu_Ho" units="J_per_mol" interface="public" id="b4da97"/>
    <variable name="K_Hi" units="per_fmol" interface="public" id="b4da98"/>
    <variable name="v_Hi" units="fmol_per_sec" interface="public" id="b4da99"/>
    <variable name="q_Hi" units="fmol" interface="public" id="b4da9a"/>
    <variable name="mu_Hi" units="J_per_mol" interface="public" id="b4da9b"/>
    <variable name="K_Nai" units="per_fmol" interface="public" id="b4da9c"/>
    <variable name="v_Nai" units="fmol_per_sec" interface="public" id="b4da9d"/>
    <variable name="q_Nai" units="fmol" interface="public" id="b4da9e"/>
    <variable name="mu_Nai" units="J_per_mol" interface="public" id="b4da9f"/>
    <variable name="K_Nao" units="per_fmol" interface="public" id="b4daa0"/>
    <variable name="v_Nao" units="fmol_per_sec" interface="public" id="b4daa1"/>
    <variable name="q_Nao" units="fmol" interface="public" id="b4daa2"/>
    <variable name="mu_Nao" units="J_per_mol" interface="public" id="b4daa3"/>
    <variable name="K_Ki" units="per_fmol" interface="public" id="b4daa4"/>
    <variable name="v_Ki" units="fmol_per_sec" interface="public" id="b4daa5"/>
    <variable name="q_Ki" units="fmol" interface="public" id="b4daa6"/>
    <variable name="mu_Ki" units="J_per_mol" interface="public" id="b4daa7"/>
    <variable name="K_Ko" units="per_fmol" interface="public" id="b4daa8"/>
    <variable name="v_Ko" units="fmol_per_sec" interface="public" id="b4daa9"/>
    <variable name="q_Ko" units="fmol" interface="public" id="b4daaa"/>
    <variable name="mu_Ko" units="J_per_mol" interface="public" id="b4daab"/>
    <variable name="K_9" units="per_fmol" interface="public" id="b4daac"/>
    <variable name="v_9" units="fmol_per_sec" id="b4daad"/>
    <variable name="q_9_init" units="fmol" interface="public" id="b4daae"/>
    <variable name="q_9" units="fmol" initial_value="q_9_init" id="b4daaf"/>
    <variable name="mu_9" units="J_per_mol" id="b4dab0"/>
    <variable name="K_10" units="per_fmol" interface="public" id="b4dab1"/>
    <variable name="v_10" units="fmol_per_sec" id="b4dab2"/>
    <variable name="q_10_init" units="fmol" interface="public" id="b4dab3"/>
    <variable name="q_10" units="fmol" initial_value="q_10_init" id="b4dab4"/>
    <variable name="mu_10" units="J_per_mol" id="b4dab5"/>
    <variable name="K_11" units="per_fmol" interface="public" id="b4dab6"/>
    <variable name="v_11" units="fmol_per_sec" id="b4dab7"/>
    <variable name="q_11_init" units="fmol" interface="public" id="b4dab8"/>
    <variable name="q_11" units="fmol" initial_value="q_11_init" id="b4dab9"/>
    <variable name="mu_11" units="J_per_mol" id="b4daba"/>
    <variable name="K_12" units="per_fmol" interface="public" id="b4dabb"/>
    <variable name="v_12" units="fmol_per_sec" id="b4dabc"/>
    <variable name="q_12_init" units="fmol" interface="public" id="b4dabd"/>
    <variable name="q_12" units="fmol" initial_value="q_12_init" id="b4dabe"/>
    <variable name="mu_12" units="J_per_mol" id="b4dabf"/>
    <variable name="K_13" units="per_fmol" interface="public" id="b4dac0"/>
    <variable name="v_13" units="fmol_per_sec" id="b4dac1"/>
    <variable name="q_13_init" units="fmol" interface="public" id="b4dac2"/>
    <variable name="q_13" units="fmol" initial_value="q_13_init" id="b4dac3"/>
    <variable name="mu_13" units="J_per_mol" id="b4dac4"/>
    <variable name="K_14" units="per_fmol" interface="public" id="b4dac5"/>
    <variable name="v_14" units="fmol_per_sec" id="b4dac6"/>
    <variable name="q_14_init" units="fmol" interface="public" id="b4dac7"/>
    <variable name="q_14" units="fmol" initial_value="q_14_init" id="b4dac8"/>
    <variable name="mu_14" units="J_per_mol" id="b4dac9"/>
    <variable name="K_15" units="per_fmol" interface="public" id="b4daca"/>
    <variable name="v_15" units="fmol_per_sec" id="b4dacb"/>
    <variable name="q_15_init" units="fmol" interface="public" id="b4dacc"/>
    <variable name="q_15" units="fmol" initial_value="q_15_init" id="b4dacd"/>
    <variable name="mu_15" units="J_per_mol" id="b4dace"/>
    <variable name="K_16" units="per_fmol" interface="public" id="b4dacf"/>
    <variable name="v_16" units="fmol_per_sec" id="b4dad0"/>
    <variable name="q_16_init" units="fmol" interface="public" id="b4dad1"/>
    <variable name="q_16" units="fmol" initial_value="q_16_init" id="b4dad2"/>
    <variable name="mu_16" units="J_per_mol" id="b4dad3"/>
    <variable name="K_17" units="per_fmol" interface="public" id="b4dad4"/>
    <variable name="v_17" units="fmol_per_sec" id="b4dad5"/>
    <variable name="q_17_init" units="fmol" interface="public" id="b4dad6"/>
    <variable name="q_17" units="fmol" initial_value="q_17_init" id="b4dad7"/>
    <variable name="mu_17" units="J_per_mol" id="b4dad8"/>
    <variable name="K_18" units="per_fmol" interface="public" id="b4dad9"/>
    <variable name="v_18" units="fmol_per_sec" id="b4dada"/>
    <variable name="q_18_init" units="fmol" interface="public" id="b4dadb"/>
    <variable name="q_18" units="fmol" initial_value="q_18_init" id="b4dadc"/>
    <variable name="mu_18" units="J_per_mol" id="b4dadd"/>
    <variable name="kappa_re1" units="fmol_per_sec" interface="public" id="b4dade"/>
    <variable name="v_re1" units="fmol_per_sec" id="b4dadf"/>
    <variable name="mu_re1_in" units="J_per_mol" id="b4dae0"/>
    <variable name="mu_re1_out" units="J_per_mol" id="b4dae1"/>
    <variable name="kappa_re2" units="fmol_per_sec" interface="public" id="b4dae2"/>
    <variable name="v_re2" units="fmol_per_sec" id="b4dae3"/>
    <variable name="mu_re2_in" units="J_per_mol" id="b4dae4"/>
    <variable name="mu_re2_out" units="J_per_mol" id="b4dae5"/>
    <variable name="kappa_re3" units="fmol_per_sec" interface="public" id="b4dae6"/>
    <variable name="v_re3" units="fmol_per_sec" id="b4dae7"/>
    <variable name="mu_re3_in" units="J_per_mol" id="b4dae8"/>
    <variable name="mu_re3_out" units="J_per_mol" id="b4dae9"/>
    <variable name="kappa_re4" units="fmol_per_sec" interface="public" id="b4daea"/>
    <variable name="v_re4" units="fmol_per_sec" id="b4daeb"/>
    <variable name="mu_re4_in" units="J_per_mol" id="b4daec"/>
    <variable name="mu_re4_out" units="J_per_mol" id="b4daed"/>
    <variable name="kappa_re5" units="fmol_per_sec" interface="public" id="b4daee"/>
    <variable name="v_re5" units="fmol_per_sec" id="b4daef"/>
    <variable name="mu_re5_in" units="J_per_mol" id="b4daf0"/>
    <variable name="mu_re5_out" units="J_per_mol" id="b4daf1"/>
    <variable name="kappa_re6" units="fmol_per_sec" interface="public" id="b4daf2"/>
    <variable name="v_re6" units="fmol_per_sec" id="b4daf3"/>
    <variable name="mu_re6_in" units="J_per_mol" id="b4daf4"/>
    <variable name="mu_re6_out" units="J_per_mol" id="b4daf5"/>
    <variable name="kappa_re7" units="fmol_per_sec" interface="public" id="b4daf6"/>
    <variable name="v_re7" units="fmol_per_sec" id="b4daf7"/>
    <variable name="mu_re7_in" units="J_per_mol" id="b4daf8"/>
    <variable name="mu_re7_out" units="J_per_mol" id="b4daf9"/>
    <variable name="kappa_re8" units="fmol_per_sec" interface="public" id="b4dafa"/>
    <variable name="v_re8" units="fmol_per_sec" id="b4dafb"/>
    <variable name="mu_re8_in" units="J_per_mol" id="b4dafc"/>
    <variable name="mu_re8_out" units="J_per_mol" id="b4dafd"/>
    <variable name="kappa_re9" units="fmol_per_sec" interface="public" id="b4dafe"/>
    <variable name="v_re9" units="fmol_per_sec" id="b4daff"/>
    <variable name="mu_re9_in" units="J_per_mol" id="b4db00"/>
    <variable name="mu_re9_out" units="J_per_mol" id="b4db01"/>
    <variable name="kappa_re10" units="fmol_per_sec" interface="public" id="b4db02"/>
    <variable name="v_re10" units="fmol_per_sec" id="b4db03"/>
    <variable name="mu_re10_in" units="J_per_mol" id="b4db04"/>
    <variable name="mu_re10_out" units="J_per_mol" id="b4db05"/>
    <variable name="F" units="C_per_mol" interface="public" id="b4db06"/>
    <variable name="R" units="J_per_K_per_mol" interface="public" id="b4db07"/>
    <variable name="T" units="kelvin" interface="public" id="b4db08"/>
    <math xmlns="http://www.w3.org/1998/Math/MathML" xmlns:cellml="http://www.cellml.org/cellml/2.0#">
      <apply>
        <eq/>
        <ci>mu_Ao</ci>
        <apply>
          <times/>
          <ci>R</ci>
          <ci>T</ci>
          <apply>
            <ln/>
            <apply>
              <times/>
              <ci>K_Ao</ci>
              <ci>q_Ao</ci>
            </apply>
          </apply>
        </apply>
      </apply>
      <apply>
        <eq/>
        <ci>mu_Ai</ci>
        <apply>
          <times/>
          <ci>R</ci>
          <ci>T</ci>
          <apply>
            <ln/>
            <apply>
              <times/>
              <ci>K_Ai</ci>
              <ci>q_Ai</ci>
            </apply>
          </apply>
        </apply>
      </apply>
      <apply>
        <eq/>
        <ci>mu_Ho</ci>
        <apply>
          <times/>
          <ci>R</ci>
          <ci>T</ci>
          <apply>
            <ln/>
            <apply>
              <times/>
              <ci>K_Ho</ci>
              <ci>q_Ho</ci>
            </apply>
          </apply>
        </apply>
      </apply>
      <apply>
        <eq/>
        <ci>mu_Hi</ci>
        <apply>
          <times/>
          <ci>R</ci>
          <ci>T</ci>
          <apply>
            <ln/>
            <apply>
              <times/>
              <ci>K_Hi</ci>
              <ci>q_Hi</ci>
            </apply>
          </apply>
        </apply>
      </apply>
      <apply>
        <eq/>
        <ci>mu_Nai</ci>
        <apply>
          <times/>
          <ci>R</ci>
          <ci>T</ci>
          <apply>
            <ln/>
            <apply>
              <times/>
              <ci>K_Nai</ci>
              <ci>q_Nai</ci>
            </apply>
          </apply>
        </apply>
      </apply>
      <apply>
        <eq/>
        <ci>mu_Nao</ci>
        <apply>
          <times/>
          <ci>R</ci>
          <ci>T</ci>
          <apply>
            <ln/>
            <apply>
              <times/>
              <ci>K_Nao</ci>
              <ci>q_Nao</ci>
            </apply>
          </apply>
        </apply>
      </apply>
      <apply>
        <eq/>
        <ci>mu_Ki</ci>
        <apply>
          <times/>
          <ci>R</ci>
          <ci>T</ci>
          <apply>
            <ln/>
            <apply>
              <times/>
              <ci>K_Ki</ci>
              <ci>q_Ki</ci>
            </apply>
          </apply>
        </apply>
      </apply>
      <apply>
        <eq/>
        <ci>mu_Ko</ci>
        <apply>
          <times/>
          <ci>R</ci>
          <ci>T</ci>
          <apply>
            <ln/>
            <apply>
              <times/>
              <ci>K_Ko</ci>
              <ci>q_Ko</ci>
            </apply>
          </apply>
        </apply>
      </apply>
      <apply>
        <eq/>
        <apply>
          <diff/>
          <bvar>
            <ci>t</ci>
          </bvar>
          <ci>q_9</ci>
        </apply>
        <ci>v_9</ci>
      </apply>
      <apply>
        <eq/>
        <ci>mu_9</ci>
        <apply>
          <times/>
          <ci>R</ci>
          <ci>T</ci>
          <apply>
            <ln/>
            <apply>
              <times/>
              <ci>K_9</ci>
              <ci>q_9</ci>
            </apply>
          </apply>
        </apply>
      </apply>
      <apply>
        <eq/>
        <apply>
          <diff/>
          <bvar>
            <ci>t</ci>
          </bvar>
          <ci>q_10</ci>
        </apply>
        <ci>v_10</ci>
      </apply>
      <apply>
        <eq/>
        <ci>mu_10</ci>
        <apply>
          <times/>
          <ci>R</ci>
          <ci>T</ci>
          <apply>
            <ln/>
            <apply>
              <times/>
              <ci>K_10</ci>
              <ci>q_10</ci>
            </apply>
          </apply>
        </apply>
      </apply>
      <apply>
        <eq/>
        <apply>
          <diff/>
          <bvar>
            <ci>t</ci>
          </bvar>
          <ci>q_11</ci>
        </apply>
        <ci>v_11</ci>
      </apply>
      <apply>
        <eq/>
        <ci>mu_11</ci>
        <apply>
          <times/>
          <ci>R</ci>
          <ci>T</ci>
          <apply>
            <ln/>
            <apply>
              <times/>
              <ci>K_11</ci>
              <ci>q_11</ci>
            </apply>
          </apply>
        </apply>
      </apply>
      <apply>
        <eq/>
        <apply>
          <diff/>
          <bvar>
            <ci>t</ci>
          </bvar>
          <ci>q_12</ci>
        </apply>
        <ci>v_12</ci>
      </apply>
      <apply>
        <eq/>
        <ci>mu_12</ci>
        <apply>
          <times/>
          <ci>R</ci>
          <ci>T</ci>
          <apply>
            <ln/>
            <apply>
              <times/>
              <ci>K_12</ci>
              <ci>q_12</ci>
            </apply>
          </apply>
        </apply>
      </apply>
      <apply>
        <eq/>
        <apply>
          <diff/>
          <bvar>
            <ci>t</ci>
          </bvar>
          <ci>q_13</ci>
        </apply>
        <ci>v_13</ci>
      </apply>
      <apply>
        <eq/>
        <ci>mu_13</ci>
        <apply>
          <times/>
          <ci>R</ci>
          <ci>T</ci>
          <apply>
            <ln/>
            <apply>
              <times/>
              <ci>K_13</ci>
              <ci>q_13</ci>
            </apply>
          </apply>
        </apply>
      </apply>
      <apply>
        <eq/>
        <apply>
          <diff/>
          <bvar>
            <ci>t</ci>
          </bvar>
          <ci>q_14</ci>
        </apply>
        <ci>v_14</ci>
      </apply>
      <apply>
        <eq/>
        <ci>mu_14</ci>
        <apply>
          <times/>
          <ci>R</ci>
          <ci>T</ci>
          <apply>
            <ln/>
            <apply>
              <times/>
              <ci>K_14</ci>
              <ci>q_14</ci>
            </apply>
          </apply>
        </apply>
      </apply>
      <apply>
        <eq/>
        <apply>
          <diff/>
          <bvar>
            <ci>t</ci>
          </bvar>
          <ci>q_15</ci>
        </apply>
        <ci>v_15</ci>
      </apply>
      <apply>
        <eq/>
        <ci>mu_15</ci>
        <apply>
          <times/>
          <ci>R</ci>
          <ci>T</ci>
          <apply>
            <ln/>
            <apply>
              <times/>
              <ci>K_15</ci>
              <ci>q_15</ci>
            </apply>
          </apply>
        </apply>
      </apply>
      <apply>
        <eq/>
        <apply>
          <diff/>
          <bvar>
            <ci>t</ci>
          </bvar>
          <ci>q_16</ci>
        </apply>
        <ci>v_16</ci>
      </apply>
      <apply>
        <eq/>
        <ci>mu_16</ci>
        <apply>
          <times/>
          <ci>R</ci>
          <ci>T</ci>
          <apply>
            <ln/>
            <apply>
              <times/>
              <ci>K_16</ci>
              <ci>q_16</ci>
            </apply>
          </apply>
        </apply>
      </apply>
      <apply>
        <eq/>
        <apply>
          <diff/>
          <bvar>
            <ci>t</ci>
          </bvar>
          <ci>q_17</ci>
        </apply>
        <ci>v_17</ci>
      </apply>
      <apply>
        <eq/>
        <ci>mu_17</ci>
        <apply>
          <times/>
          <ci>R</ci>
          <ci>T</ci>
          <apply>
            <ln/>
            <apply>
              <times/>
              <ci>K_17</ci>
              <ci>q_17</ci>
            </apply>
          </apply>
        </apply>
      </apply>
      <apply>
        <eq/>
        <apply>
          <diff/>
          <bvar>
            <ci>t</ci>
          </bvar>
          <ci>q_18</ci>
        </apply>
        <ci>v_18</ci>
      </apply>
      <apply>
        <eq/>
        <ci>mu_18</ci>
        <apply>
          <times/>
          <ci>R</ci>
          <ci>T</ci>
          <apply>
            <ln/>
            <apply>
              <times/>
              <ci>K_18</ci>
              <ci>q_18</ci>
            </apply>
          </apply>
        </apply>
      </apply>
      <apply>
        <eq/>
        <ci>v_re1</ci>
        <apply>
          <times/>
          <ci>kappa_re1</ci>
          <apply>
            <minus/>
            <apply>
              <exp/>
              <apply>
                <divide/>
                <ci>mu_re1_in</ci>
                <apply>
                  <times/>
                  <ci>R</ci>
                  <ci>T</ci>
                </apply>
              </apply>
            </apply>
            <apply>
              <exp/>
              <apply>
                <divide/>
                <ci>mu_re1_out</ci>
                <apply>
                  <times/>
                  <ci>R</ci>
                  <ci>T</ci>
                </apply>
              </apply>
            </apply>
          </apply>
        </apply>
      </apply>
      <apply>
        <eq/>
        <ci>v_re2</ci>
        <apply>
          <times/>
          <ci>kappa_re2</ci>
          <apply>
            <minus/>
            <apply>
              <exp/>
              <apply>
                <divide/>
                <ci>mu_re2_in</ci>
                <apply>
                  <times/>
                  <ci>R</ci>
                  <ci>T</ci>
                </apply>
              </apply>
            </apply>
            <apply>
              <exp/>
              <apply>
                <divide/>
                <ci>mu_re2_out</ci>
                <apply>
                  <times/>
                  <ci>R</ci>
                  <ci>T</ci>
                </apply>
              </apply>
            </apply>
          </apply>
        </apply>
      </apply>
      <apply>
        <eq/>
        <ci>v_re3</ci>
        <apply>
          <times/>
          <ci>kappa_re3</ci>
          <apply>
            <minus/>
            <apply>
              <exp/>
              <apply>
                <divide/>
                <ci>mu_re3_in</ci>
                <apply>
                  <times/>
                  <ci>R</ci>
                  <ci>T</ci>
                </apply>
              </apply>
            </apply>
            <apply>
              <exp/>
              <apply>
                <divide/>
                <ci>mu_re3_out</ci>
                <apply>
                  <times/>
                  <ci>R</ci>
                  <ci>T</ci>
                </apply>
              </apply>
            </apply>
          </apply>
        </apply>
      </apply>
      <apply>
        <eq/>
        <ci>v_re4</ci>
        <apply>
          <times/>
          <ci>kappa_re4</ci>
          <apply>
            <minus/>
            <apply>
              <exp/>
              <apply>
                <divide/>
                <ci>mu_re4_in</ci>
                <apply>
                  <times/>
                  <ci>R</ci>
                  <ci>T</ci>
                </apply>
              </apply>
            </apply>
            <apply>
              <exp/>
              <apply>
                <divide/>
                <ci>mu_re4_out</ci>
                <apply>
                  <times/>
                  <ci>R</ci>
                  <ci>T</ci>
                </apply>
              </apply>
            </apply>
          </apply>
        </apply>
      </apply>
      <apply>
        <eq/>
        <ci>v_re5</ci>
        <apply>
          <times/>
          <ci>kappa_re5</ci>
          <apply>
            <minus/>
            <apply>
              <exp/>
              <apply>
                <divide/>
                <ci>mu_re5_in</ci>
                <apply>
                  <times/>
                  <ci>R</ci>
                  <ci>T</ci>
                </apply>
              </apply>
            </apply>
            <apply>
              <exp/>
              <apply>
                <divide/>
                <ci>mu_re5_out</ci>
                <apply>
                  <times/>
                  <ci>R</ci>
                  <ci>T</ci>
                </apply>
              </apply>
            </apply>
          </apply>
        </apply>
      </apply>
      <apply>
        <eq/>
        <ci>v_re6</ci>
        <apply>
          <times/>
          <ci>kappa_re6</ci>
          <apply>
            <minus/>
            <apply>
              <exp/>
              <apply>
                <divide/>
                <ci>mu_re6_in</ci>
                <apply>
                  <times/>
                  <ci>R</ci>
                  <ci>T</ci>
                </apply>
              </apply>
            </apply>
            <apply>
              <exp/>
              <apply>
                <divide/>
                <ci>mu_re6_out</ci>
                <apply>
                  <times/>
                  <ci>R</ci>
                  <ci>T</ci>
                </apply>
              </apply>
            </apply>
          </apply>
        </apply>
      </apply>
      <apply>
        <eq/>
        <ci>v_re7</ci>
        <apply>
          <times/>
          <ci>kappa_re7</ci>
          <apply>
            <minus/>
            <apply>
              <exp/>
              <apply>
                <divide/>
                <ci>mu_re7_in</ci>
                <apply>
                  <times/>
                  <ci>R</ci>
                  <ci>T</ci>
                </apply>
              </apply>
            </apply>
            <apply>
              <exp/>
              <apply>
                <divide/>
                <ci>mu_re7_out</ci>
                <apply>
                  <times/>
                  <ci>R</ci>
                  <ci>T</ci>
                </apply>
              </apply>
            </apply>
          </apply>
        </apply>
      </apply>
      <apply>
        <eq/>
        <ci>v_re8</ci>
        <apply>
          <times/>
          <ci>kappa_re8</ci>
          <apply>
            <minus/>
            <apply>
              <exp/>
              <apply>
                <divide/>
                <ci>mu_re8_in</ci>
                <apply>
                  <times/>
                  <ci>R</ci>
                  <ci>T</ci>
                </apply>
              </apply>
            </apply>
            <apply>
              <exp/>
              <apply>
                <divide/>
                <ci>mu_re8_out</ci>
                <apply>
                  <times/>
                  <ci>R</ci>
                  <ci>T</ci>
                </apply>
              </apply>
            </apply>
          </apply>
        </apply>
      </apply>
      <apply>
        <eq/>
        <ci>v_re9</ci>
        <apply>
          <times/>
          <ci>kappa_re9</ci>
          <apply>
            <minus/>
            <apply>
              <exp/>
              <apply>
                <divide/>
                <ci>mu_re9_in</ci>
                <apply>
                  <times/>
                  <ci>R</ci>
                  <ci>T</ci>
                </apply>
              </apply>
            </apply>
            <apply>
              <exp/>
              <apply>
                <divide/>
                <ci>mu_re9_out</ci>
                <apply>
                  <times/>
                  <ci>R</ci>
                  <ci>T</ci>
                </apply>
              </apply>
            </apply>
          </apply>
        </apply>
      </apply>
      <apply>
        <eq/>
        <ci>v_re10</ci>
        <apply>
          <times/>
          <ci>kappa_re10</ci>
          <apply>
            <minus/>
            <apply>
              <exp/>
              <apply>
                <divide/>
                <ci>mu_re10_in</ci>
                <apply>
                  <times/>
                  <ci>R</ci>
                  <ci>T</ci>
                </apply>
              </apply>
            </apply>
            <apply>
              <exp/>
              <apply>
                <divide/>
                <ci>mu_re10_out</ci>
                <apply>
                  <times/>
                  <ci>R</ci>
                  <ci>T</ci>
                </apply>
              </apply>
            </apply>
          </apply>
        </apply>
      </apply>
      <apply>
        <eq/>
        <ci>v_Ao</ci>
        <apply>
          <minus/>
          <ci>v_re5</ci>
        </apply>
      </apply>
      <apply>
        <eq/>
        <ci>v_Ai</ci>
        <ci>v_re6</ci>
      </apply>
      <apply>
        <eq/>
        <ci>v_Ho</ci>
        <apply>
          <minus/>
          <ci>v_re3</ci>
        </apply>
      </apply>
      <apply>
        <eq/>
        <ci>v_Hi</ci>
        <ci>v_re4</ci>
      </apply>
      <apply>
        <eq/>
        <ci>v_Nai</ci>
        <apply>
          <times/>
          <cn cellml:units="dimensionless">3</cn>
          <ci>v_re2</ci>
        </apply>
      </apply>
      <apply>
        <eq/>
        <ci>v_Nao</ci>
        <apply>
          <times/>
          <apply>
            <minus/>
            <cn cellml:units="dimensionless">3</cn>
          </apply>
          <ci>v_re1</ci>
        </apply>
      </apply>
      <apply>
        <eq/>
        <ci>v_Ki</ci>
        <apply>
          <minus/>
          <ci>v_re8</ci>
        </apply>
      </apply>
      <apply>
        <eq/>
        <ci>v_Ko</ci>
        <ci>v_re7</ci>
      </apply>
      <apply>
        <eq/>
        <ci>v_9</ci>
        <apply>
          <plus/>
          <apply>
            <minus/>
            <ci>v_re1</ci>
          </apply>
          <ci>v_re7</ci>
        </apply>
      </apply>
      <apply>
        <eq/>
        <ci>v_10</ci>
        <apply>
          <plus/>
          <apply>
            <minus/>
            <ci>v_re8</ci>
          </apply>
          <ci>v_re2</ci>
        </apply>
      </apply>
      <apply>
        <eq/>
        <ci>v_11</ci>
        <apply>
          <plus/>
          <apply>
            <minus/>
            <ci>v_re3</ci>
          </apply>
          <ci>v_re1</ci>
        </apply>
      </apply>
      <apply>
        <eq/>
        <ci>v_12</ci>
        <apply>
          <plus/>
          <apply>
            <minus/>
            <ci>v_re2</ci>
          </apply>
          <ci>v_re4</ci>
        </apply>
      </apply>
      <apply>
        <eq/>
        <ci>v_13</ci>
        <apply>
          <plus/>
          <apply>
            <minus/>
            <ci>v_re5</ci>
          </apply>
          <ci>v_re3</ci>
        </apply>
      </apply>
      <apply>
        <eq/>
        <ci>v_14</ci>
        <apply>
          <plus/>
          <apply>
            <minus/>
            <ci>v_re4</ci>
          </apply>
          <ci>v_re6</ci>
        </apply>
      </apply>
      <apply>
        <eq/>
        <ci>v_15</ci>
        <apply>
          <plus/>
          <apply>
            <minus/>
            <ci>v_re9</ci>
          </apply>
          <ci>v_re5</ci>
        </apply>
      </apply>
      <apply>
        <eq/>
        <ci>v_16</ci>
        <apply>
          <plus/>
          <apply>
            <minus/>
            <ci>v_re6</ci>
          </apply>
          <ci>v_re9</ci>
        </apply>
      </apply>
      <apply>
        <eq/>
        <ci>v_17</ci>
        <apply>
          <plus/>
          <apply>
            <minus/>
            <ci>v_re7</ci>
          </apply>
          <ci>v_re10</ci>
        </apply>
      </apply>
      <apply>
        <eq/>
        <ci>v_18</ci>
        <apply>
          <plus/>
          <apply>
            <minus/>
            <ci>v_re10</ci>
          </apply>
          <ci>v_re8</ci>
        </apply>
      </apply>
      <apply>
        <eq/>
        <ci>mu_re1_in</ci>
        <apply>
          <plus/>
          <apply>
            <times/>
            <cn cellml:units="dimensionless">3</cn>
            <ci>mu_Nao</ci>
          </apply>
          <ci>mu_9</ci>
        </apply>
      </apply>
      <apply>
        <eq/>
        <ci>mu_re1_out</ci>
        <ci>mu_11</ci>
      </apply>
      <apply>
        <eq/>
        <ci>mu_re2_in</ci>
        <ci>mu_12</ci>
      </apply>
      <apply>
        <eq/>
        <ci>mu_re2_out</ci>
        <apply>
          <plus/>
          <apply>
            <times/>
            <cn cellml:units="dimensionless">3</cn>
            <ci>mu_Nai</ci>
          </apply>
          <ci>mu_10</ci>
        </apply>
      </apply>
      <apply>
        <eq/>
        <ci>mu_re3_in</ci>
        <apply>
          <plus/>
          <ci>mu_Ho</ci>
          <ci>mu_11</ci>
        </apply>
      </apply>
      <apply>
        <eq/>
        <ci>mu_re3_out</ci>
        <ci>mu_13</ci>
      </apply>
      <apply>
        <eq/>
        <ci>mu_re4_in</ci>
        <ci>mu_14</ci>
      </apply>
      <apply>
        <eq/>
        <ci>mu_re4_out</ci>
        <apply>
          <plus/>
          <ci>mu_Hi</ci>
          <ci>mu_12</ci>
        </apply>
      </apply>
      <apply>
        <eq/>
        <ci>mu_re5_in</ci>
        <apply>
          <plus/>
          <ci>mu_Ao</ci>
          <ci>mu_13</ci>
        </apply>
      </apply>
      <apply>
        <eq/>
        <ci>mu_re5_out</ci>
        <ci>mu_15</ci>
      </apply>
      <apply>
        <eq/>
        <ci>mu_re6_in</ci>
        <ci>mu_16</ci>
      </apply>
      <apply>
        <eq/>
        <ci>mu_re6_out</ci>
        <apply>
          <plus/>
          <ci>mu_Ai</ci>
          <ci>mu_14</ci>
        </apply>
      </apply>
      <apply>
        <eq/>
        <ci>mu_re7_in</ci>
        <ci>mu_17</ci>
      </apply>
      <apply>
        <eq/>
        <ci>mu_re7_out</ci>
        <apply>
          <plus/>
          <ci>mu_Ko</ci>
          <ci>mu_9</ci>
        </apply>
      </apply>
      <apply>
        <eq/>
        <ci>mu_re8_in</ci>
        <apply>
          <plus/>
          <ci>mu_Ki</ci>
          <ci>mu_10</ci>
        </apply>
      </apply>
      <apply>
        <eq/>
        <ci>mu_re8_out</ci>
        <ci>mu_18</ci>
      </apply>
      <apply>
        <eq/>
        <ci>mu_re9_in</ci>
        <ci>mu_15</ci>
      </apply>
      <apply>
        <eq/>
        <ci>mu_re9_out</ci>
        <ci>mu_16</ci>
      </apply>
      <apply>
        <eq/>
        <ci>mu_re10_in</ci>
        <ci>mu_18</ci>
      </apply>
      <apply>
        <eq/>
        <ci>mu_re10_out</ci>
        <ci>mu_17</ci>
      </apply>
    </math>
  </component>
  <component name="SLCT1_BG_param" id="b4db33">
    <variable name="K_Ao" units="per_fmol" initial_value="1" interface="public" id="b4db35"/>
    <variable name="K_Ai" units="per_fmol" initial_value="1" interface="public" id="b4db36"/>
    <variable name="K_Ho" units="per_fmol" initial_value="1" interface="public" id="b4db37"/>
    <variable name="K_Hi" units="per_fmol" initial_value="1" interface="public" id="b4db38"/>
    <variable name="K_Nai" units="per_fmol" initial_value="1" interface="public" id="b4db39"/>
    <variable name="K_Nao" units="per_fmol" initial_value="1" interface="public" id="b4db3a"/>
    <variable name="K_Ki" units="per_fmol" initial_value="1" interface="public" id="b4db3b"/>
    <variable name="K_Ko" units="per_fmol" initial_value="1" interface="public" id="b4db3c"/>
    <variable name="K_9" units="per_fmol" initial_value="1" interface="public" id="b4db3d"/>
    <variable name="q_9_init" units="fmol" initial_value="1" interface="public" id="b4db3e"/>
    <variable name="K_10" units="per_fmol" initial_value="1" interface="public" id="b4db3f"/>
    <variable name="q_10_init" units="fmol" initial_value="1" interface="public" id="b4db40"/>
    <variable name="K_11" units="per_fmol" initial_value="1" interface="public" id="b4db41"/>
    <variable name="q_11_init" units="fmol" initial_value="1" interface="public" id="b4db42"/>
    <variable name="K_12" units="per_fmol" initial_value="1" interface="public" id="b4db43"/>
    <variable name="q_12_init" units="fmol" initial_value="1" interface="public" id="b4db44"/>
    <variable name="K_13" units="per_fmol" initial_value="1" interface="public" id="b4db45"/>
    <variable name="q_13_init" units="fmol" initial_value="1" interface="public" id="b4db46"/>
    <variable name="K_14" units="per_fmol" initial_value="1" interface="public" id="b4db47"/>
    <variable name="q_14_init" units="fmol" initial_value="1" interface="public" id="b4db48"/>
    <variable name="K_15" units="per_fmol" initial_value="1" interface="public" id="b4db49"/>
    <variable name="q_15_init" units="fmol" initial_value="1" interface="public" id="b4db4a"/>
    <variable name="K_16" units="per_fmol" initial_value="1" interface="public" id="b4db4b"/>
    <variable name="q_16_init" units="fmol" initial_value="1" interface="public" id="b4db4c"/>
    <variable name="K_17" units="per_fmol" initial_value="1" interface="public" id="b4db4d"/>
    <variable name="q_17_init" units="fmol" initial_value="1" interface="public" id="b4db4e"/>
    <variable name="K_18" units="per_fmol" initial_value="1" interface="public" id="b4db4f"/>
    <variable name="q_18_init" units="fmol" initial_value="1" interface="public" id="b4db50"/>
    <variable name="kappa_re1" units="fmol_per_sec" initial_value="1" interface="public" id="b4db51"/>
    <variable name="kappa_re2" units="fmol_per_sec" initial_value="1" interface="public" id="b4db52"/>
    <variable name="kappa_re3" units="fmol_per_sec" initial_value="1" interface="public" id="b4db53"/>
    <variable name="kappa_re4" units="fmol_per_sec" initial_value="1" interface="public" id="b4db54"/>
    <variable name="kappa_re5" units="fmol_per_sec" initial_value="1" interface="public" id="b4db55"/>
    <variable name="kappa_re6" units="fmol_per_sec" initial_value="1" interface="public" id="b4db56"/>
    <variable name="kappa_re7" units="fmol_per_sec" initial_value="1" interface="public" id="b4db57"/>
    <variable name="kappa_re8" units="fmol_per_sec" initial_value="1" interface="public" id="b4db58"/>
    <variable name="kappa_re9" units="fmol_per_sec" initial_value="1" interface="public" id="b4db59"/>
    <variable name="kappa_re10" units="fmol_per_sec" initial_value="1" interface="public" id="b4db5a"/>
    <variable name="F" units="C_per_mol" initial_value="96485" interface="public" id="b4db5b"/>
    <variable name="R" units="J_per_K_per_mol" initial_value="8.31" interface="public" id="b4db5c"/>
    <variable name="T" units="kelvin" initial_value="293" interface="public" id="b4db5d"/>
  </component>
  <component name="SLCT1_BG_io" id="b4db5e">
    <variable name="q_Ao" units="fmol" initial_value="1" interface="public" id="b4db5f"/>
    <variable name="q_Ai" units="fmol" initial_value="1" interface="public" id="b4db60"/>
    <variable name="q_Ho" units="fmol" initial_value="1" interface="public" id="b4db61"/>
    <variable name="q_Hi" units="fmol" initial_value="1" interface="public" id="b4db62"/>
    <variable name="q_Nai" units="fmol" initial_value="1" interface="public" id="b4db63"/>
    <variable name="q_Nao" units="fmol" initial_value="1" interface="public" id="b4db64"/>
    <variable name="q_Ki" units="fmol" initial_value="1" interface="public" id="b4db65"/>
    <variable name="q_Ko" units="fmol" initial_value="1" interface="public" id="b4db66"/>
  </component>
  <connection component_1="SLCT1_BG_test" component_2="SLCT1_BG" id="b4da6f">
    <map_variables variable_1="v_Ao" variable_2="v_Ao" id="b4da70"/>
    <map_variables variable_1="q_Ao" variable_2="q_Ao" id="b4da71"/>
    <map_variables variable_1="v_Ai" variable_2="v_Ai" id="b4da74"/>
    <map_variables variable_1="q_Ai" variable_2="q_Ai" id="b4da75"/>
    <map_variables variable_1="v_Ho" variable_2="v_Ho" id="b4da77"/>
    <map_variables variable_1="q_Ho" variable_2="q_Ho" id="b4da78"/>
    <map_variables variable_1="v_Hi" variable_2="v_Hi" id="b4da7a"/>
    <map_variables variable_1="q_Hi" variable_2="q_Hi" id="b4da7b"/>
    <map_variables variable_1="v_Nai" variable_2="v_Nai" id="b4da7d"/>
    <map_variables variable_1="q_Nai" variable_2="q_Nai" id="b4da7e"/>
    <map_variables variable_1="v_Nao" variable_2="v_Nao" id="b4da80"/>
    <map_variables variable_1="q_Nao" variable_2="q_Nao" id="b4da81"/>
    <map_variables variable_1="v_Ki" variable_2="v_Ki" id="b4da83"/>
    <map_variables variable_1="q_Ki" variable_2="q_Ki" id="b4da84"/>
    <map_variables variable_1="v_Ko" variable_2="v_Ko" id="b4da86"/>
    <map_variables variable_1="q_Ko" variable_2="q_Ko" id="b4da87"/>
  </connection>
  <connection component_1="SLCT1_BG_test" component_2="SLCT1_BG_io" id="b4da72">
    <map_variables variable_1="q_Ao" variable_2="q_Ao" id="b4da73"/>
    <map_variables variable_1="q_Ai" variable_2="q_Ai" id="b4da76"/>
    <map_variables variable_1="q_Ho" variable_2="q_Ho" id="b4da79"/>
    <map_variables variable_1="q_Hi" variable_2="q_Hi" id="b4da7c"/>
    <map_variables variable_1="q_Nai" variable_2="q_Nai" id="b4da7f"/>
    <map_variables variable_1="q_Nao" variable_2="q_Nao" id="b4da82"/>
    <map_variables variable_1="q_Ki" variable_2="q_Ki" id="b4da85"/>
    <map_variables variable_1="q_Ko" variable_2="q_Ko" id="b4da88"/>
  </connection>
  <connection component_1="SLCT1_BG" component_2="SLCT1_BG_param" id="b4db09">
    <map_variables variable_1="K_Ao" variable_2="K_Ao" id="b4db0a"/>
    <map_variables variable_1="K_Ai" variable_2="K_Ai" id="b4db0b"/>
    <map_variables variable_1="K_Ho" variable_2="K_Ho" id="b4db0c"/>
    <map_variables variable_1="K_Hi" variable_2="K_Hi" id="b4db0d"/>
    <map_variables variable_1="K_Nai" variable_2="K_Nai" id="b4db0e"/>
    <map_variables variable_1="K_Nao" variable_2="K_Nao" id="b4db0f"/>
    <map_variables variable_1="K_Ki" variable_2="K_Ki" id="b4db10"/>
    <map_variables variable_1="K_Ko" variable_2="K_Ko" id="b4db11"/>
    <map_variables variable_1="K_9" variable_2="K_9" id="b4db12"/>
    <map_variables variable_1="q_9_init" variable_2="q_9_init" id="b4db13"/>
    <map_variables variable_1="K_10" variable_2="K_10" id="b4db14"/>
    <map_variables variable_1="q_10_init" variable_2="q_10_init" id="b4db15"/>
    <map_variables variable_1="K_11" variable_2="K_11" id="b4db16"/>
    <map_variables variable_1="q_11_init" variable_2="q_11_init" id="b4db17"/>
    <map_variables variable_1="K_12" variable_2="K_12" id="b4db18"/>
    <map_variables variable_1="q_12_init" variable_2="q_12_init" id="b4db19"/>
    <map_variables variable_1="K_13" variable_2="K_13" id="b4db1a"/>
    <map_variables variable_1="q_13_init" variable_2="q_13_init" id="b4db1b"/>
    <map_variables variable_1="K_14" variable_2="K_14" id="b4db1c"/>
    <map_variables variable_1="q_14_init" variable_2="q_14_init" id="b4db1d"/>
    <map_variables variable_1="K_15" variable_2="K_15" id="b4db1e"/>
    <map_variables variable_1="q_15_init" variable_2="q_15_init" id="b4db1f"/>
    <map_variables variable_1="K_16" variable_2="K_16" id="b4db20"/>
    <map_variables variable_1="q_16_init" variable_2="q_16_init" id="b4db21"/>
    <map_variables variable_1="K_17" variable_2="K_17" id="b4db22"/>
    <map_variables variable_1="q_17_init" variable_2="q_17_init" id="b4db23"/>
    <map_variables variable_1="K_18" variable_2="K_18" id="b4db24"/>
    <map_variables variable_1="q_18_init" variable_2="q_18_init" id="b4db25"/>
    <map_variables variable_1="kappa_re1" variable_2="kappa_re1" id="b4db26"/>
    <map_variables variable_1="kappa_re2" variable_2="kappa_re2" id="b4db27"/>
    <map_variables variable_1="kappa_re3" variable_2="kappa_re3" id="b4db28"/>
    <map_variables variable_1="kappa_re4" variable_2="kappa_re4" id="b4db29"/>
    <map_variables variable_1="kappa_re5" variable_2="kappa_re5" id="b4db2a"/>
    <map_variables variable_1="kappa_re6" variable_2="kappa_re6" id="b4db2b"/>
    <map_variables variable_1="kappa_re7" variable_2="kappa_re7" id="b4db2c"/>
    <map_variables variable_1="kappa_re8" variable_2="kappa_re8" id="b4db2d"/>
    <map_variables variable_1="kappa_re9" variable_2="kappa_re9" id="b4db2e"/>
    <map_variables variable_1="kappa_re10" variable_2="kappa_re10" id="b4db2f"/>
    <map_variables variable_1="F" variable_2="F" id="b4db30"/>
    <map_variables variable_1="R" variable_2="R" id="b4db31"/>
    <map_variables variable_1="T" variable_2="T" id="b4db32"/>
  </connection>
  <encapsulation id="b4db67">
    <component_ref component="SLCT1_BG_test" id="b4da5e">
      <component_ref component="SLCT1_BG" id="b4da8a"/>
      <component_ref component="SLCT1_BG_param" id="b4db34"/>
    </component_ref>
  </encapsulation>
</model>
