def model SLCT11_BG_ss as
  def import using "../units_BG.cellml" for
    unit per_fmol6_sec9 using unit per_fmol6_sec9;
    unit J_per_K_per_mol using unit J_per_K_per_mol;
    unit per_fmol_sec9 using unit per_fmol_sec9;
    unit per_fmol5_sec9 using unit per_fmol5_sec9;
    unit fmol using unit fmol;
    unit C_per_mol using unit C_per_mol;
    unit per_fmol3_sec9 using unit per_fmol3_sec9;
    unit fmol_per_sec using unit fmol_per_sec;
    unit per_fmol4_sec9 using unit per_fmol4_sec9;
    unit per_fmol using unit per_fmol;
    unit per_fmol4_sec10 using unit per_fmol4_sec10;
    unit per_fmol2_sec9 using unit per_fmol2_sec9;
  enddef;

  def comp SLCT11_BG_ss as
    var P_0: per_fmol4_sec10 {interface: public};
    var P_1: per_fmol4_sec10 {interface: public};
    var P_2: per_fmol_sec9 {interface: public};
    var P_3: per_fmol_sec9 {interface: public};
    var P_4: per_fmol2_sec9 {interface: public};
    var P_5: per_fmol2_sec9 {interface: public};
    var P_6: per_fmol2_sec9 {interface: public};
    var P_7: per_fmol2_sec9 {interface: public};
    var P_8: per_fmol2_sec9 {interface: public};
    var P_9: per_fmol2_sec9 {interface: public};
    var P_10: per_fmol2_sec9 {interface: public};
    var P_11: per_fmol3_sec9 {interface: public};
    var P_12: per_fmol3_sec9 {interface: public};
    var P_13: per_fmol3_sec9 {interface: public};
    var P_14: per_fmol3_sec9 {interface: public};
    var P_15: per_fmol3_sec9 {interface: public};
    var P_16: per_fmol3_sec9 {interface: public};
    var P_17: per_fmol3_sec9 {interface: public};
    var P_18: per_fmol3_sec9 {interface: public};
    var P_19: per_fmol3_sec9 {interface: public};
    var P_20: per_fmol3_sec9 {interface: public};
    var P_21: per_fmol3_sec9 {interface: public};
    var P_22: per_fmol3_sec9 {interface: public};
    var P_23: per_fmol3_sec9 {interface: public};
    var P_24: per_fmol3_sec9 {interface: public};
    var P_25: per_fmol4_sec9 {interface: public};
    var P_26: per_fmol4_sec9 {interface: public};
    var P_27: per_fmol4_sec9 {interface: public};
    var P_28: per_fmol4_sec9 {interface: public};
    var P_29: per_fmol4_sec9 {interface: public};
    var P_30: per_fmol4_sec9 {interface: public};
    var P_31: per_fmol4_sec9 {interface: public};
    var P_32: per_fmol4_sec9 {interface: public};
    var P_33: per_fmol4_sec9 {interface: public};
    var P_34: per_fmol4_sec9 {interface: public};
    var P_35: per_fmol5_sec9 {interface: public};
    var P_36: per_fmol5_sec9 {interface: public};
    var P_37: per_fmol5_sec9 {interface: public};
    var P_38: per_fmol5_sec9 {interface: public};
    var P_39: per_fmol5_sec9 {interface: public};
    var P_40: per_fmol5_sec9 {interface: public};
    var P_41: per_fmol5_sec9 {interface: public};
    var P_42: per_fmol5_sec9 {interface: public};
    var P_43: per_fmol6_sec9 {interface: public};
    var P_44: per_fmol6_sec9 {interface: public};
    var P_45: per_fmol6_sec9 {interface: public};
    var E: fmol {interface: public};
    var K_Ki: per_fmol {interface: public};
    var K_Ko: per_fmol {interface: public};
    var K_Nai: per_fmol {interface: public};
    var K_Nao: per_fmol {interface: public};
    var K_So: per_fmol {interface: public};
    var K_Si: per_fmol {interface: public};
    var K_Clo: per_fmol {interface: public};
    var K_Cli: per_fmol {interface: public};
    var K_9: per_fmol {interface: public};
    var q_9_init: fmol {interface: public};
    var K_10: per_fmol {interface: public};
    var q_10_init: fmol {interface: public};
    var K_11: per_fmol {interface: public};
    var q_11_init: fmol {interface: public};
    var K_12: per_fmol {interface: public};
    var q_12_init: fmol {interface: public};
    var K_13: per_fmol {interface: public};
    var q_13_init: fmol {interface: public};
    var K_14: per_fmol {interface: public};
    var q_14_init: fmol {interface: public};
    var K_15: per_fmol {interface: public};
    var q_15_init: fmol {interface: public};
    var K_16: per_fmol {interface: public};
    var q_16_init: fmol {interface: public};
    var K_17: per_fmol {interface: public};
    var q_17_init: fmol {interface: public};
    var K_18: per_fmol {interface: public};
    var q_18_init: fmol {interface: public};
    var kappa_re1: fmol_per_sec {interface: public};
    var kappa_re2: fmol_per_sec {interface: public};
    var kappa_re3: fmol_per_sec {interface: public};
    var kappa_re4: fmol_per_sec {interface: public};
    var kappa_re5: fmol_per_sec {interface: public};
    var kappa_re6: fmol_per_sec {interface: public};
    var kappa_re7: fmol_per_sec {interface: public};
    var kappa_re8: fmol_per_sec {interface: public};
    var kappa_re9: fmol_per_sec {interface: public};
    var kappa_re10: fmol_per_sec {interface: public};
    var F: C_per_mol {interface: public};
    var R: J_per_K_per_mol {interface: public};
    var T: kelvin {interface: public};
    P_0 = K_10*K_11*K_12*K_13*K_14*K_15*K_16*K_17*K_18*K_9*K_Clo*K_Ki*K_Nao*K_So*kappa_re1*kappa_re10*kappa_re2*kappa_re3*kappa_re4*kappa_re5*kappa_re6*kappa_re7*kappa_re8*kappa_re9;
    P_1 = K_10*K_11*K_12*K_13*K_14*K_15*K_16*K_17*K_18*K_9*K_Cli*K_Ko*K_Nai*K_Si*kappa_re1*kappa_re10*kappa_re2*kappa_re3*kappa_re4*kappa_re5*kappa_re6*kappa_re7*kappa_re8*kappa_re9;
    P_2 = K_10*K_11*K_12*K_13*K_14*K_15*K_17*K_18*K_9*K_Ko*kappa_re1*kappa_re10*kappa_re2*kappa_re3*kappa_re4*kappa_re5*kappa_re6*kappa_re7*kappa_re8+K_10*K_11*K_12*K_13*K_14*K_15*K_17*K_18*K_9*K_Ko*kappa_re1*kappa_re10*kappa_re2*kappa_re3*kappa_re4*kappa_re5*kappa_re7*kappa_re8*kappa_re9+K_10*K_11*K_12*K_13*K_14*K_15*K_17*K_18*K_9*K_Ko*kappa_re1*kappa_re10*kappa_re2*kappa_re3*kappa_re4*kappa_re6*kappa_re7*kappa_re8*kappa_re9;
    P_3 = K_10*K_11*K_12*K_13*K_14*K_16*K_17*K_18*K_9*K_Ki*kappa_re1*kappa_re10*kappa_re2*kappa_re3*kappa_re4*kappa_re5*kappa_re6*kappa_re7*kappa_re8+K_10*K_11*K_12*K_13*K_14*K_16*K_17*K_18*K_9*K_Ki*kappa_re1*kappa_re10*kappa_re2*kappa_re3*kappa_re4*kappa_re5*kappa_re7*kappa_re8*kappa_re9+K_10*K_11*K_12*K_13*K_14*K_16*K_17*K_18*K_9*K_Ki*kappa_re1*kappa_re10*kappa_re2*kappa_re3*kappa_re4*kappa_re6*kappa_re7*kappa_re8*kappa_re9;
    P_4 = K_10*K_11*K_12*K_13*K_14*K_15*K_16*K_17*K_18*K_Ki*K_Nao*kappa_re1*kappa_re10*kappa_re2*kappa_re3*kappa_re4*kappa_re5*kappa_re6*kappa_re7*kappa_re8+K_10*K_11*K_12*K_13*K_14*K_15*K_16*K_17*K_18*K_Ki*K_Nao*kappa_re1*kappa_re10*kappa_re2*kappa_re3*kappa_re4*kappa_re5*kappa_re7*kappa_re8*kappa_re9+K_10*K_11*K_12*K_13*K_14*K_15*K_16*K_17*K_18*K_Ki*K_Nao*kappa_re1*kappa_re10*kappa_re2*kappa_re3*kappa_re4*kappa_re6*kappa_re7*kappa_re8*kappa_re9;
    P_5 = K_10*K_11*K_12*K_13*K_14*K_15*K_16*K_17*K_9*K_Ki*K_Ko*kappa_re1*kappa_re10*kappa_re2*kappa_re3*kappa_re4*kappa_re5*kappa_re6*kappa_re7*kappa_re8+K_10*K_11*K_12*K_13*K_14*K_15*K_16*K_17*K_9*K_Ki*K_Ko*kappa_re1*kappa_re10*kappa_re2*kappa_re3*kappa_re4*kappa_re5*kappa_re7*kappa_re8*kappa_re9+K_10*K_11*K_12*K_13*K_14*K_15*K_16*K_17*K_9*K_Ki*K_Ko*kappa_re1*kappa_re10*kappa_re2*kappa_re3*kappa_re4*kappa_re6*kappa_re7*kappa_re8*kappa_re9+K_10*K_11*K_12*K_13*K_14*K_15*K_16*K_18*K_9*K_Ki*K_Ko*kappa_re1*kappa_re10*kappa_re2*kappa_re3*kappa_re4*kappa_re5*kappa_re6*kappa_re7*kappa_re8+K_10*K_11*K_12*K_13*K_14*K_15*K_16*K_18*K_9*K_Ki*K_Ko*kappa_re1*kappa_re10*kappa_re2*kappa_re3*kappa_re4*kappa_re5*kappa_re7*kappa_re8*kappa_re9+K_10*K_11*K_12*K_13*K_14*K_15*K_16*K_18*K_9*K_Ki*K_Ko*kappa_re1*kappa_re10*kappa_re2*kappa_re3*kappa_re4*kappa_re6*kappa_re7*kappa_re8*kappa_re9;
    P_6 = K_10*K_11*K_12*K_13*K_14*K_15*K_17*K_18*K_9*K_Cli*K_Ko*kappa_re1*kappa_re10*kappa_re2*kappa_re3*kappa_re5*kappa_re6*kappa_re7*kappa_re8*kappa_re9;
    P_7 = K_10*K_11*K_12*K_13*K_14*K_15*K_17*K_18*K_9*K_Clo*K_Ko*kappa_re1*kappa_re10*kappa_re2*kappa_re4*kappa_re5*kappa_re6*kappa_re7*kappa_re8*kappa_re9;
    P_8 = K_10*K_11*K_12*K_13*K_14*K_16*K_17*K_18*K_9*K_Cli*K_Ki*kappa_re1*kappa_re10*kappa_re2*kappa_re3*kappa_re5*kappa_re6*kappa_re7*kappa_re8*kappa_re9;
    P_9 = K_10*K_11*K_12*K_13*K_14*K_16*K_17*K_18*K_9*K_Clo*K_Ki*kappa_re1*kappa_re10*kappa_re2*kappa_re4*kappa_re5*kappa_re6*kappa_re7*kappa_re8*kappa_re9;
    P_10 = K_11*K_12*K_13*K_14*K_15*K_16*K_17*K_18*K_9*K_Ko*K_Nai*kappa_re1*kappa_re10*kappa_re2*kappa_re3*kappa_re4*kappa_re5*kappa_re6*kappa_re7*kappa_re8+K_11*K_12*K_13*K_14*K_15*K_16*K_17*K_18*K_9*K_Ko*K_Nai*kappa_re1*kappa_re10*kappa_re2*kappa_re3*kappa_re4*kappa_re5*kappa_re7*kappa_re8*kappa_re9+K_11*K_12*K_13*K_14*K_15*K_16*K_17*K_18*K_9*K_Ko*K_Nai*kappa_re1*kappa_re10*kappa_re2*kappa_re3*kappa_re4*kappa_re6*kappa_re7*kappa_re8*kappa_re9;
    P_11 = K_10*K_11*K_12*K_13*K_14*K_15*K_16*K_17*K_18*K_Cli*K_Ki*K_Nao*kappa_re1*kappa_re10*kappa_re2*kappa_re3*kappa_re5*kappa_re6*kappa_re7*kappa_re8*kappa_re9;
    P_12 = K_10*K_11*K_12*K_13*K_14*K_15*K_16*K_17*K_18*K_Clo*K_Ki*K_Nao*kappa_re1*kappa_re10*kappa_re2*kappa_re4*kappa_re5*kappa_re6*kappa_re7*kappa_re8*kappa_re9;
    P_13 = K_10*K_11*K_12*K_13*K_14*K_15*K_16*K_17*K_9*K_Cli*K_Ki*K_Ko*kappa_re1*kappa_re10*kappa_re2*kappa_re3*kappa_re5*kappa_re6*kappa_re7*kappa_re8*kappa_re9+K_10*K_11*K_12*K_13*K_14*K_15*K_16*K_18*K_9*K_Cli*K_Ki*K_Ko*kappa_re1*kappa_re10*kappa_re2*kappa_re3*kappa_re5*kappa_re6*kappa_re7*kappa_re8*kappa_re9;
    P_14 = K_10*K_11*K_12*K_13*K_14*K_15*K_16*K_17*K_9*K_Clo*K_Ki*K_Ko*kappa_re1*kappa_re10*kappa_re2*kappa_re4*kappa_re5*kappa_re6*kappa_re7*kappa_re8*kappa_re9+K_10*K_11*K_12*K_13*K_14*K_15*K_16*K_18*K_9*K_Clo*K_Ki*K_Ko*kappa_re1*kappa_re10*kappa_re2*kappa_re4*kappa_re5*kappa_re6*kappa_re7*kappa_re8*kappa_re9;
    P_15 = K_10*K_11*K_12*K_13*K_14*K_15*K_17*K_18*K_9*K_Cli*K_Ko*K_Si*kappa_re1*kappa_re10*kappa_re3*kappa_re4*kappa_re5*kappa_re6*kappa_re7*kappa_re8*kappa_re9;
    P_16 = K_10*K_11*K_12*K_13*K_14*K_15*K_17*K_18*K_9*K_Clo*K_Ko*K_So*kappa_re10*kappa_re2*kappa_re3*kappa_re4*kappa_re5*kappa_re6*kappa_re7*kappa_re8*kappa_re9;
    P_17 = K_10*K_11*K_12*K_13*K_14*K_15*K_17*K_18*K_9*K_Clo*K_Nao*K_So*kappa_re1*kappa_re10*kappa_re2*kappa_re3*kappa_re4*kappa_re5*kappa_re6*kappa_re7*kappa_re9+K_10*K_11*K_12*K_13*K_14*K_15*K_17*K_18*K_9*K_Clo*K_Nao*K_So*kappa_re1*kappa_re10*kappa_re2*kappa_re3*kappa_re4*kappa_re5*kappa_re6*kappa_re8*kappa_re9+K_10*K_11*K_12*K_13*K_14*K_15*K_17*K_18*K_9*K_Clo*K_Nao*K_So*kappa_re1*kappa_re2*kappa_re3*kappa_re4*kappa_re5*kappa_re6*kappa_re7*kappa_re8*kappa_re9;
    P_18 = K_10*K_11*K_12*K_13*K_14*K_16*K_17*K_18*K_9*K_Cli*K_Ki*K_Si*kappa_re1*kappa_re10*kappa_re3*kappa_re4*kappa_re5*kappa_re6*kappa_re7*kappa_re8*kappa_re9;
    P_19 = K_10*K_11*K_12*K_13*K_14*K_16*K_17*K_18*K_9*K_Cli*K_Nai*K_Si*kappa_re1*kappa_re10*kappa_re2*kappa_re3*kappa_re4*kappa_re5*kappa_re6*kappa_re7*kappa_re9+K_10*K_11*K_12*K_13*K_14*K_16*K_17*K_18*K_9*K_Cli*K_Nai*K_Si*kappa_re1*kappa_re10*kappa_re2*kappa_re3*kappa_re4*kappa_re5*kappa_re6*kappa_re8*kappa_re9+K_10*K_11*K_12*K_13*K_14*K_16*K_17*K_18*K_9*K_Cli*K_Nai*K_Si*kappa_re1*kappa_re2*kappa_re3*kappa_re4*kappa_re5*kappa_re6*kappa_re7*kappa_re8*kappa_re9;
    P_20 = K_10*K_11*K_12*K_13*K_14*K_16*K_17*K_18*K_9*K_Clo*K_Ki*K_So*kappa_re10*kappa_re2*kappa_re3*kappa_re4*kappa_re5*kappa_re6*kappa_re7*kappa_re8*kappa_re9;
    P_21 = K_10*K_11*K_13*K_14*K_15*K_16*K_17*K_18*K_9*K_Ko*K_Nai*K_Si*kappa_re1*kappa_re10*kappa_re2*kappa_re3*kappa_re4*kappa_re5*kappa_re6*kappa_re7*kappa_re8+K_10*K_11*K_13*K_14*K_15*K_16*K_17*K_18*K_9*K_Ko*K_Nai*K_Si*kappa_re1*kappa_re10*kappa_re2*kappa_re3*kappa_re4*kappa_re5*kappa_re7*kappa_re8*kappa_re9+K_10*K_11*K_13*K_14*K_15*K_16*K_17*K_18*K_9*K_Ko*K_Nai*K_Si*kappa_re1*kappa_re10*kappa_re2*kappa_re3*kappa_re4*kappa_re6*kappa_re7*kappa_re8*kappa_re9;
    P_22 = K_10*K_12*K_13*K_14*K_15*K_16*K_17*K_18*K_9*K_Ki*K_Nao*K_So*kappa_re1*kappa_re10*kappa_re2*kappa_re3*kappa_re4*kappa_re5*kappa_re6*kappa_re7*kappa_re8+K_10*K_12*K_13*K_14*K_15*K_16*K_17*K_18*K_9*K_Ki*K_Nao*K_So*kappa_re1*kappa_re10*kappa_re2*kappa_re3*kappa_re4*kappa_re5*kappa_re7*kappa_re8*kappa_re9+K_10*K_12*K_13*K_14*K_15*K_16*K_17*K_18*K_9*K_Ki*K_Nao*K_So*kappa_re1*kappa_re10*kappa_re2*kappa_re3*kappa_re4*kappa_re6*kappa_re7*kappa_re8*kappa_re9;
    P_23 = K_11*K_12*K_13*K_14*K_15*K_16*K_17*K_18*K_9*K_Cli*K_Ko*K_Nai*kappa_re1*kappa_re10*kappa_re2*kappa_re3*kappa_re5*kappa_re6*kappa_re7*kappa_re8*kappa_re9;
    P_24 = K_11*K_12*K_13*K_14*K_15*K_16*K_17*K_18*K_9*K_Clo*K_Ko*K_Nai*kappa_re1*kappa_re10*kappa_re2*kappa_re4*kappa_re5*kappa_re6*kappa_re7*kappa_re8*kappa_re9;
    P_25 = K_10*K_11*K_12*K_13*K_14*K_15*K_16*K_17*K_18*K_Cli*K_Ki*K_Nao*K_Si*kappa_re1*kappa_re10*kappa_re3*kappa_re4*kappa_re5*kappa_re6*kappa_re7*kappa_re8*kappa_re9;
    P_26 = K_10*K_11*K_12*K_13*K_14*K_15*K_16*K_17*K_18*K_Cli*K_Ko*K_Nai*K_Si*kappa_re10*kappa_re2*kappa_re3*kappa_re4*kappa_re5*kappa_re6*kappa_re7*kappa_re8*kappa_re9+K_10*K_11*K_12*K_13*K_14*K_15*K_16*K_17*K_9*K_Cli*K_Ko*K_Nai*K_Si*kappa_re1*kappa_re10*kappa_re2*kappa_re3*kappa_re4*kappa_re5*kappa_re6*kappa_re7*kappa_re9+K_10*K_11*K_12*K_13*K_14*K_15*K_16*K_18*K_9*K_Cli*K_Ko*K_Nai*K_Si*kappa_re1*kappa_re10*kappa_re2*kappa_re3*kappa_re4*kappa_re5*kappa_re6*kappa_re7*kappa_re9+K_10*K_11*K_12*K_13*K_14*K_15*K_16*K_18*K_9*K_Cli*K_Ko*K_Nai*K_Si*kappa_re1*kappa_re2*kappa_re3*kappa_re4*kappa_re5*kappa_re6*kappa_re7*kappa_re8*kappa_re9+K_10*K_11*K_12*K_13*K_15*K_16*K_17*K_18*K_9*K_Cli*K_Ko*K_Nai*K_Si*kappa_re1*kappa_re10*kappa_re2*kappa_re3*kappa_re4*kappa_re5*kappa_re6*kappa_re7*kappa_re8+K_10*K_11*K_12*K_13*K_15*K_16*K_17*K_18*K_9*K_Cli*K_Ko*K_Nai*K_Si*kappa_re1*kappa_re10*kappa_re2*kappa_re3*kappa_re4*kappa_re6*kappa_re7*kappa_re8*kappa_re9+K_10*K_11*K_12*K_14*K_15*K_16*K_17*K_18*K_9*K_Cli*K_Ko*K_Nai*K_Si*kappa_re1*kappa_re10*kappa_re2*kappa_re3*kappa_re4*kappa_re6*kappa_re7*kappa_re8*kappa_re9+K_10*K_12*K_13*K_14*K_15*K_16*K_17*K_18*K_9*K_Cli*K_Ko*K_Nai*K_Si*kappa_re1*kappa_re10*kappa_re2*kappa_re4*kappa_re5*kappa_re6*kappa_re7*kappa_re8*kappa_re9;
    P_27 = K_10*K_11*K_12*K_13*K_14*K_15*K_16*K_17*K_18*K_Cli*K_Nai*K_Nao*K_Si*kappa_re1*kappa_re10*kappa_re2*kappa_re3*kappa_re4*kappa_re5*kappa_re6*kappa_re7*kappa_re9+K_10*K_11*K_12*K_13*K_14*K_15*K_16*K_17*K_18*K_Cli*K_Nai*K_Nao*K_Si*kappa_re1*kappa_re10*kappa_re2*kappa_re3*kappa_re4*kappa_re5*kappa_re6*kappa_re8*kappa_re9+K_10*K_11*K_12*K_13*K_14*K_15*K_16*K_17*K_18*K_Cli*K_Nai*K_Nao*K_Si*kappa_re1*kappa_re2*kappa_re3*kappa_re4*kappa_re5*kappa_re6*kappa_re7*kappa_re8*kappa_re9;
    P_28 = K_10*K_11*K_12*K_13*K_14*K_15*K_16*K_17*K_9*K_Cli*K_Ki*K_Ko*K_Si*kappa_re1*kappa_re10*kappa_re3*kappa_re4*kappa_re5*kappa_re6*kappa_re7*kappa_re8*kappa_re9+K_10*K_11*K_12*K_13*K_14*K_15*K_16*K_18*K_9*K_Cli*K_Ki*K_Ko*K_Si*kappa_re1*kappa_re10*kappa_re3*kappa_re4*kappa_re5*kappa_re6*kappa_re7*kappa_re8*kappa_re9;
    P_29 = K_10*K_11*K_12*K_13*K_14*K_15*K_16*K_17*K_9*K_Clo*K_Ki*K_Ko*K_So*kappa_re10*kappa_re2*kappa_re3*kappa_re4*kappa_re5*kappa_re6*kappa_re7*kappa_re8*kappa_re9+K_10*K_11*K_12*K_13*K_14*K_15*K_16*K_18*K_9*K_Clo*K_Ki*K_Ko*K_So*kappa_re10*kappa_re2*kappa_re3*kappa_re4*kappa_re5*kappa_re6*kappa_re7*kappa_re8*kappa_re9;
    P_30 = K_10*K_11*K_12*K_13*K_14*K_15*K_16*K_17*K_9*K_Clo*K_Ki*K_Nao*K_So*kappa_re1*kappa_re10*kappa_re2*kappa_re3*kappa_re4*kappa_re5*kappa_re6*kappa_re8*kappa_re9+K_10*K_11*K_12*K_13*K_14*K_15*K_16*K_17*K_9*K_Clo*K_Ki*K_Nao*K_So*kappa_re1*kappa_re2*kappa_re3*kappa_re4*kappa_re5*kappa_re6*kappa_re7*kappa_re8*kappa_re9+K_10*K_11*K_12*K_13*K_14*K_15*K_16*K_18*K_9*K_Clo*K_Ki*K_Nao*K_So*kappa_re1*kappa_re10*kappa_re2*kappa_re3*kappa_re4*kappa_re5*kappa_re6*kappa_re8*kappa_re9+K_10*K_11*K_12*K_13*K_15*K_16*K_17*K_18*K_9*K_Clo*K_Ki*K_Nao*K_So*kappa_re1*kappa_re10*kappa_re2*kappa_re3*kappa_re4*kappa_re5*kappa_re7*kappa_re8*kappa_re9+K_10*K_11*K_12*K_14*K_15*K_16*K_17*K_18*K_9*K_Clo*K_Ki*K_Nao*K_So*kappa_re1*kappa_re10*kappa_re2*kappa_re3*kappa_re4*kappa_re5*kappa_re6*kappa_re7*kappa_re8+K_10*K_11*K_12*K_14*K_15*K_16*K_17*K_18*K_9*K_Clo*K_Ki*K_Nao*K_So*kappa_re1*kappa_re10*kappa_re2*kappa_re3*kappa_re4*kappa_re5*kappa_re7*kappa_re8*kappa_re9+K_10*K_11*K_13*K_14*K_15*K_16*K_17*K_18*K_9*K_Clo*K_Ki*K_Nao*K_So*kappa_re1*kappa_re10*kappa_re2*kappa_re3*kappa_re5*kappa_re6*kappa_re7*kappa_re8*kappa_re9+K_11*K_12*K_13*K_14*K_15*K_16*K_17*K_18*K_9*K_Clo*K_Ki*K_Nao*K_So*kappa_re1*kappa_re10*kappa_re3*kappa_re4*kappa_re5*kappa_re6*kappa_re7*kappa_re8*kappa_re9;
    P_31 = K_10*K_11*K_13*K_14*K_15*K_16*K_17*K_18*K_9*K_Clo*K_Ko*K_Nai*K_Si*kappa_re1*kappa_re10*kappa_re2*kappa_re4*kappa_re5*kappa_re6*kappa_re7*kappa_re8*kappa_re9;
    P_32 = K_10*K_12*K_13*K_14*K_15*K_16*K_17*K_18*K_9*K_Cli*K_Ki*K_Nao*K_So*kappa_re1*kappa_re10*kappa_re2*kappa_re3*kappa_re5*kappa_re6*kappa_re7*kappa_re8*kappa_re9;
    P_33 = K_11*K_12*K_13*K_14*K_15*K_16*K_17*K_18*K_9*K_Clo*K_Ko*K_Nai*K_So*kappa_re10*kappa_re2*kappa_re3*kappa_re4*kappa_re5*kappa_re6*kappa_re7*kappa_re8*kappa_re9;
    P_34 = K_11*K_12*K_13*K_14*K_15*K_16*K_17*K_18*K_9*K_Clo*K_Nai*K_Nao*K_So*kappa_re1*kappa_re10*kappa_re2*kappa_re3*kappa_re4*kappa_re5*kappa_re6*kappa_re7*kappa_re9+K_11*K_12*K_13*K_14*K_15*K_16*K_17*K_18*K_9*K_Clo*K_Nai*K_Nao*K_So*kappa_re1*kappa_re10*kappa_re2*kappa_re3*kappa_re4*kappa_re5*kappa_re6*kappa_re8*kappa_re9+K_11*K_12*K_13*K_14*K_15*K_16*K_17*K_18*K_9*K_Clo*K_Nai*K_Nao*K_So*kappa_re1*kappa_re2*kappa_re3*kappa_re4*kappa_re5*kappa_re6*kappa_re7*kappa_re8*kappa_re9;
    P_35 = K_10*K_11*K_12*K_13*K_15*K_16*K_17*K_18*K_9*K_Cli*K_Clo*K_Ki*K_Nao*K_So*kappa_re1*kappa_re10*kappa_re2*kappa_re3*kappa_re5*kappa_re6*kappa_re7*kappa_re8*kappa_re9+K_10*K_11*K_12*K_14*K_15*K_16*K_17*K_18*K_9*K_Cli*K_Clo*K_Ki*K_Nao*K_So*kappa_re1*kappa_re10*kappa_re2*kappa_re3*kappa_re5*kappa_re6*kappa_re7*kappa_re8*kappa_re9;
    P_36 = K_10*K_11*K_12*K_13*K_15*K_16*K_17*K_18*K_9*K_Cli*K_Clo*K_Ko*K_Nai*K_Si*kappa_re1*kappa_re10*kappa_re2*kappa_re4*kappa_re5*kappa_re6*kappa_re7*kappa_re8*kappa_re9+K_10*K_11*K_12*K_14*K_15*K_16*K_17*K_18*K_9*K_Cli*K_Clo*K_Ko*K_Nai*K_Si*kappa_re1*kappa_re10*kappa_re2*kappa_re4*kappa_re5*kappa_re6*kappa_re7*kappa_re8*kappa_re9;
    P_37 = K_10*K_11*K_13*K_14*K_15*K_16*K_17*K_18*K_9*K_Clo*K_Ki*K_Nao*K_Si*K_So*kappa_re1*kappa_re10*kappa_re3*kappa_re4*kappa_re5*kappa_re6*kappa_re7*kappa_re8*kappa_re9;
    P_38 = K_10*K_11*K_13*K_14*K_15*K_16*K_17*K_18*K_9*K_Clo*K_Ko*K_Nai*K_Si*K_So*kappa_re10*kappa_re2*kappa_re3*kappa_re4*kappa_re5*kappa_re6*kappa_re7*kappa_re8*kappa_re9;
    P_39 = K_10*K_11*K_13*K_14*K_15*K_16*K_17*K_18*K_9*K_Clo*K_Nai*K_Nao*K_Si*K_So*kappa_re1*kappa_re10*kappa_re2*kappa_re3*kappa_re4*kappa_re5*kappa_re6*kappa_re7*kappa_re9+K_10*K_11*K_13*K_14*K_15*K_16*K_17*K_18*K_9*K_Clo*K_Nai*K_Nao*K_Si*K_So*kappa_re1*kappa_re10*kappa_re2*kappa_re3*kappa_re4*kappa_re5*kappa_re6*kappa_re8*kappa_re9+K_10*K_11*K_13*K_14*K_15*K_16*K_17*K_18*K_9*K_Clo*K_Nai*K_Nao*K_Si*K_So*kappa_re1*kappa_re2*kappa_re3*kappa_re4*kappa_re5*kappa_re6*kappa_re7*kappa_re8*kappa_re9;
    P_40 = K_10*K_12*K_13*K_14*K_15*K_16*K_17*K_18*K_9*K_Cli*K_Ki*K_Nao*K_Si*K_So*kappa_re1*kappa_re10*kappa_re3*kappa_re4*kappa_re5*kappa_re6*kappa_re7*kappa_re8*kappa_re9;
    P_41 = K_10*K_12*K_13*K_14*K_15*K_16*K_17*K_18*K_9*K_Cli*K_Ko*K_Nai*K_Si*K_So*kappa_re10*kappa_re2*kappa_re3*kappa_re4*kappa_re5*kappa_re6*kappa_re7*kappa_re8*kappa_re9;
    P_42 = K_10*K_12*K_13*K_14*K_15*K_16*K_17*K_18*K_9*K_Cli*K_Nai*K_Nao*K_Si*K_So*kappa_re1*kappa_re10*kappa_re2*kappa_re3*kappa_re4*kappa_re5*kappa_re6*kappa_re7*kappa_re9+K_10*K_12*K_13*K_14*K_15*K_16*K_17*K_18*K_9*K_Cli*K_Nai*K_Nao*K_Si*K_So*kappa_re1*kappa_re10*kappa_re2*kappa_re3*kappa_re4*kappa_re5*kappa_re6*kappa_re8*kappa_re9+K_10*K_12*K_13*K_14*K_15*K_16*K_17*K_18*K_9*K_Cli*K_Nai*K_Nao*K_Si*K_So*kappa_re1*kappa_re2*kappa_re3*kappa_re4*kappa_re5*kappa_re6*kappa_re7*kappa_re8*kappa_re9;
    P_43 = K_10*K_11*K_12*K_13*K_15*K_16*K_17*K_18*K_9*K_Cli*K_Clo*K_Ki*K_Nao*K_Si*K_So*kappa_re1*kappa_re10*kappa_re3*kappa_re4*kappa_re5*kappa_re6*kappa_re7*kappa_re8*kappa_re9+K_10*K_11*K_12*K_14*K_15*K_16*K_17*K_18*K_9*K_Cli*K_Clo*K_Ki*K_Nao*K_Si*K_So*kappa_re1*kappa_re10*kappa_re3*kappa_re4*kappa_re5*kappa_re6*kappa_re7*kappa_re8*kappa_re9;
    P_44 = K_10*K_11*K_12*K_13*K_15*K_16*K_17*K_18*K_9*K_Cli*K_Clo*K_Ko*K_Nai*K_Si*K_So*kappa_re10*kappa_re2*kappa_re3*kappa_re4*kappa_re5*kappa_re6*kappa_re7*kappa_re8*kappa_re9+K_10*K_11*K_12*K_14*K_15*K_16*K_17*K_18*K_9*K_Cli*K_Clo*K_Ko*K_Nai*K_Si*K_So*kappa_re10*kappa_re2*kappa_re3*kappa_re4*kappa_re5*kappa_re6*kappa_re7*kappa_re8*kappa_re9;
    P_45 = K_10*K_11*K_12*K_13*K_15*K_16*K_17*K_18*K_9*K_Cli*K_Clo*K_Nai*K_Nao*K_Si*K_So*kappa_re1*kappa_re10*kappa_re2*kappa_re3*kappa_re4*kappa_re5*kappa_re6*kappa_re7*kappa_re9+K_10*K_11*K_12*K_13*K_15*K_16*K_17*K_18*K_9*K_Cli*K_Clo*K_Nai*K_Nao*K_Si*K_So*kappa_re1*kappa_re10*kappa_re2*kappa_re3*kappa_re4*kappa_re5*kappa_re6*kappa_re8*kappa_re9+K_10*K_11*K_12*K_13*K_15*K_16*K_17*K_18*K_9*K_Cli*K_Clo*K_Nai*K_Nao*K_Si*K_So*kappa_re1*kappa_re2*kappa_re3*kappa_re4*kappa_re5*kappa_re6*kappa_re7*kappa_re8*kappa_re9+K_10*K_11*K_12*K_14*K_15*K_16*K_17*K_18*K_9*K_Cli*K_Clo*K_Nai*K_Nao*K_Si*K_So*kappa_re1*kappa_re10*kappa_re2*kappa_re3*kappa_re4*kappa_re5*kappa_re6*kappa_re7*kappa_re9+K_10*K_11*K_12*K_14*K_15*K_16*K_17*K_18*K_9*K_Cli*K_Clo*K_Nai*K_Nao*K_Si*K_So*kappa_re1*kappa_re10*kappa_re2*kappa_re3*kappa_re4*kappa_re5*kappa_re6*kappa_re8*kappa_re9+K_10*K_11*K_12*K_14*K_15*K_16*K_17*K_18*K_9*K_Cli*K_Clo*K_Nai*K_Nao*K_Si*K_So*kappa_re1*kappa_re2*kappa_re3*kappa_re4*kappa_re5*kappa_re6*kappa_re7*kappa_re8*kappa_re9;
    E = q_10_init+q_11_init+q_12_init+q_13_init+q_14_init+q_15_init+q_16_init+q_17_init+q_18_init+q_9_init;
  enddef;
enddef;
