def model SLCT11_BG_ss_test as
  def import using "../units_BG.cellml" for
    unit per_fmol6_sec9 using unit per_fmol6_sec9;
    unit per_fmol_sec9 using unit per_fmol_sec9;
    unit per_fmol5_sec9 using unit per_fmol5_sec9;
    unit fmol using unit fmol;
    unit per_fmol3_sec9 using unit per_fmol3_sec9;
    unit fmol_per_sec using unit fmol_per_sec;
    unit per_fmol4_sec9 using unit per_fmol4_sec9;
    unit per_fmol4_sec10 using unit per_fmol4_sec10;
    unit per_fmol2_sec9 using unit per_fmol2_sec9;
  enddef;
  def import using "../units_BG.cellml" for
    unit J_per_K_per_mol using unit J_per_K_per_mol;
    unit C_per_mol using unit C_per_mol;
    unit per_fmol using unit per_fmol;
  enddef;

  def comp SLCT11_BG_ss_test as
    var v_ss: fmol_per_sec {interface: public_and_private};
    var q_Clo: fmol {interface: public_and_private};
    var q_Ki: fmol {interface: public_and_private};
    var q_Nao: fmol {interface: public_and_private};
    var q_So: fmol {interface: public_and_private};
    var q_Cli: fmol {interface: public_and_private};
    var q_Ko: fmol {interface: public_and_private};
    var q_Nai: fmol {interface: public_and_private};
    var q_Si: fmol {interface: public_and_private};
  enddef;

  def comp SLCT11_ss as
    var P_0: per_fmol4_sec10 {interface: public};
    var P_1: per_fmol4_sec10 {interface: public};
    var P_2: per_fmol_sec9 {interface: public};
    var P_3: per_fmol_sec9 {interface: public};
    var P_4: per_fmol2_sec9 {interface: public};
    var P_5: per_fmol2_sec9 {interface: public};
    var P_6: per_fmol2_sec9 {interface: public};
    var P_7: per_fmol2_sec9 {interface: public};
    var P_8: per_fmol2_sec9 {interface: public};
    var P_9: per_fmol2_sec9 {interface: public};
    var P_10: per_fmol2_sec9 {interface: public};
    var P_11: per_fmol3_sec9 {interface: public};
    var P_12: per_fmol3_sec9 {interface: public};
    var P_13: per_fmol3_sec9 {interface: public};
    var P_14: per_fmol3_sec9 {interface: public};
    var P_15: per_fmol3_sec9 {interface: public};
    var P_16: per_fmol3_sec9 {interface: public};
    var P_17: per_fmol3_sec9 {interface: public};
    var P_18: per_fmol3_sec9 {interface: public};
    var P_19: per_fmol3_sec9 {interface: public};
    var P_20: per_fmol3_sec9 {interface: public};
    var P_21: per_fmol3_sec9 {interface: public};
    var P_22: per_fmol3_sec9 {interface: public};
    var P_23: per_fmol3_sec9 {interface: public};
    var P_24: per_fmol3_sec9 {interface: public};
    var P_25: per_fmol4_sec9 {interface: public};
    var P_26: per_fmol4_sec9 {interface: public};
    var P_27: per_fmol4_sec9 {interface: public};
    var P_28: per_fmol4_sec9 {interface: public};
    var P_29: per_fmol4_sec9 {interface: public};
    var P_30: per_fmol4_sec9 {interface: public};
    var P_31: per_fmol4_sec9 {interface: public};
    var P_32: per_fmol4_sec9 {interface: public};
    var P_33: per_fmol4_sec9 {interface: public};
    var P_34: per_fmol4_sec9 {interface: public};
    var P_35: per_fmol5_sec9 {interface: public};
    var P_36: per_fmol5_sec9 {interface: public};
    var P_37: per_fmol5_sec9 {interface: public};
    var P_38: per_fmol5_sec9 {interface: public};
    var P_39: per_fmol5_sec9 {interface: public};
    var P_40: per_fmol5_sec9 {interface: public};
    var P_41: per_fmol5_sec9 {interface: public};
    var P_42: per_fmol5_sec9 {interface: public};
    var P_43: per_fmol6_sec9 {interface: public};
    var P_44: per_fmol6_sec9 {interface: public};
    var P_45: per_fmol6_sec9 {interface: public};
    var E: fmol {interface: public};
    var q_Clo: fmol {interface: public};
    var q_Ki: fmol {interface: public};
    var q_Nao: fmol {interface: public};
    var q_So: fmol {interface: public};
    var q_Cli: fmol {interface: public};
    var q_Ko: fmol {interface: public};
    var q_Nai: fmol {interface: public};
    var q_Si: fmol {interface: public};
    var v_ss: fmol_per_sec {interface: public};
    v_ss = E*(P_0*q_Clo*q_Ki*q_Nao*q_So-P_1*q_Cli*q_Ko*q_Nai*q_Si)/(P_10*q_Ko*q_Nai+P_11*q_Cli*q_Ki*q_Nao+P_12*q_Clo*q_Ki*q_Nao+P_13*q_Cli*q_Ki*q_Ko+P_14*q_Clo*q_Ki*q_Ko+P_15*q_Cli*q_Ko*q_Si+P_16*q_Clo*q_Ko*q_So+P_17*q_Clo*q_Nao*q_So+P_18*q_Cli*q_Ki*q_Si+P_19*q_Cli*q_Nai*q_Si+P_2*q_Ko+P_20*q_Clo*q_Ki*q_So+P_21*q_Ko*q_Nai*q_Si+P_22*q_Ki*q_Nao*q_So+P_23*q_Cli*q_Ko*q_Nai+P_24*q_Clo*q_Ko*q_Nai+P_25*q_Cli*q_Ki*q_Nao*q_Si+P_26*q_Cli*q_Ko*q_Nai*q_Si+P_27*q_Cli*q_Nai*q_Nao*q_Si+P_28*q_Cli*q_Ki*q_Ko*q_Si+P_29*q_Clo*q_Ki*q_Ko*q_So+P_3*q_Ki+P_30*q_Clo*q_Ki*q_Nao*q_So+P_31*q_Clo*q_Ko*q_Nai*q_Si+P_32*q_Cli*q_Ki*q_Nao*q_So+P_33*q_Clo*q_Ko*q_Nai*q_So+P_34*q_Clo*q_Nai*q_Nao*q_So+P_35*q_Cli*q_Clo*q_Ki*q_Nao*q_So+P_36*q_Cli*q_Clo*q_Ko*q_Nai*q_Si+P_37*q_Clo*q_Ki*q_Nao*q_Si*q_So+P_38*q_Clo*q_Ko*q_Nai*q_Si*q_So+P_39*q_Clo*q_Nai*q_Nao*q_Si*q_So+P_4*q_Ki*q_Nao+P_40*q_Cli*q_Ki*q_Nao*q_Si*q_So+P_41*q_Cli*q_Ko*q_Nai*q_Si*q_So+P_42*q_Cli*q_Nai*q_Nao*q_Si*q_So+P_43*q_Cli*q_Clo*q_Ki*q_Nao*q_Si*q_So+P_44*q_Cli*q_Clo*q_Ko*q_Nai*q_Si*q_So+P_45*q_Cli*q_Clo*q_Nai*q_Nao*q_Si*q_So+P_5*q_Ki*q_Ko+P_6*q_Cli*q_Ko+P_7*q_Clo*q_Ko+P_8*q_Cli*q_Ki+P_9*q_Clo*q_Ki);
  enddef;

  def comp SLCT11_BG_param as
    var K_Ki: per_fmol {init: 1, interface: public};
    var K_Ko: per_fmol {init: 1, interface: public};
    var K_Nai: per_fmol {init: 1, interface: public};
    var K_Nao: per_fmol {init: 1, interface: public};
    var K_So: per_fmol {init: 1, interface: public};
    var K_Si: per_fmol {init: 1, interface: public};
    var K_Clo: per_fmol {init: 1, interface: public};
    var K_Cli: per_fmol {init: 1, interface: public};
    var K_9: per_fmol {init: 1, interface: public};
    var q_9_init: fmol {init: 1, interface: public};
    var K_10: per_fmol {init: 1, interface: public};
    var q_10_init: fmol {init: 1, interface: public};
    var K_11: per_fmol {init: 1, interface: public};
    var q_11_init: fmol {init: 1, interface: public};
    var K_12: per_fmol {init: 1, interface: public};
    var q_12_init: fmol {init: 1, interface: public};
    var K_13: per_fmol {init: 1, interface: public};
    var q_13_init: fmol {init: 1, interface: public};
    var K_14: per_fmol {init: 1, interface: public};
    var q_14_init: fmol {init: 1, interface: public};
    var K_15: per_fmol {init: 1, interface: public};
    var q_15_init: fmol {init: 1, interface: public};
    var K_16: per_fmol {init: 1, interface: public};
    var q_16_init: fmol {init: 1, interface: public};
    var K_17: per_fmol {init: 1, interface: public};
    var q_17_init: fmol {init: 1, interface: public};
    var K_18: per_fmol {init: 1, interface: public};
    var q_18_init: fmol {init: 1, interface: public};
    var kappa_re1: fmol_per_sec {init: 1, interface: public};
    var kappa_re2: fmol_per_sec {init: 1, interface: public};
    var kappa_re3: fmol_per_sec {init: 1, interface: public};
    var kappa_re4: fmol_per_sec {init: 1, interface: public};
    var kappa_re5: fmol_per_sec {init: 1, interface: public};
    var kappa_re6: fmol_per_sec {init: 1, interface: public};
    var kappa_re7: fmol_per_sec {init: 1, interface: public};
    var kappa_re8: fmol_per_sec {init: 1, interface: public};
    var kappa_re9: fmol_per_sec {init: 1, interface: public};
    var kappa_re10: fmol_per_sec {init: 1, interface: public};
    var F: C_per_mol {init: 96485, interface: public};
    var R: J_per_K_per_mol {init: 8.31, interface: public};
    var T: kelvin {init: 293, interface: public};
  enddef;

  def comp SLCT11_BG_ss as
    var P_0: per_fmol4_sec10 {interface: public};
    var P_1: per_fmol4_sec10 {interface: public};
    var P_2: per_fmol_sec9 {interface: public};
    var P_3: per_fmol_sec9 {interface: public};
    var P_4: per_fmol2_sec9 {interface: public};
    var P_5: per_fmol2_sec9 {interface: public};
    var P_6: per_fmol2_sec9 {interface: public};
    var P_7: per_fmol2_sec9 {interface: public};
    var P_8: per_fmol2_sec9 {interface: public};
    var P_9: per_fmol2_sec9 {interface: public};
    var P_10: per_fmol2_sec9 {interface: public};
    var P_11: per_fmol3_sec9 {interface: public};
    var P_12: per_fmol3_sec9 {interface: public};
    var P_13: per_fmol3_sec9 {interface: public};
    var P_14: per_fmol3_sec9 {interface: public};
    var P_15: per_fmol3_sec9 {interface: public};
    var P_16: per_fmol3_sec9 {interface: public};
    var P_17: per_fmol3_sec9 {interface: public};
    var P_18: per_fmol3_sec9 {interface: public};
    var P_19: per_fmol3_sec9 {interface: public};
    var P_20: per_fmol3_sec9 {interface: public};
    var P_21: per_fmol3_sec9 {interface: public};
    var P_22: per_fmol3_sec9 {interface: public};
    var P_23: per_fmol3_sec9 {interface: public};
    var P_24: per_fmol3_sec9 {interface: public};
    var P_25: per_fmol4_sec9 {interface: public};
    var P_26: per_fmol4_sec9 {interface: public};
    var P_27: per_fmol4_sec9 {interface: public};
    var P_28: per_fmol4_sec9 {interface: public};
    var P_29: per_fmol4_sec9 {interface: public};
    var P_30: per_fmol4_sec9 {interface: public};
    var P_31: per_fmol4_sec9 {interface: public};
    var P_32: per_fmol4_sec9 {interface: public};
    var P_33: per_fmol4_sec9 {interface: public};
    var P_34: per_fmol4_sec9 {interface: public};
    var P_35: per_fmol5_sec9 {interface: public};
    var P_36: per_fmol5_sec9 {interface: public};
    var P_37: per_fmol5_sec9 {interface: public};
    var P_38: per_fmol5_sec9 {interface: public};
    var P_39: per_fmol5_sec9 {interface: public};
    var P_40: per_fmol5_sec9 {interface: public};
    var P_41: per_fmol5_sec9 {interface: public};
    var P_42: per_fmol5_sec9 {interface: public};
    var P_43: per_fmol6_sec9 {interface: public};
    var P_44: per_fmol6_sec9 {interface: public};
    var P_45: per_fmol6_sec9 {interface: public};
    var E: fmol {interface: public};
    var K_Ki: per_fmol {interface: public};
    var K_Ko: per_fmol {interface: public};
    var K_Nai: per_fmol {interface: public};
    var K_Nao: per_fmol {interface: public};
    var K_So: per_fmol {interface: public};
    var K_Si: per_fmol {interface: public};
    var K_Clo: per_fmol {interface: public};
    var K_Cli: per_fmol {interface: public};
    var K_9: per_fmol {interface: public};
    var q_9_init: fmol {interface: public};
    var K_10: per_fmol {interface: public};
    var q_10_init: fmol {interface: public};
    var K_11: per_fmol {interface: public};
    var q_11_init: fmol {interface: public};
    var K_12: per_fmol {interface: public};
    var q_12_init: fmol {interface: public};
    var K_13: per_fmol {interface: public};
    var q_13_init: fmol {interface: public};
    var K_14: per_fmol {interface: public};
    var q_14_init: fmol {interface: public};
    var K_15: per_fmol {interface: public};
    var q_15_init: fmol {interface: public};
    var K_16: per_fmol {interface: public};
    var q_16_init: fmol {interface: public};
    var K_17: per_fmol {interface: public};
    var q_17_init: fmol {interface: public};
    var K_18: per_fmol {interface: public};
    var q_18_init: fmol {interface: public};
    var kappa_re1: fmol_per_sec {interface: public};
    var kappa_re2: fmol_per_sec {interface: public};
    var kappa_re3: fmol_per_sec {interface: public};
    var kappa_re4: fmol_per_sec {interface: public};
    var kappa_re5: fmol_per_sec {interface: public};
    var kappa_re6: fmol_per_sec {interface: public};
    var kappa_re7: fmol_per_sec {interface: public};
    var kappa_re8: fmol_per_sec {interface: public};
    var kappa_re9: fmol_per_sec {interface: public};
    var kappa_re10: fmol_per_sec {interface: public};
    var F: C_per_mol {interface: public};
    var R: J_per_K_per_mol {interface: public};
    var T: kelvin {interface: public};
    P_0 = K_10*K_11*K_12*K_13*K_14*K_15*K_16*K_17*K_18*K_9*K_Clo*K_Ki*K_Nao*K_So*kappa_re1*kappa_re10*kappa_re2*kappa_re3*kappa_re4*kappa_re5*kappa_re6*kappa_re7*kappa_re8*kappa_re9;
    P_1 = K_10*K_11*K_12*K_13*K_14*K_15*K_16*K_17*K_18*K_9*K_Cli*K_Ko*K_Nai*K_Si*kappa_re1*kappa_re10*kappa_re2*kappa_re3*kappa_re4*kappa_re5*kappa_re6*kappa_re7*kappa_re8*kappa_re9;
    P_2 = K_10*K_11*K_12*K_13*K_14*K_15*K_17*K_18*K_9*K_Ko*kappa_re1*kappa_re10*kappa_re2*kappa_re3*kappa_re4*kappa_re5*kappa_re6*kappa_re7*kappa_re8+K_10*K_11*K_12*K_13*K_14*K_15*K_17*K_18*K_9*K_Ko*kappa_re1*kappa_re10*kappa_re2*kappa_re3*kappa_re4*kappa_re5*kappa_re7*kappa_re8*kappa_re9+K_10*K_11*K_12*K_13*K_14*K_15*K_17*K_18*K_9*K_Ko*kappa_re1*kappa_re10*kappa_re2*kappa_re3*kappa_re4*kappa_re6*kappa_re7*kappa_re8*kappa_re9;
    P_3 = K_10*K_11*K_12*K_13*K_14*K_16*K_17*K_18*K_9*K_Ki*kappa_re1*kappa_re10*kappa_re2*kappa_re3*kappa_re4*kappa_re5*kappa_re6*kappa_re7*kappa_re8+K_10*K_11*K_12*K_13*K_14*K_16*K_17*K_18*K_9*K_Ki*kappa_re1*kappa_re10*kappa_re2*kappa_re3*kappa_re4*kappa_re5*kappa_re7*kappa_re8*kappa_re9+K_10*K_11*K_12*K_13*K_14*K_16*K_17*K_18*K_9*K_Ki*kappa_re1*kappa_re10*kappa_re2*kappa_re3*kappa_re4*kappa_re6*kappa_re7*kappa_re8*kappa_re9;
    P_4 = K_10*K_11*K_12*K_13*K_14*K_15*K_16*K_17*K_18*K_Ki*K_Nao*kappa_re1*kappa_re10*kappa_re2*kappa_re3*kappa_re4*kappa_re5*kappa_re6*kappa_re7*kappa_re8+K_10*K_11*K_12*K_13*K_14*K_15*K_16*K_17*K_18*K_Ki*K_Nao*kappa_re1*kappa_re10*kappa_re2*kappa_re3*kappa_re4*kappa_re5*kappa_re7*kappa_re8*kappa_re9+K_10*K_11*K_12*K_13*K_14*K_15*K_16*K_17*K_18*K_Ki*K_Nao*kappa_re1*kappa_re10*kappa_re2*kappa_re3*kappa_re4*kappa_re6*kappa_re7*kappa_re8*kappa_re9;
    P_5 = K_10*K_11*K_12*K_13*K_14*K_15*K_16*K_17*K_9*K_Ki*K_Ko*kappa_re1*kappa_re10*kappa_re2*kappa_re3*kappa_re4*kappa_re5*kappa_re6*kappa_re7*kappa_re8+K_10*K_11*K_12*K_13*K_14*K_15*K_16*K_17*K_9*K_Ki*K_Ko*kappa_re1*kappa_re10*kappa_re2*kappa_re3*kappa_re4*kappa_re5*kappa_re7*kappa_re8*kappa_re9+K_10*K_11*K_12*K_13*K_14*K_15*K_16*K_17*K_9*K_Ki*K_Ko*kappa_re1*kappa_re10*kappa_re2*kappa_re3*kappa_re4*kappa_re6*kappa_re7*kappa_re8*kappa_re9+K_10*K_11*K_12*K_13*K_14*K_15*K_16*K_18*K_9*K_Ki*K_Ko*kappa_re1*kappa_re10*kappa_re2*kappa_re3*kappa_re4*kappa_re5*kappa_re6*kappa_re7*kappa_re8+K_10*K_11*K_12*K_13*K_14*K_15*K_16*K_18*K_9*K_Ki*K_Ko*kappa_re1*kappa_re10*kappa_re2*kappa_re3*kappa_re4*kappa_re5*kappa_re7*kappa_re8*kappa_re9+K_10*K_11*K_12*K_13*K_14*K_15*K_16*K_18*K_9*K_Ki*K_Ko*kappa_re1*kappa_re10*kappa_re2*kappa_re3*kappa_re4*kappa_re6*kappa_re7*kappa_re8*kappa_re9;
    P_6 = K_10*K_11*K_12*K_13*K_14*K_15*K_17*K_18*K_9*K_Cli*K_Ko*kappa_re1*kappa_re10*kappa_re2*kappa_re3*kappa_re5*kappa_re6*kappa_re7*kappa_re8*kappa_re9;
    P_7 = K_10*K_11*K_12*K_13*K_14*K_15*K_17*K_18*K_9*K_Clo*K_Ko*kappa_re1*kappa_re10*kappa_re2*kappa_re4*kappa_re5*kappa_re6*kappa_re7*kappa_re8*kappa_re9;
    P_8 = K_10*K_11*K_12*K_13*K_14*K_16*K_17*K_18*K_9*K_Cli*K_Ki*kappa_re1*kappa_re10*kappa_re2*kappa_re3*kappa_re5*kappa_re6*kappa_re7*kappa_re8*kappa_re9;
    P_9 = K_10*K_11*K_12*K_13*K_14*K_16*K_17*K_18*K_9*K_Clo*K_Ki*kappa_re1*kappa_re10*kappa_re2*kappa_re4*kappa_re5*kappa_re6*kappa_re7*kappa_re8*kappa_re9;
    P_10 = K_11*K_12*K_13*K_14*K_15*K_16*K_17*K_18*K_9*K_Ko*K_Nai*kappa_re1*kappa_re10*kappa_re2*kappa_re3*kappa_re4*kappa_re5*kappa_re6*kappa_re7*kappa_re8+K_11*K_12*K_13*K_14*K_15*K_16*K_17*K_18*K_9*K_Ko*K_Nai*kappa_re1*kappa_re10*kappa_re2*kappa_re3*kappa_re4*kappa_re5*kappa_re7*kappa_re8*kappa_re9+K_11*K_12*K_13*K_14*K_15*K_16*K_17*K_18*K_9*K_Ko*K_Nai*kappa_re1*kappa_re10*kappa_re2*kappa_re3*kappa_re4*kappa_re6*kappa_re7*kappa_re8*kappa_re9;
    P_11 = K_10*K_11*K_12*K_13*K_14*K_15*K_16*K_17*K_18*K_Cli*K_Ki*K_Nao*kappa_re1*kappa_re10*kappa_re2*kappa_re3*kappa_re5*kappa_re6*kappa_re7*kappa_re8*kappa_re9;
    P_12 = K_10*K_11*K_12*K_13*K_14*K_15*K_16*K_17*K_18*K_Clo*K_Ki*K_Nao*kappa_re1*kappa_re10*kappa_re2*kappa_re4*kappa_re5*kappa_re6*kappa_re7*kappa_re8*kappa_re9;
    P_13 = K_10*K_11*K_12*K_13*K_14*K_15*K_16*K_17*K_9*K_Cli*K_Ki*K_Ko*kappa_re1*kappa_re10*kappa_re2*kappa_re3*kappa_re5*kappa_re6*kappa_re7*kappa_re8*kappa_re9+K_10*K_11*K_12*K_13*K_14*K_15*K_16*K_18*K_9*K_Cli*K_Ki*K_Ko*kappa_re1*kappa_re10*kappa_re2*kappa_re3*kappa_re5*kappa_re6*kappa_re7*kappa_re8*kappa_re9;
    P_14 = K_10*K_11*K_12*K_13*K_14*K_15*K_16*K_17*K_9*K_Clo*K_Ki*K_Ko*kappa_re1*kappa_re10*kappa_re2*kappa_re4*kappa_re5*kappa_re6*kappa_re7*kappa_re8*kappa_re9+K_10*K_11*K_12*K_13*K_14*K_15*K_16*K_18*K_9*K_Clo*K_Ki*K_Ko*kappa_re1*kappa_re10*kappa_re2*kappa_re4*kappa_re5*kappa_re6*kappa_re7*kappa_re8*kappa_re9;
    P_15 = K_10*K_11*K_12*K_13*K_14*K_15*K_17*K_18*K_9*K_Cli*K_Ko*K_Si*kappa_re1*kappa_re10*kappa_re3*kappa_re4*kappa_re5*kappa_re6*kappa_re7*kappa_re8*kappa_re9;
    P_16 = K_10*K_11*K_12*K_13*K_14*K_15*K_17*K_18*K_9*K_Clo*K_Ko*K_So*kappa_re10*kappa_re2*kappa_re3*kappa_re4*kappa_re5*kappa_re6*kappa_re7*kappa_re8*kappa_re9;
    P_17 = K_10*K_11*K_12*K_13*K_14*K_15*K_17*K_18*K_9*K_Clo*K_Nao*K_So*kappa_re1*kappa_re10*kappa_re2*kappa_re3*kappa_re4*kappa_re5*kappa_re6*kappa_re7*kappa_re9+K_10*K_11*K_12*K_13*K_14*K_15*K_17*K_18*K_9*K_Clo*K_Nao*K_So*kappa_re1*kappa_re10*kappa_re2*kappa_re3*kappa_re4*kappa_re5*kappa_re6*kappa_re8*kappa_re9+K_10*K_11*K_12*K_13*K_14*K_15*K_17*K_18*K_9*K_Clo*K_Nao*K_So*kappa_re1*kappa_re2*kappa_re3*kappa_re4*kappa_re5*kappa_re6*kappa_re7*kappa_re8*kappa_re9;
    P_18 = K_10*K_11*K_12*K_13*K_14*K_16*K_17*K_18*K_9*K_Cli*K_Ki*K_Si*kappa_re1*kappa_re10*kappa_re3*kappa_re4*kappa_re5*kappa_re6*kappa_re7*kappa_re8*kappa_re9;
    P_19 = K_10*K_11*K_12*K_13*K_14*K_16*K_17*K_18*K_9*K_Cli*K_Nai*K_Si*kappa_re1*kappa_re10*kappa_re2*kappa_re3*kappa_re4*kappa_re5*kappa_re6*kappa_re7*kappa_re9+K_10*K_11*K_12*K_13*K_14*K_16*K_17*K_18*K_9*K_Cli*K_Nai*K_Si*kappa_re1*kappa_re10*kappa_re2*kappa_re3*kappa_re4*kappa_re5*kappa_re6*kappa_re8*kappa_re9+K_10*K_11*K_12*K_13*K_14*K_16*K_17*K_18*K_9*K_Cli*K_Nai*K_Si*kappa_re1*kappa_re2*kappa_re3*kappa_re4*kappa_re5*kappa_re6*kappa_re7*kappa_re8*kappa_re9;
    P_20 = K_10*K_11*K_12*K_13*K_14*K_16*K_17*K_18*K_9*K_Clo*K_Ki*K_So*kappa_re10*kappa_re2*kappa_re3*kappa_re4*kappa_re5*kappa_re6*kappa_re7*kappa_re8*kappa_re9;
    P_21 = K_10*K_11*K_13*K_14*K_15*K_16*K_17*K_18*K_9*K_Ko*K_Nai*K_Si*kappa_re1*kappa_re10*kappa_re2*kappa_re3*kappa_re4*kappa_re5*kappa_re6*kappa_re7*kappa_re8+K_10*K_11*K_13*K_14*K_15*K_16*K_17*K_18*K_9*K_Ko*K_Nai*K_Si*kappa_re1*kappa_re10*kappa_re2*kappa_re3*kappa_re4*kappa_re5*kappa_re7*kappa_re8*kappa_re9+K_10*K_11*K_13*K_14*K_15*K_16*K_17*K_18*K_9*K_Ko*K_Nai*K_Si*kappa_re1*kappa_re10*kappa_re2*kappa_re3*kappa_re4*kappa_re6*kappa_re7*kappa_re8*kappa_re9;
    P_22 = K_10*K_12*K_13*K_14*K_15*K_16*K_17*K_18*K_9*K_Ki*K_Nao*K_So*kappa_re1*kappa_re10*kappa_re2*kappa_re3*kappa_re4*kappa_re5*kappa_re6*kappa_re7*kappa_re8+K_10*K_12*K_13*K_14*K_15*K_16*K_17*K_18*K_9*K_Ki*K_Nao*K_So*kappa_re1*kappa_re10*kappa_re2*kappa_re3*kappa_re4*kappa_re5*kappa_re7*kappa_re8*kappa_re9+K_10*K_12*K_13*K_14*K_15*K_16*K_17*K_18*K_9*K_Ki*K_Nao*K_So*kappa_re1*kappa_re10*kappa_re2*kappa_re3*kappa_re4*kappa_re6*kappa_re7*kappa_re8*kappa_re9;
    P_23 = K_11*K_12*K_13*K_14*K_15*K_16*K_17*K_18*K_9*K_Cli*K_Ko*K_Nai*kappa_re1*kappa_re10*kappa_re2*kappa_re3*kappa_re5*kappa_re6*kappa_re7*kappa_re8*kappa_re9;
    P_24 = K_11*K_12*K_13*K_14*K_15*K_16*K_17*K_18*K_9*K_Clo*K_Ko*K_Nai*kappa_re1*kappa_re10*kappa_re2*kappa_re4*kappa_re5*kappa_re6*kappa_re7*kappa_re8*kappa_re9;
    P_25 = K_10*K_11*K_12*K_13*K_14*K_15*K_16*K_17*K_18*K_Cli*K_Ki*K_Nao*K_Si*kappa_re1*kappa_re10*kappa_re3*kappa_re4*kappa_re5*kappa_re6*kappa_re7*kappa_re8*kappa_re9;
    P_26 = K_10*K_11*K_12*K_13*K_14*K_15*K_16*K_17*K_18*K_Cli*K_Ko*K_Nai*K_Si*kappa_re10*kappa_re2*kappa_re3*kappa_re4*kappa_re5*kappa_re6*kappa_re7*kappa_re8*kappa_re9+K_10*K_11*K_12*K_13*K_14*K_15*K_16*K_17*K_9*K_Cli*K_Ko*K_Nai*K_Si*kappa_re1*kappa_re10*kappa_re2*kappa_re3*kappa_re4*kappa_re5*kappa_re6*kappa_re7*kappa_re9+K_10*K_11*K_12*K_13*K_14*K_15*K_16*K_18*K_9*K_Cli*K_Ko*K_Nai*K_Si*kappa_re1*kappa_re10*kappa_re2*kappa_re3*kappa_re4*kappa_re5*kappa_re6*kappa_re7*kappa_re9+K_10*K_11*K_12*K_13*K_14*K_15*K_16*K_18*K_9*K_Cli*K_Ko*K_Nai*K_Si*kappa_re1*kappa_re2*kappa_re3*kappa_re4*kappa_re5*kappa_re6*kappa_re7*kappa_re8*kappa_re9+K_10*K_11*K_12*K_13*K_15*K_16*K_17*K_18*K_9*K_Cli*K_Ko*K_Nai*K_Si*kappa_re1*kappa_re10*kappa_re2*kappa_re3*kappa_re4*kappa_re5*kappa_re6*kappa_re7*kappa_re8+K_10*K_11*K_12*K_13*K_15*K_16*K_17*K_18*K_9*K_Cli*K_Ko*K_Nai*K_Si*kappa_re1*kappa_re10*kappa_re2*kappa_re3*kappa_re4*kappa_re6*kappa_re7*kappa_re8*kappa_re9+K_10*K_11*K_12*K_14*K_15*K_16*K_17*K_18*K_9*K_Cli*K_Ko*K_Nai*K_Si*kappa_re1*kappa_re10*kappa_re2*kappa_re3*kappa_re4*kappa_re6*kappa_re7*kappa_re8*kappa_re9+K_10*K_12*K_13*K_14*K_15*K_16*K_17*K_18*K_9*K_Cli*K_Ko*K_Nai*K_Si*kappa_re1*kappa_re10*kappa_re2*kappa_re4*kappa_re5*kappa_re6*kappa_re7*kappa_re8*kappa_re9;
    P_27 = K_10*K_11*K_12*K_13*K_14*K_15*K_16*K_17*K_18*K_Cli*K_Nai*K_Nao*K_Si*kappa_re1*kappa_re10*kappa_re2*kappa_re3*kappa_re4*kappa_re5*kappa_re6*kappa_re7*kappa_re9+K_10*K_11*K_12*K_13*K_14*K_15*K_16*K_17*K_18*K_Cli*K_Nai*K_Nao*K_Si*kappa_re1*kappa_re10*kappa_re2*kappa_re3*kappa_re4*kappa_re5*kappa_re6*kappa_re8*kappa_re9+K_10*K_11*K_12*K_13*K_14*K_15*K_16*K_17*K_18*K_Cli*K_Nai*K_Nao*K_Si*kappa_re1*kappa_re2*kappa_re3*kappa_re4*kappa_re5*kappa_re6*kappa_re7*kappa_re8*kappa_re9;
    P_28 = K_10*K_11*K_12*K_13*K_14*K_15*K_16*K_17*K_9*K_Cli*K_Ki*K_Ko*K_Si*kappa_re1*kappa_re10*kappa_re3*kappa_re4*kappa_re5*kappa_re6*kappa_re7*kappa_re8*kappa_re9+K_10*K_11*K_12*K_13*K_14*K_15*K_16*K_18*K_9*K_Cli*K_Ki*K_Ko*K_Si*kappa_re1*kappa_re10*kappa_re3*kappa_re4*kappa_re5*kappa_re6*kappa_re7*kappa_re8*kappa_re9;
    P_29 = K_10*K_11*K_12*K_13*K_14*K_15*K_16*K_17*K_9*K_Clo*K_Ki*K_Ko*K_So*kappa_re10*kappa_re2*kappa_re3*kappa_re4*kappa_re5*kappa_re6*kappa_re7*kappa_re8*kappa_re9+K_10*K_11*K_12*K_13*K_14*K_15*K_16*K_18*K_9*K_Clo*K_Ki*K_Ko*K_So*kappa_re10*kappa_re2*kappa_re3*kappa_re4*kappa_re5*kappa_re6*kappa_re7*kappa_re8*kappa_re9;
    P_30 = K_10*K_11*K_12*K_13*K_14*K_15*K_16*K_17*K_9*K_Clo*K_Ki*K_Nao*K_So*kappa_re1*kappa_re10*kappa_re2*kappa_re3*kappa_re4*kappa_re5*kappa_re6*kappa_re8*kappa_re9+K_10*K_11*K_12*K_13*K_14*K_15*K_16*K_17*K_9*K_Clo*K_Ki*K_Nao*K_So*kappa_re1*kappa_re2*kappa_re3*kappa_re4*kappa_re5*kappa_re6*kappa_re7*kappa_re8*kappa_re9+K_10*K_11*K_12*K_13*K_14*K_15*K_16*K_18*K_9*K_Clo*K_Ki*K_Nao*K_So*kappa_re1*kappa_re10*kappa_re2*kappa_re3*kappa_re4*kappa_re5*kappa_re6*kappa_re8*kappa_re9+K_10*K_11*K_12*K_13*K_15*K_16*K_17*K_18*K_9*K_Clo*K_Ki*K_Nao*K_So*kappa_re1*kappa_re10*kappa_re2*kappa_re3*kappa_re4*kappa_re5*kappa_re7*kappa_re8*kappa_re9+K_10*K_11*K_12*K_14*K_15*K_16*K_17*K_18*K_9*K_Clo*K_Ki*K_Nao*K_So*kappa_re1*kappa_re10*kappa_re2*kappa_re3*kappa_re4*kappa_re5*kappa_re6*kappa_re7*kappa_re8+K_10*K_11*K_12*K_14*K_15*K_16*K_17*K_18*K_9*K_Clo*K_Ki*K_Nao*K_So*kappa_re1*kappa_re10*kappa_re2*kappa_re3*kappa_re4*kappa_re5*kappa_re7*kappa_re8*kappa_re9+K_10*K_11*K_13*K_14*K_15*K_16*K_17*K_18*K_9*K_Clo*K_Ki*K_Nao*K_So*kappa_re1*kappa_re10*kappa_re2*kappa_re3*kappa_re5*kappa_re6*kappa_re7*kappa_re8*kappa_re9+K_11*K_12*K_13*K_14*K_15*K_16*K_17*K_18*K_9*K_Clo*K_Ki*K_Nao*K_So*kappa_re1*kappa_re10*kappa_re3*kappa_re4*kappa_re5*kappa_re6*kappa_re7*kappa_re8*kappa_re9;
    P_31 = K_10*K_11*K_13*K_14*K_15*K_16*K_17*K_18*K_9*K_Clo*K_Ko*K_Nai*K_Si*kappa_re1*kappa_re10*kappa_re2*kappa_re4*kappa_re5*kappa_re6*kappa_re7*kappa_re8*kappa_re9;
    P_32 = K_10*K_12*K_13*K_14*K_15*K_16*K_17*K_18*K_9*K_Cli*K_Ki*K_Nao*K_So*kappa_re1*kappa_re10*kappa_re2*kappa_re3*kappa_re5*kappa_re6*kappa_re7*kappa_re8*kappa_re9;
    P_33 = K_11*K_12*K_13*K_14*K_15*K_16*K_17*K_18*K_9*K_Clo*K_Ko*K_Nai*K_So*kappa_re10*kappa_re2*kappa_re3*kappa_re4*kappa_re5*kappa_re6*kappa_re7*kappa_re8*kappa_re9;
    P_34 = K_11*K_12*K_13*K_14*K_15*K_16*K_17*K_18*K_9*K_Clo*K_Nai*K_Nao*K_So*kappa_re1*kappa_re10*kappa_re2*kappa_re3*kappa_re4*kappa_re5*kappa_re6*kappa_re7*kappa_re9+K_11*K_12*K_13*K_14*K_15*K_16*K_17*K_18*K_9*K_Clo*K_Nai*K_Nao*K_So*kappa_re1*kappa_re10*kappa_re2*kappa_re3*kappa_re4*kappa_re5*kappa_re6*kappa_re8*kappa_re9+K_11*K_12*K_13*K_14*K_15*K_16*K_17*K_18*K_9*K_Clo*K_Nai*K_Nao*K_So*kappa_re1*kappa_re2*kappa_re3*kappa_re4*kappa_re5*kappa_re6*kappa_re7*kappa_re8*kappa_re9;
    P_35 = K_10*K_11*K_12*K_13*K_15*K_16*K_17*K_18*K_9*K_Cli*K_Clo*K_Ki*K_Nao*K_So*kappa_re1*kappa_re10*kappa_re2*kappa_re3*kappa_re5*kappa_re6*kappa_re7*kappa_re8*kappa_re9+K_10*K_11*K_12*K_14*K_15*K_16*K_17*K_18*K_9*K_Cli*K_Clo*K_Ki*K_Nao*K_So*kappa_re1*kappa_re10*kappa_re2*kappa_re3*kappa_re5*kappa_re6*kappa_re7*kappa_re8*kappa_re9;
    P_36 = K_10*K_11*K_12*K_13*K_15*K_16*K_17*K_18*K_9*K_Cli*K_Clo*K_Ko*K_Nai*K_Si*kappa_re1*kappa_re10*kappa_re2*kappa_re4*kappa_re5*kappa_re6*kappa_re7*kappa_re8*kappa_re9+K_10*K_11*K_12*K_14*K_15*K_16*K_17*K_18*K_9*K_Cli*K_Clo*K_Ko*K_Nai*K_Si*kappa_re1*kappa_re10*kappa_re2*kappa_re4*kappa_re5*kappa_re6*kappa_re7*kappa_re8*kappa_re9;
    P_37 = K_10*K_11*K_13*K_14*K_15*K_16*K_17*K_18*K_9*K_Clo*K_Ki*K_Nao*K_Si*K_So*kappa_re1*kappa_re10*kappa_re3*kappa_re4*kappa_re5*kappa_re6*kappa_re7*kappa_re8*kappa_re9;
    P_38 = K_10*K_11*K_13*K_14*K_15*K_16*K_17*K_18*K_9*K_Clo*K_Ko*K_Nai*K_Si*K_So*kappa_re10*kappa_re2*kappa_re3*kappa_re4*kappa_re5*kappa_re6*kappa_re7*kappa_re8*kappa_re9;
    P_39 = K_10*K_11*K_13*K_14*K_15*K_16*K_17*K_18*K_9*K_Clo*K_Nai*K_Nao*K_Si*K_So*kappa_re1*kappa_re10*kappa_re2*kappa_re3*kappa_re4*kappa_re5*kappa_re6*kappa_re7*kappa_re9+K_10*K_11*K_13*K_14*K_15*K_16*K_17*K_18*K_9*K_Clo*K_Nai*K_Nao*K_Si*K_So*kappa_re1*kappa_re10*kappa_re2*kappa_re3*kappa_re4*kappa_re5*kappa_re6*kappa_re8*kappa_re9+K_10*K_11*K_13*K_14*K_15*K_16*K_17*K_18*K_9*K_Clo*K_Nai*K_Nao*K_Si*K_So*kappa_re1*kappa_re2*kappa_re3*kappa_re4*kappa_re5*kappa_re6*kappa_re7*kappa_re8*kappa_re9;
    P_40 = K_10*K_12*K_13*K_14*K_15*K_16*K_17*K_18*K_9*K_Cli*K_Ki*K_Nao*K_Si*K_So*kappa_re1*kappa_re10*kappa_re3*kappa_re4*kappa_re5*kappa_re6*kappa_re7*kappa_re8*kappa_re9;
    P_41 = K_10*K_12*K_13*K_14*K_15*K_16*K_17*K_18*K_9*K_Cli*K_Ko*K_Nai*K_Si*K_So*kappa_re10*kappa_re2*kappa_re3*kappa_re4*kappa_re5*kappa_re6*kappa_re7*kappa_re8*kappa_re9;
    P_42 = K_10*K_12*K_13*K_14*K_15*K_16*K_17*K_18*K_9*K_Cli*K_Nai*K_Nao*K_Si*K_So*kappa_re1*kappa_re10*kappa_re2*kappa_re3*kappa_re4*kappa_re5*kappa_re6*kappa_re7*kappa_re9+K_10*K_12*K_13*K_14*K_15*K_16*K_17*K_18*K_9*K_Cli*K_Nai*K_Nao*K_Si*K_So*kappa_re1*kappa_re10*kappa_re2*kappa_re3*kappa_re4*kappa_re5*kappa_re6*kappa_re8*kappa_re9+K_10*K_12*K_13*K_14*K_15*K_16*K_17*K_18*K_9*K_Cli*K_Nai*K_Nao*K_Si*K_So*kappa_re1*kappa_re2*kappa_re3*kappa_re4*kappa_re5*kappa_re6*kappa_re7*kappa_re8*kappa_re9;
    P_43 = K_10*K_11*K_12*K_13*K_15*K_16*K_17*K_18*K_9*K_Cli*K_Clo*K_Ki*K_Nao*K_Si*K_So*kappa_re1*kappa_re10*kappa_re3*kappa_re4*kappa_re5*kappa_re6*kappa_re7*kappa_re8*kappa_re9+K_10*K_11*K_12*K_14*K_15*K_16*K_17*K_18*K_9*K_Cli*K_Clo*K_Ki*K_Nao*K_Si*K_So*kappa_re1*kappa_re10*kappa_re3*kappa_re4*kappa_re5*kappa_re6*kappa_re7*kappa_re8*kappa_re9;
    P_44 = K_10*K_11*K_12*K_13*K_15*K_16*K_17*K_18*K_9*K_Cli*K_Clo*K_Ko*K_Nai*K_Si*K_So*kappa_re10*kappa_re2*kappa_re3*kappa_re4*kappa_re5*kappa_re6*kappa_re7*kappa_re8*kappa_re9+K_10*K_11*K_12*K_14*K_15*K_16*K_17*K_18*K_9*K_Cli*K_Clo*K_Ko*K_Nai*K_Si*K_So*kappa_re10*kappa_re2*kappa_re3*kappa_re4*kappa_re5*kappa_re6*kappa_re7*kappa_re8*kappa_re9;
    P_45 = K_10*K_11*K_12*K_13*K_15*K_16*K_17*K_18*K_9*K_Cli*K_Clo*K_Nai*K_Nao*K_Si*K_So*kappa_re1*kappa_re10*kappa_re2*kappa_re3*kappa_re4*kappa_re5*kappa_re6*kappa_re7*kappa_re9+K_10*K_11*K_12*K_13*K_15*K_16*K_17*K_18*K_9*K_Cli*K_Clo*K_Nai*K_Nao*K_Si*K_So*kappa_re1*kappa_re10*kappa_re2*kappa_re3*kappa_re4*kappa_re5*kappa_re6*kappa_re8*kappa_re9+K_10*K_11*K_12*K_13*K_15*K_16*K_17*K_18*K_9*K_Cli*K_Clo*K_Nai*K_Nao*K_Si*K_So*kappa_re1*kappa_re2*kappa_re3*kappa_re4*kappa_re5*kappa_re6*kappa_re7*kappa_re8*kappa_re9+K_10*K_11*K_12*K_14*K_15*K_16*K_17*K_18*K_9*K_Cli*K_Clo*K_Nai*K_Nao*K_Si*K_So*kappa_re1*kappa_re10*kappa_re2*kappa_re3*kappa_re4*kappa_re5*kappa_re6*kappa_re7*kappa_re9+K_10*K_11*K_12*K_14*K_15*K_16*K_17*K_18*K_9*K_Cli*K_Clo*K_Nai*K_Nao*K_Si*K_So*kappa_re1*kappa_re10*kappa_re2*kappa_re3*kappa_re4*kappa_re5*kappa_re6*kappa_re8*kappa_re9+K_10*K_11*K_12*K_14*K_15*K_16*K_17*K_18*K_9*K_Cli*K_Clo*K_Nai*K_Nao*K_Si*K_So*kappa_re1*kappa_re2*kappa_re3*kappa_re4*kappa_re5*kappa_re6*kappa_re7*kappa_re8*kappa_re9;
    E = q_10_init+q_11_init+q_12_init+q_13_init+q_14_init+q_15_init+q_16_init+q_17_init+q_18_init+q_9_init;
  enddef;

  def comp SLCT11_BG_ss_io as
    var v_ss: fmol_per_sec {interface: public};
    var q_Clo: fmol {init: 1, interface: public};
    var q_Ki: fmol {init: 1, interface: public};
    var q_Nao: fmol {init: 1, interface: public};
    var q_So: fmol {init: 1, interface: public};
    var q_Cli: fmol {init: 1, interface: public};
    var q_Ko: fmol {init: 1, interface: public};
    var q_Nai: fmol {init: 1, interface: public};
    var q_Si: fmol {init: 1, interface: public};
  enddef;
  def map between SLCT11_BG_ss_test and SLCT11_ss for
    vars v_ss and v_ss;
    vars q_Clo and q_Clo;
    vars q_Ki and q_Ki;
    vars q_Nao and q_Nao;
    vars q_So and q_So;
    vars q_Cli and q_Cli;
    vars q_Ko and q_Ko;
    vars q_Nai and q_Nai;
    vars q_Si and q_Si;
  enddef;
  def map between SLCT11_BG_ss_test and SLCT11_BG_ss_io for
    vars v_ss and v_ss;
    vars q_Clo and q_Clo;
    vars q_Ki and q_Ki;
    vars q_Nao and q_Nao;
    vars q_So and q_So;
    vars q_Cli and q_Cli;
    vars q_Ko and q_Ko;
    vars q_Nai and q_Nai;
    vars q_Si and q_Si;
  enddef;
  def map between SLCT11_ss and SLCT11_BG_ss for
    vars P_0 and P_0;
    vars P_1 and P_1;
    vars P_2 and P_2;
    vars P_3 and P_3;
    vars P_4 and P_4;
    vars P_5 and P_5;
    vars P_6 and P_6;
    vars P_7 and P_7;
    vars P_8 and P_8;
    vars P_9 and P_9;
    vars P_10 and P_10;
    vars P_11 and P_11;
    vars P_12 and P_12;
    vars P_13 and P_13;
    vars P_14 and P_14;
    vars P_15 and P_15;
    vars P_16 and P_16;
    vars P_17 and P_17;
    vars P_18 and P_18;
    vars P_19 and P_19;
    vars P_20 and P_20;
    vars P_21 and P_21;
    vars P_22 and P_22;
    vars P_23 and P_23;
    vars P_24 and P_24;
    vars P_25 and P_25;
    vars P_26 and P_26;
    vars P_27 and P_27;
    vars P_28 and P_28;
    vars P_29 and P_29;
    vars P_30 and P_30;
    vars P_31 and P_31;
    vars P_32 and P_32;
    vars P_33 and P_33;
    vars P_34 and P_34;
    vars P_35 and P_35;
    vars P_36 and P_36;
    vars P_37 and P_37;
    vars P_38 and P_38;
    vars P_39 and P_39;
    vars P_40 and P_40;
    vars P_41 and P_41;
    vars P_42 and P_42;
    vars P_43 and P_43;
    vars P_44 and P_44;
    vars P_45 and P_45;
    vars E and E;
  enddef;
  def map between SLCT11_BG_param and SLCT11_BG_ss for
    vars K_Ki and K_Ki;
    vars K_Ko and K_Ko;
    vars K_Nai and K_Nai;
    vars K_Nao and K_Nao;
    vars K_So and K_So;
    vars K_Si and K_Si;
    vars K_Clo and K_Clo;
    vars K_Cli and K_Cli;
    vars K_9 and K_9;
    vars q_9_init and q_9_init;
    vars K_10 and K_10;
    vars q_10_init and q_10_init;
    vars K_11 and K_11;
    vars q_11_init and q_11_init;
    vars K_12 and K_12;
    vars q_12_init and q_12_init;
    vars K_13 and K_13;
    vars q_13_init and q_13_init;
    vars K_14 and K_14;
    vars q_14_init and q_14_init;
    vars K_15 and K_15;
    vars q_15_init and q_15_init;
    vars K_16 and K_16;
    vars q_16_init and q_16_init;
    vars K_17 and K_17;
    vars q_17_init and q_17_init;
    vars K_18 and K_18;
    vars q_18_init and q_18_init;
    vars kappa_re1 and kappa_re1;
    vars kappa_re2 and kappa_re2;
    vars kappa_re3 and kappa_re3;
    vars kappa_re4 and kappa_re4;
    vars kappa_re5 and kappa_re5;
    vars kappa_re6 and kappa_re6;
    vars kappa_re7 and kappa_re7;
    vars kappa_re8 and kappa_re8;
    vars kappa_re9 and kappa_re9;
    vars kappa_re10 and kappa_re10;
    vars F and F;
    vars R and R;
    vars T and T;
  enddef;
  def group as encapsulation for
    comp SLCT11_BG_ss_test incl
      comp SLCT11_ss;
      comp SLCT11_BG_param;
      comp SLCT11_BG_ss;
    endcomp;
  enddef;
enddef;
