def model SLCT14_BG_ss_test as
  def import using "../units_BG.cellml" for
    unit fmol using unit fmol;
    unit per_fmol2_sec7 using unit per_fmol2_sec7;
    unit per_fmol3_sec7 using unit per_fmol3_sec7;
    unit J_per_K_per_mol using unit J_per_K_per_mol;
    unit C_per_mol using unit C_per_mol;
    unit fmol_per_sec using unit fmol_per_sec;
    unit per_fmol4_sec7 using unit per_fmol4_sec7;
    unit per_fmol3_sec8 using unit per_fmol3_sec8;
    unit per_fmol_sec7 using unit per_fmol_sec7;
  enddef;
  def import using "../units_BG.cellml" for
    unit fF using unit fF;
    unit per_fmol using unit per_fmol;
  enddef;

  def comp SLCT14_BG_ss_test as
    var v_ss: fmol_per_sec {interface: public_and_private};
    var q_InAAi: fmol {interface: public_and_private};
    var q_Nai: fmol {interface: public_and_private};
    var q_cAAo: fmol {interface: public_and_private};
    var q_InAAo: fmol {interface: public_and_private};
    var q_Nao: fmol {interface: public_and_private};
    var q_cAAi: fmol {interface: public_and_private};
    var V_m: volt {interface: public_and_private};
    var F: C_per_mol {interface: private};
    var R: J_per_K_per_mol {interface: private};
    var T: kelvin {interface: private};
  enddef;

  def comp SLCT14_ss as
    var P_0: per_fmol3_sec8 {interface: public};
    var P_1: per_fmol3_sec8 {interface: public};
    var P_2: per_fmol_sec7 {interface: public};
    var P_3: per_fmol_sec7 {interface: public};
    var P_4: per_fmol2_sec7 {interface: public};
    var P_5: per_fmol2_sec7 {interface: public};
    var P_6: per_fmol2_sec7 {interface: public};
    var P_7: per_fmol2_sec7 {interface: public};
    var P_8: per_fmol2_sec7 {interface: public};
    var P_9: per_fmol2_sec7 {interface: public};
    var P_10: per_fmol2_sec7 {interface: public};
    var P_11: per_fmol2_sec7 {interface: public};
    var P_12: per_fmol2_sec7 {interface: public};
    var P_13: per_fmol3_sec7 {interface: public};
    var P_14: per_fmol3_sec7 {interface: public};
    var P_15: per_fmol3_sec7 {interface: public};
    var P_16: per_fmol3_sec7 {interface: public};
    var P_17: per_fmol3_sec7 {interface: public};
    var P_18: per_fmol3_sec7 {interface: public};
    var P_19: per_fmol3_sec7 {interface: public};
    var P_20: per_fmol3_sec7 {interface: public};
    var P_21: per_fmol4_sec7 {interface: public};
    var P_22: per_fmol4_sec7 {interface: public};
    var P_23: per_fmol4_sec7 {interface: public};
    var E: fmol {interface: public};
    var q_InAAi: fmol {interface: public};
    var q_Nai: fmol {interface: public};
    var q_cAAo: fmol {interface: public};
    var q_InAAo: fmol {interface: public};
    var q_Nao: fmol {interface: public};
    var q_cAAi: fmol {interface: public};
    var F: C_per_mol {interface: public};
    var R: J_per_K_per_mol {interface: public};
    var T: kelvin {interface: public};
    var V_m: volt {interface: public};
    var v_ss: fmol_per_sec {interface: public};
    v_ss = E*(P_0*q_InAAo*q_Nao*q_cAAi*exp(F*V_m/(R*T))-P_1*q_InAAi*q_Nai*q_cAAo)/(P_10*q_InAAo*q_Nao*exp(F*V_m/(R*T))+P_11*q_Nai*q_cAAo+P_12*q_Nao*q_cAAo*exp(F*V_m/(R*T))+P_13*q_InAAi*q_Nai*q_cAAo+P_14*q_InAAo*q_Nao*q_cAAi*exp(F*V_m/(R*T))+P_15*q_Nai*q_cAAi*q_cAAo+P_16*q_Nao*q_cAAi*q_cAAo*exp(F*V_m/(R*T))+P_17*q_InAAi*q_InAAo*q_Nao*exp(F*V_m/(R*T))+P_18*q_InAAi*q_Nao*q_cAAo*exp(F*V_m/(R*T))+P_19*q_InAAi*q_InAAo*q_Nai+P_2*q_cAAi+P_20*q_InAAo*q_Nai*q_cAAi+P_21*q_InAAi*q_InAAo*q_Nai*q_Nao*exp(F*V_m/(R*T))+P_22*q_InAAi*q_Nai*q_Nao*q_cAAo*exp(F*V_m/(R*T))+P_23*q_InAAo*q_Nai*q_Nao*q_cAAi*exp(F*V_m/(R*T))+P_3*q_cAAo+P_4*q_InAAi*q_Nai+P_5*q_Nai*q_cAAi+P_6*q_Nao*q_cAAi*exp(F*V_m/(R*T))+P_7*q_cAAi*q_cAAo+P_8*q_InAAi*q_cAAo+P_9*q_InAAo*q_cAAi);
  enddef;

  def comp SLCT14_BG_param as
    var K_cAAo: per_fmol {init: 1, interface: public};
    var K_cAAi: per_fmol {init: 1, interface: public};
    var K_InAAo: per_fmol {init: 1, interface: public};
    var K_InAAi: per_fmol {init: 1, interface: public};
    var K_Nai: per_fmol {init: 1, interface: public};
    var K_Nao: per_fmol {init: 1, interface: public};
    var K_7: per_fmol {init: 1, interface: public};
    var q_7_init: fmol {init: 1, interface: public};
    var K_8: per_fmol {init: 1, interface: public};
    var q_8_init: fmol {init: 1, interface: public};
    var K_9: per_fmol {init: 1, interface: public};
    var q_9_init: fmol {init: 1, interface: public};
    var K_10: per_fmol {init: 1, interface: public};
    var q_10_init: fmol {init: 1, interface: public};
    var K_11: per_fmol {init: 1, interface: public};
    var q_11_init: fmol {init: 1, interface: public};
    var K_12: per_fmol {init: 1, interface: public};
    var q_12_init: fmol {init: 1, interface: public};
    var K_13: per_fmol {init: 1, interface: public};
    var q_13_init: fmol {init: 1, interface: public};
    var K_14: per_fmol {init: 1, interface: public};
    var q_14_init: fmol {init: 1, interface: public};
    var C_m: fF {init: 1, interface: public};
    var kappa_re1: fmol_per_sec {init: 1, interface: public};
    var kappa_re2: fmol_per_sec {init: 1, interface: public};
    var kappa_re3: fmol_per_sec {init: 1, interface: public};
    var kappa_re4: fmol_per_sec {init: 1, interface: public};
    var kappa_re5: fmol_per_sec {init: 1, interface: public};
    var kappa_re6: fmol_per_sec {init: 1, interface: public};
    var kappa_re7: fmol_per_sec {init: 1, interface: public};
    var kappa_re8: fmol_per_sec {init: 1, interface: public};
    var F: C_per_mol {init: 96485, interface: public};
    var R: J_per_K_per_mol {init: 8.31, interface: public};
    var T: kelvin {init: 293, interface: public};
  enddef;

  def comp SLCT14_BG_ss as
    var P_0: per_fmol3_sec8 {interface: public};
    var P_1: per_fmol3_sec8 {interface: public};
    var P_2: per_fmol_sec7 {interface: public};
    var P_3: per_fmol_sec7 {interface: public};
    var P_4: per_fmol2_sec7 {interface: public};
    var P_5: per_fmol2_sec7 {interface: public};
    var P_6: per_fmol2_sec7 {interface: public};
    var P_7: per_fmol2_sec7 {interface: public};
    var P_8: per_fmol2_sec7 {interface: public};
    var P_9: per_fmol2_sec7 {interface: public};
    var P_10: per_fmol2_sec7 {interface: public};
    var P_11: per_fmol2_sec7 {interface: public};
    var P_12: per_fmol2_sec7 {interface: public};
    var P_13: per_fmol3_sec7 {interface: public};
    var P_14: per_fmol3_sec7 {interface: public};
    var P_15: per_fmol3_sec7 {interface: public};
    var P_16: per_fmol3_sec7 {interface: public};
    var P_17: per_fmol3_sec7 {interface: public};
    var P_18: per_fmol3_sec7 {interface: public};
    var P_19: per_fmol3_sec7 {interface: public};
    var P_20: per_fmol3_sec7 {interface: public};
    var P_21: per_fmol4_sec7 {interface: public};
    var P_22: per_fmol4_sec7 {interface: public};
    var P_23: per_fmol4_sec7 {interface: public};
    var E: fmol {interface: public};
    var K_cAAo: per_fmol {interface: public};
    var K_cAAi: per_fmol {interface: public};
    var K_InAAo: per_fmol {interface: public};
    var K_InAAi: per_fmol {interface: public};
    var K_Nai: per_fmol {interface: public};
    var K_Nao: per_fmol {interface: public};
    var K_7: per_fmol {interface: public};
    var q_7_init: fmol {interface: public};
    var K_8: per_fmol {interface: public};
    var q_8_init: fmol {interface: public};
    var K_9: per_fmol {interface: public};
    var q_9_init: fmol {interface: public};
    var K_10: per_fmol {interface: public};
    var q_10_init: fmol {interface: public};
    var K_11: per_fmol {interface: public};
    var q_11_init: fmol {interface: public};
    var K_12: per_fmol {interface: public};
    var q_12_init: fmol {interface: public};
    var K_13: per_fmol {interface: public};
    var q_13_init: fmol {interface: public};
    var K_14: per_fmol {interface: public};
    var q_14_init: fmol {interface: public};
    var C_m: fF {interface: public};
    var kappa_re1: fmol_per_sec {interface: public};
    var kappa_re2: fmol_per_sec {interface: public};
    var kappa_re3: fmol_per_sec {interface: public};
    var kappa_re4: fmol_per_sec {interface: public};
    var kappa_re5: fmol_per_sec {interface: public};
    var kappa_re6: fmol_per_sec {interface: public};
    var kappa_re7: fmol_per_sec {interface: public};
    var kappa_re8: fmol_per_sec {interface: public};
    var F: C_per_mol {interface: public};
    var R: J_per_K_per_mol {interface: public};
    var T: kelvin {interface: public};
    P_0 = K_10*K_11*K_12*K_13*K_14*K_7*K_8*K_9*K_InAAo*K_Nao*K_cAAi*kappa_re1*kappa_re2*kappa_re3*kappa_re4*kappa_re5*kappa_re6*kappa_re7*kappa_re8;
    P_1 = K_10*K_11*K_12*K_13*K_14*K_7*K_8*K_9*K_InAAi*K_Nai*K_cAAo*kappa_re1*kappa_re2*kappa_re3*kappa_re4*kappa_re5*kappa_re6*kappa_re7*kappa_re8;
    P_2 = K_10*K_11*K_12*K_13*K_14*K_7*K_8*K_cAAi*kappa_re1*kappa_re2*kappa_re3*kappa_re4*kappa_re5*kappa_re6*kappa_re7+K_10*K_11*K_12*K_13*K_14*K_7*K_8*K_cAAi*kappa_re1*kappa_re2*kappa_re3*kappa_re4*kappa_re5*kappa_re7*kappa_re8+K_10*K_11*K_12*K_13*K_14*K_7*K_8*K_cAAi*kappa_re1*kappa_re2*kappa_re3*kappa_re4*kappa_re6*kappa_re7*kappa_re8;
    P_3 = K_11*K_12*K_13*K_14*K_7*K_8*K_9*K_cAAo*kappa_re1*kappa_re2*kappa_re3*kappa_re4*kappa_re5*kappa_re6*kappa_re7+K_11*K_12*K_13*K_14*K_7*K_8*K_9*K_cAAo*kappa_re1*kappa_re2*kappa_re3*kappa_re4*kappa_re5*kappa_re7*kappa_re8+K_11*K_12*K_13*K_14*K_7*K_8*K_9*K_cAAo*kappa_re1*kappa_re2*kappa_re3*kappa_re4*kappa_re6*kappa_re7*kappa_re8;
    P_4 = K_10*K_11*K_12*K_13*K_14*K_7*K_8*K_InAAi*K_Nai*kappa_re1*kappa_re2*kappa_re3*kappa_re4*kappa_re5*kappa_re6*kappa_re8+K_10*K_11*K_12*K_13*K_14*K_7*K_8*K_InAAi*K_Nai*kappa_re1*kappa_re3*kappa_re4*kappa_re5*kappa_re6*kappa_re7*kappa_re8+K_10*K_11*K_12*K_13*K_14*K_7*K_8*K_InAAi*K_Nai*kappa_re2*kappa_re3*kappa_re4*kappa_re5*kappa_re6*kappa_re7*kappa_re8;
    P_5 = K_10*K_11*K_12*K_13*K_14*K_7*K_8*K_Nai*K_cAAi*kappa_re1*kappa_re2*kappa_re3*kappa_re5*kappa_re6*kappa_re7*kappa_re8;
    P_6 = K_10*K_11*K_12*K_13*K_14*K_7*K_8*K_Nao*K_cAAi*kappa_re1*kappa_re2*kappa_re4*kappa_re5*kappa_re6*kappa_re7*kappa_re8;
    P_7 = K_10*K_11*K_12*K_13*K_14*K_7*K_9*K_cAAi*K_cAAo*kappa_re1*kappa_re2*kappa_re3*kappa_re4*kappa_re5*kappa_re6*kappa_re7+K_10*K_11*K_12*K_13*K_14*K_7*K_9*K_cAAi*K_cAAo*kappa_re1*kappa_re2*kappa_re3*kappa_re4*kappa_re5*kappa_re7*kappa_re8+K_10*K_11*K_12*K_13*K_14*K_7*K_9*K_cAAi*K_cAAo*kappa_re1*kappa_re2*kappa_re3*kappa_re4*kappa_re6*kappa_re7*kappa_re8+K_10*K_11*K_12*K_13*K_14*K_8*K_9*K_cAAi*K_cAAo*kappa_re1*kappa_re2*kappa_re3*kappa_re4*kappa_re5*kappa_re6*kappa_re7+K_10*K_11*K_12*K_13*K_14*K_8*K_9*K_cAAi*K_cAAo*kappa_re1*kappa_re2*kappa_re3*kappa_re4*kappa_re5*kappa_re7*kappa_re8+K_10*K_11*K_12*K_13*K_14*K_8*K_9*K_cAAi*K_cAAo*kappa_re1*kappa_re2*kappa_re3*kappa_re4*kappa_re6*kappa_re7*kappa_re8;
    P_8 = K_10*K_11*K_13*K_14*K_7*K_8*K_9*K_InAAi*K_cAAo*kappa_re1*kappa_re2*kappa_re3*kappa_re4*kappa_re5*kappa_re6*kappa_re7+K_10*K_11*K_13*K_14*K_7*K_8*K_9*K_InAAi*K_cAAo*kappa_re1*kappa_re2*kappa_re3*kappa_re4*kappa_re5*kappa_re7*kappa_re8+K_10*K_11*K_13*K_14*K_7*K_8*K_9*K_InAAi*K_cAAo*kappa_re1*kappa_re2*kappa_re3*kappa_re4*kappa_re6*kappa_re7*kappa_re8;
    P_9 = K_10*K_12*K_13*K_14*K_7*K_8*K_9*K_InAAo*K_cAAi*kappa_re1*kappa_re2*kappa_re3*kappa_re4*kappa_re5*kappa_re6*kappa_re7+K_10*K_12*K_13*K_14*K_7*K_8*K_9*K_InAAo*K_cAAi*kappa_re1*kappa_re2*kappa_re3*kappa_re4*kappa_re5*kappa_re7*kappa_re8+K_10*K_12*K_13*K_14*K_7*K_8*K_9*K_InAAo*K_cAAi*kappa_re1*kappa_re2*kappa_re3*kappa_re4*kappa_re6*kappa_re7*kappa_re8;
    P_10 = K_11*K_12*K_13*K_14*K_7*K_8*K_9*K_InAAo*K_Nao*kappa_re1*kappa_re2*kappa_re3*kappa_re4*kappa_re5*kappa_re6*kappa_re8+K_11*K_12*K_13*K_14*K_7*K_8*K_9*K_InAAo*K_Nao*kappa_re1*kappa_re3*kappa_re4*kappa_re5*kappa_re6*kappa_re7*kappa_re8+K_11*K_12*K_13*K_14*K_7*K_8*K_9*K_InAAo*K_Nao*kappa_re2*kappa_re3*kappa_re4*kappa_re5*kappa_re6*kappa_re7*kappa_re8;
    P_11 = K_11*K_12*K_13*K_14*K_7*K_8*K_9*K_Nai*K_cAAo*kappa_re1*kappa_re2*kappa_re3*kappa_re5*kappa_re6*kappa_re7*kappa_re8;
    P_12 = K_11*K_12*K_13*K_14*K_7*K_8*K_9*K_Nao*K_cAAo*kappa_re1*kappa_re2*kappa_re4*kappa_re5*kappa_re6*kappa_re7*kappa_re8;
    P_13 = K_10*K_11*K_12*K_13*K_14*K_7*K_9*K_InAAi*K_Nai*K_cAAo*kappa_re1*kappa_re3*kappa_re4*kappa_re5*kappa_re6*kappa_re7*kappa_re8+K_10*K_11*K_12*K_13*K_14*K_8*K_9*K_InAAi*K_Nai*K_cAAo*kappa_re1*kappa_re2*kappa_re3*kappa_re4*kappa_re5*kappa_re6*kappa_re8+K_10*K_11*K_12*K_13*K_14*K_8*K_9*K_InAAi*K_Nai*K_cAAo*kappa_re1*kappa_re3*kappa_re4*kappa_re5*kappa_re6*kappa_re7*kappa_re8+K_10*K_11*K_12*K_13*K_7*K_8*K_9*K_InAAi*K_Nai*K_cAAo*kappa_re1*kappa_re2*kappa_re3*kappa_re4*kappa_re5*kappa_re6*kappa_re7+K_10*K_11*K_12*K_13*K_7*K_8*K_9*K_InAAi*K_Nai*K_cAAo*kappa_re1*kappa_re2*kappa_re3*kappa_re4*kappa_re6*kappa_re7*kappa_re8+K_10*K_11*K_12*K_14*K_7*K_8*K_9*K_InAAi*K_Nai*K_cAAo*kappa_re1*kappa_re2*kappa_re3*kappa_re4*kappa_re6*kappa_re7*kappa_re8+K_10*K_12*K_13*K_14*K_7*K_8*K_9*K_InAAi*K_Nai*K_cAAo*kappa_re1*kappa_re2*kappa_re4*kappa_re5*kappa_re6*kappa_re7*kappa_re8;
    P_14 = K_10*K_11*K_12*K_13*K_14*K_7*K_9*K_InAAo*K_Nao*K_cAAi*kappa_re1*kappa_re2*kappa_re3*kappa_re4*kappa_re5*kappa_re6*kappa_re8+K_10*K_11*K_12*K_13*K_14*K_7*K_9*K_InAAo*K_Nao*K_cAAi*kappa_re2*kappa_re3*kappa_re4*kappa_re5*kappa_re6*kappa_re7*kappa_re8+K_10*K_11*K_12*K_13*K_14*K_8*K_9*K_InAAo*K_Nao*K_cAAi*kappa_re2*kappa_re3*kappa_re4*kappa_re5*kappa_re6*kappa_re7*kappa_re8+K_10*K_11*K_12*K_13*K_7*K_8*K_9*K_InAAo*K_Nao*K_cAAi*kappa_re1*kappa_re2*kappa_re3*kappa_re4*kappa_re5*kappa_re7*kappa_re8+K_10*K_11*K_12*K_14*K_7*K_8*K_9*K_InAAo*K_Nao*K_cAAi*kappa_re1*kappa_re2*kappa_re3*kappa_re4*kappa_re5*kappa_re6*kappa_re7+K_10*K_11*K_12*K_14*K_7*K_8*K_9*K_InAAo*K_Nao*K_cAAi*kappa_re1*kappa_re2*kappa_re3*kappa_re4*kappa_re5*kappa_re7*kappa_re8+K_10*K_11*K_13*K_14*K_7*K_8*K_9*K_InAAo*K_Nao*K_cAAi*kappa_re1*kappa_re2*kappa_re3*kappa_re5*kappa_re6*kappa_re7*kappa_re8;
    P_15 = K_10*K_11*K_12*K_13*K_14*K_7*K_9*K_Nai*K_cAAi*K_cAAo*kappa_re1*kappa_re2*kappa_re3*kappa_re5*kappa_re6*kappa_re7*kappa_re8+K_10*K_11*K_12*K_13*K_14*K_8*K_9*K_Nai*K_cAAi*K_cAAo*kappa_re1*kappa_re2*kappa_re3*kappa_re5*kappa_re6*kappa_re7*kappa_re8;
    P_16 = K_10*K_11*K_12*K_13*K_14*K_7*K_9*K_Nao*K_cAAi*K_cAAo*kappa_re1*kappa_re2*kappa_re4*kappa_re5*kappa_re6*kappa_re7*kappa_re8+K_10*K_11*K_12*K_13*K_14*K_8*K_9*K_Nao*K_cAAi*K_cAAo*kappa_re1*kappa_re2*kappa_re4*kappa_re5*kappa_re6*kappa_re7*kappa_re8;
    P_17 = K_10*K_11*K_13*K_14*K_7*K_8*K_9*K_InAAi*K_InAAo*K_Nao*kappa_re1*kappa_re2*kappa_re3*kappa_re4*kappa_re5*kappa_re6*kappa_re8+K_10*K_11*K_13*K_14*K_7*K_8*K_9*K_InAAi*K_InAAo*K_Nao*kappa_re1*kappa_re3*kappa_re4*kappa_re5*kappa_re6*kappa_re7*kappa_re8+K_10*K_11*K_13*K_14*K_7*K_8*K_9*K_InAAi*K_InAAo*K_Nao*kappa_re2*kappa_re3*kappa_re4*kappa_re5*kappa_re6*kappa_re7*kappa_re8;
    P_18 = K_10*K_11*K_13*K_14*K_7*K_8*K_9*K_InAAi*K_Nao*K_cAAo*kappa_re1*kappa_re2*kappa_re4*kappa_re5*kappa_re6*kappa_re7*kappa_re8;
    P_19 = K_10*K_12*K_13*K_14*K_7*K_8*K_9*K_InAAi*K_InAAo*K_Nai*kappa_re1*kappa_re2*kappa_re3*kappa_re4*kappa_re5*kappa_re6*kappa_re8+K_10*K_12*K_13*K_14*K_7*K_8*K_9*K_InAAi*K_InAAo*K_Nai*kappa_re1*kappa_re3*kappa_re4*kappa_re5*kappa_re6*kappa_re7*kappa_re8+K_10*K_12*K_13*K_14*K_7*K_8*K_9*K_InAAi*K_InAAo*K_Nai*kappa_re2*kappa_re3*kappa_re4*kappa_re5*kappa_re6*kappa_re7*kappa_re8;
    P_20 = K_10*K_12*K_13*K_14*K_7*K_8*K_9*K_InAAo*K_Nai*K_cAAi*kappa_re1*kappa_re2*kappa_re3*kappa_re5*kappa_re6*kappa_re7*kappa_re8;
    P_21 = K_10*K_11*K_12*K_13*K_7*K_8*K_9*K_InAAi*K_InAAo*K_Nai*K_Nao*kappa_re1*kappa_re2*kappa_re3*kappa_re4*kappa_re5*kappa_re6*kappa_re8+K_10*K_11*K_12*K_13*K_7*K_8*K_9*K_InAAi*K_InAAo*K_Nai*K_Nao*kappa_re1*kappa_re3*kappa_re4*kappa_re5*kappa_re6*kappa_re7*kappa_re8+K_10*K_11*K_12*K_13*K_7*K_8*K_9*K_InAAi*K_InAAo*K_Nai*K_Nao*kappa_re2*kappa_re3*kappa_re4*kappa_re5*kappa_re6*kappa_re7*kappa_re8+K_10*K_11*K_12*K_14*K_7*K_8*K_9*K_InAAi*K_InAAo*K_Nai*K_Nao*kappa_re1*kappa_re2*kappa_re3*kappa_re4*kappa_re5*kappa_re6*kappa_re8+K_10*K_11*K_12*K_14*K_7*K_8*K_9*K_InAAi*K_InAAo*K_Nai*K_Nao*kappa_re1*kappa_re3*kappa_re4*kappa_re5*kappa_re6*kappa_re7*kappa_re8+K_10*K_11*K_12*K_14*K_7*K_8*K_9*K_InAAi*K_InAAo*K_Nai*K_Nao*kappa_re2*kappa_re3*kappa_re4*kappa_re5*kappa_re6*kappa_re7*kappa_re8;
    P_22 = K_10*K_11*K_12*K_13*K_7*K_8*K_9*K_InAAi*K_Nai*K_Nao*K_cAAo*kappa_re1*kappa_re2*kappa_re4*kappa_re5*kappa_re6*kappa_re7*kappa_re8+K_10*K_11*K_12*K_14*K_7*K_8*K_9*K_InAAi*K_Nai*K_Nao*K_cAAo*kappa_re1*kappa_re2*kappa_re4*kappa_re5*kappa_re6*kappa_re7*kappa_re8;
    P_23 = K_10*K_11*K_12*K_13*K_7*K_8*K_9*K_InAAo*K_Nai*K_Nao*K_cAAi*kappa_re1*kappa_re2*kappa_re3*kappa_re5*kappa_re6*kappa_re7*kappa_re8+K_10*K_11*K_12*K_14*K_7*K_8*K_9*K_InAAo*K_Nai*K_Nao*K_cAAi*kappa_re1*kappa_re2*kappa_re3*kappa_re5*kappa_re6*kappa_re7*kappa_re8;
    E = q_10_init+q_11_init+q_12_init+q_13_init+q_14_init+q_7_init+q_8_init+q_9_init;
  enddef;

  def comp SLCT14_BG_ss_io as
    var v_ss: fmol_per_sec {interface: public};
    var q_InAAi: fmol {init: 1, interface: public};
    var q_Nai: fmol {init: 1, interface: public};
    var q_cAAo: fmol {init: 1, interface: public};
    var q_InAAo: fmol {init: 1, interface: public};
    var q_Nao: fmol {init: 1, interface: public};
    var q_cAAi: fmol {init: 1, interface: public};
    var V_m: volt {init: 1, interface: public};
  enddef;
  def map between SLCT14_BG_ss_test and SLCT14_ss for
    vars v_ss and v_ss;
    vars q_InAAi and q_InAAi;
    vars q_Nai and q_Nai;
    vars q_cAAo and q_cAAo;
    vars q_InAAo and q_InAAo;
    vars q_Nao and q_Nao;
    vars q_cAAi and q_cAAi;
    vars V_m and V_m;
    vars F and F;
    vars R and R;
    vars T and T;
  enddef;
  def map between SLCT14_BG_ss_test and SLCT14_BG_ss_io for
    vars v_ss and v_ss;
    vars q_InAAi and q_InAAi;
    vars q_Nai and q_Nai;
    vars q_cAAo and q_cAAo;
    vars q_InAAo and q_InAAo;
    vars q_Nao and q_Nao;
    vars q_cAAi and q_cAAi;
    vars V_m and V_m;
  enddef;
  def map between SLCT14_ss and SLCT14_BG_ss for
    vars P_0 and P_0;
    vars P_1 and P_1;
    vars P_2 and P_2;
    vars P_3 and P_3;
    vars P_4 and P_4;
    vars P_5 and P_5;
    vars P_6 and P_6;
    vars P_7 and P_7;
    vars P_8 and P_8;
    vars P_9 and P_9;
    vars P_10 and P_10;
    vars P_11 and P_11;
    vars P_12 and P_12;
    vars P_13 and P_13;
    vars P_14 and P_14;
    vars P_15 and P_15;
    vars P_16 and P_16;
    vars P_17 and P_17;
    vars P_18 and P_18;
    vars P_19 and P_19;
    vars P_20 and P_20;
    vars P_21 and P_21;
    vars P_22 and P_22;
    vars P_23 and P_23;
    vars E and E;
    vars F and F;
    vars R and R;
    vars T and T;
  enddef;
  def map between SLCT14_ss and SLCT14_BG_param for
    vars F and F;
    vars R and R;
    vars T and T;
  enddef;
  def map between SLCT14_BG_param and SLCT14_BG_ss for
    vars K_cAAo and K_cAAo;
    vars K_cAAi and K_cAAi;
    vars K_InAAo and K_InAAo;
    vars K_InAAi and K_InAAi;
    vars K_Nai and K_Nai;
    vars K_Nao and K_Nao;
    vars K_7 and K_7;
    vars q_7_init and q_7_init;
    vars K_8 and K_8;
    vars q_8_init and q_8_init;
    vars K_9 and K_9;
    vars q_9_init and q_9_init;
    vars K_10 and K_10;
    vars q_10_init and q_10_init;
    vars K_11 and K_11;
    vars q_11_init and q_11_init;
    vars K_12 and K_12;
    vars q_12_init and q_12_init;
    vars K_13 and K_13;
    vars q_13_init and q_13_init;
    vars K_14 and K_14;
    vars q_14_init and q_14_init;
    vars C_m and C_m;
    vars kappa_re1 and kappa_re1;
    vars kappa_re2 and kappa_re2;
    vars kappa_re3 and kappa_re3;
    vars kappa_re4 and kappa_re4;
    vars kappa_re5 and kappa_re5;
    vars kappa_re6 and kappa_re6;
    vars kappa_re7 and kappa_re7;
    vars kappa_re8 and kappa_re8;
    vars F and F;
    vars R and R;
    vars T and T;
  enddef;
  def group as encapsulation for
    comp SLCT14_BG_ss_test incl
      comp SLCT14_ss;
      comp SLCT14_BG_param;
      comp SLCT14_BG_ss;
    endcomp;
  enddef;
enddef;
