<?xml version="1.0" encoding="UTF-8"?>
<model xmlns="http://www.cellml.org/cellml/2.0#" name="SLCT3_BG_ss">
  <import xmlns:xlink="http://www.w3.org/1999/xlink" xlink:href="../units_BG.cellml">
    <units units_ref="per_fmol_sec4" name="per_fmol_sec4"/>
    <units units_ref="per_fmol_sec3" name="per_fmol_sec3"/>
    <units units_ref="fmol_per_sec" name="fmol_per_sec"/>
    <units units_ref="per_fmol" name="per_fmol"/>
    <units units_ref="C_per_mol" name="C_per_mol"/>
    <units units_ref="J_per_K_per_mol" name="J_per_K_per_mol"/>
    <units units_ref="per_fmol2_sec3" name="per_fmol2_sec3"/>
    <units units_ref="fmol" name="fmol"/>
    <units units_ref="per_sec3" name="per_sec3"/>
  </import>
  <component name="SLCT3_BG_ss">
    <variable name="P_0" units="per_fmol_sec4" interface="public"/>
    <variable name="P_1" units="per_fmol_sec4" interface="public"/>
    <variable name="P_2" units="per_fmol_sec3" interface="public"/>
    <variable name="P_3" units="per_fmol_sec3" interface="public"/>
    <variable name="P_4" units="per_fmol2_sec3" interface="public"/>
    <variable name="P_5" units="per_sec3" interface="public"/>
    <variable name="E" units="fmol" interface="public"/>
    <variable name="K_Ai" units="per_fmol" interface="public"/>
    <variable name="K_Ao" units="per_fmol" interface="public"/>
    <variable name="K_3" units="per_fmol" interface="public"/>
    <variable name="q_3_init" units="fmol" interface="public"/>
    <variable name="K_4" units="per_fmol" interface="public"/>
    <variable name="q_4_init" units="fmol" interface="public"/>
    <variable name="K_5" units="per_fmol" interface="public"/>
    <variable name="q_5_init" units="fmol" interface="public"/>
    <variable name="K_6" units="per_fmol" interface="public"/>
    <variable name="q_6_init" units="fmol" interface="public"/>
    <variable name="kappa_re1" units="fmol_per_sec" interface="public"/>
    <variable name="kappa_re2" units="fmol_per_sec" interface="public"/>
    <variable name="kappa_re3" units="fmol_per_sec" interface="public"/>
    <variable name="kappa_re4" units="fmol_per_sec" interface="public"/>
    <variable name="F" units="C_per_mol" interface="public"/>
    <variable name="R" units="J_per_K_per_mol" interface="public"/>
    <variable name="T" units="kelvin" interface="public"/>
    <math xmlns="http://www.w3.org/1998/Math/MathML" xmlns:cellml="http://www.cellml.org/cellml/2.0#">
      <apply>
        <eq/>
        <ci>P_0</ci>
        <apply>
          <times/>
          <ci>K_3</ci>
          <ci>K_4</ci>
          <ci>K_5</ci>
          <ci>K_6</ci>
          <ci>K_Ao</ci>
          <ci>kappa_re1</ci>
          <ci>kappa_re2</ci>
          <ci>kappa_re3</ci>
          <ci>kappa_re4</ci>
        </apply>
      </apply>
      <apply>
        <eq/>
        <ci>P_1</ci>
        <apply>
          <times/>
          <ci>K_3</ci>
          <ci>K_4</ci>
          <ci>K_5</ci>
          <ci>K_6</ci>
          <ci>K_Ai</ci>
          <ci>kappa_re1</ci>
          <ci>kappa_re2</ci>
          <ci>kappa_re3</ci>
          <ci>kappa_re4</ci>
        </apply>
      </apply>
      <apply>
        <eq/>
        <ci>P_2</ci>
        <apply>
          <plus/>
          <apply>
            <times/>
            <ci>K_3</ci>
            <ci>K_4</ci>
            <ci>K_5</ci>
            <ci>K_Ai</ci>
            <ci>kappa_re1</ci>
            <ci>kappa_re3</ci>
            <ci>kappa_re4</ci>
          </apply>
          <apply>
            <times/>
            <ci>K_3</ci>
            <ci>K_4</ci>
            <ci>K_6</ci>
            <ci>K_Ai</ci>
            <ci>kappa_re1</ci>
            <ci>kappa_re2</ci>
            <ci>kappa_re3</ci>
          </apply>
          <apply>
            <times/>
            <ci>K_3</ci>
            <ci>K_4</ci>
            <ci>K_6</ci>
            <ci>K_Ai</ci>
            <ci>kappa_re1</ci>
            <ci>kappa_re3</ci>
            <ci>kappa_re4</ci>
          </apply>
          <apply>
            <times/>
            <ci>K_3</ci>
            <ci>K_5</ci>
            <ci>K_6</ci>
            <ci>K_Ai</ci>
            <ci>kappa_re1</ci>
            <ci>kappa_re2</ci>
            <ci>kappa_re4</ci>
          </apply>
        </apply>
      </apply>
      <apply>
        <eq/>
        <ci>P_3</ci>
        <apply>
          <plus/>
          <apply>
            <times/>
            <ci>K_3</ci>
            <ci>K_4</ci>
            <ci>K_5</ci>
            <ci>K_Ao</ci>
            <ci>kappa_re1</ci>
            <ci>kappa_re2</ci>
            <ci>kappa_re3</ci>
          </apply>
          <apply>
            <times/>
            <ci>K_3</ci>
            <ci>K_4</ci>
            <ci>K_5</ci>
            <ci>K_Ao</ci>
            <ci>kappa_re2</ci>
            <ci>kappa_re3</ci>
            <ci>kappa_re4</ci>
          </apply>
          <apply>
            <times/>
            <ci>K_3</ci>
            <ci>K_4</ci>
            <ci>K_6</ci>
            <ci>K_Ao</ci>
            <ci>kappa_re2</ci>
            <ci>kappa_re3</ci>
            <ci>kappa_re4</ci>
          </apply>
          <apply>
            <times/>
            <ci>K_4</ci>
            <ci>K_5</ci>
            <ci>K_6</ci>
            <ci>K_Ao</ci>
            <ci>kappa_re1</ci>
            <ci>kappa_re2</ci>
            <ci>kappa_re4</ci>
          </apply>
        </apply>
      </apply>
      <apply>
        <eq/>
        <ci>P_4</ci>
        <apply>
          <plus/>
          <apply>
            <times/>
            <ci>K_3</ci>
            <ci>K_4</ci>
            <ci>K_5</ci>
            <ci>K_Ai</ci>
            <ci>K_Ao</ci>
            <ci>kappa_re1</ci>
            <ci>kappa_re2</ci>
            <ci>kappa_re4</ci>
          </apply>
          <apply>
            <times/>
            <ci>K_3</ci>
            <ci>K_4</ci>
            <ci>K_6</ci>
            <ci>K_Ai</ci>
            <ci>K_Ao</ci>
            <ci>kappa_re1</ci>
            <ci>kappa_re2</ci>
            <ci>kappa_re4</ci>
          </apply>
        </apply>
      </apply>
      <apply>
        <eq/>
        <ci>P_5</ci>
        <apply>
          <plus/>
          <apply>
            <times/>
            <ci>K_3</ci>
            <ci>K_5</ci>
            <ci>K_6</ci>
            <ci>kappa_re1</ci>
            <ci>kappa_re2</ci>
            <ci>kappa_re3</ci>
          </apply>
          <apply>
            <times/>
            <ci>K_3</ci>
            <ci>K_5</ci>
            <ci>K_6</ci>
            <ci>kappa_re1</ci>
            <ci>kappa_re3</ci>
            <ci>kappa_re4</ci>
          </apply>
          <apply>
            <times/>
            <ci>K_3</ci>
            <ci>K_5</ci>
            <ci>K_6</ci>
            <ci>kappa_re2</ci>
            <ci>kappa_re3</ci>
            <ci>kappa_re4</ci>
          </apply>
          <apply>
            <times/>
            <ci>K_4</ci>
            <ci>K_5</ci>
            <ci>K_6</ci>
            <ci>kappa_re1</ci>
            <ci>kappa_re2</ci>
            <ci>kappa_re3</ci>
          </apply>
          <apply>
            <times/>
            <ci>K_4</ci>
            <ci>K_5</ci>
            <ci>K_6</ci>
            <ci>kappa_re1</ci>
            <ci>kappa_re3</ci>
            <ci>kappa_re4</ci>
          </apply>
          <apply>
            <times/>
            <ci>K_4</ci>
            <ci>K_5</ci>
            <ci>K_6</ci>
            <ci>kappa_re2</ci>
            <ci>kappa_re3</ci>
            <ci>kappa_re4</ci>
          </apply>
        </apply>
      </apply>
      <apply>
        <eq/>
        <ci>E</ci>
        <apply>
          <plus/>
          <ci>q_3_init</ci>
          <ci>q_4_init</ci>
          <ci>q_5_init</ci>
          <ci>q_6_init</ci>
        </apply>
      </apply>
    </math>
  </component>
</model>
