<?xml version="1.0" encoding="UTF-8"?>
<model xmlns="http://www.cellml.org/cellml/2.0#" name="SLCT3_BG_ss_test" id="b4da55">
  <import xmlns:xlink="http://www.w3.org/1999/xlink" xlink:href="../units_BG.cellml" id="b4da56">
    <units units_ref="per_fmol_sec4" name="per_fmol_sec4" id="b4da58"/>
    <units units_ref="per_fmol_sec3" name="per_fmol_sec3" id="b4da59"/>
    <units units_ref="fmol_per_sec" name="fmol_per_sec" id="b4da5a"/>
    <units units_ref="per_fmol2_sec3" name="per_fmol2_sec3" id="b4da5b"/>
    <units units_ref="fmol" name="fmol" id="b4da5c"/>
    <units units_ref="per_sec3" name="per_sec3" id="b4da5d"/>
  </import>
  <import xmlns:xlink="http://www.w3.org/1999/xlink" xlink:href="../units_BG.cellml" id="b4da57">
    <units units_ref="per_fmol" name="per_fmol" id="b4da5e"/>
    <units units_ref="C_per_mol" name="C_per_mol" id="b4da5f"/>
    <units units_ref="J_per_K_per_mol" name="J_per_K_per_mol" id="b4da60"/>
  </import>
  <component name="SLCT3_BG_ss_test" id="b4da61">
    <variable name="v_ss" units="fmol_per_sec" interface="public_and_private" id="b4da63"/>
    <variable name="q_Ao" units="fmol" interface="public_and_private" id="b4da64"/>
    <variable name="q_Ai" units="fmol" interface="public_and_private" id="b4da65"/>
  </component>
  <component name="SLCT3_ss" id="b4da6e">
    <variable name="P_0" units="per_fmol_sec4" interface="public" id="b4da70"/>
    <variable name="P_1" units="per_fmol_sec4" interface="public" id="b4da71"/>
    <variable name="P_2" units="per_fmol_sec3" interface="public" id="b4da72"/>
    <variable name="P_3" units="per_fmol_sec3" interface="public" id="b4da73"/>
    <variable name="P_4" units="per_fmol2_sec3" interface="public" id="b4da74"/>
    <variable name="P_5" units="per_sec3" interface="public" id="b4da75"/>
    <variable name="E" units="fmol" interface="public" id="b4da76"/>
    <variable name="q_Ao" units="fmol" interface="public" id="b4da77"/>
    <variable name="q_Ai" units="fmol" interface="public" id="b4da78"/>
    <variable name="v_ss" units="fmol_per_sec" interface="public" id="b4da79"/>
    <math xmlns="http://www.w3.org/1998/Math/MathML" xmlns:cellml="http://www.cellml.org/cellml/2.0#">
      <apply>
        <eq/>
        <ci>v_ss</ci>
        <apply>
          <divide/>
          <apply>
            <times/>
            <ci>E</ci>
            <apply>
              <minus/>
              <apply>
                <times/>
                <ci>P_0</ci>
                <ci>q_Ao</ci>
              </apply>
              <apply>
                <times/>
                <ci>P_1</ci>
                <ci>q_Ai</ci>
              </apply>
            </apply>
          </apply>
          <apply>
            <plus/>
            <apply>
              <times/>
              <ci>P_2</ci>
              <ci>q_Ai</ci>
            </apply>
            <apply>
              <times/>
              <ci>P_3</ci>
              <ci>q_Ao</ci>
            </apply>
            <apply>
              <times/>
              <ci>P_4</ci>
              <ci>q_Ai</ci>
              <ci>q_Ao</ci>
            </apply>
            <ci>P_5</ci>
          </apply>
        </apply>
      </apply>
    </math>
  </component>
  <component name="SLCT3_BG_param" id="b4da82">
    <variable name="K_Ai" units="per_fmol" initial_value="1" interface="public" id="b4da84"/>
    <variable name="K_Ao" units="per_fmol" initial_value="1" interface="public" id="b4da85"/>
    <variable name="K_3" units="per_fmol" initial_value="1" interface="public" id="b4da86"/>
    <variable name="q_3_init" units="fmol" initial_value="1" interface="public" id="b4da87"/>
    <variable name="K_4" units="per_fmol" initial_value="1" interface="public" id="b4da88"/>
    <variable name="q_4_init" units="fmol" initial_value="1" interface="public" id="b4da89"/>
    <variable name="K_5" units="per_fmol" initial_value="1" interface="public" id="b4da8a"/>
    <variable name="q_5_init" units="fmol" initial_value="1" interface="public" id="b4da8b"/>
    <variable name="K_6" units="per_fmol" initial_value="1" interface="public" id="b4da8c"/>
    <variable name="q_6_init" units="fmol" initial_value="1" interface="public" id="b4da8d"/>
    <variable name="kappa_re1" units="fmol_per_sec" initial_value="1" interface="public" id="b4da8e"/>
    <variable name="kappa_re2" units="fmol_per_sec" initial_value="1" interface="public" id="b4da8f"/>
    <variable name="kappa_re3" units="fmol_per_sec" initial_value="1" interface="public" id="b4da90"/>
    <variable name="kappa_re4" units="fmol_per_sec" initial_value="1" interface="public" id="b4da91"/>
    <variable name="F" units="C_per_mol" initial_value="96485" interface="public" id="b4da92"/>
    <variable name="R" units="J_per_K_per_mol" initial_value="8.31" interface="public" id="b4da93"/>
    <variable name="T" units="kelvin" initial_value="293" interface="public" id="b4da94"/>
  </component>
  <component name="SLCT3_BG_ss" id="b4daa7">
    <variable name="P_0" units="per_fmol_sec4" interface="public" id="b4daa9"/>
    <variable name="P_1" units="per_fmol_sec4" interface="public" id="b4daaa"/>
    <variable name="P_2" units="per_fmol_sec3" interface="public" id="b4daab"/>
    <variable name="P_3" units="per_fmol_sec3" interface="public" id="b4daac"/>
    <variable name="P_4" units="per_fmol2_sec3" interface="public" id="b4daad"/>
    <variable name="P_5" units="per_sec3" interface="public" id="b4daae"/>
    <variable name="E" units="fmol" interface="public" id="b4daaf"/>
    <variable name="K_Ai" units="per_fmol" interface="public" id="b4dab0"/>
    <variable name="K_Ao" units="per_fmol" interface="public" id="b4dab1"/>
    <variable name="K_3" units="per_fmol" interface="public" id="b4dab2"/>
    <variable name="q_3_init" units="fmol" interface="public" id="b4dab3"/>
    <variable name="K_4" units="per_fmol" interface="public" id="b4dab4"/>
    <variable name="q_4_init" units="fmol" interface="public" id="b4dab5"/>
    <variable name="K_5" units="per_fmol" interface="public" id="b4dab6"/>
    <variable name="q_5_init" units="fmol" interface="public" id="b4dab7"/>
    <variable name="K_6" units="per_fmol" interface="public" id="b4dab8"/>
    <variable name="q_6_init" units="fmol" interface="public" id="b4dab9"/>
    <variable name="kappa_re1" units="fmol_per_sec" interface="public" id="b4daba"/>
    <variable name="kappa_re2" units="fmol_per_sec" interface="public" id="b4dabb"/>
    <variable name="kappa_re3" units="fmol_per_sec" interface="public" id="b4dabc"/>
    <variable name="kappa_re4" units="fmol_per_sec" interface="public" id="b4dabd"/>
    <variable name="F" units="C_per_mol" interface="public" id="b4dabe"/>
    <variable name="R" units="J_per_K_per_mol" interface="public" id="b4dabf"/>
    <variable name="T" units="kelvin" interface="public" id="b4dac0"/>
    <math xmlns="http://www.w3.org/1998/Math/MathML" xmlns:cellml="http://www.cellml.org/cellml/2.0#">
      <apply>
        <eq/>
        <ci>P_0</ci>
        <apply>
          <times/>
          <ci>K_3</ci>
          <ci>K_4</ci>
          <ci>K_5</ci>
          <ci>K_6</ci>
          <ci>K_Ao</ci>
          <ci>kappa_re1</ci>
          <ci>kappa_re2</ci>
          <ci>kappa_re3</ci>
          <ci>kappa_re4</ci>
        </apply>
      </apply>
      <apply>
        <eq/>
        <ci>P_1</ci>
        <apply>
          <times/>
          <ci>K_3</ci>
          <ci>K_4</ci>
          <ci>K_5</ci>
          <ci>K_6</ci>
          <ci>K_Ai</ci>
          <ci>kappa_re1</ci>
          <ci>kappa_re2</ci>
          <ci>kappa_re3</ci>
          <ci>kappa_re4</ci>
        </apply>
      </apply>
      <apply>
        <eq/>
        <ci>P_2</ci>
        <apply>
          <plus/>
          <apply>
            <times/>
            <ci>K_3</ci>
            <ci>K_4</ci>
            <ci>K_5</ci>
            <ci>K_Ai</ci>
            <ci>kappa_re1</ci>
            <ci>kappa_re3</ci>
            <ci>kappa_re4</ci>
          </apply>
          <apply>
            <times/>
            <ci>K_3</ci>
            <ci>K_4</ci>
            <ci>K_6</ci>
            <ci>K_Ai</ci>
            <ci>kappa_re1</ci>
            <ci>kappa_re2</ci>
            <ci>kappa_re3</ci>
          </apply>
          <apply>
            <times/>
            <ci>K_3</ci>
            <ci>K_4</ci>
            <ci>K_6</ci>
            <ci>K_Ai</ci>
            <ci>kappa_re1</ci>
            <ci>kappa_re3</ci>
            <ci>kappa_re4</ci>
          </apply>
          <apply>
            <times/>
            <ci>K_3</ci>
            <ci>K_5</ci>
            <ci>K_6</ci>
            <ci>K_Ai</ci>
            <ci>kappa_re1</ci>
            <ci>kappa_re2</ci>
            <ci>kappa_re4</ci>
          </apply>
        </apply>
      </apply>
      <apply>
        <eq/>
        <ci>P_3</ci>
        <apply>
          <plus/>
          <apply>
            <times/>
            <ci>K_3</ci>
            <ci>K_4</ci>
            <ci>K_5</ci>
            <ci>K_Ao</ci>
            <ci>kappa_re1</ci>
            <ci>kappa_re2</ci>
            <ci>kappa_re3</ci>
          </apply>
          <apply>
            <times/>
            <ci>K_3</ci>
            <ci>K_4</ci>
            <ci>K_5</ci>
            <ci>K_Ao</ci>
            <ci>kappa_re2</ci>
            <ci>kappa_re3</ci>
            <ci>kappa_re4</ci>
          </apply>
          <apply>
            <times/>
            <ci>K_3</ci>
            <ci>K_4</ci>
            <ci>K_6</ci>
            <ci>K_Ao</ci>
            <ci>kappa_re2</ci>
            <ci>kappa_re3</ci>
            <ci>kappa_re4</ci>
          </apply>
          <apply>
            <times/>
            <ci>K_4</ci>
            <ci>K_5</ci>
            <ci>K_6</ci>
            <ci>K_Ao</ci>
            <ci>kappa_re1</ci>
            <ci>kappa_re2</ci>
            <ci>kappa_re4</ci>
          </apply>
        </apply>
      </apply>
      <apply>
        <eq/>
        <ci>P_4</ci>
        <apply>
          <plus/>
          <apply>
            <times/>
            <ci>K_3</ci>
            <ci>K_4</ci>
            <ci>K_5</ci>
            <ci>K_Ai</ci>
            <ci>K_Ao</ci>
            <ci>kappa_re1</ci>
            <ci>kappa_re2</ci>
            <ci>kappa_re4</ci>
          </apply>
          <apply>
            <times/>
            <ci>K_3</ci>
            <ci>K_4</ci>
            <ci>K_6</ci>
            <ci>K_Ai</ci>
            <ci>K_Ao</ci>
            <ci>kappa_re1</ci>
            <ci>kappa_re2</ci>
            <ci>kappa_re4</ci>
          </apply>
        </apply>
      </apply>
      <apply>
        <eq/>
        <ci>P_5</ci>
        <apply>
          <plus/>
          <apply>
            <times/>
            <ci>K_3</ci>
            <ci>K_5</ci>
            <ci>K_6</ci>
            <ci>kappa_re1</ci>
            <ci>kappa_re2</ci>
            <ci>kappa_re3</ci>
          </apply>
          <apply>
            <times/>
            <ci>K_3</ci>
            <ci>K_5</ci>
            <ci>K_6</ci>
            <ci>kappa_re1</ci>
            <ci>kappa_re3</ci>
            <ci>kappa_re4</ci>
          </apply>
          <apply>
            <times/>
            <ci>K_3</ci>
            <ci>K_5</ci>
            <ci>K_6</ci>
            <ci>kappa_re2</ci>
            <ci>kappa_re3</ci>
            <ci>kappa_re4</ci>
          </apply>
          <apply>
            <times/>
            <ci>K_4</ci>
            <ci>K_5</ci>
            <ci>K_6</ci>
            <ci>kappa_re1</ci>
            <ci>kappa_re2</ci>
            <ci>kappa_re3</ci>
          </apply>
          <apply>
            <times/>
            <ci>K_4</ci>
            <ci>K_5</ci>
            <ci>K_6</ci>
            <ci>kappa_re1</ci>
            <ci>kappa_re3</ci>
            <ci>kappa_re4</ci>
          </apply>
          <apply>
            <times/>
            <ci>K_4</ci>
            <ci>K_5</ci>
            <ci>K_6</ci>
            <ci>kappa_re2</ci>
            <ci>kappa_re3</ci>
            <ci>kappa_re4</ci>
          </apply>
        </apply>
      </apply>
      <apply>
        <eq/>
        <ci>E</ci>
        <apply>
          <plus/>
          <ci>q_3_init</ci>
          <ci>q_4_init</ci>
          <ci>q_5_init</ci>
          <ci>q_6_init</ci>
        </apply>
      </apply>
    </math>
  </component>
  <component name="SLCT3_BG_ss_io" id="b4dac1">
    <variable name="v_ss" units="fmol_per_sec" interface="public" id="b4dac2"/>
    <variable name="q_Ao" units="fmol" initial_value="1" interface="public" id="b4dac3"/>
    <variable name="q_Ai" units="fmol" initial_value="1" interface="public" id="b4dac4"/>
  </component>
  <connection component_1="SLCT3_BG_ss_test" component_2="SLCT3_ss" id="b4da66">
    <map_variables variable_1="v_ss" variable_2="v_ss" id="b4da67"/>
    <map_variables variable_1="q_Ao" variable_2="q_Ao" id="b4da6a"/>
    <map_variables variable_1="q_Ai" variable_2="q_Ai" id="b4da6c"/>
  </connection>
  <connection component_1="SLCT3_BG_ss_test" component_2="SLCT3_BG_ss_io" id="b4da68">
    <map_variables variable_1="v_ss" variable_2="v_ss" id="b4da69"/>
    <map_variables variable_1="q_Ao" variable_2="q_Ao" id="b4da6b"/>
    <map_variables variable_1="q_Ai" variable_2="q_Ai" id="b4da6d"/>
  </connection>
  <connection component_1="SLCT3_ss" component_2="SLCT3_BG_ss" id="b4da7a">
    <map_variables variable_1="P_0" variable_2="P_0" id="b4da7b"/>
    <map_variables variable_1="P_1" variable_2="P_1" id="b4da7c"/>
    <map_variables variable_1="P_2" variable_2="P_2" id="b4da7d"/>
    <map_variables variable_1="P_3" variable_2="P_3" id="b4da7e"/>
    <map_variables variable_1="P_4" variable_2="P_4" id="b4da7f"/>
    <map_variables variable_1="P_5" variable_2="P_5" id="b4da80"/>
    <map_variables variable_1="E" variable_2="E" id="b4da81"/>
  </connection>
  <connection component_1="SLCT3_BG_param" component_2="SLCT3_BG_ss" id="b4da95">
    <map_variables variable_1="K_Ai" variable_2="K_Ai" id="b4da96"/>
    <map_variables variable_1="K_Ao" variable_2="K_Ao" id="b4da97"/>
    <map_variables variable_1="K_3" variable_2="K_3" id="b4da98"/>
    <map_variables variable_1="q_3_init" variable_2="q_3_init" id="b4da99"/>
    <map_variables variable_1="K_4" variable_2="K_4" id="b4da9a"/>
    <map_variables variable_1="q_4_init" variable_2="q_4_init" id="b4da9b"/>
    <map_variables variable_1="K_5" variable_2="K_5" id="b4da9c"/>
    <map_variables variable_1="q_5_init" variable_2="q_5_init" id="b4da9d"/>
    <map_variables variable_1="K_6" variable_2="K_6" id="b4da9e"/>
    <map_variables variable_1="q_6_init" variable_2="q_6_init" id="b4da9f"/>
    <map_variables variable_1="kappa_re1" variable_2="kappa_re1" id="b4daa0"/>
    <map_variables variable_1="kappa_re2" variable_2="kappa_re2" id="b4daa1"/>
    <map_variables variable_1="kappa_re3" variable_2="kappa_re3" id="b4daa2"/>
    <map_variables variable_1="kappa_re4" variable_2="kappa_re4" id="b4daa3"/>
    <map_variables variable_1="F" variable_2="F" id="b4daa4"/>
    <map_variables variable_1="R" variable_2="R" id="b4daa5"/>
    <map_variables variable_1="T" variable_2="T" id="b4daa6"/>
  </connection>
  <encapsulation id="b4dac5">
    <component_ref component="SLCT3_BG_ss_test" id="b4da62">
      <component_ref component="SLCT3_ss" id="b4da6f"/>
      <component_ref component="SLCT3_BG_param" id="b4da83"/>
      <component_ref component="SLCT3_BG_ss" id="b4daa8"/>
    </component_ref>
  </encapsulation>
</model>
