<?xml version="1.0" encoding="UTF-8"?>
<model xmlns="http://www.cellml.org/cellml/2.0#" name="SLCT3_BG_test" id="b4da55">
  <import xmlns:xlink="http://www.w3.org/1999/xlink" xlink:href="../units_BG.cellml" id="b4da56">
    <units units_ref="fmol_per_sec" name="fmol_per_sec" id="b4da57"/>
    <units units_ref="per_fmol" name="per_fmol" id="b4da58"/>
    <units units_ref="C_per_mol" name="C_per_mol" id="b4da59"/>
    <units units_ref="J_per_mol" name="J_per_mol" id="b4da5a"/>
    <units units_ref="J_per_K_per_mol" name="J_per_K_per_mol" id="b4da5b"/>
    <units units_ref="fmol" name="fmol" id="b4da5c"/>
  </import>
  <component name="SLCT3_BG_test" id="b4da5d">
    <variable name="v_Ai" units="fmol_per_sec" interface="private" id="b4da5f"/>
    <variable name="q_Ai" units="fmol" interface="public_and_private" id="b4da60"/>
    <variable name="v_Ao" units="fmol_per_sec" interface="private" id="b4da61"/>
    <variable name="q_Ao" units="fmol" interface="public_and_private" id="b4da62"/>
  </component>
  <component name="SLCT3_BG" id="b4da6b">
    <variable name="t" units="second" id="b4da6d"/>
    <variable name="K_Ai" units="per_fmol" interface="public" id="b4da6e"/>
    <variable name="v_Ai" units="fmol_per_sec" interface="public" id="b4da6f"/>
    <variable name="q_Ai" units="fmol" interface="public" id="b4da70"/>
    <variable name="mu_Ai" units="J_per_mol" interface="public" id="b4da71"/>
    <variable name="K_Ao" units="per_fmol" interface="public" id="b4da72"/>
    <variable name="v_Ao" units="fmol_per_sec" interface="public" id="b4da73"/>
    <variable name="q_Ao" units="fmol" interface="public" id="b4da74"/>
    <variable name="mu_Ao" units="J_per_mol" interface="public" id="b4da75"/>
    <variable name="K_3" units="per_fmol" interface="public" id="b4da76"/>
    <variable name="v_3" units="fmol_per_sec" id="b4da77"/>
    <variable name="q_3_init" units="fmol" interface="public" id="b4da78"/>
    <variable name="q_3" units="fmol" initial_value="q_3_init" id="b4da79"/>
    <variable name="mu_3" units="J_per_mol" id="b4da7a"/>
    <variable name="K_4" units="per_fmol" interface="public" id="b4da7b"/>
    <variable name="v_4" units="fmol_per_sec" id="b4da7c"/>
    <variable name="q_4_init" units="fmol" interface="public" id="b4da7d"/>
    <variable name="q_4" units="fmol" initial_value="q_4_init" id="b4da7e"/>
    <variable name="mu_4" units="J_per_mol" id="b4da7f"/>
    <variable name="K_5" units="per_fmol" interface="public" id="b4da80"/>
    <variable name="v_5" units="fmol_per_sec" id="b4da81"/>
    <variable name="q_5_init" units="fmol" interface="public" id="b4da82"/>
    <variable name="q_5" units="fmol" initial_value="q_5_init" id="b4da83"/>
    <variable name="mu_5" units="J_per_mol" id="b4da84"/>
    <variable name="K_6" units="per_fmol" interface="public" id="b4da85"/>
    <variable name="v_6" units="fmol_per_sec" id="b4da86"/>
    <variable name="q_6_init" units="fmol" interface="public" id="b4da87"/>
    <variable name="q_6" units="fmol" initial_value="q_6_init" id="b4da88"/>
    <variable name="mu_6" units="J_per_mol" id="b4da89"/>
    <variable name="kappa_re1" units="fmol_per_sec" interface="public" id="b4da8a"/>
    <variable name="v_re1" units="fmol_per_sec" id="b4da8b"/>
    <variable name="mu_re1_in" units="J_per_mol" id="b4da8c"/>
    <variable name="mu_re1_out" units="J_per_mol" id="b4da8d"/>
    <variable name="kappa_re2" units="fmol_per_sec" interface="public" id="b4da8e"/>
    <variable name="v_re2" units="fmol_per_sec" id="b4da8f"/>
    <variable name="mu_re2_in" units="J_per_mol" id="b4da90"/>
    <variable name="mu_re2_out" units="J_per_mol" id="b4da91"/>
    <variable name="kappa_re3" units="fmol_per_sec" interface="public" id="b4da92"/>
    <variable name="v_re3" units="fmol_per_sec" id="b4da93"/>
    <variable name="mu_re3_in" units="J_per_mol" id="b4da94"/>
    <variable name="mu_re3_out" units="J_per_mol" id="b4da95"/>
    <variable name="kappa_re4" units="fmol_per_sec" interface="public" id="b4da96"/>
    <variable name="v_re4" units="fmol_per_sec" id="b4da97"/>
    <variable name="mu_re4_in" units="J_per_mol" id="b4da98"/>
    <variable name="mu_re4_out" units="J_per_mol" id="b4da99"/>
    <variable name="F" units="C_per_mol" interface="public" id="b4da9a"/>
    <variable name="R" units="J_per_K_per_mol" interface="public" id="b4da9b"/>
    <variable name="T" units="kelvin" interface="public" id="b4da9c"/>
    <math xmlns="http://www.w3.org/1998/Math/MathML" xmlns:cellml="http://www.cellml.org/cellml/2.0#">
      <apply>
        <eq/>
        <ci>mu_Ai</ci>
        <apply>
          <times/>
          <ci>R</ci>
          <ci>T</ci>
          <apply>
            <ln/>
            <apply>
              <times/>
              <ci>K_Ai</ci>
              <ci>q_Ai</ci>
            </apply>
          </apply>
        </apply>
      </apply>
      <apply>
        <eq/>
        <ci>mu_Ao</ci>
        <apply>
          <times/>
          <ci>R</ci>
          <ci>T</ci>
          <apply>
            <ln/>
            <apply>
              <times/>
              <ci>K_Ao</ci>
              <ci>q_Ao</ci>
            </apply>
          </apply>
        </apply>
      </apply>
      <apply>
        <eq/>
        <apply>
          <diff/>
          <bvar>
            <ci>t</ci>
          </bvar>
          <ci>q_3</ci>
        </apply>
        <ci>v_3</ci>
      </apply>
      <apply>
        <eq/>
        <ci>mu_3</ci>
        <apply>
          <times/>
          <ci>R</ci>
          <ci>T</ci>
          <apply>
            <ln/>
            <apply>
              <times/>
              <ci>K_3</ci>
              <ci>q_3</ci>
            </apply>
          </apply>
        </apply>
      </apply>
      <apply>
        <eq/>
        <apply>
          <diff/>
          <bvar>
            <ci>t</ci>
          </bvar>
          <ci>q_4</ci>
        </apply>
        <ci>v_4</ci>
      </apply>
      <apply>
        <eq/>
        <ci>mu_4</ci>
        <apply>
          <times/>
          <ci>R</ci>
          <ci>T</ci>
          <apply>
            <ln/>
            <apply>
              <times/>
              <ci>K_4</ci>
              <ci>q_4</ci>
            </apply>
          </apply>
        </apply>
      </apply>
      <apply>
        <eq/>
        <apply>
          <diff/>
          <bvar>
            <ci>t</ci>
          </bvar>
          <ci>q_5</ci>
        </apply>
        <ci>v_5</ci>
      </apply>
      <apply>
        <eq/>
        <ci>mu_5</ci>
        <apply>
          <times/>
          <ci>R</ci>
          <ci>T</ci>
          <apply>
            <ln/>
            <apply>
              <times/>
              <ci>K_5</ci>
              <ci>q_5</ci>
            </apply>
          </apply>
        </apply>
      </apply>
      <apply>
        <eq/>
        <apply>
          <diff/>
          <bvar>
            <ci>t</ci>
          </bvar>
          <ci>q_6</ci>
        </apply>
        <ci>v_6</ci>
      </apply>
      <apply>
        <eq/>
        <ci>mu_6</ci>
        <apply>
          <times/>
          <ci>R</ci>
          <ci>T</ci>
          <apply>
            <ln/>
            <apply>
              <times/>
              <ci>K_6</ci>
              <ci>q_6</ci>
            </apply>
          </apply>
        </apply>
      </apply>
      <apply>
        <eq/>
        <ci>v_re1</ci>
        <apply>
          <times/>
          <ci>kappa_re1</ci>
          <apply>
            <minus/>
            <apply>
              <exp/>
              <apply>
                <divide/>
                <ci>mu_re1_in</ci>
                <apply>
                  <times/>
                  <ci>R</ci>
                  <ci>T</ci>
                </apply>
              </apply>
            </apply>
            <apply>
              <exp/>
              <apply>
                <divide/>
                <ci>mu_re1_out</ci>
                <apply>
                  <times/>
                  <ci>R</ci>
                  <ci>T</ci>
                </apply>
              </apply>
            </apply>
          </apply>
        </apply>
      </apply>
      <apply>
        <eq/>
        <ci>v_re2</ci>
        <apply>
          <times/>
          <ci>kappa_re2</ci>
          <apply>
            <minus/>
            <apply>
              <exp/>
              <apply>
                <divide/>
                <ci>mu_re2_in</ci>
                <apply>
                  <times/>
                  <ci>R</ci>
                  <ci>T</ci>
                </apply>
              </apply>
            </apply>
            <apply>
              <exp/>
              <apply>
                <divide/>
                <ci>mu_re2_out</ci>
                <apply>
                  <times/>
                  <ci>R</ci>
                  <ci>T</ci>
                </apply>
              </apply>
            </apply>
          </apply>
        </apply>
      </apply>
      <apply>
        <eq/>
        <ci>v_re3</ci>
        <apply>
          <times/>
          <ci>kappa_re3</ci>
          <apply>
            <minus/>
            <apply>
              <exp/>
              <apply>
                <divide/>
                <ci>mu_re3_in</ci>
                <apply>
                  <times/>
                  <ci>R</ci>
                  <ci>T</ci>
                </apply>
              </apply>
            </apply>
            <apply>
              <exp/>
              <apply>
                <divide/>
                <ci>mu_re3_out</ci>
                <apply>
                  <times/>
                  <ci>R</ci>
                  <ci>T</ci>
                </apply>
              </apply>
            </apply>
          </apply>
        </apply>
      </apply>
      <apply>
        <eq/>
        <ci>v_re4</ci>
        <apply>
          <times/>
          <ci>kappa_re4</ci>
          <apply>
            <minus/>
            <apply>
              <exp/>
              <apply>
                <divide/>
                <ci>mu_re4_in</ci>
                <apply>
                  <times/>
                  <ci>R</ci>
                  <ci>T</ci>
                </apply>
              </apply>
            </apply>
            <apply>
              <exp/>
              <apply>
                <divide/>
                <ci>mu_re4_out</ci>
                <apply>
                  <times/>
                  <ci>R</ci>
                  <ci>T</ci>
                </apply>
              </apply>
            </apply>
          </apply>
        </apply>
      </apply>
      <apply>
        <eq/>
        <ci>v_Ai</ci>
        <ci>v_re1</ci>
      </apply>
      <apply>
        <eq/>
        <ci>v_Ao</ci>
        <apply>
          <minus/>
          <ci>v_re2</ci>
        </apply>
      </apply>
      <apply>
        <eq/>
        <ci>v_3</ci>
        <apply>
          <plus/>
          <apply>
            <minus/>
            <ci>v_re3</ci>
          </apply>
          <ci>v_re1</ci>
        </apply>
      </apply>
      <apply>
        <eq/>
        <ci>v_4</ci>
        <apply>
          <plus/>
          <apply>
            <minus/>
            <ci>v_re2</ci>
          </apply>
          <ci>v_re3</ci>
        </apply>
      </apply>
      <apply>
        <eq/>
        <ci>v_5</ci>
        <apply>
          <plus/>
          <apply>
            <minus/>
            <ci>v_re1</ci>
          </apply>
          <ci>v_re4</ci>
        </apply>
      </apply>
      <apply>
        <eq/>
        <ci>v_6</ci>
        <apply>
          <plus/>
          <apply>
            <minus/>
            <ci>v_re4</ci>
          </apply>
          <ci>v_re2</ci>
        </apply>
      </apply>
      <apply>
        <eq/>
        <ci>mu_re1_in</ci>
        <ci>mu_5</ci>
      </apply>
      <apply>
        <eq/>
        <ci>mu_re1_out</ci>
        <apply>
          <plus/>
          <ci>mu_Ai</ci>
          <ci>mu_3</ci>
        </apply>
      </apply>
      <apply>
        <eq/>
        <ci>mu_re2_in</ci>
        <apply>
          <plus/>
          <ci>mu_Ao</ci>
          <ci>mu_4</ci>
        </apply>
      </apply>
      <apply>
        <eq/>
        <ci>mu_re2_out</ci>
        <ci>mu_6</ci>
      </apply>
      <apply>
        <eq/>
        <ci>mu_re3_in</ci>
        <ci>mu_3</ci>
      </apply>
      <apply>
        <eq/>
        <ci>mu_re3_out</ci>
        <ci>mu_4</ci>
      </apply>
      <apply>
        <eq/>
        <ci>mu_re4_in</ci>
        <ci>mu_6</ci>
      </apply>
      <apply>
        <eq/>
        <ci>mu_re4_out</ci>
        <ci>mu_5</ci>
      </apply>
    </math>
  </component>
  <component name="SLCT3_BG_param" id="b4daaf">
    <variable name="K_Ai" units="per_fmol" initial_value="1" interface="public" id="b4dab1"/>
    <variable name="K_Ao" units="per_fmol" initial_value="1" interface="public" id="b4dab2"/>
    <variable name="K_3" units="per_fmol" initial_value="1" interface="public" id="b4dab3"/>
    <variable name="q_3_init" units="fmol" initial_value="1" interface="public" id="b4dab4"/>
    <variable name="K_4" units="per_fmol" initial_value="1" interface="public" id="b4dab5"/>
    <variable name="q_4_init" units="fmol" initial_value="1" interface="public" id="b4dab6"/>
    <variable name="K_5" units="per_fmol" initial_value="1" interface="public" id="b4dab7"/>
    <variable name="q_5_init" units="fmol" initial_value="1" interface="public" id="b4dab8"/>
    <variable name="K_6" units="per_fmol" initial_value="1" interface="public" id="b4dab9"/>
    <variable name="q_6_init" units="fmol" initial_value="1" interface="public" id="b4daba"/>
    <variable name="kappa_re1" units="fmol_per_sec" initial_value="1" interface="public" id="b4dabb"/>
    <variable name="kappa_re2" units="fmol_per_sec" initial_value="1" interface="public" id="b4dabc"/>
    <variable name="kappa_re3" units="fmol_per_sec" initial_value="1" interface="public" id="b4dabd"/>
    <variable name="kappa_re4" units="fmol_per_sec" initial_value="1" interface="public" id="b4dabe"/>
    <variable name="F" units="C_per_mol" initial_value="96485" interface="public" id="b4dabf"/>
    <variable name="R" units="J_per_K_per_mol" initial_value="8.31" interface="public" id="b4dac0"/>
    <variable name="T" units="kelvin" initial_value="293" interface="public" id="b4dac1"/>
  </component>
  <component name="SLCT3_BG_io" id="b4dac2">
    <variable name="q_Ai" units="fmol" initial_value="1" interface="public" id="b4dac3"/>
    <variable name="q_Ao" units="fmol" initial_value="1" interface="public" id="b4dac4"/>
  </component>
  <connection component_1="SLCT3_BG_test" component_2="SLCT3_BG" id="b4da63">
    <map_variables variable_1="v_Ai" variable_2="v_Ai" id="b4da64"/>
    <map_variables variable_1="q_Ai" variable_2="q_Ai" id="b4da65"/>
    <map_variables variable_1="v_Ao" variable_2="v_Ao" id="b4da68"/>
    <map_variables variable_1="q_Ao" variable_2="q_Ao" id="b4da69"/>
  </connection>
  <connection component_1="SLCT3_BG_test" component_2="SLCT3_BG_io" id="b4da66">
    <map_variables variable_1="q_Ai" variable_2="q_Ai" id="b4da67"/>
    <map_variables variable_1="q_Ao" variable_2="q_Ao" id="b4da6a"/>
  </connection>
  <connection component_1="SLCT3_BG" component_2="SLCT3_BG_param" id="b4da9d">
    <map_variables variable_1="K_Ai" variable_2="K_Ai" id="b4da9e"/>
    <map_variables variable_1="K_Ao" variable_2="K_Ao" id="b4da9f"/>
    <map_variables variable_1="K_3" variable_2="K_3" id="b4daa0"/>
    <map_variables variable_1="q_3_init" variable_2="q_3_init" id="b4daa1"/>
    <map_variables variable_1="K_4" variable_2="K_4" id="b4daa2"/>
    <map_variables variable_1="q_4_init" variable_2="q_4_init" id="b4daa3"/>
    <map_variables variable_1="K_5" variable_2="K_5" id="b4daa4"/>
    <map_variables variable_1="q_5_init" variable_2="q_5_init" id="b4daa5"/>
    <map_variables variable_1="K_6" variable_2="K_6" id="b4daa6"/>
    <map_variables variable_1="q_6_init" variable_2="q_6_init" id="b4daa7"/>
    <map_variables variable_1="kappa_re1" variable_2="kappa_re1" id="b4daa8"/>
    <map_variables variable_1="kappa_re2" variable_2="kappa_re2" id="b4daa9"/>
    <map_variables variable_1="kappa_re3" variable_2="kappa_re3" id="b4daaa"/>
    <map_variables variable_1="kappa_re4" variable_2="kappa_re4" id="b4daab"/>
    <map_variables variable_1="F" variable_2="F" id="b4daac"/>
    <map_variables variable_1="R" variable_2="R" id="b4daad"/>
    <map_variables variable_1="T" variable_2="T" id="b4daae"/>
  </connection>
  <encapsulation id="b4dac5">
    <component_ref component="SLCT3_BG_test" id="b4da5e">
      <component_ref component="SLCT3_BG" id="b4da6c"/>
      <component_ref component="SLCT3_BG_param" id="b4dab0"/>
    </component_ref>
  </encapsulation>
</model>
