<?xml version="1.0" encoding="UTF-8"?>
<model xmlns="http://www.cellml.org/cellml/2.0#" name="SLCT4_BG_ss_test" id="b4da55">
  <import xmlns:xlink="http://www.w3.org/1999/xlink" xlink:href="../units_BG.cellml" id="b4da56">
    <units units_ref="fmol" name="fmol" id="b4da58"/>
    <units units_ref="per_fmol2_sec6" name="per_fmol2_sec6" id="b4da59"/>
    <units units_ref="fmol_per_sec" name="fmol_per_sec" id="b4da5a"/>
    <units units_ref="per_fmol_sec5" name="per_fmol_sec5" id="b4da5b"/>
    <units units_ref="per_fmol2_sec5" name="per_fmol2_sec5" id="b4da5c"/>
  </import>
  <import xmlns:xlink="http://www.w3.org/1999/xlink" xlink:href="../units_BG.cellml" id="b4da57">
    <units units_ref="per_fmol" name="per_fmol" id="b4da5d"/>
    <units units_ref="J_per_K_per_mol" name="J_per_K_per_mol" id="b4da5e"/>
    <units units_ref="C_per_mol" name="C_per_mol" id="b4da5f"/>
  </import>
  <component name="SLCT4_BG_ss_test" id="b4da60">
    <variable name="v_ss" units="fmol_per_sec" interface="public_and_private" id="b4da62"/>
    <variable name="q_Ao" units="fmol" interface="public_and_private" id="b4da63"/>
    <variable name="q_Bi" units="fmol" interface="public_and_private" id="b4da64"/>
    <variable name="q_Ai" units="fmol" interface="public_and_private" id="b4da65"/>
    <variable name="q_Bo" units="fmol" interface="public_and_private" id="b4da66"/>
  </component>
  <component name="SLCT4_ss" id="b4da73">
    <variable name="P_0" units="per_fmol2_sec6" interface="public" id="b4da75"/>
    <variable name="P_1" units="per_fmol2_sec6" interface="public" id="b4da76"/>
    <variable name="P_2" units="per_fmol_sec5" interface="public" id="b4da77"/>
    <variable name="P_3" units="per_fmol_sec5" interface="public" id="b4da78"/>
    <variable name="P_4" units="per_fmol_sec5" interface="public" id="b4da79"/>
    <variable name="P_5" units="per_fmol_sec5" interface="public" id="b4da7a"/>
    <variable name="P_6" units="per_fmol2_sec5" interface="public" id="b4da7b"/>
    <variable name="P_7" units="per_fmol2_sec5" interface="public" id="b4da7c"/>
    <variable name="P_8" units="per_fmol2_sec5" interface="public" id="b4da7d"/>
    <variable name="P_9" units="per_fmol2_sec5" interface="public" id="b4da7e"/>
    <variable name="E" units="fmol" interface="public" id="b4da7f"/>
    <variable name="q_Ao" units="fmol" interface="public" id="b4da80"/>
    <variable name="q_Bi" units="fmol" interface="public" id="b4da81"/>
    <variable name="q_Ai" units="fmol" interface="public" id="b4da82"/>
    <variable name="q_Bo" units="fmol" interface="public" id="b4da83"/>
    <variable name="v_ss" units="fmol_per_sec" interface="public" id="b4da84"/>
    <math xmlns="http://www.w3.org/1998/Math/MathML" xmlns:cellml="http://www.cellml.org/cellml/2.0#">
      <apply>
        <eq/>
        <ci>v_ss</ci>
        <apply>
          <divide/>
          <apply>
            <times/>
            <ci>E</ci>
            <apply>
              <minus/>
              <apply>
                <times/>
                <ci>P_0</ci>
                <ci>q_Ao</ci>
                <ci>q_Bi</ci>
              </apply>
              <apply>
                <times/>
                <ci>P_1</ci>
                <ci>q_Ai</ci>
                <ci>q_Bo</ci>
              </apply>
            </apply>
          </apply>
          <apply>
            <plus/>
            <apply>
              <times/>
              <ci>P_2</ci>
              <ci>q_Ao</ci>
            </apply>
            <apply>
              <times/>
              <ci>P_3</ci>
              <ci>q_Bo</ci>
            </apply>
            <apply>
              <times/>
              <ci>P_4</ci>
              <ci>q_Ai</ci>
            </apply>
            <apply>
              <times/>
              <ci>P_5</ci>
              <ci>q_Bi</ci>
            </apply>
            <apply>
              <times/>
              <ci>P_6</ci>
              <ci>q_Ai</ci>
              <ci>q_Bo</ci>
            </apply>
            <apply>
              <times/>
              <ci>P_7</ci>
              <ci>q_Ao</ci>
              <ci>q_Bi</ci>
            </apply>
            <apply>
              <times/>
              <ci>P_8</ci>
              <ci>q_Bi</ci>
              <ci>q_Bo</ci>
            </apply>
            <apply>
              <times/>
              <ci>P_9</ci>
              <ci>q_Ai</ci>
              <ci>q_Ao</ci>
            </apply>
          </apply>
        </apply>
      </apply>
    </math>
  </component>
  <component name="SLCT4_BG_param" id="b4da91">
    <variable name="K_Ao" units="per_fmol" initial_value="1" interface="public" id="b4da93"/>
    <variable name="K_Ai" units="per_fmol" initial_value="1" interface="public" id="b4da94"/>
    <variable name="K_Bo" units="per_fmol" initial_value="1" interface="public" id="b4da95"/>
    <variable name="K_Bi" units="per_fmol" initial_value="1" interface="public" id="b4da96"/>
    <variable name="K_5" units="per_fmol" initial_value="1" interface="public" id="b4da97"/>
    <variable name="q_5_init" units="fmol" initial_value="1" interface="public" id="b4da98"/>
    <variable name="K_6" units="per_fmol" initial_value="1" interface="public" id="b4da99"/>
    <variable name="q_6_init" units="fmol" initial_value="1" interface="public" id="b4da9a"/>
    <variable name="K_7" units="per_fmol" initial_value="1" interface="public" id="b4da9b"/>
    <variable name="q_7_init" units="fmol" initial_value="1" interface="public" id="b4da9c"/>
    <variable name="K_8" units="per_fmol" initial_value="1" interface="public" id="b4da9d"/>
    <variable name="q_8_init" units="fmol" initial_value="1" interface="public" id="b4da9e"/>
    <variable name="K_9" units="per_fmol" initial_value="1" interface="public" id="b4da9f"/>
    <variable name="q_9_init" units="fmol" initial_value="1" interface="public" id="b4daa0"/>
    <variable name="K_10" units="per_fmol" initial_value="1" interface="public" id="b4daa1"/>
    <variable name="q_10_init" units="fmol" initial_value="1" interface="public" id="b4daa2"/>
    <variable name="kappa_re1" units="fmol_per_sec" initial_value="1" interface="public" id="b4daa3"/>
    <variable name="kappa_re2" units="fmol_per_sec" initial_value="1" interface="public" id="b4daa4"/>
    <variable name="kappa_re3" units="fmol_per_sec" initial_value="1" interface="public" id="b4daa5"/>
    <variable name="kappa_re4" units="fmol_per_sec" initial_value="1" interface="public" id="b4daa6"/>
    <variable name="kappa_re5" units="fmol_per_sec" initial_value="1" interface="public" id="b4daa7"/>
    <variable name="kappa_re6" units="fmol_per_sec" initial_value="1" interface="public" id="b4daa8"/>
    <variable name="F" units="C_per_mol" initial_value="96485" interface="public" id="b4daa9"/>
    <variable name="R" units="J_per_K_per_mol" initial_value="8.31" interface="public" id="b4daaa"/>
    <variable name="T" units="kelvin" initial_value="293" interface="public" id="b4daab"/>
  </component>
  <component name="SLCT4_BG_ss" id="b4dac6">
    <variable name="P_0" units="per_fmol2_sec6" interface="public" id="b4dac8"/>
    <variable name="P_1" units="per_fmol2_sec6" interface="public" id="b4dac9"/>
    <variable name="P_2" units="per_fmol_sec5" interface="public" id="b4daca"/>
    <variable name="P_3" units="per_fmol_sec5" interface="public" id="b4dacb"/>
    <variable name="P_4" units="per_fmol_sec5" interface="public" id="b4dacc"/>
    <variable name="P_5" units="per_fmol_sec5" interface="public" id="b4dacd"/>
    <variable name="P_6" units="per_fmol2_sec5" interface="public" id="b4dace"/>
    <variable name="P_7" units="per_fmol2_sec5" interface="public" id="b4dacf"/>
    <variable name="P_8" units="per_fmol2_sec5" interface="public" id="b4dad0"/>
    <variable name="P_9" units="per_fmol2_sec5" interface="public" id="b4dad1"/>
    <variable name="E" units="fmol" interface="public" id="b4dad2"/>
    <variable name="K_Ao" units="per_fmol" interface="public" id="b4dad3"/>
    <variable name="K_Ai" units="per_fmol" interface="public" id="b4dad4"/>
    <variable name="K_Bo" units="per_fmol" interface="public" id="b4dad5"/>
    <variable name="K_Bi" units="per_fmol" interface="public" id="b4dad6"/>
    <variable name="K_5" units="per_fmol" interface="public" id="b4dad7"/>
    <variable name="q_5_init" units="fmol" interface="public" id="b4dad8"/>
    <variable name="K_6" units="per_fmol" interface="public" id="b4dad9"/>
    <variable name="q_6_init" units="fmol" interface="public" id="b4dada"/>
    <variable name="K_7" units="per_fmol" interface="public" id="b4dadb"/>
    <variable name="q_7_init" units="fmol" interface="public" id="b4dadc"/>
    <variable name="K_8" units="per_fmol" interface="public" id="b4dadd"/>
    <variable name="q_8_init" units="fmol" interface="public" id="b4dade"/>
    <variable name="K_9" units="per_fmol" interface="public" id="b4dadf"/>
    <variable name="q_9_init" units="fmol" interface="public" id="b4dae0"/>
    <variable name="K_10" units="per_fmol" interface="public" id="b4dae1"/>
    <variable name="q_10_init" units="fmol" interface="public" id="b4dae2"/>
    <variable name="kappa_re1" units="fmol_per_sec" interface="public" id="b4dae3"/>
    <variable name="kappa_re2" units="fmol_per_sec" interface="public" id="b4dae4"/>
    <variable name="kappa_re3" units="fmol_per_sec" interface="public" id="b4dae5"/>
    <variable name="kappa_re4" units="fmol_per_sec" interface="public" id="b4dae6"/>
    <variable name="kappa_re5" units="fmol_per_sec" interface="public" id="b4dae7"/>
    <variable name="kappa_re6" units="fmol_per_sec" interface="public" id="b4dae8"/>
    <variable name="F" units="C_per_mol" interface="public" id="b4dae9"/>
    <variable name="R" units="J_per_K_per_mol" interface="public" id="b4daea"/>
    <variable name="T" units="kelvin" interface="public" id="b4daeb"/>
    <math xmlns="http://www.w3.org/1998/Math/MathML" xmlns:cellml="http://www.cellml.org/cellml/2.0#">
      <apply>
        <eq/>
        <ci>P_0</ci>
        <apply>
          <times/>
          <ci>K_10</ci>
          <ci>K_5</ci>
          <ci>K_6</ci>
          <ci>K_7</ci>
          <ci>K_8</ci>
          <ci>K_9</ci>
          <ci>K_Ao</ci>
          <ci>K_Bi</ci>
          <ci>kappa_re1</ci>
          <ci>kappa_re2</ci>
          <ci>kappa_re3</ci>
          <ci>kappa_re4</ci>
          <ci>kappa_re5</ci>
          <ci>kappa_re6</ci>
        </apply>
      </apply>
      <apply>
        <eq/>
        <ci>P_1</ci>
        <apply>
          <times/>
          <ci>K_10</ci>
          <ci>K_5</ci>
          <ci>K_6</ci>
          <ci>K_7</ci>
          <ci>K_8</ci>
          <ci>K_9</ci>
          <ci>K_Ai</ci>
          <ci>K_Bo</ci>
          <ci>kappa_re1</ci>
          <ci>kappa_re2</ci>
          <ci>kappa_re3</ci>
          <ci>kappa_re4</ci>
          <ci>kappa_re5</ci>
          <ci>kappa_re6</ci>
        </apply>
      </apply>
      <apply>
        <eq/>
        <ci>P_2</ci>
        <apply>
          <plus/>
          <apply>
            <times/>
            <ci>K_10</ci>
            <ci>K_5</ci>
            <ci>K_7</ci>
            <ci>K_8</ci>
            <ci>K_9</ci>
            <ci>K_Ao</ci>
            <ci>kappa_re1</ci>
            <ci>kappa_re2</ci>
            <ci>kappa_re3</ci>
            <ci>kappa_re4</ci>
            <ci>kappa_re6</ci>
          </apply>
          <apply>
            <times/>
            <ci>K_10</ci>
            <ci>K_5</ci>
            <ci>K_7</ci>
            <ci>K_8</ci>
            <ci>K_9</ci>
            <ci>K_Ao</ci>
            <ci>kappa_re1</ci>
            <ci>kappa_re2</ci>
            <ci>kappa_re3</ci>
            <ci>kappa_re5</ci>
            <ci>kappa_re6</ci>
          </apply>
          <apply>
            <times/>
            <ci>K_10</ci>
            <ci>K_5</ci>
            <ci>K_7</ci>
            <ci>K_8</ci>
            <ci>K_9</ci>
            <ci>K_Ao</ci>
            <ci>kappa_re1</ci>
            <ci>kappa_re2</ci>
            <ci>kappa_re4</ci>
            <ci>kappa_re5</ci>
            <ci>kappa_re6</ci>
          </apply>
        </apply>
      </apply>
      <apply>
        <eq/>
        <ci>P_3</ci>
        <apply>
          <plus/>
          <apply>
            <times/>
            <ci>K_10</ci>
            <ci>K_5</ci>
            <ci>K_7</ci>
            <ci>K_8</ci>
            <ci>K_9</ci>
            <ci>K_Bo</ci>
            <ci>kappa_re1</ci>
            <ci>kappa_re2</ci>
            <ci>kappa_re3</ci>
            <ci>kappa_re4</ci>
            <ci>kappa_re5</ci>
          </apply>
          <apply>
            <times/>
            <ci>K_10</ci>
            <ci>K_5</ci>
            <ci>K_7</ci>
            <ci>K_8</ci>
            <ci>K_9</ci>
            <ci>K_Bo</ci>
            <ci>kappa_re1</ci>
            <ci>kappa_re3</ci>
            <ci>kappa_re4</ci>
            <ci>kappa_re5</ci>
            <ci>kappa_re6</ci>
          </apply>
          <apply>
            <times/>
            <ci>K_10</ci>
            <ci>K_5</ci>
            <ci>K_7</ci>
            <ci>K_8</ci>
            <ci>K_9</ci>
            <ci>K_Bo</ci>
            <ci>kappa_re2</ci>
            <ci>kappa_re3</ci>
            <ci>kappa_re4</ci>
            <ci>kappa_re5</ci>
            <ci>kappa_re6</ci>
          </apply>
        </apply>
      </apply>
      <apply>
        <eq/>
        <ci>P_4</ci>
        <apply>
          <plus/>
          <apply>
            <times/>
            <ci>K_10</ci>
            <ci>K_6</ci>
            <ci>K_7</ci>
            <ci>K_8</ci>
            <ci>K_9</ci>
            <ci>K_Ai</ci>
            <ci>kappa_re1</ci>
            <ci>kappa_re2</ci>
            <ci>kappa_re3</ci>
            <ci>kappa_re4</ci>
            <ci>kappa_re6</ci>
          </apply>
          <apply>
            <times/>
            <ci>K_10</ci>
            <ci>K_6</ci>
            <ci>K_7</ci>
            <ci>K_8</ci>
            <ci>K_9</ci>
            <ci>K_Ai</ci>
            <ci>kappa_re1</ci>
            <ci>kappa_re2</ci>
            <ci>kappa_re3</ci>
            <ci>kappa_re5</ci>
            <ci>kappa_re6</ci>
          </apply>
          <apply>
            <times/>
            <ci>K_10</ci>
            <ci>K_6</ci>
            <ci>K_7</ci>
            <ci>K_8</ci>
            <ci>K_9</ci>
            <ci>K_Ai</ci>
            <ci>kappa_re1</ci>
            <ci>kappa_re2</ci>
            <ci>kappa_re4</ci>
            <ci>kappa_re5</ci>
            <ci>kappa_re6</ci>
          </apply>
        </apply>
      </apply>
      <apply>
        <eq/>
        <ci>P_5</ci>
        <apply>
          <plus/>
          <apply>
            <times/>
            <ci>K_10</ci>
            <ci>K_6</ci>
            <ci>K_7</ci>
            <ci>K_8</ci>
            <ci>K_9</ci>
            <ci>K_Bi</ci>
            <ci>kappa_re1</ci>
            <ci>kappa_re2</ci>
            <ci>kappa_re3</ci>
            <ci>kappa_re4</ci>
            <ci>kappa_re5</ci>
          </apply>
          <apply>
            <times/>
            <ci>K_10</ci>
            <ci>K_6</ci>
            <ci>K_7</ci>
            <ci>K_8</ci>
            <ci>K_9</ci>
            <ci>K_Bi</ci>
            <ci>kappa_re1</ci>
            <ci>kappa_re3</ci>
            <ci>kappa_re4</ci>
            <ci>kappa_re5</ci>
            <ci>kappa_re6</ci>
          </apply>
          <apply>
            <times/>
            <ci>K_10</ci>
            <ci>K_6</ci>
            <ci>K_7</ci>
            <ci>K_8</ci>
            <ci>K_9</ci>
            <ci>K_Bi</ci>
            <ci>kappa_re2</ci>
            <ci>kappa_re3</ci>
            <ci>kappa_re4</ci>
            <ci>kappa_re5</ci>
            <ci>kappa_re6</ci>
          </apply>
        </apply>
      </apply>
      <apply>
        <eq/>
        <ci>P_6</ci>
        <apply>
          <plus/>
          <apply>
            <times/>
            <ci>K_10</ci>
            <ci>K_5</ci>
            <ci>K_6</ci>
            <ci>K_7</ci>
            <ci>K_8</ci>
            <ci>K_Ai</ci>
            <ci>K_Bo</ci>
            <ci>kappa_re1</ci>
            <ci>kappa_re2</ci>
            <ci>kappa_re3</ci>
            <ci>kappa_re4</ci>
            <ci>kappa_re6</ci>
          </apply>
          <apply>
            <times/>
            <ci>K_10</ci>
            <ci>K_5</ci>
            <ci>K_6</ci>
            <ci>K_7</ci>
            <ci>K_8</ci>
            <ci>K_Ai</ci>
            <ci>K_Bo</ci>
            <ci>kappa_re1</ci>
            <ci>kappa_re2</ci>
            <ci>kappa_re3</ci>
            <ci>kappa_re5</ci>
            <ci>kappa_re6</ci>
          </apply>
          <apply>
            <times/>
            <ci>K_10</ci>
            <ci>K_5</ci>
            <ci>K_6</ci>
            <ci>K_7</ci>
            <ci>K_9</ci>
            <ci>K_Ai</ci>
            <ci>K_Bo</ci>
            <ci>kappa_re1</ci>
            <ci>kappa_re2</ci>
            <ci>kappa_re3</ci>
            <ci>kappa_re4</ci>
            <ci>kappa_re5</ci>
          </apply>
          <apply>
            <times/>
            <ci>K_10</ci>
            <ci>K_5</ci>
            <ci>K_6</ci>
            <ci>K_7</ci>
            <ci>K_9</ci>
            <ci>K_Ai</ci>
            <ci>K_Bo</ci>
            <ci>kappa_re2</ci>
            <ci>kappa_re3</ci>
            <ci>kappa_re4</ci>
            <ci>kappa_re5</ci>
            <ci>kappa_re6</ci>
          </apply>
          <apply>
            <times/>
            <ci>K_10</ci>
            <ci>K_5</ci>
            <ci>K_6</ci>
            <ci>K_8</ci>
            <ci>K_9</ci>
            <ci>K_Ai</ci>
            <ci>K_Bo</ci>
            <ci>kappa_re2</ci>
            <ci>kappa_re3</ci>
            <ci>kappa_re4</ci>
            <ci>kappa_re5</ci>
            <ci>kappa_re6</ci>
          </apply>
          <apply>
            <times/>
            <ci>K_5</ci>
            <ci>K_6</ci>
            <ci>K_7</ci>
            <ci>K_8</ci>
            <ci>K_9</ci>
            <ci>K_Ai</ci>
            <ci>K_Bo</ci>
            <ci>kappa_re1</ci>
            <ci>kappa_re2</ci>
            <ci>kappa_re3</ci>
            <ci>kappa_re5</ci>
            <ci>kappa_re6</ci>
          </apply>
        </apply>
      </apply>
      <apply>
        <eq/>
        <ci>P_7</ci>
        <apply>
          <plus/>
          <apply>
            <times/>
            <ci>K_10</ci>
            <ci>K_5</ci>
            <ci>K_6</ci>
            <ci>K_7</ci>
            <ci>K_8</ci>
            <ci>K_Ao</ci>
            <ci>K_Bi</ci>
            <ci>kappa_re1</ci>
            <ci>kappa_re2</ci>
            <ci>kappa_re4</ci>
            <ci>kappa_re5</ci>
            <ci>kappa_re6</ci>
          </apply>
          <apply>
            <times/>
            <ci>K_10</ci>
            <ci>K_5</ci>
            <ci>K_6</ci>
            <ci>K_7</ci>
            <ci>K_9</ci>
            <ci>K_Ao</ci>
            <ci>K_Bi</ci>
            <ci>kappa_re1</ci>
            <ci>kappa_re3</ci>
            <ci>kappa_re4</ci>
            <ci>kappa_re5</ci>
            <ci>kappa_re6</ci>
          </apply>
          <apply>
            <times/>
            <ci>K_10</ci>
            <ci>K_5</ci>
            <ci>K_6</ci>
            <ci>K_8</ci>
            <ci>K_9</ci>
            <ci>K_Ao</ci>
            <ci>K_Bi</ci>
            <ci>kappa_re1</ci>
            <ci>kappa_re2</ci>
            <ci>kappa_re3</ci>
            <ci>kappa_re4</ci>
            <ci>kappa_re5</ci>
          </apply>
          <apply>
            <times/>
            <ci>K_10</ci>
            <ci>K_5</ci>
            <ci>K_6</ci>
            <ci>K_8</ci>
            <ci>K_9</ci>
            <ci>K_Ao</ci>
            <ci>K_Bi</ci>
            <ci>kappa_re1</ci>
            <ci>kappa_re3</ci>
            <ci>kappa_re4</ci>
            <ci>kappa_re5</ci>
            <ci>kappa_re6</ci>
          </apply>
          <apply>
            <times/>
            <ci>K_5</ci>
            <ci>K_6</ci>
            <ci>K_7</ci>
            <ci>K_8</ci>
            <ci>K_9</ci>
            <ci>K_Ao</ci>
            <ci>K_Bi</ci>
            <ci>kappa_re1</ci>
            <ci>kappa_re2</ci>
            <ci>kappa_re3</ci>
            <ci>kappa_re4</ci>
            <ci>kappa_re6</ci>
          </apply>
          <apply>
            <times/>
            <ci>K_5</ci>
            <ci>K_6</ci>
            <ci>K_7</ci>
            <ci>K_8</ci>
            <ci>K_9</ci>
            <ci>K_Ao</ci>
            <ci>K_Bi</ci>
            <ci>kappa_re1</ci>
            <ci>kappa_re2</ci>
            <ci>kappa_re4</ci>
            <ci>kappa_re5</ci>
            <ci>kappa_re6</ci>
          </apply>
        </apply>
      </apply>
      <apply>
        <eq/>
        <ci>P_8</ci>
        <apply>
          <plus/>
          <apply>
            <times/>
            <ci>K_10</ci>
            <ci>K_5</ci>
            <ci>K_6</ci>
            <ci>K_7</ci>
            <ci>K_8</ci>
            <ci>K_Bi</ci>
            <ci>K_Bo</ci>
            <ci>kappa_re1</ci>
            <ci>kappa_re2</ci>
            <ci>kappa_re3</ci>
            <ci>kappa_re4</ci>
            <ci>kappa_re5</ci>
          </apply>
          <apply>
            <times/>
            <ci>K_10</ci>
            <ci>K_5</ci>
            <ci>K_6</ci>
            <ci>K_7</ci>
            <ci>K_8</ci>
            <ci>K_Bi</ci>
            <ci>K_Bo</ci>
            <ci>kappa_re1</ci>
            <ci>kappa_re3</ci>
            <ci>kappa_re4</ci>
            <ci>kappa_re5</ci>
            <ci>kappa_re6</ci>
          </apply>
          <apply>
            <times/>
            <ci>K_10</ci>
            <ci>K_5</ci>
            <ci>K_6</ci>
            <ci>K_7</ci>
            <ci>K_8</ci>
            <ci>K_Bi</ci>
            <ci>K_Bo</ci>
            <ci>kappa_re2</ci>
            <ci>kappa_re3</ci>
            <ci>kappa_re4</ci>
            <ci>kappa_re5</ci>
            <ci>kappa_re6</ci>
          </apply>
          <apply>
            <times/>
            <ci>K_5</ci>
            <ci>K_6</ci>
            <ci>K_7</ci>
            <ci>K_8</ci>
            <ci>K_9</ci>
            <ci>K_Bi</ci>
            <ci>K_Bo</ci>
            <ci>kappa_re1</ci>
            <ci>kappa_re2</ci>
            <ci>kappa_re3</ci>
            <ci>kappa_re4</ci>
            <ci>kappa_re5</ci>
          </apply>
          <apply>
            <times/>
            <ci>K_5</ci>
            <ci>K_6</ci>
            <ci>K_7</ci>
            <ci>K_8</ci>
            <ci>K_9</ci>
            <ci>K_Bi</ci>
            <ci>K_Bo</ci>
            <ci>kappa_re1</ci>
            <ci>kappa_re3</ci>
            <ci>kappa_re4</ci>
            <ci>kappa_re5</ci>
            <ci>kappa_re6</ci>
          </apply>
          <apply>
            <times/>
            <ci>K_5</ci>
            <ci>K_6</ci>
            <ci>K_7</ci>
            <ci>K_8</ci>
            <ci>K_9</ci>
            <ci>K_Bi</ci>
            <ci>K_Bo</ci>
            <ci>kappa_re2</ci>
            <ci>kappa_re3</ci>
            <ci>kappa_re4</ci>
            <ci>kappa_re5</ci>
            <ci>kappa_re6</ci>
          </apply>
        </apply>
      </apply>
      <apply>
        <eq/>
        <ci>P_9</ci>
        <apply>
          <plus/>
          <apply>
            <times/>
            <ci>K_10</ci>
            <ci>K_5</ci>
            <ci>K_6</ci>
            <ci>K_7</ci>
            <ci>K_9</ci>
            <ci>K_Ai</ci>
            <ci>K_Ao</ci>
            <ci>kappa_re1</ci>
            <ci>kappa_re2</ci>
            <ci>kappa_re3</ci>
            <ci>kappa_re4</ci>
            <ci>kappa_re6</ci>
          </apply>
          <apply>
            <times/>
            <ci>K_10</ci>
            <ci>K_5</ci>
            <ci>K_6</ci>
            <ci>K_7</ci>
            <ci>K_9</ci>
            <ci>K_Ai</ci>
            <ci>K_Ao</ci>
            <ci>kappa_re1</ci>
            <ci>kappa_re2</ci>
            <ci>kappa_re3</ci>
            <ci>kappa_re5</ci>
            <ci>kappa_re6</ci>
          </apply>
          <apply>
            <times/>
            <ci>K_10</ci>
            <ci>K_5</ci>
            <ci>K_6</ci>
            <ci>K_7</ci>
            <ci>K_9</ci>
            <ci>K_Ai</ci>
            <ci>K_Ao</ci>
            <ci>kappa_re1</ci>
            <ci>kappa_re2</ci>
            <ci>kappa_re4</ci>
            <ci>kappa_re5</ci>
            <ci>kappa_re6</ci>
          </apply>
          <apply>
            <times/>
            <ci>K_10</ci>
            <ci>K_5</ci>
            <ci>K_6</ci>
            <ci>K_8</ci>
            <ci>K_9</ci>
            <ci>K_Ai</ci>
            <ci>K_Ao</ci>
            <ci>kappa_re1</ci>
            <ci>kappa_re2</ci>
            <ci>kappa_re3</ci>
            <ci>kappa_re4</ci>
            <ci>kappa_re6</ci>
          </apply>
          <apply>
            <times/>
            <ci>K_10</ci>
            <ci>K_5</ci>
            <ci>K_6</ci>
            <ci>K_8</ci>
            <ci>K_9</ci>
            <ci>K_Ai</ci>
            <ci>K_Ao</ci>
            <ci>kappa_re1</ci>
            <ci>kappa_re2</ci>
            <ci>kappa_re3</ci>
            <ci>kappa_re5</ci>
            <ci>kappa_re6</ci>
          </apply>
          <apply>
            <times/>
            <ci>K_10</ci>
            <ci>K_5</ci>
            <ci>K_6</ci>
            <ci>K_8</ci>
            <ci>K_9</ci>
            <ci>K_Ai</ci>
            <ci>K_Ao</ci>
            <ci>kappa_re1</ci>
            <ci>kappa_re2</ci>
            <ci>kappa_re4</ci>
            <ci>kappa_re5</ci>
            <ci>kappa_re6</ci>
          </apply>
        </apply>
      </apply>
      <apply>
        <eq/>
        <ci>E</ci>
        <apply>
          <plus/>
          <ci>q_10_init</ci>
          <ci>q_5_init</ci>
          <ci>q_6_init</ci>
          <ci>q_7_init</ci>
          <ci>q_8_init</ci>
          <ci>q_9_init</ci>
        </apply>
      </apply>
    </math>
  </component>
  <component name="SLCT4_BG_ss_io" id="b4daec">
    <variable name="v_ss" units="fmol_per_sec" interface="public" id="b4daed"/>
    <variable name="q_Ao" units="fmol" initial_value="1" interface="public" id="b4daee"/>
    <variable name="q_Bi" units="fmol" initial_value="1" interface="public" id="b4daef"/>
    <variable name="q_Ai" units="fmol" initial_value="1" interface="public" id="b4daf0"/>
    <variable name="q_Bo" units="fmol" initial_value="1" interface="public" id="b4daf1"/>
  </component>
  <connection component_1="SLCT4_BG_ss_test" component_2="SLCT4_ss" id="b4da67">
    <map_variables variable_1="v_ss" variable_2="v_ss" id="b4da68"/>
    <map_variables variable_1="q_Ao" variable_2="q_Ao" id="b4da6b"/>
    <map_variables variable_1="q_Bi" variable_2="q_Bi" id="b4da6d"/>
    <map_variables variable_1="q_Ai" variable_2="q_Ai" id="b4da6f"/>
    <map_variables variable_1="q_Bo" variable_2="q_Bo" id="b4da71"/>
  </connection>
  <connection component_1="SLCT4_BG_ss_test" component_2="SLCT4_BG_ss_io" id="b4da69">
    <map_variables variable_1="v_ss" variable_2="v_ss" id="b4da6a"/>
    <map_variables variable_1="q_Ao" variable_2="q_Ao" id="b4da6c"/>
    <map_variables variable_1="q_Bi" variable_2="q_Bi" id="b4da6e"/>
    <map_variables variable_1="q_Ai" variable_2="q_Ai" id="b4da70"/>
    <map_variables variable_1="q_Bo" variable_2="q_Bo" id="b4da72"/>
  </connection>
  <connection component_1="SLCT4_ss" component_2="SLCT4_BG_ss" id="b4da85">
    <map_variables variable_1="P_0" variable_2="P_0" id="b4da86"/>
    <map_variables variable_1="P_1" variable_2="P_1" id="b4da87"/>
    <map_variables variable_1="P_2" variable_2="P_2" id="b4da88"/>
    <map_variables variable_1="P_3" variable_2="P_3" id="b4da89"/>
    <map_variables variable_1="P_4" variable_2="P_4" id="b4da8a"/>
    <map_variables variable_1="P_5" variable_2="P_5" id="b4da8b"/>
    <map_variables variable_1="P_6" variable_2="P_6" id="b4da8c"/>
    <map_variables variable_1="P_7" variable_2="P_7" id="b4da8d"/>
    <map_variables variable_1="P_8" variable_2="P_8" id="b4da8e"/>
    <map_variables variable_1="P_9" variable_2="P_9" id="b4da8f"/>
    <map_variables variable_1="E" variable_2="E" id="b4da90"/>
  </connection>
  <connection component_1="SLCT4_BG_param" component_2="SLCT4_BG_ss" id="b4daac">
    <map_variables variable_1="K_Ao" variable_2="K_Ao" id="b4daad"/>
    <map_variables variable_1="K_Ai" variable_2="K_Ai" id="b4daae"/>
    <map_variables variable_1="K_Bo" variable_2="K_Bo" id="b4daaf"/>
    <map_variables variable_1="K_Bi" variable_2="K_Bi" id="b4dab0"/>
    <map_variables variable_1="K_5" variable_2="K_5" id="b4dab1"/>
    <map_variables variable_1="q_5_init" variable_2="q_5_init" id="b4dab2"/>
    <map_variables variable_1="K_6" variable_2="K_6" id="b4dab3"/>
    <map_variables variable_1="q_6_init" variable_2="q_6_init" id="b4dab4"/>
    <map_variables variable_1="K_7" variable_2="K_7" id="b4dab5"/>
    <map_variables variable_1="q_7_init" variable_2="q_7_init" id="b4dab6"/>
    <map_variables variable_1="K_8" variable_2="K_8" id="b4dab7"/>
    <map_variables variable_1="q_8_init" variable_2="q_8_init" id="b4dab8"/>
    <map_variables variable_1="K_9" variable_2="K_9" id="b4dab9"/>
    <map_variables variable_1="q_9_init" variable_2="q_9_init" id="b4daba"/>
    <map_variables variable_1="K_10" variable_2="K_10" id="b4dabb"/>
    <map_variables variable_1="q_10_init" variable_2="q_10_init" id="b4dabc"/>
    <map_variables variable_1="kappa_re1" variable_2="kappa_re1" id="b4dabd"/>
    <map_variables variable_1="kappa_re2" variable_2="kappa_re2" id="b4dabe"/>
    <map_variables variable_1="kappa_re3" variable_2="kappa_re3" id="b4dabf"/>
    <map_variables variable_1="kappa_re4" variable_2="kappa_re4" id="b4dac0"/>
    <map_variables variable_1="kappa_re5" variable_2="kappa_re5" id="b4dac1"/>
    <map_variables variable_1="kappa_re6" variable_2="kappa_re6" id="b4dac2"/>
    <map_variables variable_1="F" variable_2="F" id="b4dac3"/>
    <map_variables variable_1="R" variable_2="R" id="b4dac4"/>
    <map_variables variable_1="T" variable_2="T" id="b4dac5"/>
  </connection>
  <encapsulation id="b4daf2">
    <component_ref component="SLCT4_BG_ss_test" id="b4da61">
      <component_ref component="SLCT4_ss" id="b4da74"/>
      <component_ref component="SLCT4_BG_param" id="b4da92"/>
      <component_ref component="SLCT4_BG_ss" id="b4dac7"/>
    </component_ref>
  </encapsulation>
</model>
