<?xml version="1.0" encoding="UTF-8"?>
<model xmlns="http://www.cellml.org/cellml/2.0#" name="SLCT4_BG_test" id="b4da55">
  <import xmlns:xlink="http://www.w3.org/1999/xlink" xlink:href="../units_BG.cellml" id="b4da56">
    <units units_ref="J_per_K_per_mol" name="J_per_K_per_mol" id="b4da57"/>
    <units units_ref="J_per_mol" name="J_per_mol" id="b4da58"/>
    <units units_ref="fmol" name="fmol" id="b4da59"/>
    <units units_ref="fmol_per_sec" name="fmol_per_sec" id="b4da5a"/>
    <units units_ref="C_per_mol" name="C_per_mol" id="b4da5b"/>
    <units units_ref="per_fmol" name="per_fmol" id="b4da5c"/>
  </import>
  <component name="SLCT4_BG_test" id="b4da5d">
    <variable name="v_Ao" units="fmol_per_sec" interface="private" id="b4da5f"/>
    <variable name="q_Ao" units="fmol" interface="public_and_private" id="b4da60"/>
    <variable name="v_Ai" units="fmol_per_sec" interface="private" id="b4da61"/>
    <variable name="q_Ai" units="fmol" interface="public_and_private" id="b4da62"/>
    <variable name="v_Bo" units="fmol_per_sec" interface="private" id="b4da63"/>
    <variable name="q_Bo" units="fmol" interface="public_and_private" id="b4da64"/>
    <variable name="v_Bi" units="fmol_per_sec" interface="private" id="b4da65"/>
    <variable name="q_Bi" units="fmol" interface="public_and_private" id="b4da66"/>
  </component>
  <component name="SLCT4_BG" id="b4da75">
    <variable name="t" units="second" id="b4da77"/>
    <variable name="K_Ao" units="per_fmol" interface="public" id="b4da78"/>
    <variable name="v_Ao" units="fmol_per_sec" interface="public" id="b4da79"/>
    <variable name="q_Ao" units="fmol" interface="public" id="b4da7a"/>
    <variable name="mu_Ao" units="J_per_mol" interface="public" id="b4da7b"/>
    <variable name="K_Ai" units="per_fmol" interface="public" id="b4da7c"/>
    <variable name="v_Ai" units="fmol_per_sec" interface="public" id="b4da7d"/>
    <variable name="q_Ai" units="fmol" interface="public" id="b4da7e"/>
    <variable name="mu_Ai" units="J_per_mol" interface="public" id="b4da7f"/>
    <variable name="K_Bo" units="per_fmol" interface="public" id="b4da80"/>
    <variable name="v_Bo" units="fmol_per_sec" interface="public" id="b4da81"/>
    <variable name="q_Bo" units="fmol" interface="public" id="b4da82"/>
    <variable name="mu_Bo" units="J_per_mol" interface="public" id="b4da83"/>
    <variable name="K_Bi" units="per_fmol" interface="public" id="b4da84"/>
    <variable name="v_Bi" units="fmol_per_sec" interface="public" id="b4da85"/>
    <variable name="q_Bi" units="fmol" interface="public" id="b4da86"/>
    <variable name="mu_Bi" units="J_per_mol" interface="public" id="b4da87"/>
    <variable name="K_5" units="per_fmol" interface="public" id="b4da88"/>
    <variable name="v_5" units="fmol_per_sec" id="b4da89"/>
    <variable name="q_5_init" units="fmol" interface="public" id="b4da8a"/>
    <variable name="q_5" units="fmol" initial_value="q_5_init" id="b4da8b"/>
    <variable name="mu_5" units="J_per_mol" id="b4da8c"/>
    <variable name="K_6" units="per_fmol" interface="public" id="b4da8d"/>
    <variable name="v_6" units="fmol_per_sec" id="b4da8e"/>
    <variable name="q_6_init" units="fmol" interface="public" id="b4da8f"/>
    <variable name="q_6" units="fmol" initial_value="q_6_init" id="b4da90"/>
    <variable name="mu_6" units="J_per_mol" id="b4da91"/>
    <variable name="K_7" units="per_fmol" interface="public" id="b4da92"/>
    <variable name="v_7" units="fmol_per_sec" id="b4da93"/>
    <variable name="q_7_init" units="fmol" interface="public" id="b4da94"/>
    <variable name="q_7" units="fmol" initial_value="q_7_init" id="b4da95"/>
    <variable name="mu_7" units="J_per_mol" id="b4da96"/>
    <variable name="K_8" units="per_fmol" interface="public" id="b4da97"/>
    <variable name="v_8" units="fmol_per_sec" id="b4da98"/>
    <variable name="q_8_init" units="fmol" interface="public" id="b4da99"/>
    <variable name="q_8" units="fmol" initial_value="q_8_init" id="b4da9a"/>
    <variable name="mu_8" units="J_per_mol" id="b4da9b"/>
    <variable name="K_9" units="per_fmol" interface="public" id="b4da9c"/>
    <variable name="v_9" units="fmol_per_sec" id="b4da9d"/>
    <variable name="q_9_init" units="fmol" interface="public" id="b4da9e"/>
    <variable name="q_9" units="fmol" initial_value="q_9_init" id="b4da9f"/>
    <variable name="mu_9" units="J_per_mol" id="b4daa0"/>
    <variable name="K_10" units="per_fmol" interface="public" id="b4daa1"/>
    <variable name="v_10" units="fmol_per_sec" id="b4daa2"/>
    <variable name="q_10_init" units="fmol" interface="public" id="b4daa3"/>
    <variable name="q_10" units="fmol" initial_value="q_10_init" id="b4daa4"/>
    <variable name="mu_10" units="J_per_mol" id="b4daa5"/>
    <variable name="kappa_re1" units="fmol_per_sec" interface="public" id="b4daa6"/>
    <variable name="v_re1" units="fmol_per_sec" id="b4daa7"/>
    <variable name="mu_re1_in" units="J_per_mol" id="b4daa8"/>
    <variable name="mu_re1_out" units="J_per_mol" id="b4daa9"/>
    <variable name="kappa_re2" units="fmol_per_sec" interface="public" id="b4daaa"/>
    <variable name="v_re2" units="fmol_per_sec" id="b4daab"/>
    <variable name="mu_re2_in" units="J_per_mol" id="b4daac"/>
    <variable name="mu_re2_out" units="J_per_mol" id="b4daad"/>
    <variable name="kappa_re3" units="fmol_per_sec" interface="public" id="b4daae"/>
    <variable name="v_re3" units="fmol_per_sec" id="b4daaf"/>
    <variable name="mu_re3_in" units="J_per_mol" id="b4dab0"/>
    <variable name="mu_re3_out" units="J_per_mol" id="b4dab1"/>
    <variable name="kappa_re4" units="fmol_per_sec" interface="public" id="b4dab2"/>
    <variable name="v_re4" units="fmol_per_sec" id="b4dab3"/>
    <variable name="mu_re4_in" units="J_per_mol" id="b4dab4"/>
    <variable name="mu_re4_out" units="J_per_mol" id="b4dab5"/>
    <variable name="kappa_re5" units="fmol_per_sec" interface="public" id="b4dab6"/>
    <variable name="v_re5" units="fmol_per_sec" id="b4dab7"/>
    <variable name="mu_re5_in" units="J_per_mol" id="b4dab8"/>
    <variable name="mu_re5_out" units="J_per_mol" id="b4dab9"/>
    <variable name="kappa_re6" units="fmol_per_sec" interface="public" id="b4daba"/>
    <variable name="v_re6" units="fmol_per_sec" id="b4dabb"/>
    <variable name="mu_re6_in" units="J_per_mol" id="b4dabc"/>
    <variable name="mu_re6_out" units="J_per_mol" id="b4dabd"/>
    <variable name="F" units="C_per_mol" interface="public" id="b4dabe"/>
    <variable name="R" units="J_per_K_per_mol" interface="public" id="b4dabf"/>
    <variable name="T" units="kelvin" interface="public" id="b4dac0"/>
    <math xmlns="http://www.w3.org/1998/Math/MathML" xmlns:cellml="http://www.cellml.org/cellml/2.0#">
      <apply>
        <eq/>
        <ci>mu_Ao</ci>
        <apply>
          <times/>
          <ci>R</ci>
          <ci>T</ci>
          <apply>
            <ln/>
            <apply>
              <times/>
              <ci>K_Ao</ci>
              <ci>q_Ao</ci>
            </apply>
          </apply>
        </apply>
      </apply>
      <apply>
        <eq/>
        <ci>mu_Ai</ci>
        <apply>
          <times/>
          <ci>R</ci>
          <ci>T</ci>
          <apply>
            <ln/>
            <apply>
              <times/>
              <ci>K_Ai</ci>
              <ci>q_Ai</ci>
            </apply>
          </apply>
        </apply>
      </apply>
      <apply>
        <eq/>
        <ci>mu_Bo</ci>
        <apply>
          <times/>
          <ci>R</ci>
          <ci>T</ci>
          <apply>
            <ln/>
            <apply>
              <times/>
              <ci>K_Bo</ci>
              <ci>q_Bo</ci>
            </apply>
          </apply>
        </apply>
      </apply>
      <apply>
        <eq/>
        <ci>mu_Bi</ci>
        <apply>
          <times/>
          <ci>R</ci>
          <ci>T</ci>
          <apply>
            <ln/>
            <apply>
              <times/>
              <ci>K_Bi</ci>
              <ci>q_Bi</ci>
            </apply>
          </apply>
        </apply>
      </apply>
      <apply>
        <eq/>
        <apply>
          <diff/>
          <bvar>
            <ci>t</ci>
          </bvar>
          <ci>q_5</ci>
        </apply>
        <ci>v_5</ci>
      </apply>
      <apply>
        <eq/>
        <ci>mu_5</ci>
        <apply>
          <times/>
          <ci>R</ci>
          <ci>T</ci>
          <apply>
            <ln/>
            <apply>
              <times/>
              <ci>K_5</ci>
              <ci>q_5</ci>
            </apply>
          </apply>
        </apply>
      </apply>
      <apply>
        <eq/>
        <apply>
          <diff/>
          <bvar>
            <ci>t</ci>
          </bvar>
          <ci>q_6</ci>
        </apply>
        <ci>v_6</ci>
      </apply>
      <apply>
        <eq/>
        <ci>mu_6</ci>
        <apply>
          <times/>
          <ci>R</ci>
          <ci>T</ci>
          <apply>
            <ln/>
            <apply>
              <times/>
              <ci>K_6</ci>
              <ci>q_6</ci>
            </apply>
          </apply>
        </apply>
      </apply>
      <apply>
        <eq/>
        <apply>
          <diff/>
          <bvar>
            <ci>t</ci>
          </bvar>
          <ci>q_7</ci>
        </apply>
        <ci>v_7</ci>
      </apply>
      <apply>
        <eq/>
        <ci>mu_7</ci>
        <apply>
          <times/>
          <ci>R</ci>
          <ci>T</ci>
          <apply>
            <ln/>
            <apply>
              <times/>
              <ci>K_7</ci>
              <ci>q_7</ci>
            </apply>
          </apply>
        </apply>
      </apply>
      <apply>
        <eq/>
        <apply>
          <diff/>
          <bvar>
            <ci>t</ci>
          </bvar>
          <ci>q_8</ci>
        </apply>
        <ci>v_8</ci>
      </apply>
      <apply>
        <eq/>
        <ci>mu_8</ci>
        <apply>
          <times/>
          <ci>R</ci>
          <ci>T</ci>
          <apply>
            <ln/>
            <apply>
              <times/>
              <ci>K_8</ci>
              <ci>q_8</ci>
            </apply>
          </apply>
        </apply>
      </apply>
      <apply>
        <eq/>
        <apply>
          <diff/>
          <bvar>
            <ci>t</ci>
          </bvar>
          <ci>q_9</ci>
        </apply>
        <ci>v_9</ci>
      </apply>
      <apply>
        <eq/>
        <ci>mu_9</ci>
        <apply>
          <times/>
          <ci>R</ci>
          <ci>T</ci>
          <apply>
            <ln/>
            <apply>
              <times/>
              <ci>K_9</ci>
              <ci>q_9</ci>
            </apply>
          </apply>
        </apply>
      </apply>
      <apply>
        <eq/>
        <apply>
          <diff/>
          <bvar>
            <ci>t</ci>
          </bvar>
          <ci>q_10</ci>
        </apply>
        <ci>v_10</ci>
      </apply>
      <apply>
        <eq/>
        <ci>mu_10</ci>
        <apply>
          <times/>
          <ci>R</ci>
          <ci>T</ci>
          <apply>
            <ln/>
            <apply>
              <times/>
              <ci>K_10</ci>
              <ci>q_10</ci>
            </apply>
          </apply>
        </apply>
      </apply>
      <apply>
        <eq/>
        <ci>v_re1</ci>
        <apply>
          <times/>
          <ci>kappa_re1</ci>
          <apply>
            <minus/>
            <apply>
              <exp/>
              <apply>
                <divide/>
                <ci>mu_re1_in</ci>
                <apply>
                  <times/>
                  <ci>R</ci>
                  <ci>T</ci>
                </apply>
              </apply>
            </apply>
            <apply>
              <exp/>
              <apply>
                <divide/>
                <ci>mu_re1_out</ci>
                <apply>
                  <times/>
                  <ci>R</ci>
                  <ci>T</ci>
                </apply>
              </apply>
            </apply>
          </apply>
        </apply>
      </apply>
      <apply>
        <eq/>
        <ci>v_re2</ci>
        <apply>
          <times/>
          <ci>kappa_re2</ci>
          <apply>
            <minus/>
            <apply>
              <exp/>
              <apply>
                <divide/>
                <ci>mu_re2_in</ci>
                <apply>
                  <times/>
                  <ci>R</ci>
                  <ci>T</ci>
                </apply>
              </apply>
            </apply>
            <apply>
              <exp/>
              <apply>
                <divide/>
                <ci>mu_re2_out</ci>
                <apply>
                  <times/>
                  <ci>R</ci>
                  <ci>T</ci>
                </apply>
              </apply>
            </apply>
          </apply>
        </apply>
      </apply>
      <apply>
        <eq/>
        <ci>v_re3</ci>
        <apply>
          <times/>
          <ci>kappa_re3</ci>
          <apply>
            <minus/>
            <apply>
              <exp/>
              <apply>
                <divide/>
                <ci>mu_re3_in</ci>
                <apply>
                  <times/>
                  <ci>R</ci>
                  <ci>T</ci>
                </apply>
              </apply>
            </apply>
            <apply>
              <exp/>
              <apply>
                <divide/>
                <ci>mu_re3_out</ci>
                <apply>
                  <times/>
                  <ci>R</ci>
                  <ci>T</ci>
                </apply>
              </apply>
            </apply>
          </apply>
        </apply>
      </apply>
      <apply>
        <eq/>
        <ci>v_re4</ci>
        <apply>
          <times/>
          <ci>kappa_re4</ci>
          <apply>
            <minus/>
            <apply>
              <exp/>
              <apply>
                <divide/>
                <ci>mu_re4_in</ci>
                <apply>
                  <times/>
                  <ci>R</ci>
                  <ci>T</ci>
                </apply>
              </apply>
            </apply>
            <apply>
              <exp/>
              <apply>
                <divide/>
                <ci>mu_re4_out</ci>
                <apply>
                  <times/>
                  <ci>R</ci>
                  <ci>T</ci>
                </apply>
              </apply>
            </apply>
          </apply>
        </apply>
      </apply>
      <apply>
        <eq/>
        <ci>v_re5</ci>
        <apply>
          <times/>
          <ci>kappa_re5</ci>
          <apply>
            <minus/>
            <apply>
              <exp/>
              <apply>
                <divide/>
                <ci>mu_re5_in</ci>
                <apply>
                  <times/>
                  <ci>R</ci>
                  <ci>T</ci>
                </apply>
              </apply>
            </apply>
            <apply>
              <exp/>
              <apply>
                <divide/>
                <ci>mu_re5_out</ci>
                <apply>
                  <times/>
                  <ci>R</ci>
                  <ci>T</ci>
                </apply>
              </apply>
            </apply>
          </apply>
        </apply>
      </apply>
      <apply>
        <eq/>
        <ci>v_re6</ci>
        <apply>
          <times/>
          <ci>kappa_re6</ci>
          <apply>
            <minus/>
            <apply>
              <exp/>
              <apply>
                <divide/>
                <ci>mu_re6_in</ci>
                <apply>
                  <times/>
                  <ci>R</ci>
                  <ci>T</ci>
                </apply>
              </apply>
            </apply>
            <apply>
              <exp/>
              <apply>
                <divide/>
                <ci>mu_re6_out</ci>
                <apply>
                  <times/>
                  <ci>R</ci>
                  <ci>T</ci>
                </apply>
              </apply>
            </apply>
          </apply>
        </apply>
      </apply>
      <apply>
        <eq/>
        <ci>v_Ao</ci>
        <apply>
          <minus/>
          <ci>v_re1</ci>
        </apply>
      </apply>
      <apply>
        <eq/>
        <ci>v_Ai</ci>
        <ci>v_re2</ci>
      </apply>
      <apply>
        <eq/>
        <ci>v_Bo</ci>
        <ci>v_re3</ci>
      </apply>
      <apply>
        <eq/>
        <ci>v_Bi</ci>
        <apply>
          <minus/>
          <ci>v_re4</ci>
        </apply>
      </apply>
      <apply>
        <eq/>
        <ci>v_5</ci>
        <apply>
          <plus/>
          <apply>
            <minus/>
            <ci>v_re1</ci>
          </apply>
          <ci>v_re3</ci>
        </apply>
      </apply>
      <apply>
        <eq/>
        <ci>v_6</ci>
        <apply>
          <plus/>
          <apply>
            <minus/>
            <ci>v_re4</ci>
          </apply>
          <ci>v_re2</ci>
        </apply>
      </apply>
      <apply>
        <eq/>
        <ci>v_7</ci>
        <apply>
          <plus/>
          <apply>
            <minus/>
            <ci>v_re6</ci>
          </apply>
          <ci>v_re1</ci>
        </apply>
      </apply>
      <apply>
        <eq/>
        <ci>v_8</ci>
        <apply>
          <plus/>
          <apply>
            <minus/>
            <ci>v_re2</ci>
          </apply>
          <ci>v_re6</ci>
        </apply>
      </apply>
      <apply>
        <eq/>
        <ci>v_9</ci>
        <apply>
          <plus/>
          <apply>
            <minus/>
            <ci>v_re3</ci>
          </apply>
          <ci>v_re5</ci>
        </apply>
      </apply>
      <apply>
        <eq/>
        <ci>v_10</ci>
        <apply>
          <plus/>
          <apply>
            <minus/>
            <ci>v_re5</ci>
          </apply>
          <ci>v_re4</ci>
        </apply>
      </apply>
      <apply>
        <eq/>
        <ci>mu_re1_in</ci>
        <apply>
          <plus/>
          <ci>mu_Ao</ci>
          <ci>mu_5</ci>
        </apply>
      </apply>
      <apply>
        <eq/>
        <ci>mu_re1_out</ci>
        <ci>mu_7</ci>
      </apply>
      <apply>
        <eq/>
        <ci>mu_re2_in</ci>
        <ci>mu_8</ci>
      </apply>
      <apply>
        <eq/>
        <ci>mu_re2_out</ci>
        <apply>
          <plus/>
          <ci>mu_Ai</ci>
          <ci>mu_6</ci>
        </apply>
      </apply>
      <apply>
        <eq/>
        <ci>mu_re3_in</ci>
        <ci>mu_9</ci>
      </apply>
      <apply>
        <eq/>
        <ci>mu_re3_out</ci>
        <apply>
          <plus/>
          <ci>mu_Bo</ci>
          <ci>mu_5</ci>
        </apply>
      </apply>
      <apply>
        <eq/>
        <ci>mu_re4_in</ci>
        <apply>
          <plus/>
          <ci>mu_Bi</ci>
          <ci>mu_6</ci>
        </apply>
      </apply>
      <apply>
        <eq/>
        <ci>mu_re4_out</ci>
        <ci>mu_10</ci>
      </apply>
      <apply>
        <eq/>
        <ci>mu_re5_in</ci>
        <ci>mu_10</ci>
      </apply>
      <apply>
        <eq/>
        <ci>mu_re5_out</ci>
        <ci>mu_9</ci>
      </apply>
      <apply>
        <eq/>
        <ci>mu_re6_in</ci>
        <ci>mu_7</ci>
      </apply>
      <apply>
        <eq/>
        <ci>mu_re6_out</ci>
        <ci>mu_8</ci>
      </apply>
    </math>
  </component>
  <component name="SLCT4_BG_param" id="b4dadb">
    <variable name="K_Ao" units="per_fmol" initial_value="1" interface="public" id="b4dadd"/>
    <variable name="K_Ai" units="per_fmol" initial_value="1" interface="public" id="b4dade"/>
    <variable name="K_Bo" units="per_fmol" initial_value="1" interface="public" id="b4dadf"/>
    <variable name="K_Bi" units="per_fmol" initial_value="1" interface="public" id="b4dae0"/>
    <variable name="K_5" units="per_fmol" initial_value="1" interface="public" id="b4dae1"/>
    <variable name="q_5_init" units="fmol" initial_value="1" interface="public" id="b4dae2"/>
    <variable name="K_6" units="per_fmol" initial_value="1" interface="public" id="b4dae3"/>
    <variable name="q_6_init" units="fmol" initial_value="1" interface="public" id="b4dae4"/>
    <variable name="K_7" units="per_fmol" initial_value="1" interface="public" id="b4dae5"/>
    <variable name="q_7_init" units="fmol" initial_value="1" interface="public" id="b4dae6"/>
    <variable name="K_8" units="per_fmol" initial_value="1" interface="public" id="b4dae7"/>
    <variable name="q_8_init" units="fmol" initial_value="1" interface="public" id="b4dae8"/>
    <variable name="K_9" units="per_fmol" initial_value="1" interface="public" id="b4dae9"/>
    <variable name="q_9_init" units="fmol" initial_value="1" interface="public" id="b4daea"/>
    <variable name="K_10" units="per_fmol" initial_value="1" interface="public" id="b4daeb"/>
    <variable name="q_10_init" units="fmol" initial_value="1" interface="public" id="b4daec"/>
    <variable name="kappa_re1" units="fmol_per_sec" initial_value="1" interface="public" id="b4daed"/>
    <variable name="kappa_re2" units="fmol_per_sec" initial_value="1" interface="public" id="b4daee"/>
    <variable name="kappa_re3" units="fmol_per_sec" initial_value="1" interface="public" id="b4daef"/>
    <variable name="kappa_re4" units="fmol_per_sec" initial_value="1" interface="public" id="b4daf0"/>
    <variable name="kappa_re5" units="fmol_per_sec" initial_value="1" interface="public" id="b4daf1"/>
    <variable name="kappa_re6" units="fmol_per_sec" initial_value="1" interface="public" id="b4daf2"/>
    <variable name="F" units="C_per_mol" initial_value="96485" interface="public" id="b4daf3"/>
    <variable name="R" units="J_per_K_per_mol" initial_value="8.31" interface="public" id="b4daf4"/>
    <variable name="T" units="kelvin" initial_value="293" interface="public" id="b4daf5"/>
  </component>
  <component name="SLCT4_BG_io" id="b4daf6">
    <variable name="q_Ao" units="fmol" initial_value="1" interface="public" id="b4daf7"/>
    <variable name="q_Ai" units="fmol" initial_value="1" interface="public" id="b4daf8"/>
    <variable name="q_Bo" units="fmol" initial_value="1" interface="public" id="b4daf9"/>
    <variable name="q_Bi" units="fmol" initial_value="1" interface="public" id="b4dafa"/>
  </component>
  <connection component_1="SLCT4_BG_test" component_2="SLCT4_BG" id="b4da67">
    <map_variables variable_1="v_Ao" variable_2="v_Ao" id="b4da68"/>
    <map_variables variable_1="q_Ao" variable_2="q_Ao" id="b4da69"/>
    <map_variables variable_1="v_Ai" variable_2="v_Ai" id="b4da6c"/>
    <map_variables variable_1="q_Ai" variable_2="q_Ai" id="b4da6d"/>
    <map_variables variable_1="v_Bo" variable_2="v_Bo" id="b4da6f"/>
    <map_variables variable_1="q_Bo" variable_2="q_Bo" id="b4da70"/>
    <map_variables variable_1="v_Bi" variable_2="v_Bi" id="b4da72"/>
    <map_variables variable_1="q_Bi" variable_2="q_Bi" id="b4da73"/>
  </connection>
  <connection component_1="SLCT4_BG_test" component_2="SLCT4_BG_io" id="b4da6a">
    <map_variables variable_1="q_Ao" variable_2="q_Ao" id="b4da6b"/>
    <map_variables variable_1="q_Ai" variable_2="q_Ai" id="b4da6e"/>
    <map_variables variable_1="q_Bo" variable_2="q_Bo" id="b4da71"/>
    <map_variables variable_1="q_Bi" variable_2="q_Bi" id="b4da74"/>
  </connection>
  <connection component_1="SLCT4_BG" component_2="SLCT4_BG_param" id="b4dac1">
    <map_variables variable_1="K_Ao" variable_2="K_Ao" id="b4dac2"/>
    <map_variables variable_1="K_Ai" variable_2="K_Ai" id="b4dac3"/>
    <map_variables variable_1="K_Bo" variable_2="K_Bo" id="b4dac4"/>
    <map_variables variable_1="K_Bi" variable_2="K_Bi" id="b4dac5"/>
    <map_variables variable_1="K_5" variable_2="K_5" id="b4dac6"/>
    <map_variables variable_1="q_5_init" variable_2="q_5_init" id="b4dac7"/>
    <map_variables variable_1="K_6" variable_2="K_6" id="b4dac8"/>
    <map_variables variable_1="q_6_init" variable_2="q_6_init" id="b4dac9"/>
    <map_variables variable_1="K_7" variable_2="K_7" id="b4daca"/>
    <map_variables variable_1="q_7_init" variable_2="q_7_init" id="b4dacb"/>
    <map_variables variable_1="K_8" variable_2="K_8" id="b4dacc"/>
    <map_variables variable_1="q_8_init" variable_2="q_8_init" id="b4dacd"/>
    <map_variables variable_1="K_9" variable_2="K_9" id="b4dace"/>
    <map_variables variable_1="q_9_init" variable_2="q_9_init" id="b4dacf"/>
    <map_variables variable_1="K_10" variable_2="K_10" id="b4dad0"/>
    <map_variables variable_1="q_10_init" variable_2="q_10_init" id="b4dad1"/>
    <map_variables variable_1="kappa_re1" variable_2="kappa_re1" id="b4dad2"/>
    <map_variables variable_1="kappa_re2" variable_2="kappa_re2" id="b4dad3"/>
    <map_variables variable_1="kappa_re3" variable_2="kappa_re3" id="b4dad4"/>
    <map_variables variable_1="kappa_re4" variable_2="kappa_re4" id="b4dad5"/>
    <map_variables variable_1="kappa_re5" variable_2="kappa_re5" id="b4dad6"/>
    <map_variables variable_1="kappa_re6" variable_2="kappa_re6" id="b4dad7"/>
    <map_variables variable_1="F" variable_2="F" id="b4dad8"/>
    <map_variables variable_1="R" variable_2="R" id="b4dad9"/>
    <map_variables variable_1="T" variable_2="T" id="b4dada"/>
  </connection>
  <encapsulation id="b4dafb">
    <component_ref component="SLCT4_BG_test" id="b4da5e">
      <component_ref component="SLCT4_BG" id="b4da76"/>
      <component_ref component="SLCT4_BG_param" id="b4dadc"/>
    </component_ref>
  </encapsulation>
</model>
