<?xml version="1.0" encoding="UTF-8"?>
<model xmlns="http://www.cellml.org/cellml/2.0#" name="SLCT7_BG_ss">
  <import xmlns:xlink="http://www.w3.org/1999/xlink" xlink:href="../units_BG.cellml">
    <units units_ref="C_per_mol" name="C_per_mol"/>
    <units units_ref="fmol" name="fmol"/>
    <units units_ref="per_fmol" name="per_fmol"/>
    <units units_ref="per_sec7_fmol8" name="per_sec7_fmol8"/>
    <units units_ref="per_sec7_fmol5" name="per_sec7_fmol5"/>
    <units units_ref="per_sec8_fmol8" name="per_sec8_fmol8"/>
    <units units_ref="J_per_K_per_mol" name="J_per_K_per_mol"/>
    <units units_ref="per_sec7_fmol4" name="per_sec7_fmol4"/>
    <units units_ref="fmol_per_sec" name="fmol_per_sec"/>
    <units units_ref="per_sec7_fmol7" name="per_sec7_fmol7"/>
    <units units_ref="per_sec8_fmol5" name="per_sec8_fmol5"/>
    <units units_ref="per_sec7_fmol2" name="per_sec7_fmol2"/>
  </import>
  <component name="SLCT7_BG_ss">
    <variable name="P_0" units="per_sec8_fmol5" interface="public"/>
    <variable name="P_1" units="per_sec8_fmol8" interface="public"/>
    <variable name="P_2" units="per_sec7_fmol4" interface="public"/>
    <variable name="P_3" units="per_sec7_fmol4" interface="public"/>
    <variable name="P_4" units="per_sec7_fmol2" interface="public"/>
    <variable name="P_5" units="per_sec7_fmol4" interface="public"/>
    <variable name="P_6" units="per_sec7_fmol7" interface="public"/>
    <variable name="P_7" units="per_sec7_fmol5" interface="public"/>
    <variable name="P_8" units="per_sec7_fmol5" interface="public"/>
    <variable name="P_9" units="per_sec7_fmol5" interface="public"/>
    <variable name="P_10" units="per_sec7_fmol5" interface="public"/>
    <variable name="P_11" units="per_sec7_fmol5" interface="public"/>
    <variable name="P_12" units="per_sec7_fmol5" interface="public"/>
    <variable name="P_13" units="per_sec7_fmol5" interface="public"/>
    <variable name="P_14" units="per_sec7_fmol7" interface="public"/>
    <variable name="P_15" units="per_sec7_fmol7" interface="public"/>
    <variable name="P_16" units="per_sec7_fmol8" interface="public"/>
    <variable name="P_17" units="per_sec7_fmol8" interface="public"/>
    <variable name="P_18" units="per_sec7_fmol8" interface="public"/>
    <variable name="P_19" units="per_sec7_fmol8" interface="public"/>
    <variable name="E" units="fmol" interface="public"/>
    <variable name="K_Nao" units="per_fmol" interface="public"/>
    <variable name="K_Nai" units="per_fmol" interface="public"/>
    <variable name="K_HCO3o" units="per_fmol" interface="public"/>
    <variable name="K_HCO3i" units="per_fmol" interface="public"/>
    <variable name="K_Cli" units="per_fmol" interface="public"/>
    <variable name="K_Clo" units="per_fmol" interface="public"/>
    <variable name="K_7" units="per_fmol" interface="public"/>
    <variable name="q_7_init" units="fmol" interface="public"/>
    <variable name="K_8" units="per_fmol" interface="public"/>
    <variable name="q_8_init" units="fmol" interface="public"/>
    <variable name="K_9" units="per_fmol" interface="public"/>
    <variable name="q_9_init" units="fmol" interface="public"/>
    <variable name="K_10" units="per_fmol" interface="public"/>
    <variable name="q_10_init" units="fmol" interface="public"/>
    <variable name="K_11" units="per_fmol" interface="public"/>
    <variable name="q_11_init" units="fmol" interface="public"/>
    <variable name="K_12" units="per_fmol" interface="public"/>
    <variable name="q_12_init" units="fmol" interface="public"/>
    <variable name="K_13" units="per_fmol" interface="public"/>
    <variable name="q_13_init" units="fmol" interface="public"/>
    <variable name="K_14" units="per_fmol" interface="public"/>
    <variable name="q_14_init" units="fmol" interface="public"/>
    <variable name="kappa_re1" units="fmol_per_sec" interface="public"/>
    <variable name="kappa_re2" units="fmol_per_sec" interface="public"/>
    <variable name="kappa_re3" units="fmol_per_sec" interface="public"/>
    <variable name="kappa_re4" units="fmol_per_sec" interface="public"/>
    <variable name="kappa_re5" units="fmol_per_sec" interface="public"/>
    <variable name="kappa_re6" units="fmol_per_sec" interface="public"/>
    <variable name="kappa_re7" units="fmol_per_sec" interface="public"/>
    <variable name="kappa_re8" units="fmol_per_sec" interface="public"/>
    <variable name="F" units="C_per_mol" interface="public"/>
    <variable name="R" units="J_per_K_per_mol" interface="public"/>
    <variable name="T" units="kelvin" interface="public"/>
    <math xmlns="http://www.w3.org/1998/Math/MathML" xmlns:cellml="http://www.cellml.org/cellml/2.0#">
      <apply>
        <eq/>
        <ci>P_0</ci>
        <apply>
          <times/>
          <ci>K_10</ci>
          <ci>K_11</ci>
          <ci>K_12</ci>
          <ci>K_13</ci>
          <ci>K_14</ci>
          <ci>K_7</ci>
          <ci>K_8</ci>
          <ci>K_9</ci>
          <ci>K_Clo</ci>
          <apply>
            <power/>
            <ci>K_HCO3i</ci>
            <cn cellml:units="dimensionless">2</cn>
          </apply>
          <ci>K_Nai</ci>
          <ci>kappa_re1</ci>
          <ci>kappa_re2</ci>
          <ci>kappa_re3</ci>
          <ci>kappa_re4</ci>
          <ci>kappa_re5</ci>
          <ci>kappa_re6</ci>
          <ci>kappa_re7</ci>
          <ci>kappa_re8</ci>
        </apply>
      </apply>
      <apply>
        <eq/>
        <ci>P_1</ci>
        <apply>
          <times/>
          <ci>K_10</ci>
          <ci>K_11</ci>
          <ci>K_12</ci>
          <ci>K_13</ci>
          <ci>K_14</ci>
          <ci>K_7</ci>
          <ci>K_8</ci>
          <ci>K_9</ci>
          <ci>K_Cli</ci>
          <apply>
            <power/>
            <ci>K_HCO3i</ci>
            <cn cellml:units="dimensionless">2</cn>
          </apply>
          <apply>
            <power/>
            <ci>K_HCO3o</ci>
            <cn cellml:units="dimensionless">2</cn>
          </apply>
          <ci>K_Nao</ci>
          <ci>kappa_re1</ci>
          <ci>kappa_re2</ci>
          <ci>kappa_re3</ci>
          <ci>kappa_re4</ci>
          <ci>kappa_re5</ci>
          <ci>kappa_re6</ci>
          <ci>kappa_re7</ci>
          <ci>kappa_re8</ci>
        </apply>
      </apply>
      <apply>
        <eq/>
        <ci>P_2</ci>
        <apply>
          <plus/>
          <apply>
            <times/>
            <ci>K_10</ci>
            <ci>K_11</ci>
            <ci>K_12</ci>
            <ci>K_13</ci>
            <ci>K_14</ci>
            <ci>K_7</ci>
            <ci>K_8</ci>
            <ci>K_Cli</ci>
            <apply>
              <power/>
              <ci>K_HCO3i</ci>
              <cn cellml:units="dimensionless">2</cn>
            </apply>
            <ci>kappa_re1</ci>
            <ci>kappa_re2</ci>
            <ci>kappa_re3</ci>
            <ci>kappa_re4</ci>
            <ci>kappa_re5</ci>
            <ci>kappa_re6</ci>
            <ci>kappa_re7</ci>
          </apply>
          <apply>
            <times/>
            <ci>K_10</ci>
            <ci>K_11</ci>
            <ci>K_12</ci>
            <ci>K_13</ci>
            <ci>K_14</ci>
            <ci>K_7</ci>
            <ci>K_8</ci>
            <ci>K_Cli</ci>
            <apply>
              <power/>
              <ci>K_HCO3i</ci>
              <cn cellml:units="dimensionless">2</cn>
            </apply>
            <ci>kappa_re1</ci>
            <ci>kappa_re2</ci>
            <ci>kappa_re3</ci>
            <ci>kappa_re4</ci>
            <ci>kappa_re5</ci>
            <ci>kappa_re7</ci>
            <ci>kappa_re8</ci>
          </apply>
          <apply>
            <times/>
            <ci>K_10</ci>
            <ci>K_11</ci>
            <ci>K_12</ci>
            <ci>K_13</ci>
            <ci>K_14</ci>
            <ci>K_7</ci>
            <ci>K_8</ci>
            <ci>K_Cli</ci>
            <apply>
              <power/>
              <ci>K_HCO3i</ci>
              <cn cellml:units="dimensionless">2</cn>
            </apply>
            <ci>kappa_re1</ci>
            <ci>kappa_re2</ci>
            <ci>kappa_re3</ci>
            <ci>kappa_re4</ci>
            <ci>kappa_re6</ci>
            <ci>kappa_re7</ci>
            <ci>kappa_re8</ci>
          </apply>
          <apply>
            <times/>
            <ci>K_10</ci>
            <ci>K_11</ci>
            <ci>K_12</ci>
            <ci>K_13</ci>
            <ci>K_14</ci>
            <ci>K_7</ci>
            <ci>K_8</ci>
            <ci>K_Cli</ci>
            <apply>
              <power/>
              <ci>K_HCO3i</ci>
              <cn cellml:units="dimensionless">2</cn>
            </apply>
            <ci>kappa_re1</ci>
            <ci>kappa_re2</ci>
            <ci>kappa_re3</ci>
            <ci>kappa_re5</ci>
            <ci>kappa_re6</ci>
            <ci>kappa_re7</ci>
            <ci>kappa_re8</ci>
          </apply>
        </apply>
      </apply>
      <apply>
        <eq/>
        <ci>P_3</ci>
        <apply>
          <plus/>
          <apply>
            <times/>
            <ci>K_10</ci>
            <ci>K_11</ci>
            <ci>K_12</ci>
            <ci>K_13</ci>
            <ci>K_14</ci>
            <ci>K_7</ci>
            <ci>K_8</ci>
            <apply>
              <power/>
              <ci>K_HCO3i</ci>
              <cn cellml:units="dimensionless">2</cn>
            </apply>
            <ci>K_Nai</ci>
            <ci>kappa_re1</ci>
            <ci>kappa_re2</ci>
            <ci>kappa_re3</ci>
            <ci>kappa_re4</ci>
            <ci>kappa_re5</ci>
            <ci>kappa_re6</ci>
            <ci>kappa_re8</ci>
          </apply>
          <apply>
            <times/>
            <ci>K_10</ci>
            <ci>K_11</ci>
            <ci>K_12</ci>
            <ci>K_13</ci>
            <ci>K_14</ci>
            <ci>K_7</ci>
            <ci>K_8</ci>
            <apply>
              <power/>
              <ci>K_HCO3i</ci>
              <cn cellml:units="dimensionless">2</cn>
            </apply>
            <ci>K_Nai</ci>
            <ci>kappa_re1</ci>
            <ci>kappa_re3</ci>
            <ci>kappa_re4</ci>
            <ci>kappa_re5</ci>
            <ci>kappa_re6</ci>
            <ci>kappa_re7</ci>
            <ci>kappa_re8</ci>
          </apply>
          <apply>
            <times/>
            <ci>K_10</ci>
            <ci>K_11</ci>
            <ci>K_12</ci>
            <ci>K_13</ci>
            <ci>K_14</ci>
            <ci>K_7</ci>
            <ci>K_8</ci>
            <apply>
              <power/>
              <ci>K_HCO3i</ci>
              <cn cellml:units="dimensionless">2</cn>
            </apply>
            <ci>K_Nai</ci>
            <ci>kappa_re2</ci>
            <ci>kappa_re3</ci>
            <ci>kappa_re4</ci>
            <ci>kappa_re5</ci>
            <ci>kappa_re6</ci>
            <ci>kappa_re7</ci>
            <ci>kappa_re8</ci>
          </apply>
        </apply>
      </apply>
      <apply>
        <eq/>
        <ci>P_4</ci>
        <apply>
          <plus/>
          <apply>
            <times/>
            <ci>K_10</ci>
            <ci>K_11</ci>
            <ci>K_13</ci>
            <ci>K_14</ci>
            <ci>K_7</ci>
            <ci>K_8</ci>
            <ci>K_9</ci>
            <ci>K_Clo</ci>
            <ci>K_Nai</ci>
            <ci>kappa_re1</ci>
            <ci>kappa_re2</ci>
            <ci>kappa_re3</ci>
            <ci>kappa_re4</ci>
            <ci>kappa_re5</ci>
            <ci>kappa_re6</ci>
            <ci>kappa_re7</ci>
          </apply>
          <apply>
            <times/>
            <ci>K_10</ci>
            <ci>K_11</ci>
            <ci>K_13</ci>
            <ci>K_14</ci>
            <ci>K_7</ci>
            <ci>K_8</ci>
            <ci>K_9</ci>
            <ci>K_Clo</ci>
            <ci>K_Nai</ci>
            <ci>kappa_re1</ci>
            <ci>kappa_re2</ci>
            <ci>kappa_re3</ci>
            <ci>kappa_re4</ci>
            <ci>kappa_re5</ci>
            <ci>kappa_re7</ci>
            <ci>kappa_re8</ci>
          </apply>
          <apply>
            <times/>
            <ci>K_10</ci>
            <ci>K_11</ci>
            <ci>K_13</ci>
            <ci>K_14</ci>
            <ci>K_7</ci>
            <ci>K_8</ci>
            <ci>K_9</ci>
            <ci>K_Clo</ci>
            <ci>K_Nai</ci>
            <ci>kappa_re1</ci>
            <ci>kappa_re2</ci>
            <ci>kappa_re3</ci>
            <ci>kappa_re4</ci>
            <ci>kappa_re6</ci>
            <ci>kappa_re7</ci>
            <ci>kappa_re8</ci>
          </apply>
        </apply>
      </apply>
      <apply>
        <eq/>
        <ci>P_5</ci>
        <apply>
          <plus/>
          <apply>
            <times/>
            <ci>K_11</ci>
            <ci>K_12</ci>
            <ci>K_13</ci>
            <ci>K_14</ci>
            <ci>K_7</ci>
            <ci>K_8</ci>
            <ci>K_9</ci>
            <ci>K_Clo</ci>
            <apply>
              <power/>
              <ci>K_HCO3i</ci>
              <cn cellml:units="dimensionless">2</cn>
            </apply>
            <ci>kappa_re1</ci>
            <ci>kappa_re2</ci>
            <ci>kappa_re3</ci>
            <ci>kappa_re4</ci>
            <ci>kappa_re5</ci>
            <ci>kappa_re6</ci>
            <ci>kappa_re7</ci>
          </apply>
          <apply>
            <times/>
            <ci>K_11</ci>
            <ci>K_12</ci>
            <ci>K_13</ci>
            <ci>K_14</ci>
            <ci>K_7</ci>
            <ci>K_8</ci>
            <ci>K_9</ci>
            <ci>K_Clo</ci>
            <apply>
              <power/>
              <ci>K_HCO3i</ci>
              <cn cellml:units="dimensionless">2</cn>
            </apply>
            <ci>kappa_re1</ci>
            <ci>kappa_re2</ci>
            <ci>kappa_re3</ci>
            <ci>kappa_re4</ci>
            <ci>kappa_re5</ci>
            <ci>kappa_re7</ci>
            <ci>kappa_re8</ci>
          </apply>
          <apply>
            <times/>
            <ci>K_11</ci>
            <ci>K_12</ci>
            <ci>K_13</ci>
            <ci>K_14</ci>
            <ci>K_7</ci>
            <ci>K_8</ci>
            <ci>K_9</ci>
            <ci>K_Clo</ci>
            <apply>
              <power/>
              <ci>K_HCO3i</ci>
              <cn cellml:units="dimensionless">2</cn>
            </apply>
            <ci>kappa_re1</ci>
            <ci>kappa_re2</ci>
            <ci>kappa_re3</ci>
            <ci>kappa_re4</ci>
            <ci>kappa_re6</ci>
            <ci>kappa_re7</ci>
            <ci>kappa_re8</ci>
          </apply>
          <apply>
            <times/>
            <ci>K_11</ci>
            <ci>K_12</ci>
            <ci>K_13</ci>
            <ci>K_14</ci>
            <ci>K_7</ci>
            <ci>K_8</ci>
            <ci>K_9</ci>
            <ci>K_Clo</ci>
            <apply>
              <power/>
              <ci>K_HCO3i</ci>
              <cn cellml:units="dimensionless">2</cn>
            </apply>
            <ci>kappa_re1</ci>
            <ci>kappa_re2</ci>
            <ci>kappa_re3</ci>
            <ci>kappa_re5</ci>
            <ci>kappa_re6</ci>
            <ci>kappa_re7</ci>
            <ci>kappa_re8</ci>
          </apply>
        </apply>
      </apply>
      <apply>
        <eq/>
        <ci>P_6</ci>
        <apply>
          <times/>
          <ci>K_10</ci>
          <ci>K_11</ci>
          <ci>K_12</ci>
          <ci>K_13</ci>
          <ci>K_14</ci>
          <ci>K_7</ci>
          <ci>K_8</ci>
          <ci>K_Cli</ci>
          <apply>
            <power/>
            <ci>K_HCO3i</ci>
            <cn cellml:units="dimensionless">2</cn>
          </apply>
          <apply>
            <power/>
            <ci>K_HCO3o</ci>
            <cn cellml:units="dimensionless">2</cn>
          </apply>
          <ci>kappa_re1</ci>
          <ci>kappa_re2</ci>
          <ci>kappa_re4</ci>
          <ci>kappa_re5</ci>
          <ci>kappa_re6</ci>
          <ci>kappa_re7</ci>
          <ci>kappa_re8</ci>
        </apply>
      </apply>
      <apply>
        <eq/>
        <ci>P_7</ci>
        <apply>
          <plus/>
          <apply>
            <times/>
            <ci>K_10</ci>
            <ci>K_11</ci>
            <ci>K_12</ci>
            <ci>K_13</ci>
            <ci>K_14</ci>
            <ci>K_7</ci>
            <ci>K_9</ci>
            <ci>K_Cli</ci>
            <ci>K_Clo</ci>
            <apply>
              <power/>
              <ci>K_HCO3i</ci>
              <cn cellml:units="dimensionless">2</cn>
            </apply>
            <ci>kappa_re1</ci>
            <ci>kappa_re2</ci>
            <ci>kappa_re3</ci>
            <ci>kappa_re4</ci>
            <ci>kappa_re5</ci>
            <ci>kappa_re6</ci>
            <ci>kappa_re7</ci>
          </apply>
          <apply>
            <times/>
            <ci>K_10</ci>
            <ci>K_11</ci>
            <ci>K_12</ci>
            <ci>K_13</ci>
            <ci>K_14</ci>
            <ci>K_7</ci>
            <ci>K_9</ci>
            <ci>K_Cli</ci>
            <ci>K_Clo</ci>
            <apply>
              <power/>
              <ci>K_HCO3i</ci>
              <cn cellml:units="dimensionless">2</cn>
            </apply>
            <ci>kappa_re1</ci>
            <ci>kappa_re2</ci>
            <ci>kappa_re3</ci>
            <ci>kappa_re4</ci>
            <ci>kappa_re5</ci>
            <ci>kappa_re7</ci>
            <ci>kappa_re8</ci>
          </apply>
          <apply>
            <times/>
            <ci>K_10</ci>
            <ci>K_11</ci>
            <ci>K_12</ci>
            <ci>K_13</ci>
            <ci>K_14</ci>
            <ci>K_7</ci>
            <ci>K_9</ci>
            <ci>K_Cli</ci>
            <ci>K_Clo</ci>
            <apply>
              <power/>
              <ci>K_HCO3i</ci>
              <cn cellml:units="dimensionless">2</cn>
            </apply>
            <ci>kappa_re1</ci>
            <ci>kappa_re2</ci>
            <ci>kappa_re3</ci>
            <ci>kappa_re4</ci>
            <ci>kappa_re6</ci>
            <ci>kappa_re7</ci>
            <ci>kappa_re8</ci>
          </apply>
          <apply>
            <times/>
            <ci>K_10</ci>
            <ci>K_11</ci>
            <ci>K_12</ci>
            <ci>K_13</ci>
            <ci>K_14</ci>
            <ci>K_7</ci>
            <ci>K_9</ci>
            <ci>K_Cli</ci>
            <ci>K_Clo</ci>
            <apply>
              <power/>
              <ci>K_HCO3i</ci>
              <cn cellml:units="dimensionless">2</cn>
            </apply>
            <ci>kappa_re1</ci>
            <ci>kappa_re2</ci>
            <ci>kappa_re3</ci>
            <ci>kappa_re5</ci>
            <ci>kappa_re6</ci>
            <ci>kappa_re7</ci>
            <ci>kappa_re8</ci>
          </apply>
          <apply>
            <times/>
            <ci>K_10</ci>
            <ci>K_11</ci>
            <ci>K_12</ci>
            <ci>K_13</ci>
            <ci>K_14</ci>
            <ci>K_8</ci>
            <ci>K_9</ci>
            <ci>K_Cli</ci>
            <ci>K_Clo</ci>
            <apply>
              <power/>
              <ci>K_HCO3i</ci>
              <cn cellml:units="dimensionless">2</cn>
            </apply>
            <ci>kappa_re1</ci>
            <ci>kappa_re2</ci>
            <ci>kappa_re3</ci>
            <ci>kappa_re4</ci>
            <ci>kappa_re5</ci>
            <ci>kappa_re6</ci>
            <ci>kappa_re7</ci>
          </apply>
          <apply>
            <times/>
            <ci>K_10</ci>
            <ci>K_11</ci>
            <ci>K_12</ci>
            <ci>K_13</ci>
            <ci>K_14</ci>
            <ci>K_8</ci>
            <ci>K_9</ci>
            <ci>K_Cli</ci>
            <ci>K_Clo</ci>
            <apply>
              <power/>
              <ci>K_HCO3i</ci>
              <cn cellml:units="dimensionless">2</cn>
            </apply>
            <ci>kappa_re1</ci>
            <ci>kappa_re2</ci>
            <ci>kappa_re3</ci>
            <ci>kappa_re4</ci>
            <ci>kappa_re5</ci>
            <ci>kappa_re7</ci>
            <ci>kappa_re8</ci>
          </apply>
          <apply>
            <times/>
            <ci>K_10</ci>
            <ci>K_11</ci>
            <ci>K_12</ci>
            <ci>K_13</ci>
            <ci>K_14</ci>
            <ci>K_8</ci>
            <ci>K_9</ci>
            <ci>K_Cli</ci>
            <ci>K_Clo</ci>
            <apply>
              <power/>
              <ci>K_HCO3i</ci>
              <cn cellml:units="dimensionless">2</cn>
            </apply>
            <ci>kappa_re1</ci>
            <ci>kappa_re2</ci>
            <ci>kappa_re3</ci>
            <ci>kappa_re4</ci>
            <ci>kappa_re6</ci>
            <ci>kappa_re7</ci>
            <ci>kappa_re8</ci>
          </apply>
          <apply>
            <times/>
            <ci>K_10</ci>
            <ci>K_11</ci>
            <ci>K_12</ci>
            <ci>K_13</ci>
            <ci>K_14</ci>
            <ci>K_8</ci>
            <ci>K_9</ci>
            <ci>K_Cli</ci>
            <ci>K_Clo</ci>
            <apply>
              <power/>
              <ci>K_HCO3i</ci>
              <cn cellml:units="dimensionless">2</cn>
            </apply>
            <ci>kappa_re1</ci>
            <ci>kappa_re2</ci>
            <ci>kappa_re3</ci>
            <ci>kappa_re5</ci>
            <ci>kappa_re6</ci>
            <ci>kappa_re7</ci>
            <ci>kappa_re8</ci>
          </apply>
        </apply>
      </apply>
      <apply>
        <eq/>
        <ci>P_8</ci>
        <apply>
          <plus/>
          <apply>
            <times/>
            <ci>K_10</ci>
            <ci>K_11</ci>
            <ci>K_12</ci>
            <ci>K_13</ci>
            <ci>K_14</ci>
            <ci>K_7</ci>
            <ci>K_9</ci>
            <ci>K_Clo</ci>
            <apply>
              <power/>
              <ci>K_HCO3i</ci>
              <cn cellml:units="dimensionless">2</cn>
            </apply>
            <ci>K_Nai</ci>
            <ci>kappa_re1</ci>
            <ci>kappa_re3</ci>
            <ci>kappa_re4</ci>
            <ci>kappa_re5</ci>
            <ci>kappa_re6</ci>
            <ci>kappa_re7</ci>
            <ci>kappa_re8</ci>
          </apply>
          <apply>
            <times/>
            <ci>K_10</ci>
            <ci>K_11</ci>
            <ci>K_12</ci>
            <ci>K_13</ci>
            <ci>K_14</ci>
            <ci>K_8</ci>
            <ci>K_9</ci>
            <ci>K_Clo</ci>
            <apply>
              <power/>
              <ci>K_HCO3i</ci>
              <cn cellml:units="dimensionless">2</cn>
            </apply>
            <ci>K_Nai</ci>
            <ci>kappa_re1</ci>
            <ci>kappa_re2</ci>
            <ci>kappa_re3</ci>
            <ci>kappa_re4</ci>
            <ci>kappa_re5</ci>
            <ci>kappa_re6</ci>
            <ci>kappa_re8</ci>
          </apply>
          <apply>
            <times/>
            <ci>K_10</ci>
            <ci>K_11</ci>
            <ci>K_12</ci>
            <ci>K_13</ci>
            <ci>K_14</ci>
            <ci>K_8</ci>
            <ci>K_9</ci>
            <ci>K_Clo</ci>
            <apply>
              <power/>
              <ci>K_HCO3i</ci>
              <cn cellml:units="dimensionless">2</cn>
            </apply>
            <ci>K_Nai</ci>
            <ci>kappa_re1</ci>
            <ci>kappa_re3</ci>
            <ci>kappa_re4</ci>
            <ci>kappa_re5</ci>
            <ci>kappa_re6</ci>
            <ci>kappa_re7</ci>
            <ci>kappa_re8</ci>
          </apply>
          <apply>
            <times/>
            <ci>K_10</ci>
            <ci>K_11</ci>
            <ci>K_12</ci>
            <ci>K_13</ci>
            <ci>K_7</ci>
            <ci>K_8</ci>
            <ci>K_9</ci>
            <ci>K_Clo</ci>
            <apply>
              <power/>
              <ci>K_HCO3i</ci>
              <cn cellml:units="dimensionless">2</cn>
            </apply>
            <ci>K_Nai</ci>
            <ci>kappa_re1</ci>
            <ci>kappa_re2</ci>
            <ci>kappa_re3</ci>
            <ci>kappa_re4</ci>
            <ci>kappa_re5</ci>
            <ci>kappa_re6</ci>
            <ci>kappa_re7</ci>
          </apply>
          <apply>
            <times/>
            <ci>K_10</ci>
            <ci>K_11</ci>
            <ci>K_12</ci>
            <ci>K_13</ci>
            <ci>K_7</ci>
            <ci>K_8</ci>
            <ci>K_9</ci>
            <ci>K_Clo</ci>
            <apply>
              <power/>
              <ci>K_HCO3i</ci>
              <cn cellml:units="dimensionless">2</cn>
            </apply>
            <ci>K_Nai</ci>
            <ci>kappa_re1</ci>
            <ci>kappa_re2</ci>
            <ci>kappa_re3</ci>
            <ci>kappa_re4</ci>
            <ci>kappa_re6</ci>
            <ci>kappa_re7</ci>
            <ci>kappa_re8</ci>
          </apply>
          <apply>
            <times/>
            <ci>K_10</ci>
            <ci>K_11</ci>
            <ci>K_12</ci>
            <ci>K_14</ci>
            <ci>K_7</ci>
            <ci>K_8</ci>
            <ci>K_9</ci>
            <ci>K_Clo</ci>
            <apply>
              <power/>
              <ci>K_HCO3i</ci>
              <cn cellml:units="dimensionless">2</cn>
            </apply>
            <ci>K_Nai</ci>
            <ci>kappa_re1</ci>
            <ci>kappa_re2</ci>
            <ci>kappa_re3</ci>
            <ci>kappa_re4</ci>
            <ci>kappa_re6</ci>
            <ci>kappa_re7</ci>
            <ci>kappa_re8</ci>
          </apply>
          <apply>
            <times/>
            <ci>K_10</ci>
            <ci>K_12</ci>
            <ci>K_13</ci>
            <ci>K_14</ci>
            <ci>K_7</ci>
            <ci>K_8</ci>
            <ci>K_9</ci>
            <ci>K_Clo</ci>
            <apply>
              <power/>
              <ci>K_HCO3i</ci>
              <cn cellml:units="dimensionless">2</cn>
            </apply>
            <ci>K_Nai</ci>
            <ci>kappa_re1</ci>
            <ci>kappa_re2</ci>
            <ci>kappa_re4</ci>
            <ci>kappa_re5</ci>
            <ci>kappa_re6</ci>
            <ci>kappa_re7</ci>
            <ci>kappa_re8</ci>
          </apply>
        </apply>
      </apply>
      <apply>
        <eq/>
        <ci>P_9</ci>
        <apply>
          <times/>
          <ci>K_10</ci>
          <ci>K_11</ci>
          <ci>K_13</ci>
          <ci>K_14</ci>
          <ci>K_7</ci>
          <ci>K_8</ci>
          <ci>K_9</ci>
          <ci>K_Cli</ci>
          <apply>
            <power/>
            <ci>K_HCO3o</ci>
            <cn cellml:units="dimensionless">2</cn>
          </apply>
          <ci>K_Nao</ci>
          <ci>kappa_re1</ci>
          <ci>kappa_re2</ci>
          <ci>kappa_re3</ci>
          <ci>kappa_re5</ci>
          <ci>kappa_re6</ci>
          <ci>kappa_re7</ci>
          <ci>kappa_re8</ci>
        </apply>
      </apply>
      <apply>
        <eq/>
        <ci>P_10</ci>
        <apply>
          <times/>
          <ci>K_10</ci>
          <ci>K_11</ci>
          <ci>K_13</ci>
          <ci>K_14</ci>
          <ci>K_7</ci>
          <ci>K_8</ci>
          <ci>K_9</ci>
          <ci>K_Clo</ci>
          <apply>
            <power/>
            <ci>K_HCO3o</ci>
            <cn cellml:units="dimensionless">2</cn>
          </apply>
          <ci>K_Nai</ci>
          <ci>kappa_re1</ci>
          <ci>kappa_re2</ci>
          <ci>kappa_re4</ci>
          <ci>kappa_re5</ci>
          <ci>kappa_re6</ci>
          <ci>kappa_re7</ci>
          <ci>kappa_re8</ci>
        </apply>
      </apply>
      <apply>
        <eq/>
        <ci>P_11</ci>
        <apply>
          <plus/>
          <apply>
            <times/>
            <ci>K_10</ci>
            <ci>K_11</ci>
            <ci>K_13</ci>
            <ci>K_14</ci>
            <ci>K_7</ci>
            <ci>K_8</ci>
            <ci>K_9</ci>
            <apply>
              <power/>
              <ci>K_HCO3o</ci>
              <cn cellml:units="dimensionless">2</cn>
            </apply>
            <ci>K_Nai</ci>
            <ci>K_Nao</ci>
            <ci>kappa_re1</ci>
            <ci>kappa_re2</ci>
            <ci>kappa_re3</ci>
            <ci>kappa_re4</ci>
            <ci>kappa_re5</ci>
            <ci>kappa_re6</ci>
            <ci>kappa_re8</ci>
          </apply>
          <apply>
            <times/>
            <ci>K_10</ci>
            <ci>K_11</ci>
            <ci>K_13</ci>
            <ci>K_14</ci>
            <ci>K_7</ci>
            <ci>K_8</ci>
            <ci>K_9</ci>
            <apply>
              <power/>
              <ci>K_HCO3o</ci>
              <cn cellml:units="dimensionless">2</cn>
            </apply>
            <ci>K_Nai</ci>
            <ci>K_Nao</ci>
            <ci>kappa_re1</ci>
            <ci>kappa_re3</ci>
            <ci>kappa_re4</ci>
            <ci>kappa_re5</ci>
            <ci>kappa_re6</ci>
            <ci>kappa_re7</ci>
            <ci>kappa_re8</ci>
          </apply>
          <apply>
            <times/>
            <ci>K_10</ci>
            <ci>K_11</ci>
            <ci>K_13</ci>
            <ci>K_14</ci>
            <ci>K_7</ci>
            <ci>K_8</ci>
            <ci>K_9</ci>
            <apply>
              <power/>
              <ci>K_HCO3o</ci>
              <cn cellml:units="dimensionless">2</cn>
            </apply>
            <ci>K_Nai</ci>
            <ci>K_Nao</ci>
            <ci>kappa_re2</ci>
            <ci>kappa_re3</ci>
            <ci>kappa_re4</ci>
            <ci>kappa_re5</ci>
            <ci>kappa_re6</ci>
            <ci>kappa_re7</ci>
            <ci>kappa_re8</ci>
          </apply>
        </apply>
      </apply>
      <apply>
        <eq/>
        <ci>P_12</ci>
        <apply>
          <plus/>
          <apply>
            <times/>
            <ci>K_10</ci>
            <ci>K_12</ci>
            <ci>K_13</ci>
            <ci>K_14</ci>
            <ci>K_7</ci>
            <ci>K_8</ci>
            <ci>K_9</ci>
            <ci>K_Cli</ci>
            <apply>
              <power/>
              <ci>K_HCO3i</ci>
              <cn cellml:units="dimensionless">2</cn>
            </apply>
            <ci>K_Nao</ci>
            <ci>kappa_re1</ci>
            <ci>kappa_re2</ci>
            <ci>kappa_re3</ci>
            <ci>kappa_re4</ci>
            <ci>kappa_re5</ci>
            <ci>kappa_re6</ci>
            <ci>kappa_re7</ci>
          </apply>
          <apply>
            <times/>
            <ci>K_10</ci>
            <ci>K_12</ci>
            <ci>K_13</ci>
            <ci>K_14</ci>
            <ci>K_7</ci>
            <ci>K_8</ci>
            <ci>K_9</ci>
            <ci>K_Cli</ci>
            <apply>
              <power/>
              <ci>K_HCO3i</ci>
              <cn cellml:units="dimensionless">2</cn>
            </apply>
            <ci>K_Nao</ci>
            <ci>kappa_re1</ci>
            <ci>kappa_re2</ci>
            <ci>kappa_re3</ci>
            <ci>kappa_re4</ci>
            <ci>kappa_re5</ci>
            <ci>kappa_re7</ci>
            <ci>kappa_re8</ci>
          </apply>
          <apply>
            <times/>
            <ci>K_10</ci>
            <ci>K_12</ci>
            <ci>K_13</ci>
            <ci>K_14</ci>
            <ci>K_7</ci>
            <ci>K_8</ci>
            <ci>K_9</ci>
            <ci>K_Cli</ci>
            <apply>
              <power/>
              <ci>K_HCO3i</ci>
              <cn cellml:units="dimensionless">2</cn>
            </apply>
            <ci>K_Nao</ci>
            <ci>kappa_re1</ci>
            <ci>kappa_re2</ci>
            <ci>kappa_re3</ci>
            <ci>kappa_re4</ci>
            <ci>kappa_re6</ci>
            <ci>kappa_re7</ci>
            <ci>kappa_re8</ci>
          </apply>
          <apply>
            <times/>
            <ci>K_10</ci>
            <ci>K_12</ci>
            <ci>K_13</ci>
            <ci>K_14</ci>
            <ci>K_7</ci>
            <ci>K_8</ci>
            <ci>K_9</ci>
            <ci>K_Cli</ci>
            <apply>
              <power/>
              <ci>K_HCO3i</ci>
              <cn cellml:units="dimensionless">2</cn>
            </apply>
            <ci>K_Nao</ci>
            <ci>kappa_re1</ci>
            <ci>kappa_re2</ci>
            <ci>kappa_re3</ci>
            <ci>kappa_re5</ci>
            <ci>kappa_re6</ci>
            <ci>kappa_re7</ci>
            <ci>kappa_re8</ci>
          </apply>
        </apply>
      </apply>
      <apply>
        <eq/>
        <ci>P_13</ci>
        <apply>
          <plus/>
          <apply>
            <times/>
            <ci>K_10</ci>
            <ci>K_12</ci>
            <ci>K_13</ci>
            <ci>K_14</ci>
            <ci>K_7</ci>
            <ci>K_8</ci>
            <ci>K_9</ci>
            <apply>
              <power/>
              <ci>K_HCO3i</ci>
              <cn cellml:units="dimensionless">2</cn>
            </apply>
            <ci>K_Nai</ci>
            <ci>K_Nao</ci>
            <ci>kappa_re1</ci>
            <ci>kappa_re2</ci>
            <ci>kappa_re3</ci>
            <ci>kappa_re4</ci>
            <ci>kappa_re5</ci>
            <ci>kappa_re6</ci>
            <ci>kappa_re8</ci>
          </apply>
          <apply>
            <times/>
            <ci>K_10</ci>
            <ci>K_12</ci>
            <ci>K_13</ci>
            <ci>K_14</ci>
            <ci>K_7</ci>
            <ci>K_8</ci>
            <ci>K_9</ci>
            <apply>
              <power/>
              <ci>K_HCO3i</ci>
              <cn cellml:units="dimensionless">2</cn>
            </apply>
            <ci>K_Nai</ci>
            <ci>K_Nao</ci>
            <ci>kappa_re1</ci>
            <ci>kappa_re3</ci>
            <ci>kappa_re4</ci>
            <ci>kappa_re5</ci>
            <ci>kappa_re6</ci>
            <ci>kappa_re7</ci>
            <ci>kappa_re8</ci>
          </apply>
          <apply>
            <times/>
            <ci>K_10</ci>
            <ci>K_12</ci>
            <ci>K_13</ci>
            <ci>K_14</ci>
            <ci>K_7</ci>
            <ci>K_8</ci>
            <ci>K_9</ci>
            <apply>
              <power/>
              <ci>K_HCO3i</ci>
              <cn cellml:units="dimensionless">2</cn>
            </apply>
            <ci>K_Nai</ci>
            <ci>K_Nao</ci>
            <ci>kappa_re2</ci>
            <ci>kappa_re3</ci>
            <ci>kappa_re4</ci>
            <ci>kappa_re5</ci>
            <ci>kappa_re6</ci>
            <ci>kappa_re7</ci>
            <ci>kappa_re8</ci>
          </apply>
        </apply>
      </apply>
      <apply>
        <eq/>
        <ci>P_14</ci>
        <apply>
          <times/>
          <ci>K_11</ci>
          <ci>K_12</ci>
          <ci>K_13</ci>
          <ci>K_14</ci>
          <ci>K_7</ci>
          <ci>K_8</ci>
          <ci>K_9</ci>
          <ci>K_Clo</ci>
          <apply>
            <power/>
            <ci>K_HCO3i</ci>
            <cn cellml:units="dimensionless">2</cn>
          </apply>
          <apply>
            <power/>
            <ci>K_HCO3o</ci>
            <cn cellml:units="dimensionless">2</cn>
          </apply>
          <ci>kappa_re1</ci>
          <ci>kappa_re2</ci>
          <ci>kappa_re4</ci>
          <ci>kappa_re5</ci>
          <ci>kappa_re6</ci>
          <ci>kappa_re7</ci>
          <ci>kappa_re8</ci>
        </apply>
      </apply>
      <apply>
        <eq/>
        <ci>P_15</ci>
        <apply>
          <plus/>
          <apply>
            <times/>
            <ci>K_11</ci>
            <ci>K_12</ci>
            <ci>K_13</ci>
            <ci>K_14</ci>
            <ci>K_7</ci>
            <ci>K_8</ci>
            <ci>K_9</ci>
            <apply>
              <power/>
              <ci>K_HCO3i</ci>
              <cn cellml:units="dimensionless">2</cn>
            </apply>
            <apply>
              <power/>
              <ci>K_HCO3o</ci>
              <cn cellml:units="dimensionless">2</cn>
            </apply>
            <ci>K_Nao</ci>
            <ci>kappa_re1</ci>
            <ci>kappa_re2</ci>
            <ci>kappa_re3</ci>
            <ci>kappa_re4</ci>
            <ci>kappa_re5</ci>
            <ci>kappa_re6</ci>
            <ci>kappa_re8</ci>
          </apply>
          <apply>
            <times/>
            <ci>K_11</ci>
            <ci>K_12</ci>
            <ci>K_13</ci>
            <ci>K_14</ci>
            <ci>K_7</ci>
            <ci>K_8</ci>
            <ci>K_9</ci>
            <apply>
              <power/>
              <ci>K_HCO3i</ci>
              <cn cellml:units="dimensionless">2</cn>
            </apply>
            <apply>
              <power/>
              <ci>K_HCO3o</ci>
              <cn cellml:units="dimensionless">2</cn>
            </apply>
            <ci>K_Nao</ci>
            <ci>kappa_re1</ci>
            <ci>kappa_re3</ci>
            <ci>kappa_re4</ci>
            <ci>kappa_re5</ci>
            <ci>kappa_re6</ci>
            <ci>kappa_re7</ci>
            <ci>kappa_re8</ci>
          </apply>
          <apply>
            <times/>
            <ci>K_11</ci>
            <ci>K_12</ci>
            <ci>K_13</ci>
            <ci>K_14</ci>
            <ci>K_7</ci>
            <ci>K_8</ci>
            <ci>K_9</ci>
            <apply>
              <power/>
              <ci>K_HCO3i</ci>
              <cn cellml:units="dimensionless">2</cn>
            </apply>
            <apply>
              <power/>
              <ci>K_HCO3o</ci>
              <cn cellml:units="dimensionless">2</cn>
            </apply>
            <ci>K_Nao</ci>
            <ci>kappa_re2</ci>
            <ci>kappa_re3</ci>
            <ci>kappa_re4</ci>
            <ci>kappa_re5</ci>
            <ci>kappa_re6</ci>
            <ci>kappa_re7</ci>
            <ci>kappa_re8</ci>
          </apply>
        </apply>
      </apply>
      <apply>
        <eq/>
        <ci>P_16</ci>
        <apply>
          <plus/>
          <apply>
            <times/>
            <ci>K_10</ci>
            <ci>K_11</ci>
            <ci>K_12</ci>
            <ci>K_13</ci>
            <ci>K_14</ci>
            <ci>K_7</ci>
            <ci>K_9</ci>
            <ci>K_Cli</ci>
            <ci>K_Clo</ci>
            <apply>
              <power/>
              <ci>K_HCO3i</ci>
              <cn cellml:units="dimensionless">2</cn>
            </apply>
            <apply>
              <power/>
              <ci>K_HCO3o</ci>
              <cn cellml:units="dimensionless">2</cn>
            </apply>
            <ci>kappa_re1</ci>
            <ci>kappa_re2</ci>
            <ci>kappa_re4</ci>
            <ci>kappa_re5</ci>
            <ci>kappa_re6</ci>
            <ci>kappa_re7</ci>
            <ci>kappa_re8</ci>
          </apply>
          <apply>
            <times/>
            <ci>K_10</ci>
            <ci>K_11</ci>
            <ci>K_12</ci>
            <ci>K_13</ci>
            <ci>K_14</ci>
            <ci>K_8</ci>
            <ci>K_9</ci>
            <ci>K_Cli</ci>
            <ci>K_Clo</ci>
            <apply>
              <power/>
              <ci>K_HCO3i</ci>
              <cn cellml:units="dimensionless">2</cn>
            </apply>
            <apply>
              <power/>
              <ci>K_HCO3o</ci>
              <cn cellml:units="dimensionless">2</cn>
            </apply>
            <ci>kappa_re1</ci>
            <ci>kappa_re2</ci>
            <ci>kappa_re4</ci>
            <ci>kappa_re5</ci>
            <ci>kappa_re6</ci>
            <ci>kappa_re7</ci>
            <ci>kappa_re8</ci>
          </apply>
        </apply>
      </apply>
      <apply>
        <eq/>
        <ci>P_17</ci>
        <apply>
          <plus/>
          <apply>
            <times/>
            <ci>K_10</ci>
            <ci>K_11</ci>
            <ci>K_12</ci>
            <ci>K_13</ci>
            <ci>K_14</ci>
            <ci>K_7</ci>
            <ci>K_9</ci>
            <ci>K_Cli</ci>
            <apply>
              <power/>
              <ci>K_HCO3i</ci>
              <cn cellml:units="dimensionless">2</cn>
            </apply>
            <apply>
              <power/>
              <ci>K_HCO3o</ci>
              <cn cellml:units="dimensionless">2</cn>
            </apply>
            <ci>K_Nao</ci>
            <ci>kappa_re1</ci>
            <ci>kappa_re2</ci>
            <ci>kappa_re3</ci>
            <ci>kappa_re4</ci>
            <ci>kappa_re5</ci>
            <ci>kappa_re6</ci>
            <ci>kappa_re8</ci>
          </apply>
          <apply>
            <times/>
            <ci>K_10</ci>
            <ci>K_11</ci>
            <ci>K_12</ci>
            <ci>K_13</ci>
            <ci>K_14</ci>
            <ci>K_7</ci>
            <ci>K_9</ci>
            <ci>K_Cli</ci>
            <apply>
              <power/>
              <ci>K_HCO3i</ci>
              <cn cellml:units="dimensionless">2</cn>
            </apply>
            <apply>
              <power/>
              <ci>K_HCO3o</ci>
              <cn cellml:units="dimensionless">2</cn>
            </apply>
            <ci>K_Nao</ci>
            <ci>kappa_re2</ci>
            <ci>kappa_re3</ci>
            <ci>kappa_re4</ci>
            <ci>kappa_re5</ci>
            <ci>kappa_re6</ci>
            <ci>kappa_re7</ci>
            <ci>kappa_re8</ci>
          </apply>
          <apply>
            <times/>
            <ci>K_10</ci>
            <ci>K_11</ci>
            <ci>K_12</ci>
            <ci>K_13</ci>
            <ci>K_14</ci>
            <ci>K_8</ci>
            <ci>K_9</ci>
            <ci>K_Cli</ci>
            <apply>
              <power/>
              <ci>K_HCO3i</ci>
              <cn cellml:units="dimensionless">2</cn>
            </apply>
            <apply>
              <power/>
              <ci>K_HCO3o</ci>
              <cn cellml:units="dimensionless">2</cn>
            </apply>
            <ci>K_Nao</ci>
            <ci>kappa_re2</ci>
            <ci>kappa_re3</ci>
            <ci>kappa_re4</ci>
            <ci>kappa_re5</ci>
            <ci>kappa_re6</ci>
            <ci>kappa_re7</ci>
            <ci>kappa_re8</ci>
          </apply>
          <apply>
            <times/>
            <ci>K_10</ci>
            <ci>K_11</ci>
            <ci>K_12</ci>
            <ci>K_13</ci>
            <ci>K_7</ci>
            <ci>K_8</ci>
            <ci>K_9</ci>
            <ci>K_Cli</ci>
            <apply>
              <power/>
              <ci>K_HCO3i</ci>
              <cn cellml:units="dimensionless">2</cn>
            </apply>
            <apply>
              <power/>
              <ci>K_HCO3o</ci>
              <cn cellml:units="dimensionless">2</cn>
            </apply>
            <ci>K_Nao</ci>
            <ci>kappa_re1</ci>
            <ci>kappa_re2</ci>
            <ci>kappa_re3</ci>
            <ci>kappa_re4</ci>
            <ci>kappa_re5</ci>
            <ci>kappa_re7</ci>
            <ci>kappa_re8</ci>
          </apply>
          <apply>
            <times/>
            <ci>K_10</ci>
            <ci>K_11</ci>
            <ci>K_12</ci>
            <ci>K_13</ci>
            <ci>K_7</ci>
            <ci>K_8</ci>
            <ci>K_9</ci>
            <ci>K_Cli</ci>
            <apply>
              <power/>
              <ci>K_HCO3i</ci>
              <cn cellml:units="dimensionless">2</cn>
            </apply>
            <apply>
              <power/>
              <ci>K_HCO3o</ci>
              <cn cellml:units="dimensionless">2</cn>
            </apply>
            <ci>K_Nao</ci>
            <ci>kappa_re1</ci>
            <ci>kappa_re2</ci>
            <ci>kappa_re3</ci>
            <ci>kappa_re5</ci>
            <ci>kappa_re6</ci>
            <ci>kappa_re7</ci>
            <ci>kappa_re8</ci>
          </apply>
          <apply>
            <times/>
            <ci>K_10</ci>
            <ci>K_11</ci>
            <ci>K_12</ci>
            <ci>K_14</ci>
            <ci>K_7</ci>
            <ci>K_8</ci>
            <ci>K_9</ci>
            <ci>K_Cli</ci>
            <apply>
              <power/>
              <ci>K_HCO3i</ci>
              <cn cellml:units="dimensionless">2</cn>
            </apply>
            <apply>
              <power/>
              <ci>K_HCO3o</ci>
              <cn cellml:units="dimensionless">2</cn>
            </apply>
            <ci>K_Nao</ci>
            <ci>kappa_re1</ci>
            <ci>kappa_re2</ci>
            <ci>kappa_re3</ci>
            <ci>kappa_re4</ci>
            <ci>kappa_re5</ci>
            <ci>kappa_re6</ci>
            <ci>kappa_re7</ci>
          </apply>
          <apply>
            <times/>
            <ci>K_10</ci>
            <ci>K_11</ci>
            <ci>K_12</ci>
            <ci>K_14</ci>
            <ci>K_7</ci>
            <ci>K_8</ci>
            <ci>K_9</ci>
            <ci>K_Cli</ci>
            <apply>
              <power/>
              <ci>K_HCO3i</ci>
              <cn cellml:units="dimensionless">2</cn>
            </apply>
            <apply>
              <power/>
              <ci>K_HCO3o</ci>
              <cn cellml:units="dimensionless">2</cn>
            </apply>
            <ci>K_Nao</ci>
            <ci>kappa_re1</ci>
            <ci>kappa_re2</ci>
            <ci>kappa_re3</ci>
            <ci>kappa_re4</ci>
            <ci>kappa_re5</ci>
            <ci>kappa_re7</ci>
            <ci>kappa_re8</ci>
          </apply>
          <apply>
            <times/>
            <ci>K_10</ci>
            <ci>K_11</ci>
            <ci>K_12</ci>
            <ci>K_14</ci>
            <ci>K_7</ci>
            <ci>K_8</ci>
            <ci>K_9</ci>
            <ci>K_Cli</ci>
            <apply>
              <power/>
              <ci>K_HCO3i</ci>
              <cn cellml:units="dimensionless">2</cn>
            </apply>
            <apply>
              <power/>
              <ci>K_HCO3o</ci>
              <cn cellml:units="dimensionless">2</cn>
            </apply>
            <ci>K_Nao</ci>
            <ci>kappa_re1</ci>
            <ci>kappa_re2</ci>
            <ci>kappa_re3</ci>
            <ci>kappa_re5</ci>
            <ci>kappa_re6</ci>
            <ci>kappa_re7</ci>
            <ci>kappa_re8</ci>
          </apply>
        </apply>
      </apply>
      <apply>
        <eq/>
        <ci>P_18</ci>
        <apply>
          <plus/>
          <apply>
            <times/>
            <ci>K_10</ci>
            <ci>K_11</ci>
            <ci>K_12</ci>
            <ci>K_13</ci>
            <ci>K_7</ci>
            <ci>K_8</ci>
            <ci>K_9</ci>
            <ci>K_Clo</ci>
            <apply>
              <power/>
              <ci>K_HCO3i</ci>
              <cn cellml:units="dimensionless">2</cn>
            </apply>
            <apply>
              <power/>
              <ci>K_HCO3o</ci>
              <cn cellml:units="dimensionless">2</cn>
            </apply>
            <ci>K_Nai</ci>
            <ci>kappa_re1</ci>
            <ci>kappa_re2</ci>
            <ci>kappa_re4</ci>
            <ci>kappa_re5</ci>
            <ci>kappa_re6</ci>
            <ci>kappa_re7</ci>
            <ci>kappa_re8</ci>
          </apply>
          <apply>
            <times/>
            <ci>K_10</ci>
            <ci>K_11</ci>
            <ci>K_12</ci>
            <ci>K_14</ci>
            <ci>K_7</ci>
            <ci>K_8</ci>
            <ci>K_9</ci>
            <ci>K_Clo</ci>
            <apply>
              <power/>
              <ci>K_HCO3i</ci>
              <cn cellml:units="dimensionless">2</cn>
            </apply>
            <apply>
              <power/>
              <ci>K_HCO3o</ci>
              <cn cellml:units="dimensionless">2</cn>
            </apply>
            <ci>K_Nai</ci>
            <ci>kappa_re1</ci>
            <ci>kappa_re2</ci>
            <ci>kappa_re4</ci>
            <ci>kappa_re5</ci>
            <ci>kappa_re6</ci>
            <ci>kappa_re7</ci>
            <ci>kappa_re8</ci>
          </apply>
        </apply>
      </apply>
      <apply>
        <eq/>
        <ci>P_19</ci>
        <apply>
          <plus/>
          <apply>
            <times/>
            <ci>K_10</ci>
            <ci>K_11</ci>
            <ci>K_12</ci>
            <ci>K_13</ci>
            <ci>K_7</ci>
            <ci>K_8</ci>
            <ci>K_9</ci>
            <apply>
              <power/>
              <ci>K_HCO3i</ci>
              <cn cellml:units="dimensionless">2</cn>
            </apply>
            <apply>
              <power/>
              <ci>K_HCO3o</ci>
              <cn cellml:units="dimensionless">2</cn>
            </apply>
            <ci>K_Nai</ci>
            <ci>K_Nao</ci>
            <ci>kappa_re1</ci>
            <ci>kappa_re2</ci>
            <ci>kappa_re3</ci>
            <ci>kappa_re4</ci>
            <ci>kappa_re5</ci>
            <ci>kappa_re6</ci>
            <ci>kappa_re8</ci>
          </apply>
          <apply>
            <times/>
            <ci>K_10</ci>
            <ci>K_11</ci>
            <ci>K_12</ci>
            <ci>K_13</ci>
            <ci>K_7</ci>
            <ci>K_8</ci>
            <ci>K_9</ci>
            <apply>
              <power/>
              <ci>K_HCO3i</ci>
              <cn cellml:units="dimensionless">2</cn>
            </apply>
            <apply>
              <power/>
              <ci>K_HCO3o</ci>
              <cn cellml:units="dimensionless">2</cn>
            </apply>
            <ci>K_Nai</ci>
            <ci>K_Nao</ci>
            <ci>kappa_re1</ci>
            <ci>kappa_re3</ci>
            <ci>kappa_re4</ci>
            <ci>kappa_re5</ci>
            <ci>kappa_re6</ci>
            <ci>kappa_re7</ci>
            <ci>kappa_re8</ci>
          </apply>
          <apply>
            <times/>
            <ci>K_10</ci>
            <ci>K_11</ci>
            <ci>K_12</ci>
            <ci>K_13</ci>
            <ci>K_7</ci>
            <ci>K_8</ci>
            <ci>K_9</ci>
            <apply>
              <power/>
              <ci>K_HCO3i</ci>
              <cn cellml:units="dimensionless">2</cn>
            </apply>
            <apply>
              <power/>
              <ci>K_HCO3o</ci>
              <cn cellml:units="dimensionless">2</cn>
            </apply>
            <ci>K_Nai</ci>
            <ci>K_Nao</ci>
            <ci>kappa_re2</ci>
            <ci>kappa_re3</ci>
            <ci>kappa_re4</ci>
            <ci>kappa_re5</ci>
            <ci>kappa_re6</ci>
            <ci>kappa_re7</ci>
            <ci>kappa_re8</ci>
          </apply>
          <apply>
            <times/>
            <ci>K_10</ci>
            <ci>K_11</ci>
            <ci>K_12</ci>
            <ci>K_14</ci>
            <ci>K_7</ci>
            <ci>K_8</ci>
            <ci>K_9</ci>
            <apply>
              <power/>
              <ci>K_HCO3i</ci>
              <cn cellml:units="dimensionless">2</cn>
            </apply>
            <apply>
              <power/>
              <ci>K_HCO3o</ci>
              <cn cellml:units="dimensionless">2</cn>
            </apply>
            <ci>K_Nai</ci>
            <ci>K_Nao</ci>
            <ci>kappa_re1</ci>
            <ci>kappa_re2</ci>
            <ci>kappa_re3</ci>
            <ci>kappa_re4</ci>
            <ci>kappa_re5</ci>
            <ci>kappa_re6</ci>
            <ci>kappa_re8</ci>
          </apply>
          <apply>
            <times/>
            <ci>K_10</ci>
            <ci>K_11</ci>
            <ci>K_12</ci>
            <ci>K_14</ci>
            <ci>K_7</ci>
            <ci>K_8</ci>
            <ci>K_9</ci>
            <apply>
              <power/>
              <ci>K_HCO3i</ci>
              <cn cellml:units="dimensionless">2</cn>
            </apply>
            <apply>
              <power/>
              <ci>K_HCO3o</ci>
              <cn cellml:units="dimensionless">2</cn>
            </apply>
            <ci>K_Nai</ci>
            <ci>K_Nao</ci>
            <ci>kappa_re1</ci>
            <ci>kappa_re3</ci>
            <ci>kappa_re4</ci>
            <ci>kappa_re5</ci>
            <ci>kappa_re6</ci>
            <ci>kappa_re7</ci>
            <ci>kappa_re8</ci>
          </apply>
          <apply>
            <times/>
            <ci>K_10</ci>
            <ci>K_11</ci>
            <ci>K_12</ci>
            <ci>K_14</ci>
            <ci>K_7</ci>
            <ci>K_8</ci>
            <ci>K_9</ci>
            <apply>
              <power/>
              <ci>K_HCO3i</ci>
              <cn cellml:units="dimensionless">2</cn>
            </apply>
            <apply>
              <power/>
              <ci>K_HCO3o</ci>
              <cn cellml:units="dimensionless">2</cn>
            </apply>
            <ci>K_Nai</ci>
            <ci>K_Nao</ci>
            <ci>kappa_re2</ci>
            <ci>kappa_re3</ci>
            <ci>kappa_re4</ci>
            <ci>kappa_re5</ci>
            <ci>kappa_re6</ci>
            <ci>kappa_re7</ci>
            <ci>kappa_re8</ci>
          </apply>
        </apply>
      </apply>
      <apply>
        <eq/>
        <ci>E</ci>
        <apply>
          <plus/>
          <ci>q_10_init</ci>
          <ci>q_11_init</ci>
          <ci>q_12_init</ci>
          <ci>q_13_init</ci>
          <ci>q_14_init</ci>
          <ci>q_7_init</ci>
          <ci>q_8_init</ci>
          <ci>q_9_init</ci>
        </apply>
      </apply>
    </math>
  </component>
</model>
