def model SLCT7_BG_ss_test as
  def import using "../units_BG.cellml" for
    unit per_fmol3_sec7 using unit per_fmol3_sec7;
    unit per_fmol4_sec7 using unit per_fmol4_sec7;
    unit per_fmol2_sec7 using unit per_fmol2_sec7;
    unit per_fmol4_sec8 using unit per_fmol4_sec8;
    unit per_fmol_sec7 using unit per_fmol_sec7;
    unit per_fmol6_sec7 using unit per_fmol6_sec7;
    unit fmol using unit fmol;
    unit fmol_per_sec using unit fmol_per_sec;
  enddef;
  def import using "../units_BG.cellml" for
    unit C_per_mol using unit C_per_mol;
    unit per_fmol using unit per_fmol;
    unit J_per_K_per_mol using unit J_per_K_per_mol;
  enddef;

  def comp SLCT7_BG_ss_test as
    var v_ss: fmol_per_sec {interface: public_and_private};
    var q_Cli: fmol {interface: public_and_private};
    var q_Nao: fmol {interface: public_and_private};
    var q_HCO3o: fmol {interface: public_and_private};
    var q_Clo: fmol {interface: public_and_private};
    var q_Nai: fmol {interface: public_and_private};
    var q_HCO3i: fmol {interface: public_and_private};
  enddef;

  def comp SLCT7_ss as
    var P_0: per_fmol4_sec8 {interface: public};
    var P_1: per_fmol4_sec8 {interface: public};
    var P_2: per_fmol_sec7 {interface: public};
    var P_3: per_fmol_sec7 {interface: public};
    var P_4: per_fmol3_sec7 {interface: public};
    var P_5: per_fmol3_sec7 {interface: public};
    var P_6: per_fmol3_sec7 {interface: public};
    var P_7: per_fmol2_sec7 {interface: public};
    var P_8: per_fmol2_sec7 {interface: public};
    var P_9: per_fmol2_sec7 {interface: public};
    var P_10: per_fmol3_sec7 {interface: public};
    var P_11: per_fmol3_sec7 {interface: public};
    var P_12: per_fmol3_sec7 {interface: public};
    var P_13: per_fmol4_sec7 {interface: public};
    var P_14: per_fmol4_sec7 {interface: public};
    var P_15: per_fmol4_sec7 {interface: public};
    var P_16: per_fmol4_sec7 {interface: public};
    var P_17: per_fmol4_sec7 {interface: public};
    var P_18: per_fmol4_sec7 {interface: public};
    var P_19: per_fmol4_sec7 {interface: public};
    var P_20: per_fmol4_sec7 {interface: public};
    var P_21: per_fmol6_sec7 {interface: public};
    var P_22: per_fmol6_sec7 {interface: public};
    var P_23: per_fmol6_sec7 {interface: public};
    var E: fmol {interface: public};
    var q_Cli: fmol {interface: public};
    var q_Nao: fmol {interface: public};
    var q_HCO3o: fmol {interface: public};
    var q_Clo: fmol {interface: public};
    var q_Nai: fmol {interface: public};
    var q_HCO3i: fmol {interface: public};
    var v_ss: fmol_per_sec {interface: public};
    v_ss = E*(P_0*q_Cli*sqr(q_HCO3o)*q_Nao-P_1*q_Clo*sqr(q_HCO3i)*q_Nai)/(P_10*q_Clo*sqr(q_HCO3i)+P_11*q_Clo*sqr(q_HCO3o)+P_12*sqr(q_HCO3o)*q_Nao+P_13*q_Cli*q_Clo*sqr(q_HCO3i)+P_14*q_Cli*q_Clo*sqr(q_HCO3o)+P_15*q_Cli*sqr(q_HCO3o)*q_Nao+P_16*q_Clo*sqr(q_HCO3i)*q_Nai+P_17*q_Clo*sqr(q_HCO3o)*q_Nai+P_18*sqr(q_HCO3o)*q_Nai*q_Nao+P_19*q_Cli*sqr(q_HCO3i)*q_Nao+P_2*q_Cli+P_20*sqr(q_HCO3i)*q_Nai*q_Nao+P_21*q_Cli*sqr(q_HCO3i)*sqr(q_HCO3o)*q_Nao+P_22*q_Clo*sqr(q_HCO3i)*sqr(q_HCO3o)*q_Nai+P_23*sqr(q_HCO3i)*sqr(q_HCO3o)*q_Nai*q_Nao+P_3*q_Clo+P_4*q_Cli*sqr(q_HCO3i)+P_5*q_Cli*sqr(q_HCO3o)+P_6*sqr(q_HCO3i)*q_Nai+P_7*q_Cli*q_Clo+P_8*q_Clo*q_Nai+P_9*q_Cli*q_Nao);
  enddef;

  def comp SLCT7_BG_param as
    var K_Nao: per_fmol {init: 1, interface: public};
    var K_Nai: per_fmol {init: 1, interface: public};
    var K_HCO3o: per_fmol {init: 1, interface: public};
    var K_HCO3i: per_fmol {init: 1, interface: public};
    var K_Cli: per_fmol {init: 1, interface: public};
    var K_Clo: per_fmol {init: 1, interface: public};
    var K_7: per_fmol {init: 1, interface: public};
    var q_7_init: fmol {init: 1, interface: public};
    var K_8: per_fmol {init: 1, interface: public};
    var q_8_init: fmol {init: 1, interface: public};
    var K_9: per_fmol {init: 1, interface: public};
    var q_9_init: fmol {init: 1, interface: public};
    var K_10: per_fmol {init: 1, interface: public};
    var q_10_init: fmol {init: 1, interface: public};
    var K_11: per_fmol {init: 1, interface: public};
    var q_11_init: fmol {init: 1, interface: public};
    var K_12: per_fmol {init: 1, interface: public};
    var q_12_init: fmol {init: 1, interface: public};
    var K_13: per_fmol {init: 1, interface: public};
    var q_13_init: fmol {init: 1, interface: public};
    var K_14: per_fmol {init: 1, interface: public};
    var q_14_init: fmol {init: 1, interface: public};
    var kappa_re1: fmol_per_sec {init: 1, interface: public};
    var kappa_re2: fmol_per_sec {init: 1, interface: public};
    var kappa_re3: fmol_per_sec {init: 1, interface: public};
    var kappa_re4: fmol_per_sec {init: 1, interface: public};
    var kappa_re5: fmol_per_sec {init: 1, interface: public};
    var kappa_re6: fmol_per_sec {init: 1, interface: public};
    var kappa_re7: fmol_per_sec {init: 1, interface: public};
    var kappa_re8: fmol_per_sec {init: 1, interface: public};
    var F: C_per_mol {init: 96485, interface: public};
    var R: J_per_K_per_mol {init: 8.31, interface: public};
    var T: kelvin {init: 293, interface: public};
  enddef;

  def comp SLCT7_BG_ss as
    var P_0: per_fmol4_sec8 {interface: public};
    var P_1: per_fmol4_sec8 {interface: public};
    var P_2: per_fmol_sec7 {interface: public};
    var P_3: per_fmol_sec7 {interface: public};
    var P_4: per_fmol3_sec7 {interface: public};
    var P_5: per_fmol3_sec7 {interface: public};
    var P_6: per_fmol3_sec7 {interface: public};
    var P_7: per_fmol2_sec7 {interface: public};
    var P_8: per_fmol2_sec7 {interface: public};
    var P_9: per_fmol2_sec7 {interface: public};
    var P_10: per_fmol3_sec7 {interface: public};
    var P_11: per_fmol3_sec7 {interface: public};
    var P_12: per_fmol3_sec7 {interface: public};
    var P_13: per_fmol4_sec7 {interface: public};
    var P_14: per_fmol4_sec7 {interface: public};
    var P_15: per_fmol4_sec7 {interface: public};
    var P_16: per_fmol4_sec7 {interface: public};
    var P_17: per_fmol4_sec7 {interface: public};
    var P_18: per_fmol4_sec7 {interface: public};
    var P_19: per_fmol4_sec7 {interface: public};
    var P_20: per_fmol4_sec7 {interface: public};
    var P_21: per_fmol6_sec7 {interface: public};
    var P_22: per_fmol6_sec7 {interface: public};
    var P_23: per_fmol6_sec7 {interface: public};
    var E: fmol {interface: public};
    var K_Nao: per_fmol {interface: public};
    var K_Nai: per_fmol {interface: public};
    var K_HCO3o: per_fmol {interface: public};
    var K_HCO3i: per_fmol {interface: public};
    var K_Cli: per_fmol {interface: public};
    var K_Clo: per_fmol {interface: public};
    var K_7: per_fmol {interface: public};
    var q_7_init: fmol {interface: public};
    var K_8: per_fmol {interface: public};
    var q_8_init: fmol {interface: public};
    var K_9: per_fmol {interface: public};
    var q_9_init: fmol {interface: public};
    var K_10: per_fmol {interface: public};
    var q_10_init: fmol {interface: public};
    var K_11: per_fmol {interface: public};
    var q_11_init: fmol {interface: public};
    var K_12: per_fmol {interface: public};
    var q_12_init: fmol {interface: public};
    var K_13: per_fmol {interface: public};
    var q_13_init: fmol {interface: public};
    var K_14: per_fmol {interface: public};
    var q_14_init: fmol {interface: public};
    var kappa_re1: fmol_per_sec {interface: public};
    var kappa_re2: fmol_per_sec {interface: public};
    var kappa_re3: fmol_per_sec {interface: public};
    var kappa_re4: fmol_per_sec {interface: public};
    var kappa_re5: fmol_per_sec {interface: public};
    var kappa_re6: fmol_per_sec {interface: public};
    var kappa_re7: fmol_per_sec {interface: public};
    var kappa_re8: fmol_per_sec {interface: public};
    var F: C_per_mol {interface: public};
    var R: J_per_K_per_mol {interface: public};
    var T: kelvin {interface: public};
    P_0 = K_10*K_11*K_12*K_13*K_14*K_7*K_8*K_9*K_Cli*sqr(K_HCO3o)*K_Nao*kappa_re1*kappa_re2*kappa_re3*kappa_re4*kappa_re5*kappa_re6*kappa_re7*kappa_re8;
    P_1 = K_10*K_11*K_12*K_13*K_14*K_7*K_8*K_9*K_Clo*sqr(K_HCO3i)*K_Nai*kappa_re1*kappa_re2*kappa_re3*kappa_re4*kappa_re5*kappa_re6*kappa_re7*kappa_re8;
    P_2 = K_10*K_11*K_12*K_13*K_14*K_7*K_8*K_Cli*kappa_re1*kappa_re2*kappa_re3*kappa_re4*kappa_re5*kappa_re6*kappa_re7+K_10*K_11*K_12*K_13*K_14*K_7*K_8*K_Cli*kappa_re1*kappa_re2*kappa_re3*kappa_re4*kappa_re5*kappa_re7*kappa_re8+K_10*K_11*K_12*K_13*K_14*K_7*K_8*K_Cli*kappa_re1*kappa_re2*kappa_re3*kappa_re4*kappa_re6*kappa_re7*kappa_re8;
    P_3 = K_11*K_12*K_13*K_14*K_7*K_8*K_9*K_Clo*kappa_re1*kappa_re2*kappa_re3*kappa_re4*kappa_re5*kappa_re6*kappa_re7+K_11*K_12*K_13*K_14*K_7*K_8*K_9*K_Clo*kappa_re1*kappa_re2*kappa_re3*kappa_re4*kappa_re5*kappa_re7*kappa_re8+K_11*K_12*K_13*K_14*K_7*K_8*K_9*K_Clo*kappa_re1*kappa_re2*kappa_re3*kappa_re4*kappa_re6*kappa_re7*kappa_re8;
    P_4 = K_10*K_11*K_12*K_13*K_14*K_7*K_8*K_Cli*sqr(K_HCO3i)*kappa_re1*kappa_re2*kappa_re3*kappa_re5*kappa_re6*kappa_re7*kappa_re8;
    P_5 = K_10*K_11*K_12*K_13*K_14*K_7*K_8*K_Cli*sqr(K_HCO3o)*kappa_re1*kappa_re2*kappa_re4*kappa_re5*kappa_re6*kappa_re7*kappa_re8;
    P_6 = K_10*K_11*K_12*K_13*K_14*K_7*K_8*sqr(K_HCO3i)*K_Nai*kappa_re1*kappa_re2*kappa_re3*kappa_re4*kappa_re5*kappa_re6*kappa_re8+K_10*K_11*K_12*K_13*K_14*K_7*K_8*sqr(K_HCO3i)*K_Nai*kappa_re1*kappa_re3*kappa_re4*kappa_re5*kappa_re6*kappa_re7*kappa_re8+K_10*K_11*K_12*K_13*K_14*K_7*K_8*sqr(K_HCO3i)*K_Nai*kappa_re2*kappa_re3*kappa_re4*kappa_re5*kappa_re6*kappa_re7*kappa_re8;
    P_7 = K_10*K_11*K_12*K_13*K_14*K_7*K_9*K_Cli*K_Clo*kappa_re1*kappa_re2*kappa_re3*kappa_re4*kappa_re5*kappa_re6*kappa_re7+K_10*K_11*K_12*K_13*K_14*K_7*K_9*K_Cli*K_Clo*kappa_re1*kappa_re2*kappa_re3*kappa_re4*kappa_re5*kappa_re7*kappa_re8+K_10*K_11*K_12*K_13*K_14*K_7*K_9*K_Cli*K_Clo*kappa_re1*kappa_re2*kappa_re3*kappa_re4*kappa_re6*kappa_re7*kappa_re8+K_10*K_11*K_12*K_13*K_14*K_8*K_9*K_Cli*K_Clo*kappa_re1*kappa_re2*kappa_re3*kappa_re4*kappa_re5*kappa_re6*kappa_re7+K_10*K_11*K_12*K_13*K_14*K_8*K_9*K_Cli*K_Clo*kappa_re1*kappa_re2*kappa_re3*kappa_re4*kappa_re5*kappa_re7*kappa_re8+K_10*K_11*K_12*K_13*K_14*K_8*K_9*K_Cli*K_Clo*kappa_re1*kappa_re2*kappa_re3*kappa_re4*kappa_re6*kappa_re7*kappa_re8;
    P_8 = K_10*K_11*K_13*K_14*K_7*K_8*K_9*K_Clo*K_Nai*kappa_re1*kappa_re2*kappa_re3*kappa_re4*kappa_re5*kappa_re6*kappa_re7+K_10*K_11*K_13*K_14*K_7*K_8*K_9*K_Clo*K_Nai*kappa_re1*kappa_re2*kappa_re3*kappa_re4*kappa_re5*kappa_re7*kappa_re8+K_10*K_11*K_13*K_14*K_7*K_8*K_9*K_Clo*K_Nai*kappa_re1*kappa_re2*kappa_re3*kappa_re4*kappa_re6*kappa_re7*kappa_re8;
    P_9 = K_10*K_12*K_13*K_14*K_7*K_8*K_9*K_Cli*K_Nao*kappa_re1*kappa_re2*kappa_re3*kappa_re4*kappa_re5*kappa_re6*kappa_re7+K_10*K_12*K_13*K_14*K_7*K_8*K_9*K_Cli*K_Nao*kappa_re1*kappa_re2*kappa_re3*kappa_re4*kappa_re5*kappa_re7*kappa_re8+K_10*K_12*K_13*K_14*K_7*K_8*K_9*K_Cli*K_Nao*kappa_re1*kappa_re2*kappa_re3*kappa_re4*kappa_re6*kappa_re7*kappa_re8;
    P_10 = K_11*K_12*K_13*K_14*K_7*K_8*K_9*K_Clo*sqr(K_HCO3i)*kappa_re1*kappa_re2*kappa_re3*kappa_re5*kappa_re6*kappa_re7*kappa_re8;
    P_11 = K_11*K_12*K_13*K_14*K_7*K_8*K_9*K_Clo*sqr(K_HCO3o)*kappa_re1*kappa_re2*kappa_re4*kappa_re5*kappa_re6*kappa_re7*kappa_re8;
    P_12 = K_11*K_12*K_13*K_14*K_7*K_8*K_9*sqr(K_HCO3o)*K_Nao*kappa_re1*kappa_re2*kappa_re3*kappa_re4*kappa_re5*kappa_re6*kappa_re8+K_11*K_12*K_13*K_14*K_7*K_8*K_9*sqr(K_HCO3o)*K_Nao*kappa_re1*kappa_re3*kappa_re4*kappa_re5*kappa_re6*kappa_re7*kappa_re8+K_11*K_12*K_13*K_14*K_7*K_8*K_9*sqr(K_HCO3o)*K_Nao*kappa_re2*kappa_re3*kappa_re4*kappa_re5*kappa_re6*kappa_re7*kappa_re8;
    P_13 = K_10*K_11*K_12*K_13*K_14*K_7*K_9*K_Cli*K_Clo*sqr(K_HCO3i)*kappa_re1*kappa_re2*kappa_re3*kappa_re5*kappa_re6*kappa_re7*kappa_re8+K_10*K_11*K_12*K_13*K_14*K_8*K_9*K_Cli*K_Clo*sqr(K_HCO3i)*kappa_re1*kappa_re2*kappa_re3*kappa_re5*kappa_re6*kappa_re7*kappa_re8;
    P_14 = K_10*K_11*K_12*K_13*K_14*K_7*K_9*K_Cli*K_Clo*sqr(K_HCO3o)*kappa_re1*kappa_re2*kappa_re4*kappa_re5*kappa_re6*kappa_re7*kappa_re8+K_10*K_11*K_12*K_13*K_14*K_8*K_9*K_Cli*K_Clo*sqr(K_HCO3o)*kappa_re1*kappa_re2*kappa_re4*kappa_re5*kappa_re6*kappa_re7*kappa_re8;
    P_15 = K_10*K_11*K_12*K_13*K_14*K_7*K_9*K_Cli*sqr(K_HCO3o)*K_Nao*kappa_re1*kappa_re2*kappa_re3*kappa_re4*kappa_re5*kappa_re6*kappa_re8+K_10*K_11*K_12*K_13*K_14*K_7*K_9*K_Cli*sqr(K_HCO3o)*K_Nao*kappa_re2*kappa_re3*kappa_re4*kappa_re5*kappa_re6*kappa_re7*kappa_re8+K_10*K_11*K_12*K_13*K_14*K_8*K_9*K_Cli*sqr(K_HCO3o)*K_Nao*kappa_re2*kappa_re3*kappa_re4*kappa_re5*kappa_re6*kappa_re7*kappa_re8+K_10*K_11*K_12*K_13*K_7*K_8*K_9*K_Cli*sqr(K_HCO3o)*K_Nao*kappa_re1*kappa_re2*kappa_re3*kappa_re4*kappa_re5*kappa_re7*kappa_re8+K_10*K_11*K_12*K_14*K_7*K_8*K_9*K_Cli*sqr(K_HCO3o)*K_Nao*kappa_re1*kappa_re2*kappa_re3*kappa_re4*kappa_re5*kappa_re6*kappa_re7+K_10*K_11*K_12*K_14*K_7*K_8*K_9*K_Cli*sqr(K_HCO3o)*K_Nao*kappa_re1*kappa_re2*kappa_re3*kappa_re4*kappa_re5*kappa_re7*kappa_re8+K_10*K_11*K_13*K_14*K_7*K_8*K_9*K_Cli*sqr(K_HCO3o)*K_Nao*kappa_re1*kappa_re2*kappa_re3*kappa_re5*kappa_re6*kappa_re7*kappa_re8;
    P_16 = K_10*K_11*K_12*K_13*K_14*K_7*K_9*K_Clo*sqr(K_HCO3i)*K_Nai*kappa_re1*kappa_re3*kappa_re4*kappa_re5*kappa_re6*kappa_re7*kappa_re8+K_10*K_11*K_12*K_13*K_14*K_8*K_9*K_Clo*sqr(K_HCO3i)*K_Nai*kappa_re1*kappa_re2*kappa_re3*kappa_re4*kappa_re5*kappa_re6*kappa_re8+K_10*K_11*K_12*K_13*K_14*K_8*K_9*K_Clo*sqr(K_HCO3i)*K_Nai*kappa_re1*kappa_re3*kappa_re4*kappa_re5*kappa_re6*kappa_re7*kappa_re8+K_10*K_11*K_12*K_13*K_7*K_8*K_9*K_Clo*sqr(K_HCO3i)*K_Nai*kappa_re1*kappa_re2*kappa_re3*kappa_re4*kappa_re5*kappa_re6*kappa_re7+K_10*K_11*K_12*K_13*K_7*K_8*K_9*K_Clo*sqr(K_HCO3i)*K_Nai*kappa_re1*kappa_re2*kappa_re3*kappa_re4*kappa_re6*kappa_re7*kappa_re8+K_10*K_11*K_12*K_14*K_7*K_8*K_9*K_Clo*sqr(K_HCO3i)*K_Nai*kappa_re1*kappa_re2*kappa_re3*kappa_re4*kappa_re6*kappa_re7*kappa_re8+K_10*K_12*K_13*K_14*K_7*K_8*K_9*K_Clo*sqr(K_HCO3i)*K_Nai*kappa_re1*kappa_re2*kappa_re4*kappa_re5*kappa_re6*kappa_re7*kappa_re8;
    P_17 = K_10*K_11*K_13*K_14*K_7*K_8*K_9*K_Clo*sqr(K_HCO3o)*K_Nai*kappa_re1*kappa_re2*kappa_re4*kappa_re5*kappa_re6*kappa_re7*kappa_re8;
    P_18 = K_10*K_11*K_13*K_14*K_7*K_8*K_9*sqr(K_HCO3o)*K_Nai*K_Nao*kappa_re1*kappa_re2*kappa_re3*kappa_re4*kappa_re5*kappa_re6*kappa_re8+K_10*K_11*K_13*K_14*K_7*K_8*K_9*sqr(K_HCO3o)*K_Nai*K_Nao*kappa_re1*kappa_re3*kappa_re4*kappa_re5*kappa_re6*kappa_re7*kappa_re8+K_10*K_11*K_13*K_14*K_7*K_8*K_9*sqr(K_HCO3o)*K_Nai*K_Nao*kappa_re2*kappa_re3*kappa_re4*kappa_re5*kappa_re6*kappa_re7*kappa_re8;
    P_19 = K_10*K_12*K_13*K_14*K_7*K_8*K_9*K_Cli*sqr(K_HCO3i)*K_Nao*kappa_re1*kappa_re2*kappa_re3*kappa_re5*kappa_re6*kappa_re7*kappa_re8;
    P_20 = K_10*K_12*K_13*K_14*K_7*K_8*K_9*sqr(K_HCO3i)*K_Nai*K_Nao*kappa_re1*kappa_re2*kappa_re3*kappa_re4*kappa_re5*kappa_re6*kappa_re8+K_10*K_12*K_13*K_14*K_7*K_8*K_9*sqr(K_HCO3i)*K_Nai*K_Nao*kappa_re1*kappa_re3*kappa_re4*kappa_re5*kappa_re6*kappa_re7*kappa_re8+K_10*K_12*K_13*K_14*K_7*K_8*K_9*sqr(K_HCO3i)*K_Nai*K_Nao*kappa_re2*kappa_re3*kappa_re4*kappa_re5*kappa_re6*kappa_re7*kappa_re8;
    P_21 = K_10*K_11*K_12*K_13*K_7*K_8*K_9*K_Cli*sqr(K_HCO3i)*sqr(K_HCO3o)*K_Nao*kappa_re1*kappa_re2*kappa_re3*kappa_re5*kappa_re6*kappa_re7*kappa_re8+K_10*K_11*K_12*K_14*K_7*K_8*K_9*K_Cli*sqr(K_HCO3i)*sqr(K_HCO3o)*K_Nao*kappa_re1*kappa_re2*kappa_re3*kappa_re5*kappa_re6*kappa_re7*kappa_re8;
    P_22 = K_10*K_11*K_12*K_13*K_7*K_8*K_9*K_Clo*sqr(K_HCO3i)*sqr(K_HCO3o)*K_Nai*kappa_re1*kappa_re2*kappa_re4*kappa_re5*kappa_re6*kappa_re7*kappa_re8+K_10*K_11*K_12*K_14*K_7*K_8*K_9*K_Clo*sqr(K_HCO3i)*sqr(K_HCO3o)*K_Nai*kappa_re1*kappa_re2*kappa_re4*kappa_re5*kappa_re6*kappa_re7*kappa_re8;
    P_23 = K_10*K_11*K_12*K_13*K_7*K_8*K_9*sqr(K_HCO3i)*sqr(K_HCO3o)*K_Nai*K_Nao*kappa_re1*kappa_re2*kappa_re3*kappa_re4*kappa_re5*kappa_re6*kappa_re8+K_10*K_11*K_12*K_13*K_7*K_8*K_9*sqr(K_HCO3i)*sqr(K_HCO3o)*K_Nai*K_Nao*kappa_re1*kappa_re3*kappa_re4*kappa_re5*kappa_re6*kappa_re7*kappa_re8+K_10*K_11*K_12*K_13*K_7*K_8*K_9*sqr(K_HCO3i)*sqr(K_HCO3o)*K_Nai*K_Nao*kappa_re2*kappa_re3*kappa_re4*kappa_re5*kappa_re6*kappa_re7*kappa_re8+K_10*K_11*K_12*K_14*K_7*K_8*K_9*sqr(K_HCO3i)*sqr(K_HCO3o)*K_Nai*K_Nao*kappa_re1*kappa_re2*kappa_re3*kappa_re4*kappa_re5*kappa_re6*kappa_re8+K_10*K_11*K_12*K_14*K_7*K_8*K_9*sqr(K_HCO3i)*sqr(K_HCO3o)*K_Nai*K_Nao*kappa_re1*kappa_re3*kappa_re4*kappa_re5*kappa_re6*kappa_re7*kappa_re8+K_10*K_11*K_12*K_14*K_7*K_8*K_9*sqr(K_HCO3i)*sqr(K_HCO3o)*K_Nai*K_Nao*kappa_re2*kappa_re3*kappa_re4*kappa_re5*kappa_re6*kappa_re7*kappa_re8;
    E = q_10_init+q_11_init+q_12_init+q_13_init+q_14_init+q_7_init+q_8_init+q_9_init;
  enddef;

  def comp SLCT7_BG_ss_io as
    var v_ss: fmol_per_sec {interface: public};
    var q_Cli: fmol {init: 1, interface: public};
    var q_Nao: fmol {init: 1, interface: public};
    var q_HCO3o: fmol {init: 1, interface: public};
    var q_Clo: fmol {init: 1, interface: public};
    var q_Nai: fmol {init: 1, interface: public};
    var q_HCO3i: fmol {init: 1, interface: public};
  enddef;
  def map between SLCT7_BG_ss_test and SLCT7_ss for
    vars v_ss and v_ss;
    vars q_Cli and q_Cli;
    vars q_Nao and q_Nao;
    vars q_HCO3o and q_HCO3o;
    vars q_Clo and q_Clo;
    vars q_Nai and q_Nai;
    vars q_HCO3i and q_HCO3i;
  enddef;
  def map between SLCT7_BG_ss_test and SLCT7_BG_ss_io for
    vars v_ss and v_ss;
    vars q_Cli and q_Cli;
    vars q_Nao and q_Nao;
    vars q_HCO3o and q_HCO3o;
    vars q_Clo and q_Clo;
    vars q_Nai and q_Nai;
    vars q_HCO3i and q_HCO3i;
  enddef;
  def map between SLCT7_ss and SLCT7_BG_ss for
    vars P_0 and P_0;
    vars P_1 and P_1;
    vars P_2 and P_2;
    vars P_3 and P_3;
    vars P_4 and P_4;
    vars P_5 and P_5;
    vars P_6 and P_6;
    vars P_7 and P_7;
    vars P_8 and P_8;
    vars P_9 and P_9;
    vars P_10 and P_10;
    vars P_11 and P_11;
    vars P_12 and P_12;
    vars P_13 and P_13;
    vars P_14 and P_14;
    vars P_15 and P_15;
    vars P_16 and P_16;
    vars P_17 and P_17;
    vars P_18 and P_18;
    vars P_19 and P_19;
    vars P_20 and P_20;
    vars P_21 and P_21;
    vars P_22 and P_22;
    vars P_23 and P_23;
    vars E and E;
  enddef;
  def map between SLCT7_BG_param and SLCT7_BG_ss for
    vars K_Nao and K_Nao;
    vars K_Nai and K_Nai;
    vars K_HCO3o and K_HCO3o;
    vars K_HCO3i and K_HCO3i;
    vars K_Cli and K_Cli;
    vars K_Clo and K_Clo;
    vars K_7 and K_7;
    vars q_7_init and q_7_init;
    vars K_8 and K_8;
    vars q_8_init and q_8_init;
    vars K_9 and K_9;
    vars q_9_init and q_9_init;
    vars K_10 and K_10;
    vars q_10_init and q_10_init;
    vars K_11 and K_11;
    vars q_11_init and q_11_init;
    vars K_12 and K_12;
    vars q_12_init and q_12_init;
    vars K_13 and K_13;
    vars q_13_init and q_13_init;
    vars K_14 and K_14;
    vars q_14_init and q_14_init;
    vars kappa_re1 and kappa_re1;
    vars kappa_re2 and kappa_re2;
    vars kappa_re3 and kappa_re3;
    vars kappa_re4 and kappa_re4;
    vars kappa_re5 and kappa_re5;
    vars kappa_re6 and kappa_re6;
    vars kappa_re7 and kappa_re7;
    vars kappa_re8 and kappa_re8;
    vars F and F;
    vars R and R;
    vars T and T;
  enddef;
  def group as encapsulation for
    comp SLCT7_BG_ss_test incl
      comp SLCT7_ss;
      comp SLCT7_BG_param;
      comp SLCT7_BG_ss;
    endcomp;
  enddef;
enddef;
