def model SLCT9_BG_ss_test as
  def import using "../units_BG.cellml" for
    unit per_sec7 using unit per_sec7;
    unit per_fmol6_sec7 using unit per_fmol6_sec7;
    unit per_fmol5_sec7 using unit per_fmol5_sec7;
    unit C_per_mol using unit C_per_mol;
    unit per_fmol2_sec7 using unit per_fmol2_sec7;
    unit per_fmol4_sec8 using unit per_fmol4_sec8;
    unit per_fmol8_sec7 using unit per_fmol8_sec7;
    unit fmol using unit fmol;
    unit per_fmol3_sec7 using unit per_fmol3_sec7;
    unit per_fmol4_sec7 using unit per_fmol4_sec7;
    unit fmol_per_sec using unit fmol_per_sec;
    unit per_fmol7_sec7 using unit per_fmol7_sec7;
    unit per_fmol_sec7 using unit per_fmol_sec7;
    unit J_per_K_per_mol using unit J_per_K_per_mol;
  enddef;
  def import using "../units_BG.cellml" for
    unit per_fmol using unit per_fmol;
    unit fF using unit fF;
  enddef;

  def comp SLCT9_BG_ss_test as
    var v_ss: fmol_per_sec {interface: public_and_private};
    var q_Ai: fmol {interface: public_and_private};
    var q_Cli: fmol {interface: public_and_private};
    var q_Nai: fmol {interface: public_and_private};
    var q_Ao: fmol {interface: public_and_private};
    var q_Clo: fmol {interface: public_and_private};
    var q_Nao: fmol {interface: public_and_private};
    var V_m: volt {interface: public_and_private};
    var F: C_per_mol {interface: private};
    var R: J_per_K_per_mol {interface: private};
    var T: kelvin {interface: private};
  enddef;

  def comp SLCT9_ss as
    var P_0: per_fmol4_sec8 {interface: public};
    var P_1: per_fmol4_sec8 {interface: public};
    var P_2: per_sec7 {interface: public};
    var P_3: per_fmol2_sec7 {interface: public};
    var P_4: per_fmol2_sec7 {interface: public};
    var P_5: per_fmol2_sec7 {interface: public};
    var P_6: per_fmol2_sec7 {interface: public};
    var P_7: per_fmol_sec7 {interface: public};
    var P_8: per_fmol_sec7 {interface: public};
    var P_9: per_fmol3_sec7 {interface: public};
    var P_10: per_fmol3_sec7 {interface: public};
    var P_11: per_fmol3_sec7 {interface: public};
    var P_12: per_fmol3_sec7 {interface: public};
    var P_13: per_fmol3_sec7 {interface: public};
    var P_14: per_fmol3_sec7 {interface: public};
    var P_15: per_fmol2_sec7 {interface: public};
    var P_16: per_fmol2_sec7 {interface: public};
    var P_17: per_fmol3_sec7 {interface: public};
    var P_18: per_fmol3_sec7 {interface: public};
    var P_19: per_fmol4_sec7 {interface: public};
    var P_20: per_fmol4_sec7 {interface: public};
    var P_21: per_fmol4_sec7 {interface: public};
    var P_22: per_fmol4_sec7 {interface: public};
    var P_23: per_fmol4_sec7 {interface: public};
    var P_24: per_fmol4_sec7 {interface: public};
    var P_25: per_fmol4_sec7 {interface: public};
    var P_26: per_fmol4_sec7 {interface: public};
    var P_27: per_fmol5_sec7 {interface: public};
    var P_28: per_fmol5_sec7 {interface: public};
    var P_29: per_fmol6_sec7 {interface: public};
    var P_30: per_fmol6_sec7 {interface: public};
    var P_31: per_fmol5_sec7 {interface: public};
    var P_32: per_fmol5_sec7 {interface: public};
    var P_33: per_fmol5_sec7 {interface: public};
    var P_34: per_fmol5_sec7 {interface: public};
    var P_35: per_fmol5_sec7 {interface: public};
    var P_36: per_fmol5_sec7 {interface: public};
    var P_37: per_fmol7_sec7 {interface: public};
    var P_38: per_fmol6_sec7 {interface: public};
    var P_39: per_fmol6_sec7 {interface: public};
    var P_40: per_fmol6_sec7 {interface: public};
    var P_41: per_fmol6_sec7 {interface: public};
    var P_42: per_fmol7_sec7 {interface: public};
    var P_43: per_fmol8_sec7 {interface: public};
    var P_44: per_fmol8_sec7 {interface: public};
    var P_45: per_sec7 {interface: public};
    var E: fmol {interface: public};
    var q_Ai: fmol {interface: public};
    var q_Cli: fmol {interface: public};
    var q_Nai: fmol {interface: public};
    var q_Ao: fmol {interface: public};
    var q_Clo: fmol {interface: public};
    var q_Nao: fmol {interface: public};
    var F: C_per_mol {interface: public};
    var R: J_per_K_per_mol {interface: public};
    var T: kelvin {interface: public};
    var V_m: volt {interface: public};
    var v_ss: fmol_per_sec {interface: public};
    v_ss = E*(P_0*q_Ao*q_Clo*sqr(q_Nao)*exp(2{dimensionless}*F*V_m/(R*T))-P_1*q_Ai*q_Cli*sqr(q_Nai))/(P_10*q_Clo*sqr(q_Nao)*exp(F*V_m/(R*T))+P_11*q_Ai*sqr(q_Nai)+P_12*q_Ao*sqr(q_Nai)*exp(2{dimensionless}*F*V_m/(R*T))+P_13*q_Ai*sqr(q_Nao)+P_14*q_Ao*sqr(q_Nao)*exp(2{dimensionless}*F*V_m/(R*T))+P_15*q_Ai*q_Cli+P_16*q_Ao*q_Clo*exp(2{dimensionless}*F*V_m/(R*T))+P_17*q_Cli*sqr(q_Nai)+P_18*q_Cli*sqr(q_Nai)*exp(F*V_m/(R*T))+P_19*q_Ai*q_Cli*sqr(q_Nai)+P_2*exp(F*V_m/(R*T))+P_20*q_Ai*q_Clo*sqr(q_Nao)+P_21*q_Ao*q_Clo*sqr(q_Nao)*exp(2{dimensionless}*F*V_m/(R*T))+P_22*q_Ao*q_Clo*sqr(q_Nai)*exp(2{dimensionless}*F*V_m/(R*T))+P_23*q_Ai*q_Cli*sqr(q_Nao)+P_24*q_Ai*q_Cli*sqr(q_Nai)*exp(F*V_m/(R*T))+P_25*q_Ao*q_Clo*sqr(q_Nao)*exp(F*V_m/(R*T))+P_26*q_Ao*q_Cli*sqr(q_Nai)*exp(2{dimensionless}*F*V_m/(R*T))+P_27*q_Ai*q_Cli*q_Clo*sqr(q_Nao)+P_28*q_Ai*q_Cli*q_Clo*sqr(q_Nai)+P_29*q_Ao*q_Clo*sqr(q_Nai)*sqr(q_Nao)*exp(2{dimensionless}*F*V_m/(R*T))+P_3*sqr(q_Nai)+P_30*q_Ai*q_Cli*sqr(q_Nai)*sqr(q_Nao)+P_31*q_Ai*q_Ao*q_Cli*sqr(q_Nai)*exp(2{dimensionless}*F*V_m/(R*T))+P_32*q_Ai*q_Ao*q_Clo*sqr(q_Nao)*exp(2{dimensionless}*F*V_m/(R*T))+P_33*q_Ai*q_Ao*q_Cli*sqr(q_Nai)*exp(F*V_m/(R*T))+P_34*q_Ai*q_Ao*q_Clo*sqr(q_Nao)*exp(F*V_m/(R*T))+P_35*q_Ao*q_Cli*q_Clo*sqr(q_Nao)*exp(2{dimensionless}*F*V_m/(R*T))+P_36*q_Ao*q_Cli*q_Clo*sqr(q_Nai)*exp(2{dimensionless}*F*V_m/(R*T))+P_37*q_Ai*q_Cli*q_Clo*sqr(q_Nai)*sqr(q_Nao)+P_38*q_Ai*q_Ao*q_Cli*q_Clo*sqr(q_Nao)*exp(2{dimensionless}*F*V_m/(R*T))+P_39*q_Ai*q_Ao*q_Cli*q_Clo*sqr(q_Nai)*exp(2{dimensionless}*F*V_m/(R*T))+P_4*sqr(q_Nai)*exp(F*V_m/(R*T))+P_40*q_Ai*q_Ao*q_Cli*q_Clo*sqr(q_Nao)*exp(F*V_m/(R*T))+P_41*q_Ai*q_Ao*q_Cli*q_Clo*sqr(q_Nai)*exp(F*V_m/(R*T))+P_42*q_Ao*q_Cli*q_Clo*sqr(q_Nai)*sqr(q_Nao)*exp(2{dimensionless}*F*V_m/(R*T))+P_43*q_Ai*q_Ao*q_Cli*q_Clo*sqr(q_Nai)*sqr(q_Nao)*exp(2{dimensionless}*F*V_m/(R*T))+P_44*q_Ai*q_Ao*q_Cli*q_Clo*sqr(q_Nai)*sqr(q_Nao)*exp(F*V_m/(R*T))+P_45+P_5*sqr(q_Nao)+P_6*sqr(q_Nao)*exp(F*V_m/(R*T))+P_7*q_Ai+P_8*q_Ao*exp(2{dimensionless}*F*V_m/(R*T))+P_9*q_Clo*sqr(q_Nao));
  enddef;

  def comp SLCT9_BG_param as
    var K_Nao: per_fmol {init: 1, interface: public};
    var K_Nai: per_fmol {init: 1, interface: public};
    var K_Ao: per_fmol {init: 1, interface: public};
    var K_Ai: per_fmol {init: 1, interface: public};
    var K_Cli: per_fmol {init: 1, interface: public};
    var K_Clo: per_fmol {init: 1, interface: public};
    var K_7: per_fmol {init: 1, interface: public};
    var q_7_init: fmol {init: 1, interface: public};
    var K_8: per_fmol {init: 1, interface: public};
    var q_8_init: fmol {init: 1, interface: public};
    var K_9: per_fmol {init: 1, interface: public};
    var q_9_init: fmol {init: 1, interface: public};
    var K_10: per_fmol {init: 1, interface: public};
    var q_10_init: fmol {init: 1, interface: public};
    var K_11: per_fmol {init: 1, interface: public};
    var q_11_init: fmol {init: 1, interface: public};
    var K_12: per_fmol {init: 1, interface: public};
    var q_12_init: fmol {init: 1, interface: public};
    var K_13: per_fmol {init: 1, interface: public};
    var q_13_init: fmol {init: 1, interface: public};
    var K_14: per_fmol {init: 1, interface: public};
    var q_14_init: fmol {init: 1, interface: public};
    var C_m: fF {init: 1, interface: public};
    var kappa_re1: fmol_per_sec {init: 1, interface: public};
    var kappa_re2: fmol_per_sec {init: 1, interface: public};
    var kappa_re3: fmol_per_sec {init: 1, interface: public};
    var kappa_re4: fmol_per_sec {init: 1, interface: public};
    var kappa_re5: fmol_per_sec {init: 1, interface: public};
    var kappa_re6: fmol_per_sec {init: 1, interface: public};
    var kappa_re7: fmol_per_sec {init: 1, interface: public};
    var kappa_re8: fmol_per_sec {init: 1, interface: public};
    var F: C_per_mol {init: 96485, interface: public};
    var R: J_per_K_per_mol {init: 8.31, interface: public};
    var T: kelvin {init: 293, interface: public};
  enddef;

  def comp SLCT9_BG_ss as
    var P_0: per_fmol4_sec8 {interface: public};
    var P_1: per_fmol4_sec8 {interface: public};
    var P_2: per_sec7 {interface: public};
    var P_3: per_fmol2_sec7 {interface: public};
    var P_4: per_fmol2_sec7 {interface: public};
    var P_5: per_fmol2_sec7 {interface: public};
    var P_6: per_fmol2_sec7 {interface: public};
    var P_7: per_fmol_sec7 {interface: public};
    var P_8: per_fmol_sec7 {interface: public};
    var P_9: per_fmol3_sec7 {interface: public};
    var P_10: per_fmol3_sec7 {interface: public};
    var P_11: per_fmol3_sec7 {interface: public};
    var P_12: per_fmol3_sec7 {interface: public};
    var P_13: per_fmol3_sec7 {interface: public};
    var P_14: per_fmol3_sec7 {interface: public};
    var P_15: per_fmol2_sec7 {interface: public};
    var P_16: per_fmol2_sec7 {interface: public};
    var P_17: per_fmol3_sec7 {interface: public};
    var P_18: per_fmol3_sec7 {interface: public};
    var P_19: per_fmol4_sec7 {interface: public};
    var P_20: per_fmol4_sec7 {interface: public};
    var P_21: per_fmol4_sec7 {interface: public};
    var P_22: per_fmol4_sec7 {interface: public};
    var P_23: per_fmol4_sec7 {interface: public};
    var P_24: per_fmol4_sec7 {interface: public};
    var P_25: per_fmol4_sec7 {interface: public};
    var P_26: per_fmol4_sec7 {interface: public};
    var P_27: per_fmol5_sec7 {interface: public};
    var P_28: per_fmol5_sec7 {interface: public};
    var P_29: per_fmol6_sec7 {interface: public};
    var P_30: per_fmol6_sec7 {interface: public};
    var P_31: per_fmol5_sec7 {interface: public};
    var P_32: per_fmol5_sec7 {interface: public};
    var P_33: per_fmol5_sec7 {interface: public};
    var P_34: per_fmol5_sec7 {interface: public};
    var P_35: per_fmol5_sec7 {interface: public};
    var P_36: per_fmol5_sec7 {interface: public};
    var P_37: per_fmol7_sec7 {interface: public};
    var P_38: per_fmol6_sec7 {interface: public};
    var P_39: per_fmol6_sec7 {interface: public};
    var P_40: per_fmol6_sec7 {interface: public};
    var P_41: per_fmol6_sec7 {interface: public};
    var P_42: per_fmol7_sec7 {interface: public};
    var P_43: per_fmol8_sec7 {interface: public};
    var P_44: per_fmol8_sec7 {interface: public};
    var P_45: per_sec7 {interface: public};
    var E: fmol {interface: public};
    var K_Nao: per_fmol {interface: public};
    var K_Nai: per_fmol {interface: public};
    var K_Ao: per_fmol {interface: public};
    var K_Ai: per_fmol {interface: public};
    var K_Cli: per_fmol {interface: public};
    var K_Clo: per_fmol {interface: public};
    var K_7: per_fmol {interface: public};
    var q_7_init: fmol {interface: public};
    var K_8: per_fmol {interface: public};
    var q_8_init: fmol {interface: public};
    var K_9: per_fmol {interface: public};
    var q_9_init: fmol {interface: public};
    var K_10: per_fmol {interface: public};
    var q_10_init: fmol {interface: public};
    var K_11: per_fmol {interface: public};
    var q_11_init: fmol {interface: public};
    var K_12: per_fmol {interface: public};
    var q_12_init: fmol {interface: public};
    var K_13: per_fmol {interface: public};
    var q_13_init: fmol {interface: public};
    var K_14: per_fmol {interface: public};
    var q_14_init: fmol {interface: public};
    var C_m: fF {interface: public};
    var kappa_re1: fmol_per_sec {interface: public};
    var kappa_re2: fmol_per_sec {interface: public};
    var kappa_re3: fmol_per_sec {interface: public};
    var kappa_re4: fmol_per_sec {interface: public};
    var kappa_re5: fmol_per_sec {interface: public};
    var kappa_re6: fmol_per_sec {interface: public};
    var kappa_re7: fmol_per_sec {interface: public};
    var kappa_re8: fmol_per_sec {interface: public};
    var F: C_per_mol {interface: public};
    var R: J_per_K_per_mol {interface: public};
    var T: kelvin {interface: public};
    P_0 = K_10*K_11*K_12*K_13*K_14*K_7*K_8*K_9*K_Ao*K_Clo*sqr(K_Nao)*kappa_re1*kappa_re2*kappa_re3*kappa_re4*kappa_re5*kappa_re6*kappa_re7*kappa_re8;
    P_1 = K_10*K_11*K_12*K_13*K_14*K_7*K_8*K_9*K_Ai*K_Cli*sqr(K_Nai)*kappa_re1*kappa_re2*kappa_re3*kappa_re4*kappa_re5*kappa_re6*kappa_re7*kappa_re8;
    P_2 = K_10*K_11*K_12*K_13*K_7*K_8*K_9*kappa_re1*kappa_re2*kappa_re3*kappa_re4*kappa_re6*kappa_re7*kappa_re8+K_10*K_11*K_12*K_14*K_7*K_8*K_9*kappa_re1*kappa_re2*kappa_re3*kappa_re4*kappa_re6*kappa_re7*kappa_re8;
    P_3 = K_10*K_11*K_12*K_13*K_14*K_7*K_9*sqr(K_Nai)*kappa_re1*kappa_re2*kappa_re3*kappa_re4*kappa_re5*kappa_re6*kappa_re8+K_10*K_11*K_12*K_13*K_14*K_7*K_9*sqr(K_Nai)*kappa_re1*kappa_re2*kappa_re3*kappa_re4*kappa_re5*kappa_re7*kappa_re8;
    P_4 = K_10*K_11*K_12*K_13*K_14*K_7*K_9*sqr(K_Nai)*kappa_re1*kappa_re2*kappa_re3*kappa_re4*kappa_re6*kappa_re7*kappa_re8;
    P_5 = K_10*K_11*K_12*K_13*K_14*K_8*K_9*sqr(K_Nao)*kappa_re1*kappa_re2*kappa_re3*kappa_re4*kappa_re5*kappa_re6*kappa_re8+K_10*K_11*K_12*K_13*K_14*K_8*K_9*sqr(K_Nao)*kappa_re1*kappa_re2*kappa_re3*kappa_re4*kappa_re5*kappa_re7*kappa_re8;
    P_6 = K_10*K_11*K_12*K_13*K_14*K_8*K_9*sqr(K_Nao)*kappa_re1*kappa_re2*kappa_re3*kappa_re4*kappa_re6*kappa_re7*kappa_re8;
    P_7 = K_10*K_11*K_12*K_13*K_7*K_8*K_9*K_Ai*kappa_re1*kappa_re2*kappa_re3*kappa_re5*kappa_re6*kappa_re7*kappa_re8+K_10*K_11*K_12*K_14*K_7*K_8*K_9*K_Ai*kappa_re1*kappa_re2*kappa_re3*kappa_re5*kappa_re6*kappa_re7*kappa_re8;
    P_8 = K_10*K_11*K_12*K_13*K_7*K_8*K_9*K_Ao*kappa_re1*kappa_re2*kappa_re4*kappa_re5*kappa_re6*kappa_re7*kappa_re8+K_10*K_11*K_12*K_14*K_7*K_8*K_9*K_Ao*kappa_re1*kappa_re2*kappa_re4*kappa_re5*kappa_re6*kappa_re7*kappa_re8;
    P_9 = K_10*K_11*K_12*K_13*K_14*K_7*K_8*K_Clo*sqr(K_Nao)*kappa_re1*kappa_re2*kappa_re3*kappa_re4*kappa_re5*kappa_re6*kappa_re8+K_10*K_11*K_12*K_13*K_14*K_7*K_8*K_Clo*sqr(K_Nao)*kappa_re1*kappa_re2*kappa_re3*kappa_re4*kappa_re5*kappa_re7*kappa_re8;
    P_10 = K_10*K_11*K_12*K_13*K_14*K_7*K_8*K_Clo*sqr(K_Nao)*kappa_re1*kappa_re2*kappa_re3*kappa_re4*kappa_re6*kappa_re7*kappa_re8;
    P_11 = K_10*K_11*K_12*K_13*K_14*K_7*K_9*K_Ai*sqr(K_Nai)*kappa_re1*kappa_re2*kappa_re3*kappa_re5*kappa_re6*kappa_re7*kappa_re8;
    P_12 = K_10*K_11*K_12*K_13*K_14*K_7*K_9*K_Ao*sqr(K_Nai)*kappa_re1*kappa_re2*kappa_re4*kappa_re5*kappa_re6*kappa_re7*kappa_re8;
    P_13 = K_10*K_11*K_12*K_13*K_14*K_8*K_9*K_Ai*sqr(K_Nao)*kappa_re1*kappa_re2*kappa_re3*kappa_re5*kappa_re6*kappa_re7*kappa_re8;
    P_14 = K_10*K_11*K_12*K_13*K_14*K_8*K_9*K_Ao*sqr(K_Nao)*kappa_re1*kappa_re2*kappa_re4*kappa_re5*kappa_re6*kappa_re7*kappa_re8;
    P_15 = K_10*K_11*K_12*K_13*K_7*K_8*K_9*K_Ai*K_Cli*kappa_re1*kappa_re3*kappa_re4*kappa_re5*kappa_re6*kappa_re7*kappa_re8+K_10*K_11*K_12*K_14*K_7*K_8*K_9*K_Ai*K_Cli*kappa_re1*kappa_re3*kappa_re4*kappa_re5*kappa_re6*kappa_re7*kappa_re8;
    P_16 = K_10*K_11*K_12*K_13*K_7*K_8*K_9*K_Ao*K_Clo*kappa_re2*kappa_re3*kappa_re4*kappa_re5*kappa_re6*kappa_re7*kappa_re8+K_10*K_11*K_12*K_14*K_7*K_8*K_9*K_Ao*K_Clo*kappa_re2*kappa_re3*kappa_re4*kappa_re5*kappa_re6*kappa_re7*kappa_re8;
    P_17 = K_11*K_12*K_13*K_14*K_7*K_8*K_9*K_Cli*sqr(K_Nai)*kappa_re1*kappa_re2*kappa_re3*kappa_re4*kappa_re5*kappa_re6*kappa_re8+K_11*K_12*K_13*K_14*K_7*K_8*K_9*K_Cli*sqr(K_Nai)*kappa_re1*kappa_re2*kappa_re3*kappa_re4*kappa_re5*kappa_re7*kappa_re8;
    P_18 = K_11*K_12*K_13*K_14*K_7*K_8*K_9*K_Cli*sqr(K_Nai)*kappa_re1*kappa_re2*kappa_re3*kappa_re4*kappa_re6*kappa_re7*kappa_re8;
    P_19 = K_10*K_11*K_12*K_13*K_14*K_7*K_8*K_Ai*K_Cli*sqr(K_Nai)*kappa_re1*kappa_re2*kappa_re4*kappa_re5*kappa_re6*kappa_re7*kappa_re8+K_10*K_11*K_12*K_13*K_14*K_8*K_9*K_Ai*K_Cli*sqr(K_Nai)*kappa_re2*kappa_re3*kappa_re4*kappa_re5*kappa_re6*kappa_re7*kappa_re8+K_10*K_11*K_12*K_14*K_7*K_8*K_9*K_Ai*K_Cli*sqr(K_Nai)*kappa_re1*kappa_re2*kappa_re3*kappa_re4*kappa_re5*kappa_re6*kappa_re7+K_10*K_11*K_13*K_14*K_7*K_8*K_9*K_Ai*K_Cli*sqr(K_Nai)*kappa_re1*kappa_re2*kappa_re3*kappa_re4*kappa_re5*kappa_re6*kappa_re8+K_10*K_12*K_13*K_14*K_7*K_8*K_9*K_Ai*K_Cli*sqr(K_Nai)*kappa_re1*kappa_re2*kappa_re3*kappa_re4*kappa_re6*kappa_re7*kappa_re8;
    P_20 = K_10*K_11*K_12*K_13*K_14*K_7*K_8*K_Ai*K_Clo*sqr(K_Nao)*kappa_re1*kappa_re2*kappa_re3*kappa_re5*kappa_re6*kappa_re7*kappa_re8;
    P_21 = K_10*K_11*K_12*K_13*K_14*K_7*K_9*K_Ao*K_Clo*sqr(K_Nao)*kappa_re1*kappa_re3*kappa_re4*kappa_re5*kappa_re6*kappa_re7*kappa_re8+K_10*K_11*K_12*K_13*K_7*K_8*K_9*K_Ao*K_Clo*sqr(K_Nao)*kappa_re1*kappa_re2*kappa_re3*kappa_re4*kappa_re5*kappa_re6*kappa_re7+K_10*K_11*K_13*K_14*K_7*K_8*K_9*K_Ao*K_Clo*sqr(K_Nao)*kappa_re1*kappa_re2*kappa_re3*kappa_re4*kappa_re5*kappa_re7*kappa_re8+K_11*K_12*K_13*K_14*K_7*K_8*K_9*K_Ao*K_Clo*sqr(K_Nao)*kappa_re1*kappa_re2*kappa_re3*kappa_re5*kappa_re6*kappa_re7*kappa_re8;
    P_22 = K_10*K_11*K_12*K_13*K_14*K_7*K_9*K_Ao*K_Clo*sqr(K_Nai)*kappa_re2*kappa_re3*kappa_re4*kappa_re5*kappa_re6*kappa_re7*kappa_re8;
    P_23 = K_10*K_11*K_12*K_13*K_14*K_8*K_9*K_Ai*K_Cli*sqr(K_Nao)*kappa_re1*kappa_re3*kappa_re4*kappa_re5*kappa_re6*kappa_re7*kappa_re8;
    P_24 = K_10*K_11*K_13*K_14*K_7*K_8*K_9*K_Ai*K_Cli*sqr(K_Nai)*kappa_re1*kappa_re2*kappa_re3*kappa_re4*kappa_re6*kappa_re7*kappa_re8;
    P_25 = K_10*K_12*K_13*K_14*K_7*K_8*K_9*K_Ao*K_Clo*sqr(K_Nao)*kappa_re1*kappa_re2*kappa_re3*kappa_re4*kappa_re5*kappa_re6*kappa_re8+K_10*K_12*K_13*K_14*K_7*K_8*K_9*K_Ao*K_Clo*sqr(K_Nao)*kappa_re1*kappa_re2*kappa_re3*kappa_re4*kappa_re5*kappa_re7*kappa_re8;
    P_26 = K_11*K_12*K_13*K_14*K_7*K_8*K_9*K_Ao*K_Cli*sqr(K_Nai)*kappa_re1*kappa_re2*kappa_re4*kappa_re5*kappa_re6*kappa_re7*kappa_re8;
    P_27 = K_10*K_11*K_12*K_13*K_14*K_7*K_8*K_Ai*K_Cli*K_Clo*sqr(K_Nao)*kappa_re1*kappa_re3*kappa_re4*kappa_re5*kappa_re6*kappa_re7*kappa_re8;
    P_28 = K_10*K_11*K_12*K_13*K_14*K_7*K_8*K_Ai*K_Cli*K_Clo*sqr(K_Nai)*kappa_re2*kappa_re3*kappa_re4*kappa_re5*kappa_re6*kappa_re7*kappa_re8;
    P_29 = K_10*K_11*K_12*K_13*K_14*K_7*K_9*K_Ao*K_Clo*sqr(K_Nai)*sqr(K_Nao)*kappa_re1*kappa_re2*kappa_re3*kappa_re4*kappa_re5*kappa_re6*kappa_re7;
    P_30 = K_10*K_11*K_12*K_13*K_14*K_8*K_9*K_Ai*K_Cli*sqr(K_Nai)*sqr(K_Nao)*kappa_re1*kappa_re2*kappa_re3*kappa_re4*kappa_re5*kappa_re6*kappa_re7;
    P_31 = K_10*K_11*K_13*K_14*K_7*K_8*K_9*K_Ai*K_Ao*K_Cli*sqr(K_Nai)*kappa_re1*kappa_re2*kappa_re4*kappa_re5*kappa_re6*kappa_re7*kappa_re8;
    P_32 = K_10*K_11*K_13*K_14*K_7*K_8*K_9*K_Ai*K_Ao*K_Clo*sqr(K_Nao)*kappa_re1*kappa_re2*kappa_re3*kappa_re5*kappa_re6*kappa_re7*kappa_re8;
    P_33 = K_10*K_12*K_13*K_14*K_7*K_8*K_9*K_Ai*K_Ao*K_Cli*sqr(K_Nai)*kappa_re1*kappa_re2*kappa_re4*kappa_re5*kappa_re6*kappa_re7*kappa_re8;
    P_34 = K_10*K_12*K_13*K_14*K_7*K_8*K_9*K_Ai*K_Ao*K_Clo*sqr(K_Nao)*kappa_re1*kappa_re2*kappa_re3*kappa_re5*kappa_re6*kappa_re7*kappa_re8;
    P_35 = K_11*K_12*K_13*K_14*K_7*K_8*K_9*K_Ao*K_Cli*K_Clo*sqr(K_Nao)*kappa_re1*kappa_re3*kappa_re4*kappa_re5*kappa_re6*kappa_re7*kappa_re8;
    P_36 = K_11*K_12*K_13*K_14*K_7*K_8*K_9*K_Ao*K_Cli*K_Clo*sqr(K_Nai)*kappa_re2*kappa_re3*kappa_re4*kappa_re5*kappa_re6*kappa_re7*kappa_re8;
    P_37 = K_10*K_11*K_12*K_13*K_14*K_7*K_8*K_Ai*K_Cli*K_Clo*sqr(K_Nai)*sqr(K_Nao)*kappa_re1*kappa_re2*kappa_re3*kappa_re4*kappa_re5*kappa_re6*kappa_re7;
    P_38 = K_10*K_11*K_13*K_14*K_7*K_8*K_9*K_Ai*K_Ao*K_Cli*K_Clo*sqr(K_Nao)*kappa_re1*kappa_re3*kappa_re4*kappa_re5*kappa_re6*kappa_re7*kappa_re8;
    P_39 = K_10*K_11*K_13*K_14*K_7*K_8*K_9*K_Ai*K_Ao*K_Cli*K_Clo*sqr(K_Nai)*kappa_re2*kappa_re3*kappa_re4*kappa_re5*kappa_re6*kappa_re7*kappa_re8;
    P_40 = K_10*K_12*K_13*K_14*K_7*K_8*K_9*K_Ai*K_Ao*K_Cli*K_Clo*sqr(K_Nao)*kappa_re1*kappa_re3*kappa_re4*kappa_re5*kappa_re6*kappa_re7*kappa_re8;
    P_41 = K_10*K_12*K_13*K_14*K_7*K_8*K_9*K_Ai*K_Ao*K_Cli*K_Clo*sqr(K_Nai)*kappa_re2*kappa_re3*kappa_re4*kappa_re5*kappa_re6*kappa_re7*kappa_re8;
    P_42 = K_11*K_12*K_13*K_14*K_7*K_8*K_9*K_Ao*K_Cli*K_Clo*sqr(K_Nai)*sqr(K_Nao)*kappa_re1*kappa_re2*kappa_re3*kappa_re4*kappa_re5*kappa_re6*kappa_re7;
    P_43 = K_10*K_11*K_13*K_14*K_7*K_8*K_9*K_Ai*K_Ao*K_Cli*K_Clo*sqr(K_Nai)*sqr(K_Nao)*kappa_re1*kappa_re2*kappa_re3*kappa_re4*kappa_re5*kappa_re6*kappa_re7;
    P_44 = K_10*K_12*K_13*K_14*K_7*K_8*K_9*K_Ai*K_Ao*K_Cli*K_Clo*sqr(K_Nai)*sqr(K_Nao)*kappa_re1*kappa_re2*kappa_re3*kappa_re4*kappa_re5*kappa_re6*kappa_re7;
    P_45 = K_10*K_11*K_12*K_13*K_7*K_8*K_9*kappa_re1*kappa_re2*kappa_re3*kappa_re4*kappa_re5*kappa_re6*kappa_re8+K_10*K_11*K_12*K_13*K_7*K_8*K_9*kappa_re1*kappa_re2*kappa_re3*kappa_re4*kappa_re5*kappa_re7*kappa_re8+K_10*K_11*K_12*K_14*K_7*K_8*K_9*kappa_re1*kappa_re2*kappa_re3*kappa_re4*kappa_re5*kappa_re6*kappa_re8+K_10*K_11*K_12*K_14*K_7*K_8*K_9*kappa_re1*kappa_re2*kappa_re3*kappa_re4*kappa_re5*kappa_re7*kappa_re8;
    E = q_10_init+q_11_init+q_12_init+q_13_init+q_14_init+q_7_init+q_8_init+q_9_init;
  enddef;

  def comp SLCT9_BG_ss_io as
    var v_ss: fmol_per_sec {interface: public};
    var q_Ai: fmol {init: 1, interface: public};
    var q_Cli: fmol {init: 1, interface: public};
    var q_Nai: fmol {init: 1, interface: public};
    var q_Ao: fmol {init: 1, interface: public};
    var q_Clo: fmol {init: 1, interface: public};
    var q_Nao: fmol {init: 1, interface: public};
    var V_m: volt {init: 1, interface: public};
  enddef;
  def map between SLCT9_BG_ss_test and SLCT9_ss for
    vars v_ss and v_ss;
    vars q_Ai and q_Ai;
    vars q_Cli and q_Cli;
    vars q_Nai and q_Nai;
    vars q_Ao and q_Ao;
    vars q_Clo and q_Clo;
    vars q_Nao and q_Nao;
    vars V_m and V_m;
    vars F and F;
    vars R and R;
    vars T and T;
  enddef;
  def map between SLCT9_BG_ss_test and SLCT9_BG_ss_io for
    vars v_ss and v_ss;
    vars q_Ai and q_Ai;
    vars q_Cli and q_Cli;
    vars q_Nai and q_Nai;
    vars q_Ao and q_Ao;
    vars q_Clo and q_Clo;
    vars q_Nao and q_Nao;
    vars V_m and V_m;
  enddef;
  def map between SLCT9_ss and SLCT9_BG_ss for
    vars P_0 and P_0;
    vars P_1 and P_1;
    vars P_2 and P_2;
    vars P_3 and P_3;
    vars P_4 and P_4;
    vars P_5 and P_5;
    vars P_6 and P_6;
    vars P_7 and P_7;
    vars P_8 and P_8;
    vars P_9 and P_9;
    vars P_10 and P_10;
    vars P_11 and P_11;
    vars P_12 and P_12;
    vars P_13 and P_13;
    vars P_14 and P_14;
    vars P_15 and P_15;
    vars P_16 and P_16;
    vars P_17 and P_17;
    vars P_18 and P_18;
    vars P_19 and P_19;
    vars P_20 and P_20;
    vars P_21 and P_21;
    vars P_22 and P_22;
    vars P_23 and P_23;
    vars P_24 and P_24;
    vars P_25 and P_25;
    vars P_26 and P_26;
    vars P_27 and P_27;
    vars P_28 and P_28;
    vars P_29 and P_29;
    vars P_30 and P_30;
    vars P_31 and P_31;
    vars P_32 and P_32;
    vars P_33 and P_33;
    vars P_34 and P_34;
    vars P_35 and P_35;
    vars P_36 and P_36;
    vars P_37 and P_37;
    vars P_38 and P_38;
    vars P_39 and P_39;
    vars P_40 and P_40;
    vars P_41 and P_41;
    vars P_42 and P_42;
    vars P_43 and P_43;
    vars P_44 and P_44;
    vars P_45 and P_45;
    vars E and E;
    vars F and F;
    vars R and R;
    vars T and T;
  enddef;
  def map between SLCT9_ss and SLCT9_BG_param for
    vars F and F;
    vars R and R;
    vars T and T;
  enddef;
  def map between SLCT9_BG_param and SLCT9_BG_ss for
    vars K_Nao and K_Nao;
    vars K_Nai and K_Nai;
    vars K_Ao and K_Ao;
    vars K_Ai and K_Ai;
    vars K_Cli and K_Cli;
    vars K_Clo and K_Clo;
    vars K_7 and K_7;
    vars q_7_init and q_7_init;
    vars K_8 and K_8;
    vars q_8_init and q_8_init;
    vars K_9 and K_9;
    vars q_9_init and q_9_init;
    vars K_10 and K_10;
    vars q_10_init and q_10_init;
    vars K_11 and K_11;
    vars q_11_init and q_11_init;
    vars K_12 and K_12;
    vars q_12_init and q_12_init;
    vars K_13 and K_13;
    vars q_13_init and q_13_init;
    vars K_14 and K_14;
    vars q_14_init and q_14_init;
    vars C_m and C_m;
    vars kappa_re1 and kappa_re1;
    vars kappa_re2 and kappa_re2;
    vars kappa_re3 and kappa_re3;
    vars kappa_re4 and kappa_re4;
    vars kappa_re5 and kappa_re5;
    vars kappa_re6 and kappa_re6;
    vars kappa_re7 and kappa_re7;
    vars kappa_re8 and kappa_re8;
    vars F and F;
    vars R and R;
    vars T and T;
  enddef;
  def group as encapsulation for
    comp SLCT9_BG_ss_test incl
      comp SLCT9_ss;
      comp SLCT9_BG_param;
      comp SLCT9_BG_ss;
    endcomp;
  enddef;
enddef;
