<?xml version='1.0' encoding='UTF-8'?>
<model name="my_model" xmlns="http://www.cellml.org/cellml/1.1#" xmlns:cellml="http://www.cellml.org/cellml/1.1#">
    <!-- Your code goes here-->
    <component name="Equations">
        <math xmlns="http://www.w3.org/1998/Math/MathML">
         <apply>
        <eq/>
        <ci>mu_Ai</ci>
        <apply>
          <times/>
          <ci>R</ci>
          <ci>T</ci>
          <apply>
            <ln/>
            <apply>
              <times/>
              <ci>K_Ai</ci>
              <ci>q_Ai</ci>
            </apply>
          </apply>
        </apply>
      </apply>
      <apply>
        <eq/>
        <ci>mu_Ao</ci>
        <apply>
          <times/>
          <ci>R</ci>
          <ci>T</ci>
          <apply>
            <ln/>
            <apply>
              <times/>
              <ci>K_Ao</ci>
              <ci>q_Ao</ci>
            </apply>
          </apply>
        </apply>
      </apply>
      <apply>
        <eq/>
        <apply>
          <diff/>
          <bvar>
            <ci>t</ci>
          </bvar>
          <ci>q_3</ci>
        </apply>
        <ci>v_3</ci>
      </apply>
      <apply>
        <eq/>
        <ci>mu_3</ci>
        <apply>
          <times/>
          <ci>R</ci>
          <ci>T</ci>
          <apply>
            <ln/>
            <apply>
              <times/>
              <ci>K_3</ci>
              <ci>q_3</ci>
            </apply>
          </apply>
        </apply>
      </apply>
      <apply>
        <eq/>
        <apply>
          <diff/>
          <bvar>
            <ci>t</ci>
          </bvar>
          <ci>q_4</ci>
        </apply>
        <ci>v_4</ci>
      </apply>
      <apply>
        <eq/>
        <ci>mu_4</ci>
        <apply>
          <times/>
          <ci>R</ci>
          <ci>T</ci>
          <apply>
            <ln/>
            <apply>
              <times/>
              <ci>K_4</ci>
              <ci>q_4</ci>
            </apply>
          </apply>
        </apply>
      </apply>
      <apply>
        <eq/>
        <apply>
          <diff/>
          <bvar>
            <ci>t</ci>
          </bvar>
          <ci>q_5</ci>
        </apply>
        <ci>v_5</ci>
      </apply>
      <apply>
        <eq/>
        <ci>mu_5</ci>
        <apply>
          <times/>
          <ci>R</ci>
          <ci>T</ci>
          <apply>
            <ln/>
            <apply>
              <times/>
              <ci>K_5</ci>
              <ci>q_5</ci>
            </apply>
          </apply>
        </apply>
      </apply>
      <apply>
        <eq/>
        <apply>
          <diff/>
          <bvar>
            <ci>t</ci>
          </bvar>
          <ci>q_6</ci>
        </apply>
        <ci>v_6</ci>
      </apply>
      <apply>
        <eq/>
        <ci>mu_6</ci>
        <apply>
          <times/>
          <ci>R</ci>
          <ci>T</ci>
          <apply>
            <ln/>
            <apply>
              <times/>
              <ci>K_6</ci>
              <ci>q_6</ci>
            </apply>
          </apply>
        </apply>
      </apply>
      <apply>
        <eq/>
        <ci>v_r1</ci>
        <apply>
          <times/>
          <ci>kappa_r1</ci>
          <apply>
            <minus/>
            <apply>
              <exp/>
              <apply>
                <divide/>
                <ci>mu_r1_in</ci>
                <apply>
                  <times/>
                  <ci>R</ci>
                  <ci>T</ci>
                </apply>
              </apply>
            </apply>
            <apply>
              <exp/>
              <apply>
                <divide/>
                <ci>mu_r1_out</ci>
                <apply>
                  <times/>
                  <ci>R</ci>
                  <ci>T</ci>
                </apply>
              </apply>
            </apply>
          </apply>
        </apply>
      </apply>
      <apply>
        <eq/>
        <ci>v_r2</ci>
        <apply>
          <times/>
          <ci>kappa_r2</ci>
          <apply>
            <minus/>
            <apply>
              <exp/>
              <apply>
                <divide/>
                <ci>mu_r2_in</ci>
                <apply>
                  <times/>
                  <ci>R</ci>
                  <ci>T</ci>
                </apply>
              </apply>
            </apply>
            <apply>
              <exp/>
              <apply>
                <divide/>
                <ci>mu_r2_out</ci>
                <apply>
                  <times/>
                  <ci>R</ci>
                  <ci>T</ci>
                </apply>
              </apply>
            </apply>
          </apply>
        </apply>
      </apply>
      <apply>
        <eq/>
        <ci>v_r3</ci>
        <apply>
          <times/>
          <ci>kappa_r3</ci>
          <apply>
            <minus/>
            <apply>
              <exp/>
              <apply>
                <divide/>
                <ci>mu_r3_in</ci>
                <apply>
                  <times/>
                  <ci>R</ci>
                  <ci>T</ci>
                </apply>
              </apply>
            </apply>
            <apply>
              <exp/>
              <apply>
                <divide/>
                <ci>mu_r3_out</ci>
                <apply>
                  <times/>
                  <ci>R</ci>
                  <ci>T</ci>
                </apply>
              </apply>
            </apply>
          </apply>
        </apply>
      </apply>
      <apply>
        <eq/>
        <ci>v_r4</ci>
        <apply>
          <times/>
          <ci>kappa_r4</ci>
          <apply>
            <minus/>
            <apply>
              <exp/>
              <apply>
                <divide/>
                <ci>mu_r4_in</ci>
                <apply>
                  <times/>
                  <ci>R</ci>
                  <ci>T</ci>
                </apply>
              </apply>
            </apply>
            <apply>
              <exp/>
              <apply>
                <divide/>
                <ci>mu_r4_out</ci>
                <apply>
                  <times/>
                  <ci>R</ci>
                  <ci>T</ci>
                </apply>
              </apply>
            </apply>
          </apply>
        </apply>
      </apply>
      <apply>
        <eq/>
        <ci>v_Ai</ci>
        <ci>v_r1</ci>
      </apply>
      <apply>
        <eq/>
        <ci>v_Ao</ci>
        <apply>
          <minus/>
          <ci>v_r2</ci>
        </apply>
      </apply>
      <apply>
        <eq/>
        <ci>v_3</ci>
        <apply>
          <plus/>
          <apply>
            <minus/>
            <ci>v_r3</ci>
          </apply>
          <ci>v_r1</ci>
        </apply>
      </apply>
      <apply>
        <eq/>
        <ci>v_4</ci>
        <apply>
          <plus/>
          <apply>
            <minus/>
            <ci>v_r2</ci>
          </apply>
          <ci>v_r3</ci>
        </apply>
      </apply>
      <apply>
        <eq/>
        <ci>v_5</ci>
        <apply>
          <plus/>
          <apply>
            <minus/>
            <ci>v_r1</ci>
          </apply>
          <ci>v_r4</ci>
        </apply>
      </apply>
      <apply>
        <eq/>
        <ci>v_6</ci>
        <apply>
          <plus/>
          <apply>
            <minus/>
            <ci>v_r4</ci>
          </apply>
          <ci>v_r2</ci>
        </apply>
      </apply>
      <apply>
        <eq/>
        <ci>mu_r1_in</ci>
        <ci>mu_5</ci>
      </apply>
      <apply>
        <eq/>
        <ci>mu_r1_out</ci>
        <apply>
          <plus/>
          <ci>mu_Ai</ci>
          <ci>mu_3</ci>
        </apply>
      </apply>
      <apply>
        <eq/>
        <ci>mu_r2_in</ci>
        <apply>
          <plus/>
          <ci>mu_Ao</ci>
          <ci>mu_4</ci>
        </apply>
      </apply>
      <apply>
        <eq/>
        <ci>mu_r2_out</ci>
        <ci>mu_6</ci>
      </apply>
      <apply>
        <eq/>
        <ci>mu_r3_in</ci>
        <ci>mu_3</ci>
      </apply>
      <apply>
        <eq/>
        <ci>mu_r3_out</ci>
        <ci>mu_4</ci>
      </apply>
      <apply>
        <eq/>
        <ci>mu_r4_in</ci>
        <ci>mu_6</ci>
      </apply>
      <apply>
        <eq/>
        <ci>mu_r4_out</ci>
        <ci>mu_5</ci>
      </apply>   
        </math>
    </component>
</model>
